<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Config</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Payload" DisplayName="Flow_CH0" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>41</harp:Address>
                <harp:PayloadType>Float</harp:PayloadType>
                <harp:Payload>100</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Payload" DisplayName="Flow_CH1" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>42</harp:Address>
                <harp:PayloadType>Float</harp:PayloadType>
                <harp:Payload>100</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Payload" DisplayName="Flow_CH2" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>43</harp:Address>
                <harp:PayloadType>Float</harp:PayloadType>
                <harp:Payload>100</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Payload" DisplayName="Flow_CH3" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>44</harp:Address>
                <harp:PayloadType>Float</harp:PayloadType>
                <harp:Payload>100</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Payload" DisplayName="Flow_Carrier" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>45</harp:Address>
                <harp:PayloadType>Float</harp:PayloadType>
                <harp:Payload>900</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Payload" DisplayName="Pulse_EndValve0" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>74</harp:Address>
                <harp:PayloadType>U16</harp:PayloadType>
                <harp:Payload>900</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Payload" DisplayName="Pulse_EndValve1" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>75</harp:Address>
                <harp:PayloadType>U16</harp:PayloadType>
                <harp:Payload>900</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Payload" DisplayName="Enable_Valves_Pulse" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>65</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>48</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="16" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="16" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="16" Label="Source3" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="16" Label="Source4" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="16" Label="Source5" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="16" Label="Source6" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="16" Label="Source7" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source8" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>B</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateMessage">
          <harp:MessageType>Write</harp:MessageType>
          <harp:Address>32</harp:Address>
          <harp:PayloadType>U8</harp:PayloadType>
          <harp:Payload>1</harp:Payload>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>E</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateMessage">
          <harp:MessageType>Write</harp:MessageType>
          <harp:Address>32</harp:Address>
          <harp:PayloadType>U8</harp:PayloadType>
          <harp:Payload>0</harp:Payload>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>OLF Commands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM11</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Flowmeters</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>46</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>Float</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>47</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>Float</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>48</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>Float</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>49</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>Float</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>50</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>Float</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="0" To="9" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Analog Flows</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>33</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>S16</harp:Type>
              <harp:IsArray>true</harp:IsArray>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToSingle(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:BufferCount">
                <rx:Count>100</rx:Count>
                <rx:Skip>10</rx:Skip>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>AverageBuffer</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Average" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToSingle(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:BufferCount">
                <rx:Count>100</rx:Count>
                <rx:Skip>10</rx:Skip>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>AverageBuffer</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Average" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToSingle(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:BufferCount">
                <rx:Count>100</rx:Count>
                <rx:Skip>10</rx:Skip>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>AverageBuffer</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Average" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>3</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToSingle(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:BufferCount">
                <rx:Count>100</rx:Count>
                <rx:Skip>10</rx:Skip>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>AverageBuffer</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Average" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>4</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToSingle(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:BufferCount">
                <rx:Count>100</rx:Count>
                <rx:Skip>10</rx:Skip>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>AverageBuffer</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Average" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="2" To="11" Label="Source1" />
            <Edge From="2" To="15" Label="Source1" />
            <Edge From="2" To="19" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT8S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Enable_Valve0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>69</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>1</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>OLF Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Enable_EndValves</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>69</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>49</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>OLF Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT3S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Disable_Valve0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>69</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>0</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>OLF Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="6" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="6" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="6" Label="Source3" />
      <Edge From="5" To="6" Label="Source4" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>