<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Selector" />
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>BindTexture</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TextureBank</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ThisCorridorSpecs</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>CorridorSpecs.Textures</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Selector" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Floor</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Name</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="StringProperty">
                <Value>random_walls_2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:BindTexture">
                <gl:TextureSlot>Texture0</gl:TextureSlot>
                <gl:ShaderName>ScaledTexturedModel</gl:ShaderName>
                <gl:TextureName />
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="9" Label="Source1" />
            <Edge From="1" To="8" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>