<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:AindVrForagingDataSchema.AindVrForagingRig;assembly=Extensions"
                 xmlns:p2="clr-namespace:AllenNeuralDynamics.Treadmill;assembly=AllenNeuralDynamics.Treadmill"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>HarpTreadmillCommands</rx:Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Treadmill</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>HarpBoard</Selector>
      </Expression>
      <Expression xsi:type="p1:MatchTreadmillBoard">
        <p1:Type xsi:type="TypeMapping" TypeArguments="p1:HarpTreadmill" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>PortName</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="PortName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Enabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COMx</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>HarpTreadmillEvents</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="StartExperimentSubjectName" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>ForceRegisterDump</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="harp:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="harp:CreateOperationControlPayload">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:MuteReplies>false</harp:MuteReplies>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:Heartbeat>Enabled</harp:Heartbeat>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpTreadmillCommands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HarpTreadmillEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="p2:CreateMessage">
          <harp:MessageType>Write</harp:MessageType>
          <harp:Payload xsi:type="p2:CreateResetTareSensorsPayload">
            <p2:ResetTareSensors>Encoder Torque BreakCurrent</p2:ResetTareSensors>
          </harp:Payload>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MulticastSubject">
          <Name>HarpTreadmillCommands</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="p2:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p2:CreateBreakCurrentSetPointPayload">
          <p2:BreakCurrentSetPoint>0</p2:BreakCurrentSetPoint>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpTreadmillCommands</Name>
      </Expression>
      <Expression xsi:type="p2:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p2:CreateSensorDataDispatchRatePayload">
          <p2:SensorDataDispatchRate>250</p2:SensorDataDispatchRate>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpTreadmillCommands</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="7" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>