WorkflowBuilder(Version=2.9.1)
Defer Logging
    Defer Behavior
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Modality)>(MemberName=Modality, Value=Behavior)
        -> Take(Count=1)
        -> AsyncSubject Modality

        SubscribeSubject RigSchema
        -> Bonsai.Scripting.Expressions.ExpressionTransform CountOlfactometers
          Expression: 1 + it.HarpOlfactometerExtension.Count
        -> AsyncSubject OlfactometersCount

        GroupWorkflow HarpLogging
            SubscribeSubject HarpBehaviorEvents => #0
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #2
            Harp.Behavior.GetDeviceMetadata
            -> PropertyMapping(DeviceMetadata) => #4
            #0, #2, #4 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=Behavior)

            SubscribeSubject StepperDriverEvents => #6
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #8
            Harp.StepperDriver.GetDeviceMetadata
            -> PropertyMapping(DeviceMetadata) => #10
            #6, #8, #10 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=StepperDriver)

            SubscribeSubject OlfactometersCount
            -> PropertyMapping(Count)
            -> Range(Start=0, Count=0)
            -> CreateObservable LogOlfactometerHub
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject olfactometerIndex

                SubscribeSubject OlfactometerHubEventsGroupedBy
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    SubscribeSubject olfactometerIndex => #2
                    #1, #2 -> WithLatestFrom
                    -> Equal
                    -> WorkflowOutput
                -> Take(Count=1)
                -> ReplaySubject thisOlfactometer(BufferSize=nil)

                SubscribeSubject thisOlfactometer
                -> Merge
                -> MemberSelector(Selector=Item2) => #9
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #11
                Harp.Olfactometer.GetDeviceMetadata
                -> PropertyMapping(DeviceMetadata) => #13
                SubscribeSubject thisOlfactometer
                -> MemberSelector(Selector=Key)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it > 0 ? "OlfactometerExtension" + it.ToString() : "Olfactometer"
                -> PropertyMapping(DeviceName) => #17
                #9, #11, #13, #17 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=Olfactometer)
            -> Merge

            SubscribeSubject HarpLickometerEvents => #17
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #19
            AllenNeuralDynamics.LicketySplit.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #21
            #17, #19, #21 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=Lickometer)

            SubscribeSubject HarpTreadmillEvents => #23
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #25
            AllenNeuralDynamics.Treadmill.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #27
            #23, #25, #27 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=Treadmill)

            SubscribeSubject HarpSniffDetectorEvents => #29
            AllenNeuralDynamics.SniffDetector.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #31
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #33
            #29, #31, #33 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=SniffDetector) => #34
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpSniffDetector)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #37
            #34, #37 -> SubscribeWhen

            SubscribeSubject HarpWhiteRabbitEvents => #39
            AllenNeuralDynamics.WhiteRabbit.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #41
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #43
            #39, #41, #43 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=ClockGenerator)

            SubscribeSubject HarpAnalogInputEvents => #45
            Harp.AnalogInput.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #47
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #49
            #45, #47, #49 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=AnalogInput) => #50
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpAnalogInput)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #53
            #50, #53 -> SubscribeWhen

            SubscribeSubject HarpEnvironmentSensorEvents => #55
            AllenNeuralDynamics.EnvironmentSensor.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #57
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #59
            #55, #57, #59 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=EnvironmentSensor) => #60
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpEnvironmentSensor)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #63
            #60, #63 -> SubscribeWhen

        GroupWorkflow HarpCommandsLogging
            SubscribeSubject HarpBehaviorCommands
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Write) => #1
            SubscribeSubject HarpTimestampSource => #2
            #1, #2 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #4
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #6
            Harp.Behavior.GetDeviceMetadata
            -> PropertyMapping(DeviceMetadata) => #8
            #4, #6, #8 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=HarpCommands/Behavior)

            SubscribeSubject StepperDriverCommands
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Write) => #11
            SubscribeSubject HarpTimestampSource => #12
            #11, #12 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #14
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #16
            Harp.StepperDriver.GetDeviceMetadata
            -> PropertyMapping(DeviceMetadata) => #18
            #14, #16, #18 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=HarpCommands/StepperDriver)

            SubscribeSubject OlfactometersCount
            -> PropertyMapping(Count)
            -> Range(Start=0, Count=0)
            -> CreateObservable LogOlfactometerHub
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject olfactometerIndex

                SubscribeSubject OlfactometerHubCommandsGroupedBy
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    SubscribeSubject olfactometerIndex => #2
                    #1, #2 -> WithLatestFrom
                    -> Equal
                    -> WorkflowOutput
                -> Take(Count=1)
                -> ReplaySubject thisOlfactometer(BufferSize=nil)

                SubscribeSubject thisOlfactometer
                -> Merge
                -> MemberSelector(Selector=Item2) => #9
                SubscribeSubject HarpTimestampSource => #10
                #9, #10 -> WithLatestFrom
                -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #12
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #14
                Harp.Olfactometer.GetDeviceMetadata
                -> PropertyMapping(DeviceMetadata) => #16
                SubscribeSubject thisOlfactometer
                -> MemberSelector(Selector=Key)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it > 0 ? "OlfactometerExtension" + it.ToString() : "Olfactometer"
                -> Format(Format=HarpCommands/{0}, Selector=it)
                -> PropertyMapping(DeviceName) => #21
                #12, #14, #16, #21 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=Olfactometer)
            -> Merge

            SubscribeSubject HarpLickometerCommands
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Write) => #26
            SubscribeSubject HarpTimestampSource => #27
            #26, #27 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #29
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #31
            AllenNeuralDynamics.LicketySplit.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #33
            #29, #31, #33 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=HarpCommands/Lickometer)

            SubscribeSubject HarpTreadmillCommands
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Write) => #36
            SubscribeSubject HarpTimestampSource => #37
            #36, #37 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #39
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #41
            AllenNeuralDynamics.Treadmill.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #43
            #39, #41, #43 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=HarpCommands/Treadmill)

            SubscribeSubject HarpWhiteRabbitCommands
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Write) => #46
            SubscribeSubject HarpTimestampSource => #47
            #46, #47 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #49
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #51
            AllenNeuralDynamics.WhiteRabbit.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #53
            #49, #51, #53 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=HarpCommands/ClockGenerator)

            SubscribeSubject HarpSniffDetectorCommands
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Write) => #56
            SubscribeSubject HarpTimestampSource => #57
            #56, #57 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #59
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #61
            AllenNeuralDynamics.SniffDetector.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #63
            #59, #61, #63 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=HarpCommands/SniffDetector) => #64
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpSniffDetector)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #67
            #64, #67 -> SubscribeWhen

            SubscribeSubject HarpAnalogInputCommands
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Write) => #70
            SubscribeSubject HarpTimestampSource => #71
            #70, #71 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #73
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #75
            Harp.AnalogInput.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #77
            #73, #75, #77 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=HarpCommands/AnalogInput) => #78
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpAnalogInput)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #81
            #78, #81 -> SubscribeWhen

            SubscribeSubject HarpEnvironmentSensorCommands
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Write) => #84
            SubscribeSubject HarpTimestampSource => #85
            #84, #85 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #87
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #89
            AllenNeuralDynamics.EnvironmentSensor.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #91
            #87, #89, #91 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=HarpCommands/EnvironmentSensor) => #92
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpEnvironmentSensor)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #95
            #92, #95 -> SubscribeWhen

        GroupWorkflow Render
            SubscribeSubject RendererSynchState => #0
            SubscribeSubject HarpTimestampSource => #1
            #0, #1 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> Bonsai.Scripting.Expressions.ExpressionTransform Label => #4
              Expression:
                new(
                it.Seconds as Seconds,
                it.Value.FrameIndex.Value as FrameIndex,
                it.Value.FrameTimestamp.Value as FrameTimestamp,
                it.Value.SyncQuadValue.Value as SyncQuadValue)
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #6
            #4, #6 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogCsv.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=RendererSynchState, DeviceName=Renderer)

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Screen.TextureAssetsDirectory)
            -> PropertyMapping(Path) => #10
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #12
            #10, #12 -> IncludeWorkflow(Path=Extensions\SaveTextures.bonsai, Path="", SearchPattern=*.jpg, SubjectName=LoggingRootPath, Modality=nil, LogName=Textures, DeviceName=Renderer)

        GroupWorkflow SoftwareEvents
            GroupWorkflow Metadata
                SubscribeSubject ExperimentCommand
                -> FilterExperimentCommand(ExperimentCommand=EndCommand)
                -> Take(Count=1)
                -> StringProperty(Value=ExperimentCompleted)
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=EndSession)
                -> MulticastSubject SoftwareEvent
                -> Timestamp
                -> MemberSelector(Selector=Timestamp.UtcDateTime)
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=EndSessionTime)
                -> MulticastSubject SoftwareEvent

                SubscribeSubject Repository
                -> AllenNeuralDynamics.VersionControl.IsRepositoryClean(IgnoreUntracked=false)
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=RepositoryStatus)
                -> MulticastSubject SoftwareEvent
                -> Timestamp
                -> MemberSelector(Selector=Timestamp.UtcDateTime)
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=StartSessionTime)
                -> MulticastSubject SoftwareEvent

                SubscribeSubject RngSeedValue
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=RngSeed)
                -> MulticastSubject SoftwareEvent

                SubscribeSubject RigSchema
                -> MemberSelector(Selector=Manipulator.Calibration.InitialPosition) => #22
                SubscribeSubject ManipulatorPosition
                -> Take(Count=1) => #24
                SubscribeSubject ExperimentCommand
                -> FilterExperimentCommand(ExperimentCommand=EndCommand) => #26
                SubscribeSubject ManipulatorPosition
                -> ObserveOn(Scheduler=ThreadPoolScheduler) => #28
                #26, #28 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #30
                #22, #24, #30 -> Merge
                -> Bonsai.Scripting.Expressions.ExpressionTransform Label
                  Description="This is meant to ensure backwards compatibility"
                  Expression:
                    new(
                    it as ResetPosition,
                    it as RetractedPosition)
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=SpoutParkingPositions)
                -> MulticastSubject SoftwareEvent
            -> Bonsai.Shaders.DelaySubscription(DueTime=PT0.5S)

            SubscribeSubject SoftwareEvent => #2
            SubscribeSubject HarpTimestampSource => #3
            #2, #3 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.TimestampSoftwareEvent => #6
            SubscribeSubject RendererSynchState => #7
            #6, #7 -> WithLatestFrom
            -> AllenNeuralDynamics.Core.FramestampSoftwareEvent => #9
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #11
            #9, #11 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=SoftwareEvents, SubjectName=LoggingRootPath, Modality=nil)
            -> WorkflowOutput

            SubscribeSubject UpdaterEvents => #14
            SubscribeSubject HarpTimestampSource => #15
            #14, #15 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.TimestampSoftwareEvent => #18
            SubscribeSubject RendererSynchState => #19
            #18, #19 -> WithLatestFrom
            -> AllenNeuralDynamics.Core.FramestampSoftwareEvent => #21
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #23
            #21, #23 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=UpdaterEvents, SubjectName=LoggingRootPath, Modality=nil)

            SubscribeSubject Annotations
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=Annotations) => #26
            SubscribeSubject HarpTimestampSource => #27
            #26, #27 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.TimestampSoftwareEvent => #30
            SubscribeSubject RendererSynchState => #31
            #30, #31 -> WithLatestFrom
            -> AllenNeuralDynamics.Core.FramestampSoftwareEvent => #33
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #35
            #33, #35 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=Annotations, SubjectName=LoggingRootPath, Modality=nil)

        GroupWorkflow OperationControl
            SubscribeSubject CurrentPosition
            -> MemberSelector(Selector="Seconds,Value.Z")
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as Seconds,
                Item2 as Position)
            -> Defer LogCsv
                WorkflowInput Source1 => #0
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #2
                #0, #2 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogCsv.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=CurrentPosition, DeviceName=OperationControl)
                -> WorkflowOutput

            SubscribeSubject TreadmillFriction => #4
            SubscribeSubject HarpTimestampSource => #5
            #4, #5 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Seconds as Seconds,
                Value as Torque)
            -> Defer LogCsv
                WorkflowInput Source1 => #0
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #2
                #0, #2 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogCsv.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=Torque, DeviceName=OperationControl)
                -> WorkflowOutput

            SubscribeSubject IsStopped
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Seconds as Seconds,
                Value as IsStopped)
            -> Defer LogCsv
                WorkflowInput Source1 => #0
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #2
                #0, #2 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogCsv.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=IsStopped, DeviceName=OperationControl)
                -> WorkflowOutput

        Defer Logs
            StringProperty(Value=Logs)
            -> Take(Count=1)
            -> AsyncSubject DeviceName

            GroupWorkflow ConfigSchemaLogging
                SubscribeSubject SubjectSchema
                -> AindVrForagingDataSchema.SerializeToJson(Formatting=None) => #1
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #3
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #5
                #1, #3, #5 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName="", LogName=session_output)

                SubscribeSubject TaskLogicSchema
                -> AindVrForagingDataSchema.SerializeToJson(Formatting=None) => #8
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #10
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #12
                #8, #10, #12 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=tasklogic_output)

                SubscribeSubject RigSchema
                -> AindVrForagingDataSchema.SerializeToJson(Formatting=None) => #15
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #17
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #19
                #15, #17, #19 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=rig_output)

                SubscribeSubject RawRigSchema => #21
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #23
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #25
                #21, #23, #25 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=rig_input, Extension=json)

                SubscribeSubject RawSessionSchema => #27
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #29
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #31
                #27, #29, #31 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=session_input, Extension=json)

                SubscribeSubject RawTaskLogicSchema => #33
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #35
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #37
                #33, #35, #37 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=tasklogic_input, Extension=json)

    Defer BehaviorVideos
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Modality)>(MemberName=Modality, Value=BehaviorVideos)
        -> Take(Count=1)
        -> AsyncSubject Modality

        IncludeWorkflow(Path=Extensions\TriggeredCameras.bonsai)
-> WorkflowOutput
