WorkflowBuilder(Version=2.9.0)
GroupWorkflow OdorControl
    SubscribeSubject RigSchema
    -> MemberSelector(Selector=HarpOlfactometerExtension)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: 3 + 4*it.Count()
    -> AsyncSubject olfactometerChannelsCount

    BehaviorSubject<System.Collections.Generic.IList(OdorMixMessages)> SetOdorMix
    -> Merge
    -> CreateObservable BroadcastToOlfactometerHub
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject thisBundle

        Defer SetChannelsTargetFlow
            SubscribeSubject thisBundle
            -> MemberSelector(Selector="OlfactometerIndex,ChannelsTargetFlow")
            -> MulticastSubject OlfactometerHubCommands

            SubscribeSubject OlfactometerHubEventsGroupedBy => #3
            SubscribeSubject thisBundle
            -> MemberSelector(Selector=OlfactometerIndex) => #5
            #3, #5 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it.Item1.Key == it.Item2
            -> MemberSelector(Selector=Item1)
            -> Merge
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Write) => #11
            SubscribeSubject thisBundle
            -> MemberSelector(Selector=ChannelsTargetFlow)
            -> MemberSelector(Selector=Address)
            -> PropertyMapping(Address) => #15
            #11, #15 -> Bonsai.Harp.FilterRegister(FilterType=Include, Register=Bonsai.Harp.FilterRegisterAddress(Address=nil))
            -> Unit => #17
            Bonsai.Shaders.Timer(DueTime=PT0.01S)
            -> Unit => #19
            #17, #19 -> Merge
            -> Take(Count=1) => #21
            SubscribeSubject thisBundle => #22
            #21, #22 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> SelectMany SetOdorValveState
            SubscribeSubject thisBundle
            -> MemberSelector(Selector="OlfactometerIndex,OdorValveState")
            -> MulticastSubject OlfactometerHubCommands

            SubscribeSubject OlfactometerHubEventsGroupedBy => #3
            SubscribeSubject thisBundle
            -> MemberSelector(Selector=OlfactometerIndex) => #5
            #3, #5 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it.Item1.Key == it.Item2
            -> MemberSelector(Selector=Item1)
            -> Merge
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Write) => #11
            SubscribeSubject thisBundle
            -> MemberSelector(Selector=OdorValveState)
            -> MemberSelector(Selector=Address)
            -> PropertyMapping(Address) => #15
            #11, #15 -> Bonsai.Harp.FilterRegister(FilterType=Include, Register=Bonsai.Harp.FilterRegisterAddress(Address=nil))
            -> Unit => #17
            Bonsai.Shaders.Timer(DueTime=PT0.01S)
            -> Unit => #19
            #17, #19 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> WorkflowOutput
    -> Merge

    GroupWorkflow OlfactometerInitialConfiguration
        SubscribeSubject OlfactometerHubEvents => #0
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpOlfactometerExtension)
        -> MemberSelector(Selector=Count)
        -> Add(Operand=IntProperty(Value=1))
        -> PropertyMapping(Count) => #5
        #0, #5 -> Take(Count=1) => #6
        SubscribeSubject olfactometerChannelsCount
        -> PropertyMapping(Count)
        -> Range(Start=0, Count=0)
        -> DoubleProperty(Value=0)
        -> ToArray => #11
        #6, #11 -> Zip
        -> MemberSelector(Selector=Item2) => #13
        SubscribeSubject olfactometerChannelsCount
        -> PropertyMapping(OlfactometerChannelCount) => #15
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.OdorControl.TargetOdorFlow)
        -> PropertyMapping(PerOdorFlow) => #18
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.OdorControl.TargetTotalFlow)
        -> PropertyMapping(TotalFlow) => #21
        #13, #15, #18, #21 -> CreateHubOdorMixture(PerOdorFlow=100, TotalFlow=1000, OlfactometerChannelCount=3)
        -> MulticastSubject SetOdorMix

    GroupWorkflow ArmOdor
        BehaviorSubject<System.Collections.Generic.List(System.Double)> ArmOdor

        SubscribeSubject ArmOdor
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ArmOdor)
        -> MulticastSubject SoftwareEvent

        SubscribeSubject ArmOdor => #4
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.OdorControl.TargetOdorFlow)
        -> PropertyMapping(PerOdorFlow) => #7
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.OdorControl.TargetTotalFlow)
        -> PropertyMapping(TotalFlow) => #10
        SubscribeSubject olfactometerChannelsCount
        -> PropertyMapping(OlfactometerChannelCount) => #12
        #4, #7, #10, #12 -> CreateHubOdorMixture(PerOdorFlow=100, TotalFlow=1000, OlfactometerChannelCount=3)
        -> MulticastSubject SetOdorMix

    GroupWorkflow EndValveControl
        SubscribeSubject OlfactometerHubEvents => #0
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpOlfactometerExtension)
        -> MemberSelector(Selector=Count)
        -> Add(Operand=IntProperty(Value=1))
        -> PropertyMapping(Count) => #5
        #0, #5 -> Take(Count=1)
        -> BooleanProperty(Value=false)
        -> BehaviorSubject OdorEndValveState

        SubscribeSubject OdorEndValveState => #9
        -> Condition OdorPath
            WorkflowInput Source1
            -> WorkflowOutput
        -> PropertySource<Harp.Olfactometer.CreateEndValvesStatePayload,Harp.Olfactometer.EndValves>(MemberName=EndValvesState, Value=EndValve0) => #11
        #9 -> BitwiseNot
        -> Condition CarrierPath
            WorkflowInput Source1
            -> WorkflowOutput
        -> PropertySource<Harp.Olfactometer.CreateEndValvesStatePayload,Harp.Olfactometer.EndValves>(MemberName=EndValvesState, Value=None) => #14
        #11, #14 -> Merge
        -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.EndValveState) => #16
        -> IntProperty(Value=0) => #17
        #17, #16 -> Zip
        -> MulticastSubject OlfactometerHubCommands

GroupWorkflow RewardControl
    GroupWorkflow WaterValve
        BehaviorSubject<System.Double> ValveOpenTimeMs
        -> SelectMany SetValue
            WorkflowInput Source1
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseSupplyPort0)
            -> MulticastSubject HarpBehaviorCommands => #2
            SubscribeSubject HarpBehaviorEvents
            -> Harp.Behavior.Parse(Register=Harp.Behavior.PulseSupplyPort0) => #4
            #2, #4 -> Zip
            -> IntProperty(Value=0) => #6
            Bonsai.Shaders.Timer(DueTime=PT0.01S)
            -> IntProperty(Value=0) => #8
            #6, #8 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> Unit
        -> MulticastSubject TriggerValve

        BehaviorSubject<System.Reactive.Unit> TriggerValve
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort0))
        -> MulticastSubject HarpBehaviorCommands
        -> WorkflowOutput

    BonVision.OptionalFloatProperty(Value=0, HasValue=true)
    -> Take(Count=1)
    -> BehaviorSubject GiveReward
    -> BehaviorSubject ForceGiveReward

    SubscribeSubject GiveReward
    -> PublishSubject HotGiveReward

    SubscribeSubject GiveReward => #7
    Annotation ManualReward(Text="This is just to allow differential logging of manual rewards")
    -> SubscribeSubject ForceGiveReward => #9
    #7, #9 -> Merge
    -> Condition HasValue
        WorkflowInput Source1
        -> MemberSelector(Selector=HasValue)
        -> WorkflowOutput
    -> MemberSelector(Selector=Value)
    -> Condition GreaterThan0 => #13
        WorkflowInput Source1
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    SubscribeSubject RigSchema
    -> MemberSelector(Selector=Calibration.WaterValve) => #15
    #13, #15 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToTime => #17
      Expression: ((Item1 * 0.001) - Item2.Offset) / Item2.Slope
    Annotation ToMilliseconds(Text="") => #18
    #17, #18 -> Multiply(Operand=DoubleProperty(Value=1000))
    -> InputMapping(Value(Selector=it))
    -> IntProperty(Value=0)
    -> Condition GreaterThan0
        WorkflowInput Source1
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> MulticastSubject ValveOpenTimeMs

    SubscribeSubject GiveReward
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=GiveReward)
    -> MulticastSubject SoftwareEvent

    SubscribeSubject ForceGiveReward
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ForceGiveReward)
    -> MulticastSubject SoftwareEvent

GroupWorkflow MovableSpoutControl
    Annotation "Start with the spout at max distance"(Text="Start with the spout at max distance")
    -> BooleanProperty(Value=true)
    -> Take(Count=1)
    -> BehaviorSubject SpoutAvailable

    SubscribeSubject SpoutAvailable => #4
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=OperationControl.MovableSpoutControl)
    -> MemberSelector(Selector=Enabled) => #7
    #4, #7 -> WithLatestFrom
    -> Condition IsEnabled
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
    -> MemberSelector(Selector=Item1) => #10
    SubscribeSubject SpoutParkingPositions => #11
    #10, #11 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform GetPosition
      Expression: it.Item1 ? it.Item2.ResetPosition : it.Item2.RetractedPosition
    -> MulticastSubject MoveTo

    GroupWorkflow InitialState => #15
        SubscribeSubject ManipulatorPosition
        -> Take(Count=1) => #1
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=SpoutAxis)
        -> PropertyMapping(Axis) => #5
        #1, #5 -> SelectMany CalculateRetractedPosition => #6
            ExternalizedMapping(Value(DisplayName=Axis))
            -> PropertySource<AllenNeuralDynamics.AindManipulator.AxisConfiguration,AllenNeuralDynamics.AindManipulator.Axis>(MemberName=Axis, Value=Y1)
            -> Take(Count=1)
            -> AsyncSubject SpoutAxis

            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject SpoutResetPosition

            SubscribeSubject SpoutResetPosition => #7
            Unit
            -> Take(Count=1)
            -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=0, Z=0) => #10
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.MovableSpoutControl)
            -> MemberSelector(Selector=RetractingDistance) => #13
            #10, #13 -> Zip => #14
            SubscribeSubject SpoutAxis
            -> PropertyMapping(Axis) => #16
            #14, #16 -> ModifyManipulatorPosition(Axis=None) => #17
            #7, #17 -> Zip
            -> Subtract
            -> Take(Count=1)
            -> WorkflowOutput
        #1, #6 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
          Expression: new(Item1 as ResetPosition, Item2 as RetractedPosition)
        -> AsyncSubject SpoutParkingPositions

        SubscribeSubject SpoutParkingPositions
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=SpoutParkingPositions)
        -> MulticastSubject SoftwareEvent

        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.MovableSpoutControl)
        -> MemberSelector(Selector=Enabled)
        -> BitwiseNot
        -> MulticastSubject SpoutAvailable

        SubscribeSubject GiveReward
        -> BooleanProperty(Value=false) => #19
        SubscribeSubject SpoutAvailable
        -> Condition Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #22
        #19, #22 -> Merge
        -> CreateObservable DelayWithdraw
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject State

            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.MovableSpoutControl)
            -> MemberSelector(Selector=TimeToCollectAfterReward)
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromSeconds
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT0S) => #8
            SubscribeSubject State => #9
            #8, #9 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Switch
        -> Condition IsWithdraw?
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> MulticastSubject SpoutAvailable => #27
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.MovableSpoutControl)
        -> MemberSelector(Selector=Enabled)
        -> Condition => #31
            WorkflowInput Source1
            -> WorkflowOutput
        #27, #31 -> SubscribeWhen
    SubscribeSubject ExperimentCommand
    -> FilterExperimentCommand(ExperimentCommand=StartTask)
    -> Bonsai.Shaders.SampleOnRenderFrame => #18
    #15, #18 -> SubscribeWhen

GroupWorkflow FeedbackControl
    BehaviorSubject<System.Reactive.Unit> ChoiceFeedback

    SubscribeSubject ChoiceFeedback
    -> PublishSubject HotChoiceFeedback

    SubscribeSubject ChoiceFeedback
    -> Unit
    -> MulticastSubject AudioTrigger
    -> WorkflowOutput

    SubscribeSubject ChoiceFeedback
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ChoiceFeedback)
    -> MulticastSubject SoftwareEvent

    SubscribeSubject HarpBehaviorEvents
    -> Take(Count=1)
    -> BooleanProperty(Value=true)
    -> MulticastSubject SpoutAvailable

GroupWorkflow Lickometer
    SubscribeSubject HarpLickometerEvents
    -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.TimestampedLickState) => #1
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplit.LickChannels>(Value=Channel0))
    -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
    -> DistinctUntilChanged => #5
    #5, #1 -> WithLatestFrom
    -> Condition IsLickOnset
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    -> MemberSelector(Selector=Item2.Seconds)
    -> PublishSubject LickEvent

    SubscribeSubject HarpLickometerEvents
    -> Bonsai.Harp.CreateMessage
      MessageType=Write
      Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=Off, OperationLed=Off, Heartbeat=Enabled)
    -> Take(Count=1)
    -> MulticastSubject HarpLickometerCommands

GroupWorkflow CameraControl
    SubscribeSubject HarpBehaviorEvents
    -> Take(Count=1) => #1
    SubscribeSubject TextureBank => #2
    SubscribeSubject TriggeredCamerasReady => #3
    #1, #2, #3 -> Zip
    -> Take(Count=1)
    -> Bonsai.Shaders.Delay(DueTime=PT2S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject CameraState

    BehaviorSubject<System.Boolean> CameraState => #9
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0)) => #11
    #9 -> BitwiseNot
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStopCamerasPayload(StopCameras=CameraOutput0)) => #14
    #11, #14 -> Merge
    -> MulticastSubject HarpBehaviorCommands

    SubscribeSubject ExperimentCommand
    -> FilterExperimentCommand(ExperimentCommand=StartCommand)
    -> Take(Count=1)
    -> BooleanProperty(Value=false)
    -> MulticastSubject CameraState

    SubscribeSubject ExperimentCommand
    -> FilterExperimentCommand(ExperimentCommand=StartTask)
    -> Take(Count=1)
    -> BooleanProperty(Value=true)
    -> MulticastSubject CameraState

    SubscribeSubject ExperimentCommand
    -> FilterExperimentCommand(ExperimentCommand=EndCommand)
    -> Take(Count=1)
    -> BooleanProperty(Value=false)
    -> MulticastSubject CameraState

    SubscribeSubject ExperimentCommand
    -> FilterExperimentCommand(ExperimentCommand=StopLoggers)
    -> Bonsai.Shaders.Delay(DueTime=PT0.5S)
    -> Take(Count=1)
    -> BooleanProperty(Value=true)
    -> MulticastSubject CameraState

GroupWorkflow Thermistor/Pressure
    SubscribeSubject HarpSniffDetectorEvents
    -> AllenNeuralDynamics.SniffDetector.Parse(Register=AllenNeuralDynamics.SniffDetector.TimestampedRawVoltage) => #1
    SubscribeSubject RigSchema
    -> MemberSelector(Selector=HarpSniffDetector)
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #4
    #1, #4 -> SubscribeWhen
    -> PublishSubject ThermistorData

GroupWorkflow Treadmill
    SubscribeSubject ExperimentCommand
    -> FilterExperimentCommand(ExperimentCommand=StartCommand)
    -> SelectMany ClearCurrentLimit
        Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.05S) => #0
        ExternalizedMapping(Count(DisplayName=RetryCount)) => #1
        #0, #1 -> Take(Count=5)
        -> ElementIndex
        -> Sink ThrowOnRetryCount
            WorkflowInput Source1
            -> Last
            -> AllenNeuralDynamics.Core.ThrowException(Message="Number of attempts ot clear the current limit state register has been exceeded.")
            -> WorkflowOutput
        -> AllenNeuralDynamics.Treadmill.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Treadmill.CreateTorqueLimitStatePayload(TorqueLimitState=0))
        -> MulticastSubject HarpTreadmillCommands => #6
        SubscribeSubject HarpTreadmillEvents
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Write)
        -> AllenNeuralDynamics.Treadmill.Parse(Register=AllenNeuralDynamics.Treadmill.TorqueLimitState)
        -> Equal(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> Condition => #11
            WorkflowInput Source1
            -> WorkflowOutput
        #6, #11 -> Zip
        -> Take(Count=1)
        -> WorkflowOutput
    -> Take(Count=1)
    -> FloatProperty(Value=0)
    -> Take(Count=1)
    -> BehaviorSubject TreadmillFriction

    SubscribeSubject HarpTreadmillEvents
    -> AllenNeuralDynamics.Treadmill.Parse(Register=AllenNeuralDynamics.Treadmill.SensorDataDispatchRate)
    -> BehaviorSubject TreadmillSamplingRate

    GroupWorkflow DetermineTreadmillScaling
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpTreadmill.Calibration) => #1
        -> MemberSelector(Selector=WheelDiameter)
        -> Bonsai.Scripting.Expressions.ExpressionTransform Perimeter => #3
          Expression: it * Math.Pi
        #1 -> MemberSelector(Selector=PulsesPerRevolution) => #4
        #3, #4 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform CentimetersPerTick => #6
          Expression: Item1 / Item2
        #1 -> MemberSelector(Selector=InvertDirection) => #7
        #6, #7 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item2 ? -1.0 * Item1 : Item1
        -> WorkflowOutput
    -> AsyncSubject TreadmillScaling

    SubscribeSubject HarpTreadmillEvents
    -> AllenNeuralDynamics.Treadmill.Parse(Register=AllenNeuralDynamics.Treadmill.TimestampedSensorData) => #13
    -> Skip(Count=1) => #14
    #14, #13 -> Zip => #15
    -> Bonsai.Scripting.Expressions.ExpressionTransform CalculateDisplacement => #16
      Expression: single(Item1.Value.Encoder - Item2.Value.Encoder)
    SubscribeSubject TreadmillScaling
    -> PropertyMapping(RangeMax) => #18
    #16, #18 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=-0.005752427954571154, RescaleType=Linear) => #19
    #19, #15 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform CalculateInstantSpeed => #21
      Expression:
        new(
        Item1 as Displacement,
        (Item1 / single(Item2.Item1.Seconds - Item2.Item2.Seconds)) as InstantVelocity
        )
    #15 -> MemberSelector(Selector=Item1.Seconds) => #22
    #21, #22 -> Zip
    -> Bonsai.Harp.CreateTimestamped
    -> PublishSubject EncoderSample

    SubscribeSubject TreadmillFriction
    -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=1, RescaleType=Clamp)
    -> DistinctUntilChanged => #28
    GroupWorkflow GetInterpolator
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpTreadmill.Calibration)
        -> MemberSelector(Selector=BrakeLookupCalibration)
        -> Merge => #3
        -> Index(Operand=IntProperty(Value=0)) => #4
        #3 -> Index(Operand=IntProperty(Value=1)) => #5
        #4, #5 -> Zip
        -> ToList
        -> Bonsai.Numerics.Interpolation.CreateLinear
        -> WorkflowOutput
    -> PropertyMapping(Interpolation) => #30
    #28, #30 -> Bonsai.Numerics.Interpolation.Interpolate
    -> AllenNeuralDynamics.Treadmill.Format(MessageType=Write, Register=AllenNeuralDynamics.Treadmill.BrakeCurrentSetPoint)
    -> CreateObservable SendMessage
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject HarpMessage

        SubscribeSubject HarpTreadmillEvents
        -> AllenNeuralDynamics.Treadmill.Parse(Register=AllenNeuralDynamics.Treadmill.TimestampedTorque) => #4
        SubscribeSubject HarpMessage => #5
        ExternalizedMapping(DueTime(DisplayName=RetryTimeout))
        -> Bonsai.Shaders.Timer(DueTime=PT0.1S, Period=PT0.1S) => #7
        SubscribeSubject HarpMessage => #8
        #7, #8 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #10
        #5, #10 -> Merge
        -> MulticastSubject HarpTreadmillCommands => #12
        #4, #12 -> Zip
        -> Take(Count=1)
        -> WorkflowOutput
    -> Switch

    SubscribeSubject EncoderSample => #35
    -> MemberSelector(Selector=Value)
    -> MemberSelector(Selector=InstantVelocity) => #37
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=OperationControl)
    -> MemberSelector(Selector=PositionControl.FrequencyFilterCutoff)
    -> PropertyMapping(Cutoff1) => #41
    SubscribeSubject TreadmillSamplingRate
    -> PropertyMapping(SampleRate) => #43
    #37, #41, #43 -> Bonsai.Dsp.FrequencyFilter(SampleRate=250, Cutoff1=5, Cutoff2=0, KernelLength=60, FilterType=LowPass) => #44
    #35 -> MemberSelector(Selector=Seconds) => #45
    #44, #45 -> WithLatestFrom
    -> MulticastSubject FilteredCurrentVelocity

GroupWorkflow AudioControl
    BehaviorSubject<System.Double> AudioDuration
    -> Multiply(Operand=IntProperty(Value=1000))
    -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseDO2)
    -> MulticastSubject HarpBehaviorCommands

    BehaviorSubject<System.Int32> AudioFrequency
    -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PwmFrequencyDO2)
    -> MulticastSubject HarpBehaviorCommands

    BehaviorSubject<System.Reactive.Unit> AudioTrigger
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStartPayload(PwmStart=PwmDO2))
    -> MulticastSubject HarpBehaviorCommands

    GroupWorkflow InitialSettings => #10
        SubscribeSubject HarpBehaviorEvents
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmDutyCycleDO2Payload(PwmDutyCycleDO2=50))
        -> Take(Count=1)
        -> MulticastSubject HarpBehaviorCommands

        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.AudioControl)
        -> MemberSelector(Selector=Duration)
        -> MulticastSubject AudioDuration

        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.AudioControl)
        -> MemberSelector(Selector=Frequency)
        -> MulticastSubject AudioFrequency
    SubscribeSubject HarpBehaviorEvents
    -> Take(Count=1) => #12
    #10, #12 -> SubscribeWhen
