WorkflowBuilder(Version=2.9.0)
BehaviorSubject<PatchState> PatchState

SubscribeSubject PatchState
-> MulticastSubject GlobalPatchState

SubscribeSubject CurrentBlock
-> SelectMany GetPatches
    WorkflowInput Source1
    -> MemberSelector(Selector=Environment)
    -> MemberSelector(Selector=Patches)
    -> Merge
    -> ToDictionary(KeySelector=StateIndex, ElementSelector=it)
    -> Take(Count=1)
    -> WorkflowOutput
-> BehaviorSubject PatchStatistics => #5
SubscribeSubject RngSeed
-> PropertyMapping(Random) => #7
#5, #7 -> CreatePatchManager
-> BehaviorSubject PatchManager
-> Bonsai.Scripting.Expressions.ExpressionTransform ConvertToList
  Expression: it.ConvertToList()
-> Merge
-> MulticastSubject PatchState

BehaviorSubject<System.Tuple(System.Double,System.Int32,AindVrForagingDataSchema.PatchUpdateFunction,AindVrForagingDataSchema.PatchUpdateFunction,AindVrForagingDataSchema.PatchUpdateFunction)> UpdatePatchStates => #13
SubscribeSubject PatchManager
-> Take(Count=1) => #15
#13, #15 -> WithLatestFrom
-> MemberSelector(Selector="Item2,Item1.Item1,Item1.Item2,Item1.Item3,Item1.Item4,Item1.Item5") => #17
SubscribeSubject RngSeed
-> PropertyMapping(Random) => #19
#17, #19 -> UpdatePatchManager
-> MulticastSubject PatchState

SubscribeSubject PatchStatistics
-> Merge
-> CreateObservable PatchDynamics
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject ThisPatch
    -> MemberSelector(Selector=Key)
    -> AsyncSubject ThisPatchIndex

    Defer InsidePatch => #5
        SubscribeSubject ActivePatch => #0
        SubscribeSubject ThisPatch
        -> MemberSelector(Selector=Value) => #2
        SubscribeSubject ActiveSite => #3
        #0, #2, #3 -> CombineLatest
        -> IsInsidePatchFunction
        -> BehaviorSubject IsActive

        SubscribeSubject IsActive
        -> DistinctUntilChanged
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> CreateObservable GenerateTick
            SubscribeSubject ThisPatch
            -> Take(Count=1)
            -> MemberSelector(Selector=Value)
            -> MemberSelector(Selector=RewardSpecification)
            -> MemberSelector(Selector=RewardFunction)
            -> Merge
            -> AindVrForagingDataSchema.MatchRewardFunction(Type=TypeMapping<AindVrForagingDataSchema.PatchRewardFunction>) => #6
            -> Condition OnChoice
                WorkflowInput Source1
                -> MemberSelector(Selector=Rule) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.PatchRewardFunctionRule>(Value=OnChoice))
                -> WorkflowOutput
            -> CreateObservable OnChoice => #8
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject RewardFunction

                SubscribeSubject HotChoiceFeedback
                -> DoubleProperty(Value=1) => #4
                SubscribeSubject RewardFunction => #5
                #4, #5 -> WithLatestFrom
                -> WorkflowOutput
            #6 -> Condition OnReward
                WorkflowInput Source1
                -> MemberSelector(Selector=Rule) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.PatchRewardFunctionRule>(Value=OnReward))
                -> WorkflowOutput
            -> CreateObservable OnReward => #10
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject RewardFunction

                SubscribeSubject HotGiveReward
                -> Condition HasValue
                    WorkflowInput Source1
                    -> MemberSelector(Selector=HasValue)
                    -> WorkflowOutput
                -> DoubleProperty(Value=1) => #5
                SubscribeSubject RewardFunction => #6
                #5, #6 -> WithLatestFrom
                -> WorkflowOutput
            #6 -> Condition OnRewardAmount
                WorkflowInput Source1
                -> MemberSelector(Selector=Rule) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.PatchRewardFunctionRule>(Value=OnRewardAmount))
                -> WorkflowOutput
            -> CreateObservable OnRewardAmount => #12
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject RewardFunction

                SubscribeSubject HotGiveReward
                -> Condition HasValue
                    WorkflowInput Source1
                    -> MemberSelector(Selector=HasValue)
                    -> WorkflowOutput
                -> MemberSelector(Selector=Value)
                -> Bonsai.Scripting.Expressions.ExpressionTransform ToDouble => #6
                  Expression: double(it)
                SubscribeSubject RewardFunction => #7
                #6, #7 -> WithLatestFrom
                -> WorkflowOutput
            #6 -> Condition OnTime
                WorkflowInput Source1
                -> MemberSelector(Selector=Rule) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.PatchRewardFunctionRule>(Value=OnTime))
                -> WorkflowOutput
            -> CreateObservable OnTime => #14
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject RewardFunction

                Bonsai.Shaders.RenderFrame
                -> MemberSelector(Selector=TimeStep)
                -> MemberSelector(Selector=ElapsedRealTime)
                -> Accumulate => #6
                SubscribeSubject RefreshEnvironmentRate
                -> PropertyMapping(Period)
                -> Bonsai.Shaders.Timer(DueTime=PT0S) => #9
                #6, #9 -> Sample
                -> Bonsai.Dsp.Difference(Order=1) => #11
                SubscribeSubject RewardFunction => #12
                #11, #12 -> WithLatestFrom
                -> WorkflowOutput
            #6 -> Condition OnDistance
                WorkflowInput Source1
                -> MemberSelector(Selector=Rule) => #1
                ExternalizedMapping(Value(DisplayName=OnDistance)) => #2
                #1, #2 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.PatchRewardFunctionRule>(Value=OnDistance))
                -> WorkflowOutput
            -> CreateObservable OnDistance => #16
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject RewardFunction

                SubscribeSubject CurrentPosition
                -> MemberSelector(Selector=Value.Z) => #4
                SubscribeSubject RefreshEnvironmentRate
                -> PropertyMapping(Period)
                -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT1S) => #7
                #4, #7 -> Sample
                -> Bonsai.Dsp.Difference(Order=1)
                -> Bonsai.Dsp.Abs => #10
                SubscribeSubject RewardFunction => #11
                #10, #11 -> WithLatestFrom
                -> WorkflowOutput
            #6 -> Condition OnChoiceAccumulated
                WorkflowInput Source1
                -> MemberSelector(Selector=Rule) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.PatchRewardFunctionRule>(Value=OnChoiceAccumulated))
                -> WorkflowOutput
            -> CreateObservable OnChoiceAccumulated => #18
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject RewardFunction

                SubscribeSubject HotChoiceFeedback
                -> DoubleProperty(Value=1)
                -> Accumulate => #5
                SubscribeSubject RewardFunction => #6
                #5, #6 -> WithLatestFrom
                -> WorkflowOutput
            #6 -> Condition OnRewardAccumulated
                WorkflowInput Source1
                -> MemberSelector(Selector=Rule) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.PatchRewardFunctionRule>(Value=OnRewardAccumulated))
                -> WorkflowOutput
            -> CreateObservable OnRewardAccumulated => #20
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject RewardFunction

                SubscribeSubject HotGiveReward
                -> Condition HasValue
                    WorkflowInput Source1
                    -> MemberSelector(Selector=HasValue)
                    -> WorkflowOutput
                -> DoubleProperty(Value=1)
                -> Accumulate => #6
                SubscribeSubject RewardFunction => #7
                #6, #7 -> WithLatestFrom
                -> WorkflowOutput
            #6 -> Condition OnTimeAccumulated
                WorkflowInput Source1
                -> MemberSelector(Selector=Rule) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.PatchRewardFunctionRule>(Value=OnTimeAccumulated))
                -> WorkflowOutput
            -> CreateObservable OnTimeAccumulated => #22
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject RewardFunction

                Bonsai.Shaders.RenderFrame
                -> MemberSelector(Selector=TimeStep)
                -> MemberSelector(Selector=ElapsedRealTime)
                -> Accumulate => #6
                SubscribeSubject RefreshEnvironmentRate
                -> PropertyMapping(Period)
                -> Bonsai.Shaders.Timer(DueTime=PT0S) => #9
                #6, #9 -> Sample => #10
                SubscribeSubject RewardFunction => #11
                #10, #11 -> WithLatestFrom
                -> WorkflowOutput
            #6 -> Condition OnDistanceAccumulated
                WorkflowInput Source1
                -> MemberSelector(Selector=Rule) => #1
                ExternalizedMapping(Value(DisplayName=OnDistance)) => #2
                #1, #2 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.PatchRewardFunctionRule>(Value=OnDistanceAccumulated))
                -> WorkflowOutput
            -> CreateObservable OnDistanceAccumulated => #24
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject RewardFunction

                SubscribeSubject CurrentPosition
                -> MemberSelector(Selector=Value.Z)
                -> Take(Count=1)
                -> AsyncSubject InitialPosition

                SubscribeSubject CurrentPosition
                -> MemberSelector(Selector=Value.Z) => #8
                SubscribeSubject RefreshEnvironmentRate
                -> PropertyMapping(Period)
                -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT1S) => #11
                #8, #11 -> Sample => #12
                SubscribeSubject InitialPosition => #13
                #12, #13 -> WithLatestFrom
                -> Subtract
                -> Bonsai.Scripting.Expressions.ExpressionTransform toDouble => #16
                  Expression: double(it)
                SubscribeSubject RewardFunction => #17
                #16, #17 -> WithLatestFrom
                -> WorkflowOutput
            #8, #10, #12, #14, #16, #18, #20, #22, #24 -> Merge
            -> Merge => #26
            SubscribeSubject IsActive
            -> BitwiseNot
            -> Condition => #29
                WorkflowInput Source1
                -> WorkflowOutput
            #26, #29 -> TakeUntil => #30
            SubscribeSubject ThisPatch
            -> MemberSelector(Selector=Value.StateIndex) => #32
            #30, #32 -> WithLatestFrom
            -> MemberSelector(Selector="Item1.Item1,Item2,Item1.Item2.Amount,Item1.Item2.Probability,Item1.Item2.Available")
            -> WorkflowOutput
        -> Switch
        -> WorkflowOutput
    Defer OutsidePatch => #6
        SubscribeSubject ActivePatch => #0
        SubscribeSubject ThisPatch
        -> MemberSelector(Selector=Value) => #2
        SubscribeSubject ActiveSite => #3
        #0, #2, #3 -> CombineLatest
        -> IsOutsideRewardFunction
        -> BehaviorSubject IsActive

        SubscribeSubject IsActive
        -> DistinctUntilChanged
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> CreateObservable GenerateTick
            SubscribeSubject ThisPatch
            -> Take(Count=1)
            -> MemberSelector(Selector=Value)
            -> MemberSelector(Selector=RewardSpecification)
            -> MemberSelector(Selector=RewardFunction)
            -> Merge
            -> AindVrForagingDataSchema.MatchRewardFunction(Type=TypeMapping<AindVrForagingDataSchema.OutsideRewardFunction>) => #6
            -> Condition OnTime
                WorkflowInput Source1
                -> MemberSelector(Selector=Rule) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.OutsideRewardFunctionRule>(Value=OnTime))
                -> WorkflowOutput
            -> CreateObservable OnTime => #8
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject RewardFunction

                Bonsai.Shaders.UpdateFrame => #3
                SubscribeSubject RewardFunction
                -> MemberSelector(Selector=Delay)
                -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
                -> PropertyMapping(DueTime) => #7
                #3, #7 -> Bonsai.Shaders.DelaySubscription(DueTime=PT0S)
                -> MemberSelector(Selector=TimeStep)
                -> MemberSelector(Selector=ElapsedRealTime)
                -> Accumulate => #11
                SubscribeSubject RefreshEnvironmentRate
                -> PropertyMapping(Period)
                -> Bonsai.Shaders.Timer(DueTime=PT0S) => #14
                #11, #14 -> Sample
                -> Bonsai.Dsp.Difference(Order=1) => #16
                SubscribeSubject IsActive
                -> BitwiseNot
                -> Condition => #19
                    WorkflowInput Source1
                    -> WorkflowOutput
                #16, #19 -> TakeUntil => #20
                SubscribeSubject RewardFunction => #21
                #20, #21 -> WithLatestFrom
                -> WorkflowOutput
            #6 -> Condition OnDistance
                WorkflowInput Source1
                -> MemberSelector(Selector=Rule) => #1
                ExternalizedMapping(Value(DisplayName=OnDistance)) => #2
                #1, #2 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.OutsideRewardFunctionRule>(Value=OnDistance))
                -> WorkflowOutput
            -> CreateObservable OnDistance => #10
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject RewardFunction

                SubscribeSubject CurrentPosition => #3
                SubscribeSubject RewardFunction
                -> MemberSelector(Selector=Delay)
                -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
                -> PropertyMapping(DueTime) => #7
                #3, #7 -> Bonsai.Shaders.DelaySubscription(DueTime=PT0S)
                -> MemberSelector(Selector=Value.Z) => #9
                SubscribeSubject RefreshEnvironmentRate
                -> PropertyMapping(Period)
                -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT1S) => #12
                #9, #12 -> Sample
                -> Bonsai.Dsp.Difference(Order=1)
                -> Bonsai.Dsp.Abs => #15
                SubscribeSubject RewardFunction => #16
                #15, #16 -> WithLatestFrom
                -> WorkflowOutput
            #6 -> Condition OnTimeAccumulated
                WorkflowInput Source1
                -> MemberSelector(Selector=Rule) => #1
                ExternalizedMapping(Value(DisplayName=OnDistance)) => #2
                #1, #2 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.OutsideRewardFunctionRule>(Value=OnTimeAccumulated))
                -> WorkflowOutput
            -> CreateObservable OnTimeAccumulated => #12
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject RewardFunction

                Bonsai.Shaders.RenderFrame => #3
                SubscribeSubject RewardFunction
                -> MemberSelector(Selector=Delay)
                -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
                -> PropertyMapping(DueTime) => #7
                #3, #7 -> Bonsai.Shaders.DelaySubscription(DueTime=PT0S)
                -> MemberSelector(Selector=TimeStep)
                -> MemberSelector(Selector=ElapsedRealTime)
                -> Accumulate => #11
                SubscribeSubject RefreshEnvironmentRate
                -> PropertyMapping(Period)
                -> Bonsai.Shaders.Timer(DueTime=PT0S) => #14
                #11, #14 -> Sample => #15
                SubscribeSubject RewardFunction => #16
                #15, #16 -> WithLatestFrom
                -> WorkflowOutput
            #6 -> Condition OnDistanceAccumulated
                WorkflowInput Source1
                -> MemberSelector(Selector=Rule) => #1
                ExternalizedMapping(Value(DisplayName=OnDistance)) => #2
                #1, #2 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.OutsideRewardFunctionRule>(Value=OnDistanceAccumulated))
                -> WorkflowOutput
            -> CreateObservable OnDistanceAccumulated => #14
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject RewardFunction

                SubscribeSubject CurrentPosition
                -> MemberSelector(Selector=Value.Z)
                -> Take(Count=1)
                -> AsyncSubject InitialPosition => #6
                SubscribeSubject RewardFunction
                -> MemberSelector(Selector=Delay)
                -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
                -> PropertyMapping(DueTime) => #10
                #6, #10 -> Bonsai.Shaders.DelaySubscription(DueTime=PT0S)

                SubscribeSubject CurrentPosition => #12
                SubscribeSubject RewardFunction
                -> MemberSelector(Selector=Delay)
                -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
                -> PropertyMapping(DueTime) => #16
                #12, #16 -> Bonsai.Shaders.DelaySubscription(DueTime=PT0S)
                -> MemberSelector(Selector=Value.Z) => #18
                SubscribeSubject RefreshEnvironmentRate
                -> PropertyMapping(Period)
                -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT1S) => #21
                #18, #21 -> Sample => #22
                SubscribeSubject InitialPosition => #23
                #22, #23 -> WithLatestFrom
                -> Subtract
                -> Bonsai.Scripting.Expressions.ExpressionTransform toDouble => #26
                  Expression: double(it)
                SubscribeSubject RewardFunction => #27
                #26, #27 -> WithLatestFrom
                -> WorkflowOutput
            #8, #10, #12, #14 -> Merge
            -> Merge => #16
            SubscribeSubject IsActive
            -> BitwiseNot
            -> Condition => #19
                WorkflowInput Source1
                -> WorkflowOutput
            #16, #19 -> TakeUntil => #20
            SubscribeSubject ThisPatch
            -> MemberSelector(Selector=Value.StateIndex) => #22
            #20, #22 -> WithLatestFrom
            -> MemberSelector(Selector="Item1.Item1,Item2,Item1.Item2.Amount,Item1.Item2.Probability,Item1.Item2.Available")
            -> WorkflowOutput
        -> Switch
        -> WorkflowOutput
    Defer OnThisPatchEntry => #7
        SubscribeSubject ActivePatch => #0
        SubscribeSubject ThisPatch
        -> MemberSelector(Selector=Value) => #2
        #0, #2 -> WithLatestFrom
        -> MemberSelector(Selector="Item1.StateIndex,Item2.StateIndex")
        -> Equal
        -> BehaviorSubject IsActive

        SubscribeSubject IsActive
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> CreateObservable GenerateTick
            SubscribeSubject ThisPatch
            -> Take(Count=1)
            -> MemberSelector(Selector=Value)
            -> MemberSelector(Selector=RewardSpecification)
            -> MemberSelector(Selector=RewardFunction)
            -> Merge
            -> AindVrForagingDataSchema.MatchRewardFunction(Type=TypeMapping<AindVrForagingDataSchema.OnThisPatchEntryRewardFunction>)
            -> Condition OnThisPatchEntryFunction
                WorkflowInput Source1
                -> MemberSelector(Selector=Rule) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=StringProperty(Value=OnThisPatchEntry))
                -> WorkflowOutput
            -> CreateObservable OnThisPatchEntryFunction
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject RewardFunction

                DoubleProperty(Value=1) => #3
                SubscribeSubject RewardFunction => #4
                #3, #4 -> WithLatestFrom
                -> Take(Count=1)
                -> WorkflowOutput
            -> Merge => #9
            SubscribeSubject ThisPatch
            -> MemberSelector(Selector=Value.StateIndex) => #11
            #9, #11 -> WithLatestFrom
            -> MemberSelector(Selector="Item1.Item1,Item2,Item1.Item2.Amount,Item1.Item2.Probability,Item1.Item2.Available")
            -> WorkflowOutput
        -> Switch
        -> WorkflowOutput
    Defer Persistent => #8
        BooleanProperty(Value=true)
        -> Take(Count=1)
        -> BehaviorSubject IsActive

        SubscribeSubject IsActive
        -> DistinctUntilChanged
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> CreateObservable GenerateTick
            SubscribeSubject ThisPatch
            -> Take(Count=1)
            -> MemberSelector(Selector=Value)
            -> MemberSelector(Selector=RewardSpecification)
            -> MemberSelector(Selector=RewardFunction)
            -> Merge
            -> AindVrForagingDataSchema.MatchRewardFunction(Type=TypeMapping<AindVrForagingDataSchema.PersistentRewardFunction>) => #6
            -> Condition OnChoice
                WorkflowInput Source1
                -> MemberSelector(Selector=Rule) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.PersistentRewardFunctionRule>(Value=OnChoice))
                -> WorkflowOutput
            -> CreateObservable OnChoice => #8
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject RewardFunction

                SubscribeSubject HotChoiceFeedback
                -> DoubleProperty(Value=1) => #4
                SubscribeSubject RewardFunction => #5
                #4, #5 -> WithLatestFrom
                -> WorkflowOutput
            #6 -> Condition OnReward
                WorkflowInput Source1
                -> MemberSelector(Selector=Rule) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.PersistentRewardFunctionRule>(Value=OnReward))
                -> WorkflowOutput
            -> CreateObservable OnReward => #10
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject RewardFunction

                SubscribeSubject HotGiveReward
                -> Condition HasValue
                    WorkflowInput Source1
                    -> MemberSelector(Selector=HasValue)
                    -> WorkflowOutput
                -> DoubleProperty(Value=1) => #5
                SubscribeSubject RewardFunction => #6
                #5, #6 -> WithLatestFrom
                -> WorkflowOutput
            #6 -> Condition OnTime
                WorkflowInput Source1
                -> MemberSelector(Selector=Rule) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.PersistentRewardFunctionRule>(Value=OnTime))
                -> WorkflowOutput
            -> CreateObservable OnTime => #12
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject RewardFunction

                Bonsai.Shaders.RenderFrame
                -> MemberSelector(Selector=TimeStep)
                -> MemberSelector(Selector=ElapsedRealTime)
                -> Accumulate => #6
                SubscribeSubject RefreshEnvironmentRate
                -> PropertyMapping(Period)
                -> Bonsai.Shaders.Timer(DueTime=PT0S) => #9
                #6, #9 -> Sample
                -> Bonsai.Dsp.Difference(Order=1) => #11
                SubscribeSubject RewardFunction => #12
                #11, #12 -> WithLatestFrom
                -> WorkflowOutput
            #6 -> Condition OnDistance
                WorkflowInput Source1
                -> MemberSelector(Selector=Rule) => #1
                ExternalizedMapping(Value(DisplayName=OnDistance)) => #2
                #1, #2 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.PersistentRewardFunctionRule>(Value=OnDistance))
                -> WorkflowOutput
            -> CreateObservable OnDistance => #14
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject RewardFunction

                SubscribeSubject CurrentPosition
                -> MemberSelector(Selector=Value.Z) => #4
                SubscribeSubject RefreshEnvironmentRate
                -> PropertyMapping(Period)
                -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT1S) => #7
                #4, #7 -> Sample
                -> Bonsai.Dsp.Difference(Order=1)
                -> Bonsai.Dsp.Abs => #10
                SubscribeSubject RewardFunction => #11
                #10, #11 -> WithLatestFrom
                -> WorkflowOutput
            #6 -> Condition OnChoiceAccumulated
                WorkflowInput Source1
                -> MemberSelector(Selector=Rule) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.PersistentRewardFunctionRule>(Value=OnChoiceAccumulated))
                -> WorkflowOutput
            -> CreateObservable OnChoiceAccumulated => #16
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject RewardFunction

                SubscribeSubject HotChoiceFeedback
                -> DoubleProperty(Value=1)
                -> Accumulate => #5
                SubscribeSubject RewardFunction => #6
                #5, #6 -> WithLatestFrom
                -> WorkflowOutput
            #6 -> Condition OnRewardAccumulated
                WorkflowInput Source1
                -> MemberSelector(Selector=Rule) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.PersistentRewardFunctionRule>(Value=OnRewardAccumulated))
                -> WorkflowOutput
            -> CreateObservable OnRewardAccumulated => #18
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject RewardFunction

                SubscribeSubject HotGiveReward
                -> Condition HasValue
                    WorkflowInput Source1
                    -> MemberSelector(Selector=HasValue)
                    -> WorkflowOutput
                -> DoubleProperty(Value=1)
                -> Accumulate => #6
                SubscribeSubject RewardFunction => #7
                #6, #7 -> WithLatestFrom
                -> WorkflowOutput
            #6 -> Condition OnTimeAccumulated
                WorkflowInput Source1
                -> MemberSelector(Selector=Rule) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.PersistentRewardFunctionRule>(Value=OnTimeAccumulated))
                -> WorkflowOutput
            -> CreateObservable OnTimeAccumulated => #20
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject RewardFunction

                Bonsai.Shaders.RenderFrame
                -> MemberSelector(Selector=TimeStep)
                -> MemberSelector(Selector=ElapsedRealTime)
                -> Accumulate => #6
                SubscribeSubject RefreshEnvironmentRate
                -> PropertyMapping(Period)
                -> Bonsai.Shaders.Timer(DueTime=PT0S) => #9
                #6, #9 -> Sample => #10
                SubscribeSubject RewardFunction => #11
                #10, #11 -> WithLatestFrom
                -> WorkflowOutput
            #6 -> Condition OnDistanceAccumulated
                WorkflowInput Source1
                -> MemberSelector(Selector=Rule) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.PersistentRewardFunctionRule>(Value=OnDistanceAccumulated))
                -> WorkflowOutput
            -> CreateObservable OnDistanceAccumulated => #22
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject RewardFunction

                SubscribeSubject CurrentPosition
                -> MemberSelector(Selector=Value.Z)
                -> Take(Count=1)
                -> AsyncSubject InitialPosition

                SubscribeSubject CurrentPosition
                -> MemberSelector(Selector=Value.Z) => #8
                SubscribeSubject RefreshEnvironmentRate
                -> PropertyMapping(Period)
                -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT1S) => #11
                #8, #11 -> Sample => #12
                SubscribeSubject InitialPosition => #13
                #12, #13 -> WithLatestFrom
                -> Subtract
                -> Bonsai.Scripting.Expressions.ExpressionTransform toDouble => #16
                  Expression: double(it)
                SubscribeSubject RewardFunction => #17
                #16, #17 -> WithLatestFrom
                -> WorkflowOutput
            #6 -> Condition OnPatchEntry
                WorkflowInput Source1
                -> MemberSelector(Selector=Rule) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.PersistentRewardFunctionRule>(Value=OnPatchEntry))
                -> WorkflowOutput
            -> CreateObservable OnPatchEntry => #24
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject RewardFunction

                SubscribeSubject ActivePatch
                -> DoubleProperty(Value=1) => #4
                SubscribeSubject RewardFunction => #5
                #4, #5 -> WithLatestFrom
                -> WorkflowOutput
            #8, #10, #12, #14, #16, #18, #20, #22, #24 -> Merge
            -> Merge => #26
            SubscribeSubject IsActive
            -> BitwiseNot
            -> Condition => #29
                WorkflowInput Source1
                -> WorkflowOutput
            #26, #29 -> TakeUntil => #30
            SubscribeSubject ThisPatch
            -> MemberSelector(Selector=Value.StateIndex) => #32
            #30, #32 -> WithLatestFrom
            -> MemberSelector(Selector="Item1.Item1,Item2,Item1.Item2.Amount,Item1.Item2.Probability,Item1.Item2.Available")
            -> WorkflowOutput
        -> Switch
        -> WorkflowOutput
    #5, #6, #7, #8 -> Merge
    -> WorkflowOutput
-> Merge
-> MulticastSubject UpdatePatchStates
