<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.WhiteRabbit;assembly=AllenNeuralDynamics.WhiteRabbit"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p2="clr-namespace:AllenNeuralDynamics.HarpUtils;assembly=AllenNeuralDynamics.HarpUtils"
                 xmlns:p3="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:Defer">
        <Name>ValidateClkOutput</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HarpClockGenerator.ConnectedClockOutputs</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:ToDictionary">
              <rx:KeySelector>OutputChannel</rx:KeySelector>
              <rx:ElementSelector>TargetDevice</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ExpectedDevices</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpWhiteRabbitEvents</Name>
            </Expression>
            <Expression xsi:type="p1:Parse">
              <harp:Register xsi:type="p1:ConnectedDevices" />
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Read</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateConnectedDevicesPayload">
                <p1:ConnectedDevices>None</p1:ConnectedDevices>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpWhiteRabbitCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ExpectedDevices</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ExpectedChannels" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:ValidateClkOutputChannels" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>MissingChannels</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Count</Selector>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Format">
              <Format>Error raised while validating the Harp Clock Output: 
{0}</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Message" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:ThrowException">
                <p3:Message />
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="14" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>