<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>TaskLogicParameters</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Updaters</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>VariableUpdaters</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>GiveReward</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\UpdateVariable.bonsai">
        <UpdaterKey>StopDurationOffset</UpdaterKey>
        <DefaultValue>0</DefaultValue>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>StopDurationOffset</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateSoftwareEvent">
          <p1:EventName>UpdaterStopDurationOffset</p1:EventName>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>UpdaterEvents</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>GiveReward</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TaskLogicParameters</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>OperationControl.PositionControl.VelocityThreshold</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="DefaultValue" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\UpdateVariable.bonsai">
        <UpdaterKey>StopVelocityThreshold</UpdaterKey>
        <DefaultValue>0</DefaultValue>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>StopVelocityThreshold</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateSoftwareEvent">
          <p1:EventName>UpdaterStopVelocityThreshold</p1:EventName>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>UpdaterEvents</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>GiveReward</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\UpdateVariable.bonsai">
        <UpdaterKey>RewardDelayOffset</UpdaterKey>
        <DefaultValue>0</DefaultValue>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>RewardDelayOffset</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateSoftwareEvent">
          <p1:EventName>UpdaterRewardDelayOffset</p1:EventName>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>UpdaterEvents</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="15" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>