WorkflowBuilder(Version=2.9.1)
Defer Visualizers
    ExternalizedMapping(Value(DisplayName=EnableExperimentUI))
    -> BooleanProperty(Value=true)
    -> Take(Count=1)
    -> BehaviorSubject EnableExperimentUI

    SubscribeSubject ExperimentCommand
    -> FilterExperimentCommand(ExperimentCommand=StartTask)
    -> BooleanProperty(Value=false)
    -> MulticastSubject EnableExperimentUI

    Defer CameraVisualizer
        SubscribeSubject TriggeredCamerasStream => #0
        Bonsai.Gui.SliderBuilder Transparency(Enabled=true, Visible=true, Minimum=0, Maximum=1, DecimalPlaces=2, Value=1) => #1
        -> PropertyMapping(OverlayAlpha) => #2
        #0, #2 -> IncludeWorkflow(Path=Extensions\SpinnakerCameraControllerVisualizer.bonsai, Minimum=1, Maximum=254, OverlayAlpha=1)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #4
        #1 -> VisualizerMapping => #5
        #4, #5 -> Bonsai.Gui.TableLayoutPanelBuilder CameraVisualizer
          Enabled=true
          Visible=true
          ColumnCount=1
          RowCount=2
          ColumnStyles=""
          RowStyles(RowStyle(SizeType=Percent, Height=0.9), RowStyle(SizeType=Percent, Height=0.1))
          CellSpans=""
        -> VisualizerMapping => #7
        SubscribeSubject TriggeredCamerasStream => #8
        Bonsai.Gui.SliderBuilder Transparency(Enabled=true, Visible=true, Minimum=0, Maximum=1, DecimalPlaces=2, Value=1) => #9
        -> PropertyMapping(OverlayAlpha) => #10
        #8, #10 -> IncludeWorkflow(Path=Extensions\SpinnakerCameraControllerVisualizer.bonsai, Minimum=1, Maximum=254, OverlayAlpha=1)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #12
        #9 -> VisualizerMapping => #13
        #12, #13 -> Bonsai.Gui.TableLayoutPanelBuilder CameraVisualizer
          Enabled=true
          Visible=true
          ColumnCount=1
          RowCount=2
          ColumnStyles=""
          RowStyles(RowStyle(SizeType=Percent, Height=0.9), RowStyle(SizeType=Percent, Height=0.1))
          CellSpans=""
        -> VisualizerMapping => #15
        SubscribeSubject MonitoringCamerasStream
        -> IncludeWorkflow(Path=Extensions\WebCameraControllerVisualizer.bonsai)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #18
        #7, #15, #18 -> Bonsai.Gui.TableLayoutPanelBuilder CameraVisualizer(Enabled=true, Visible=true, ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput
    -> VisualizerMapping => #9
    IntProperty(Value=0)
    -> Visualizer TaskVisualizer
        Defer OnlineLabels
            Bonsai.ImGui.Visualizers.ImGuiVisualizerBuilder Diagnosis
            -> PublishSubject tick
            -> WorkflowOutput

            SubscribeSubject tick => #3
            SubscribeSubject SubjectSchema
            -> MemberSelector(Selector=Subject) => #5
            SubscribeSubject TaskLogicSchema
            -> MemberSelector(Selector="Name,StageName") => #7
            GroupWorkflow QC => #8
                SubscribeSubject HarpWhiteRabbitHeartbeat => #0
                SubscribeSubject SessionAccumulatedReward => #1
                #0, #1 -> WithLatestFrom
                -> MemberSelector(Selector="Item1.Seconds,Item2")
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                    Item1 as Heartbeat,
                    Item2 as TotalReward)
                -> WorkflowOutput

                FloatProperty(Value=0) => #6
                SubscribeSubject GiveReward => #7
                SubscribeSubject ForceGiveReward => #8
                #7, #8 -> Merge
                -> Condition HasValue
                    WorkflowInput Source1
                    -> MemberSelector(Selector=HasValue)
                    -> WorkflowOutput
                -> MemberSelector(Selector=Value) => #11
                #6, #11 -> Merge
                -> Accumulate
                -> BehaviorSubject SessionAccumulatedReward
            GroupWorkflow TimeSinceStart => #9
                StringProperty(Value="Waiting To Start...")
                -> Take(Count=1) => #1
                Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT1S)
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                  Expression: TimeSpan.FromSeconds(it).ToString("hh\\:mm\\:ss")
                SubscribeSubject ExperimentCommand
                -> FilterExperimentCommand(ExperimentCommand=StartTask) => #5
                #3, #5 -> SubscribeWhen => #6
                #1, #6 -> Merge
                -> WorkflowOutput
            GroupWorkflow TimeSinceLastChoice => #10
                StringProperty(Value="Waiting To Start...")
                -> Take(Count=1) => #1
                SubscribeSubject HotChoiceFeedback
                -> CreateObservable AccumulateTime
                    Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT1S)
                    -> WorkflowOutput
                -> Switch
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
                  Expression: TimeSpan.FromSeconds(it).ToString("hh\\:mm\\:ss")
                #1, #5 -> Merge
                -> WorkflowOutput
            SubscribeSubject SubjectSchema
            -> MemberSelector(Selector=Notes) => #12
            #5, #7, #8, #9, #10, #12 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                it.Item1 as Subject,
                it.Item2.Item1 as Task,
                it.Item2.Item2 as Stage,
                it.Item3.Heartbeat as LastHeartbeat,
                it.Item3.TotalReward as TotalReward,
                it.Item4 as TimeSinceStart,
                it.Item5 as TimeSinceLastChoice,
                it.Item6 as Notes)
            -> PropertyMapping(Item) => #15
            #3, #15 -> TableVisualizer(Visible=true, FontSize=36, HideHeader=true)
        -> VisualizerMapping => #1
        Defer PatchState
            Bonsai.ImGui.Visualizers.ImPlotVisualizerBuilder PatchStateVisualizer
            -> PublishSubject _UiTick
            -> WorkflowOutput

            SubscribeSubject _UiTick => #3
            SubscribeSubject GlobalPatchState => #4
            #3, #4 -> AllenNeuralDynamics.VrForaging.PatchStateVisualizer(Visible=true, FontSize=20)
        -> VisualizerMapping => #3
        #1, #3 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #5
        Defer Ethogram
            Bonsai.ImGui.Visualizers.ImPlotVisualizerBuilder Ethogram
            -> PublishSubject _UiTick
            -> WorkflowOutput

            SubscribeSubject _UiTick => #3
            SubscribeSubject HarpTimestampSource => #4
            #3, #4 -> WithLatestFrom => #5
            SubscribeSubject GlobalActiveSite => #6
            SubscribeSubject GlobalActivePatch
            -> MemberSelector(Selector=StateIndex) => #8
            #6, #8 -> WithLatestFrom
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=##PatchVirtualSite) => #10
            SubscribeSubject SoftwareEvent
            -> Condition GiveReward
                WorkflowInput Source1
                -> MemberSelector(Selector=Name) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=StringProperty(Value=GiveReward))
                -> WorkflowOutput
            -> Condition Gt0 => #13
                WorkflowInput Source1
                -> MemberSelector(Selector=Data)
                -> CastToNullableFloat
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it.HasValue and it.Value>0
                -> WorkflowOutput
            SubscribeSubject SoftwareEvent
            -> Condition ChoiceFeedback => #15
                WorkflowInput Source1
                -> MemberSelector(Selector=Name) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=StringProperty(Value=ChoiceFeedback))
                -> WorkflowOutput
            SubscribeSubject LickEvent
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=##Lick) => #17
            #10, #13, #15, #17 -> Merge => #18
            SubscribeSubject HarpTimestampSource => #19
            #18, #19 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.TimestampSoftwareEvent => #22
            #5, #22 -> AllenNeuralDynamics.VrForaging.SoftwareEventDisplay(Visible=true, WindowSize=60, FontSize=20)
        -> VisualizerMapping => #7
        Defer Velocity
            Bonsai.ImGui.Visualizers.ImPlotVisualizerBuilder Velocity
            -> PublishSubject PlotTick
            -> WorkflowOutput

            SubscribeSubject PlotTick
            -> PlotStyle(FontSize=24, LineWidth=3)
            -> Bonsai.ImPlot.PlotBuilder Velocity(Visible=true, Size(X=-1, Y=-1), Flags=None, FlagsX="NoLabel NoTickLabels AutoFit", FlagsY=AutoFit, LabelX=Time, LabelY=Velocity)
            -> PublishSubject Plot

            SubscribeSubject FilteredCurrentVelocity => #7
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl)
            -> MemberSelector(Selector=PositionControl.VelocityThreshold) => #10
            SubscribeSubject StopVelocityThreshold => #11
            #10, #11 -> Merge => #12
            #7, #12 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: new (it.Item1.Item1 as Velocity, it.Item2 as Threshold, it.Item1.Item2 as Timestamp)
            -> Bonsai.ImGui.Visualizers.RollingBufferBuilder(Capacity=3500, IndexSelector=Timestamp, ValueSelector="Velocity,Threshold")
            -> Bonsai.ImGui.Visualizers.LatestOnNewFrame Plot
            -> Bonsai.ImGui.Visualizers.PlotLineSeriesBuilder(Visible=true, Flags=None)
        -> VisualizerMapping
        -> Bonsai.Gui.GroupBoxBuilder Velocity(Enabled=true, Visible=true, Text=Velocity)
        -> VisualizerMapping => #11
        Defer Thermistor
            Bonsai.ImGui.Visualizers.ImPlotVisualizerBuilder Thermistor
            -> PublishSubject PlotTick
            -> WorkflowOutput

            SubscribeSubject PlotTick
            -> PlotStyle(FontSize=20, LineWidth=2)
            -> Bonsai.ImPlot.PlotBuilder Thermistor(Visible=true, Size(X=-1, Y=-1), Flags=None, FlagsX="NoLabel NoTickLabels AutoFit", FlagsY=AutoFit, LabelX=Time, LabelY=Voltage)
            -> PublishSubject Plot

            SubscribeSubject ThermistorData
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: new(it.Seconds as Timestamp, it.Value as Thermistor)
            -> Bonsai.ImGui.Visualizers.RollingBufferBuilder(Capacity=2000, IndexSelector=Timestamp, ValueSelector=Thermistor)
            -> Bonsai.ImGui.Visualizers.LatestOnNewFrame Plot
            -> Bonsai.ImGui.Visualizers.PlotLineSeriesBuilder(Visible=true, Flags=None)
        -> VisualizerMapping
        -> Bonsai.Gui.TableLayoutPanelBuilder Thermistor(Enabled=true, Visible=true, ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #15
        Defer Photodiode
            Bonsai.ImGui.Visualizers.ImPlotVisualizerBuilder Photodiode
            -> PublishSubject PlotTick
            -> WorkflowOutput

            SubscribeSubject PlotTick
            -> PlotStyle(FontSize=20, LineWidth=2)
            -> Bonsai.ImPlot.PlotBuilder Photodiode(Visible=true, Size(X=-1, Y=-1), Flags=None, FlagsX="NoLabel NoTickLabels AutoFit", FlagsY=AutoFit, LabelX=Time, LabelY="")
            -> SetAxisLimits(MinX=nil, MaxX=nil, MinY=-0.2, MaxY=1.2)
            -> PublishSubject Plot

            SubscribeSubject RendererSynchState
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector="SyncQuadValue.HasValue,FrameTimestamp.HasValue")
                -> BitwiseAnd
                -> WorkflowOutput
            -> MemberSelector(Selector=SyncQuadValue.Value)
            -> GreaterThan(Operand=DoubleProperty(Value=0)) => #11
            SubscribeSubject HarpBehaviorEvents
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #13
            -> MemberSelector(Selector=Value)
            -> HasFlag(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0))
            -> DistinctUntilChanged => #16
            #13 -> MemberSelector(Selector=Seconds) => #17
            #16, #17 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> MemberSelector(Selector=Value) => #20
            #11, #20 -> CombineLatest => #21
            SubscribeSubject HarpTimestampSource => #22
            #21, #22 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: new(it.Item1.Item1 as Quad, it.Item1.Item2 as Photodiode, it.Item2 as Timestamp)
            -> Bonsai.ImGui.Visualizers.RollingBufferBuilder(Capacity=1000, IndexSelector=Timestamp, ValueSelector="Quad,Photodiode")
            -> Bonsai.ImGui.Visualizers.LatestOnNewFrame Plot
            -> Bonsai.ImGui.Visualizers.PlotStairsSeriesBuilder(Visible=true, Flags=None)
            -> Bonsai.ImGui.Visualizers.PlotDigitalSeriesBuilder(Visible=true, Flags=None)
        -> VisualizerMapping
        -> Bonsai.Gui.TableLayoutPanelBuilder Photodiode(Enabled=true, Visible=true, ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #19
        #15, #19 -> Bonsai.Gui.TabControlBuilder Sensors(Enabled=true, Visible=true)
        -> VisualizerMapping
        -> Bonsai.Gui.GroupBoxBuilder Sensor(Enabled=true, Visible=true, Text=Sensors)
        -> VisualizerMapping => #23
        #11, #23 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #25
        #5, #7, #25 -> Bonsai.Gui.TableLayoutPanelBuilder DataVisualization(Enabled=true, Visible=true, ColumnCount=1, RowCount=3, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #12
    IncludeWorkflow(Path=Extensions\AindManipulatorGui.bonsai)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #14
    Defer LauncherControl
        IncludeWorkflow(Path=Extensions\Annotation.bonsai)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #1
        SubscribeSubject ExperimentCommand
        -> LessThanOrEqual(Operand=WorkflowProperty<ExperimentCommand>(Value=WaitingToStart))
        -> Bonsai.Shaders.DelaySubscription(DueTime=PT2S)
        -> PropertyMapping(Enabled) => #5
        SubscribeSubject ExperimentCommand
        -> FilterExperimentCommand(ExperimentCommand=NotStarted)
        -> StringProperty(Value=Start) => #8
        SubscribeSubject ExperimentCommand
        -> FilterExperimentCommand(ExperimentCommand=WaitingToStart)
        -> CreateObservable TimeToStart
            Bonsai.Shaders.RenderFrame
            -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
            -> Accumulate => #2
            Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.5S) => #3
            #2, #3 -> Sample => #4
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.WaitToStartDuration)
            -> PropertyMapping(Value) => #7
            #4, #7 -> Subtract(Operand=DoubleProperty(Value=0))
            -> TakeWhile
                WorkflowInput Source1
                -> LessThan(Operand=DoubleProperty(Value=0))
                -> WorkflowOutput
            -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
            -> Format(Format="Starting {0:hh\:mm\:ss\.f}")
            -> WorkflowOutput
        -> Switch => #12
        SubscribeSubject ExperimentCommand
        -> GreaterThan(Operand=WorkflowProperty<ExperimentCommand>(Value=WaitingToStart))
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #15
          Expression: it
        #12, #15 -> TakeUntil => #16
        SubscribeSubject ExperimentCommand
        -> GreaterThan(Operand=WorkflowProperty<ExperimentCommand>(Value=WaitingToStart))
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it
        -> StringProperty(Value=Running) => #20
        #8, #16, #20 -> Merge
        -> PropertyMapping(Text) => #22
        #5, #22 -> Bonsai.Gui.ButtonBuilder Start(Enabled=true, Visible=true, Text=Start)
        -> Sink
            WorkflowInput Source1 => #0
            SubscribeSubject SubjectSchema
            -> PropertyMapping(Session) => #2
            #0, #2 -> PromptConfirmStart
            -> CreateButtonCommand(MyProperty=StartExperiment)
            -> MulticastSubject ExperimentUiButtonCommands
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #25
        SubscribeSubject ExperimentCommand
        -> GreaterThan(Operand=WorkflowProperty<ExperimentCommand>(Value=WaitingToStart)) => #27
        SubscribeSubject ExperimentCommand
        -> LessThan(Operand=WorkflowProperty<ExperimentCommand>(Value=EndCommand)) => #29
        #27, #29 -> Zip
        -> BitwiseAnd
        -> PropertyMapping(Enabled)
        -> Bonsai.Gui.ButtonBuilder Stop(Enabled=false, Visible=true, Text="Stop Experiment")
        -> Sink
            WorkflowInput Source1
            -> CreateButtonCommand(MyProperty=StopExperiment)
            -> MulticastSubject ExperimentUiButtonCommands
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #35
        SubscribeSubject ExperimentCommand
        -> GreaterThanOrEqual(Operand=WorkflowProperty<ExperimentCommand>(Value=NotStarted)) => #37
        SubscribeSubject ExperimentCommand
        -> LessThan(Operand=WorkflowProperty<ExperimentCommand>(Value=End)) => #39
        #37, #39 -> Zip
        -> BitwiseAnd
        -> PropertyMapping(Enabled)
        -> Bonsai.Gui.ButtonBuilder End(Enabled=true, Visible=true, Text="End Experiment")
        -> Sink
            WorkflowInput Source1
            -> CreateButtonCommand(MyProperty=EndExperiment)
            -> MulticastSubject ExperimentUiButtonCommands
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #45
        SubscribeSubject ExperimentCommand
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.ToString()
        -> PropertyMapping(Text)
        -> Bonsai.Gui.ButtonBuilder ExperimentCommand(Enabled=true, Visible=true, Text=NotStarted)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #50
        #25, #35, #45, #50 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #52
        #1, #52 -> Bonsai.Gui.TableLayoutPanelBuilder LauncherControl
          Enabled=true
          Visible=true
          Font="Microsoft Sans Serif, 16.125pt"
          ColumnCount=1
          RowCount=2
          ColumnStyles=""
          RowStyles(RowStyle(SizeType=Percent, Height=0.75), RowStyle(SizeType=Percent, Height=0.25))
          CellSpans=""
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #16
    Defer ValveGui
        Bonsai.Gui.PropertyGridBuilder(Enabled=true, Visible=true, HelpVisible=true, ToolbarVisible=true, AutoRefresh=false)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.PropertyGridVisualizer>) => #1
        Bonsai.Gui.ButtonBuilder RunCalibration(Enabled=true, Visible=true, Text=RunCalibration)
        -> PublishSubject RunCalibration
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #4
        BooleanProperty(Value=false)
        -> Take(Count=1) => #6
        SubscribeSubject ValveFlushState => #7
        #6, #7 -> Concat => #8
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> StringProperty(Value="Close Valves") => #10
        #8 -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> StringProperty(Value="Open Valves") => #13
        #10, #13 -> Merge
        -> PropertyMapping(Text)
        -> Bonsai.Gui.ToggleButtonBuilder FlushValves(Enabled=true, Visible=true, Text="Open Valves", Checked=false)
        -> MulticastSubject ValveFlushState
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ToggleButtonVisualizer>) => #18
        SubscribeSubject EnableExperimentUI
        -> PropertyMapping(Enabled) => #20
        #1, #4, #18, #20 -> Bonsai.Gui.TableLayoutPanelBuilder ValveCalibration
          Enabled=true
          Visible=true
          ColumnCount=2
          RowCount=2
          ColumnStyles=""
          RowStyles=""
          CellSpans(CellSpan(ColumnSpan=1, RowSpan=2), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1))
        -> WorkflowOutput

        SubscribeSubject RunCalibration
        -> Take(Count=1) => #24
        ExternalizedMapping(Interval(Category=ValveCalibration), OpeningTimeMs(Category=ValveCalibration), Repeats(Category=ValveCalibration)) => #25
        #24, #25 -> SelectMany LoopValve
            ExternalizedMapping(DueTime(DisplayName=Interval))
            -> Bonsai.Shaders.Timer(DueTime=PT0.5S) => #1
            ExternalizedMapping(Value(DisplayName=OpeningTimeMs)) => #2
            #1, #2 -> IntProperty(Value=100)
            -> MulticastSubject ValveOpenTimeMs
            -> Unit
            -> MulticastSubject TriggerValve => #6
            ExternalizedMapping(Count(DisplayName=Repeats)) => #7
            #6, #7 -> RepeatCount(Count=200) => #8
            Bonsai.Shaders.Input.KeyDown(Key=Q, Modifiers=Shift) => #9
            #8, #9 -> TakeUntil
            -> ElementIndex
            -> MemberSelector(Selector=Index)
            -> WorkflowOutput
        -> Repeat

        BehaviorSubject<System.Boolean> ValveFlushState
        -> CreateObservable Flush
            WorkflowInput Source1
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=200)
            -> MulticastSubject ValveOpenTimeMs
            -> Unit
            -> MulticastSubject TriggerValve
            -> Bonsai.Shaders.Delay(DueTime=PT0.2S)
            -> RepeatCount(Count=300)
            -> LastOrDefault
            -> WorkflowOutput
        -> Switch
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #18
    Defer HwShortcuts
        SubscribeSubject EnableExperimentUI
        -> PropertyMapping(Enabled)
        -> Bonsai.Gui.ButtonBuilder TriggerAudio(Enabled=true, Visible=true, Text=TriggerAudio)
        -> Sink
            WorkflowInput Source1
            -> Unit
            -> MulticastSubject AudioTrigger
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #4
        Bonsai.Gui.ButtonBuilder ForceReward(Enabled=true, Visible=true, Text=ForceReward)
        -> Sink
            WorkflowInput Source1 => #0
            FloatProperty(Value=3)
            -> Take(Count=1) => #2
            #0, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject ForceGiveReward
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #7
        #4, #7 -> Bonsai.Gui.TableLayoutPanelBuilder HwShortcuts(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 16.125pt", ColumnCount=5, RowCount=5, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #20
    #12, #14, #16, #18, #20 -> Bonsai.Gui.TabControlBuilder VrForaging(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 12pt")
    -> VisualizerMapping => #22
    Defer Footer
        Bonsai.ImGui.Visualizers.ImGuiVisualizerBuilder
        -> PublishSubject draw
        -> WorkflowOutput

        SubscribeSubject draw => #3
        SubscribeSubject SubjectSchema
        -> MemberSelector(Selector=Experimenter)
        -> PropertyMapping(Experimenters) => #6
        SubscribeSubject SubjectSchema
        -> MemberSelector(Selector=Subject)
        -> PropertyMapping(Subject) => #9
        #3, #6, #9 -> SessionInfoFooterVisualizer(Visible=true, FontSize=40, Subject="", Experimenters(string=bruno.cruz))
    -> VisualizerMapping => #24
    #9, #22, #24 -> Bonsai.Gui.TableLayoutPanelBuilder VrForaging
      Enabled=true
      Visible=true
      ColumnCount=1
      RowCount=3
      ColumnStyles=""
      RowStyles(RowStyle(SizeType=Percent, Height=0.38), RowStyle(SizeType=Percent, Height=0.57), RowStyle(SizeType=Percent, Height=0.05))
      CellSpans=""
    -> Bonsai.Design.VisualizerWindow(Text=VrForaging, Visible=true, Location(X=0, Y=0), Size(Width=1000, Height=1000), WindowState=Maximized)
    -> WorkflowOutput
-> WorkflowOutput
