WorkflowBuilder(Version=2.8.0-alpha018)
GroupWorkflow Cameras
    Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="") => #0
    SubscribeSubject Prefix
    -> Add(Operand=StringProperty(Value=_top.avi))
    -> PropertyMapping(FileName) => #3
    #0, #3 -> Bonsai.Vision.VideoWriter
      FileName=663424_Test3_top.avi
      Suffix=None
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=15
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor

    Bonsai.Vision.CameraCapture(Index=1, CaptureProperties="") => #5
    SubscribeSubject Prefix
    -> Add(Operand=StringProperty(Value=_bottom.avi))
    -> PropertyMapping(FileName) => #8
    #5, #8 -> Bonsai.Vision.VideoWriter
      FileName=663424_Test3_bottom.avi
      Suffix=None
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=15
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor

GroupWorkflow Save
    Disable SubscribeSubject Prefix
    -> Disable Add(Operand=StringProperty(Value=_rotary.csv))
    -> Disable PropertyMapping(FileName) => #2
    Disable SubscribeSubject AbsolutePosition => #3
    Disable SubscribeSubject Cross => #4
    Disable SubscribeSubject WheelPos => #5
    Disable SubscribeSubject LickTime => #6
    #2, #3, #4, #5, #6 -> Disable CombineLatest
    -> Disable Bonsai.IO.CsvWriter(FileName=fdsg.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)
    -> Disable Bonsai.IO.CsvWriter
      FileName=TO675373_Day5_rotary.csv
      ListSeparator=","
      Append=false
      Overwrite=true
      Suffix=None
      IncludeHeader=true
      Selector="Item2.Value,Item2.Timestamp.Hour,Item2.Timestamp.Minute,Item2.Timestamp.Second,Item2.Timestamp.Millisecond"

GroupWorkflow "Keydown options"
    Bonsai.Windows.Input.KeyDown(Filter=D1, SuppressRepetitions=false)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve)
    -> MulticastSubject Commands

    Bonsai.Windows.Input.KeyDown(Filter=L, SuppressRepetitions=false)
    -> PublishSubject LickKeyPress

GroupWorkflow Init
    BehaviorSubject<Bonsai.Harp.HarpMessage> Commands
    -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3)
    -> PublishSubject "Behavior Events"

    BooleanProperty(Value=false)
    -> BehaviorSubject Cross

    IntProperty(Value=80)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke0Valve)
    -> MulticastSubject Commands

    DoubleProperty(Value=0)
    -> BehaviorSubject TurnPos

SubscribeSubject "Behavior Events"
-> Bonsai.Harp.CF.BehaviorEvent(Type=QuadratureCounter, Mask=Port2)
-> Bonsai.Dsp.Rescale(Min=-32767, Max=32767, RangeMin=0, RangeMax=13440, RescaleType=Clamp)
-> Bonsai.Dsp.Abs => #7
-> BehaviorSubject WheelPos => #8
#7 -> Take(Count=1) => #9
#8, #9 -> CombineLatest
-> Subtract
-> Bonsai.Dsp.Abs => #12
Disable Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=500, Upper=1000)
-> IntProperty(Value=1000)
-> Disable Bonsai.Numerics.Distributions.Sample
-> PropertyMapping(Value) => #16
#12, #16 -> GreaterThan(Operand=IntProperty(Value=1000))
-> Condition
    WorkflowInput Source1
    -> WorkflowOutput
-> Take(Count=1)
-> MulticastSubject Cross
-> Repeat
#7 -> Bonsai.Dsp.Difference(Order=1)
-> DelaySubscription(DueTime=PT0.5S)
-> Condition DetectTurnRestart
    WorkflowInput Source1
    -> LessThan(Operand=DoubleProperty(Value=-3))
    -> WorkflowOutput
-> DoubleProperty(Value=1)
-> First
-> Repeat
-> Accumulate
-> Multiply(Operand=DoubleProperty(Value=500))
-> MulticastSubject TurnPos

SubscribeSubject WheelPos => #31
SubscribeSubject TurnPos => #32
#31, #32 -> WithLatestFrom
-> Add
-> BehaviorSubject AbsolutePosition
-> Disable DelaySubscription(DueTime=PT0.075S)
-> Disable Bonsai.IO.CsvWriter(FileName=C:\Users\Utilizador\Desktop\alpha_27-07-2020\abspos.csv, Append=true, Overwrite=true, Suffix=None, IncludeHeader=false)

StringProperty(Value=663424_Test) => #38
IntProperty(Value=3)
-> Bonsai.Scripting.Expressions.ExpressionTransform => #40
  Expression: it.ToString()
#38, #40 -> Zip
-> Add
-> ReplaySubject Prefix(BufferSize=nil)

SubscribeSubject "Behavior Events"
-> Harp.Behavior.Parse(MessageType=Event, Register=Harp.Behavior.TimestampedPortDigitalInput) => #45
-> MemberSelector(Selector=Value)
-> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DI0))
-> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
-> DistinctUntilChanged
-> Condition => #50
    WorkflowInput Source1
    -> WorkflowOutput
#50, #45 -> WithLatestFrom
-> MemberSelector(Selector=Item2.Seconds)
-> PublishSubject LickTime

SubscribeSubject Cross
-> Condition
    WorkflowInput Source1
    -> WorkflowOutput
-> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve)
-> MulticastSubject Commands

SubscribeSubject "Behavior Events"
-> Bonsai.Harp.FilterMessage(MessageType=Event, Register=Bonsai.Harp.FilterMessageAddress(Address=44))
-> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=TimestampedS16, IsArray=true)) => #60
-> MemberSelector(Selector=Value) => #61
-> Index(Operand=IntProperty(Value=0))
-> Bonsai.Design.Visualizers.RollingGraphBuilder(ValueSelector=it, SymbolType=None, LineWidth=1, Capacity=1000, Min=nil, Max=nil)
-> Subtract(Operand=WorkflowProperty<System.Int16>(Value=850)) => #64
#61 -> Disable Index(Operand=IntProperty(Value=2))
-> Disable Bonsai.Design.Visualizers.RollingGraphBuilder(ValueSelector=it, SymbolType=None, LineWidth=1, Capacity=nil, Min=nil, Max=nil)
-> Disable Subtract(Operand=WorkflowProperty<System.Int16>(Value=1100)) => #67
#60 -> MemberSelector(Selector=Seconds) => #68
#64, #67, #68 -> Zip
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new(
    Item1 as ADC0,
    Item2 as ADC1,
    Item3 as Seconds)
-> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=Seconds, ValueSelector="ADC0,ADC1", SymbolType=None, LineWidth=1, Capacity=nil, Min=nil, Max=nil) => #71
SubscribeSubject Prefix
-> Add(Operand=StringProperty(Value=_breathing.csv))
-> PropertyMapping(FileName) => #74
#71, #74 -> Bonsai.IO.CsvWriter(FileName=663424_Test3_breathing.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)

GroupWorkflow "Visual Display"
    GroupWorkflow Ceiling
        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_ceiling, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=1
          TranslationZ=1
          RotationZ=180
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane
        -> WorkflowOutput

    GroupWorkflow Left
        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=0
          TranslationZ=1
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=0
          TranslationZ=4
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=0
          TranslationZ=7
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=0
          TranslationZ=10
          RotationZ=270
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=0
          TranslationZ=13
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=0
          TranslationZ=16
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=0
          TranslationZ=19
          RotationZ=270
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=0
          TranslationZ=22
          RotationZ=270
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=0
          TranslationZ=25
          RotationZ=270
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=0
          TranslationZ=28
          RotationZ=270
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=0
          TranslationZ=31
          RotationZ=270
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=0
          TranslationZ=34
          RotationZ=270
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=0
          TranslationZ=37
          RotationZ=270
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=0
          TranslationZ=40
          RotationZ=270
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=0
          TranslationZ=43
          RotationZ=270
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D => #45
        StringProperty(Value=random_walls_2) => #46
        -> PropertyMapping(TextureName) => #47
        #45, #47 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=0
          TranslationZ=46
          RotationZ=270
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane
        SubscribeSubject Draw3D => #50
        #46 -> PropertyMapping(TextureName) => #51
        #50, #51 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=0
          TranslationZ=49
          RotationZ=270
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

    GroupWorkflow Right
        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=0
          TranslationZ=1
          RotationZ=270
          RotationY=360
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=0
          TranslationZ=4
          RotationZ=90
          RotationY=360
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=0
          TranslationZ=7
          RotationZ=270
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D => #9
        ExternalizedMapping(TextureName) => #10
        #9, #10 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D) => #11
        ExternalizedMapping(TranslationZ) => #12
        #11, #12 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=0
          TranslationZ=10
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=0
          TranslationZ=13
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=0
          TranslationZ=16
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=0
          TranslationZ=19
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=0
          TranslationZ=22
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=0
          TranslationZ=25
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=0
          TranslationZ=28
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=0
          TranslationZ=31
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=0
          TranslationZ=34
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=0
          TranslationZ=37
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=0
          TranslationZ=40
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=0
          TranslationZ=43
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=0
          TranslationZ=46
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=0
          TranslationZ=49
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=0
          TranslationZ=52
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_walls_2, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=0
          TranslationZ=55
          RotationZ=90
          RotationY=180
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane

    GroupWorkflow Floor
        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=1
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=4
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=7
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=10
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=13
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=16
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=19
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=22
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=25
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=28
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=31
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=34
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=37
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=40
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=43
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=46
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=49
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=52
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=55
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

        SubscribeSubject Draw3D
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=random_floor, TextureTarget=Texture2D)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=58
          RotationZ=0
          RotationY=0
          RotationX=90
          ScaleX=2
          ScaleY=3
          ScaleZ=1
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=1
          MeshName=Plane

    SubscribeSubject WheelPos
    -> Bonsai.Dsp.Rescale(Min=0, Max=13440, RangeMin=-30, RangeMax=0, RescaleType=Clamp)
    -> Multiply(Operand=FloatProperty(Value=-0.5))
    -> InputMapping(Z(Selector=it))
    -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=8.547396)
    -> BehaviorSubject CurrentPosition

    Bonsai.Shaders.CreateWindow
      Width=3056
      Height=1080
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location(X=2944, Y=-450)
      WindowBorder=Hidden
      WindowState=Normal
      DisplayDevice=Primary
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=random_floor
          Width=600
          Height=1000
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=CorridorVR\Textures\random_floor.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=random_walls_2
          Width=800
          Height=1600
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=CorridorVR\Textures\random_walls_2.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=random_ceiling
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=CorridorVR\Textures\random_ceiling.jpg
          ColorType=Unchanged
          FlipMode=Vertical
    -> Bonsai.Shaders.MeshResources(Meshes="")
    -> Bonsai.Resources.LoadResources

    Bonsai.Shaders.RenderFrame => #15
    SubscribeSubject CurrentPosition
    -> PropertyMapping(Eye) => #17
    #15, #17 -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=8.547396), NearClip=0.5, FarClip=1000, Light(X=0, Y=0, Z=0))
    -> PublishSubject Draw3D
    -> Bonsai.Shaders.RenderCubemap
      RenderState=""
      ClearColor=Black
      ClearMask="DepthBufferBit ColorBufferBit"
      FaceSize=nil
      InternalFormat=Rgb
      MinFilter=Linear
      MagFilter=PixelTexGenQFloorSgix
    -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=1, Height=1, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=0.1))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=1)

    Disable Bonsai.Shaders.Input.MouseWheel
    -> Disable MemberSelector(Selector=EventArgs.DeltaPrecise)
    -> Disable Multiply(Operand=FloatProperty(Value=-0.05))
    -> Disable Accumulate
    -> Disable InputMapping(Z(Selector=it))
    -> Disable Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=14.9000292)
    -> Disable BehaviorSubject CurrentPosition
