WorkflowBuilder(Version=2.9.0)
WorkflowInput Source1
-> Visualizer
    SubscribeSubject ParsedFipStreams
    -> Condition HasIso
        WorkflowInput Source1
        -> MemberSelector(Selector=Key) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> HasFlag(Operand=WorkflowProperty<FipExtensions.FipCameraSource>(Value=Iso))
        -> WorkflowOutput
    -> Merge
    -> PublishSubject IsoActivity

    SubscribeSubject ParsedFipStreams
    -> Condition HasGreen
        WorkflowInput Source1
        -> MemberSelector(Selector=Key) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> HasFlag(Operand=WorkflowProperty<FipExtensions.FipCameraSource>(Value=Green))
        -> WorkflowOutput
    -> Merge
    -> PublishSubject GreenActivity

    SubscribeSubject ParsedFipStreams
    -> Condition HasRed
        WorkflowInput Source1
        -> MemberSelector(Selector=Key) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> HasFlag(Operand=WorkflowProperty<FipExtensions.FipCameraSource>(Value=Red))
        -> WorkflowOutput
    -> Merge
    -> PublishSubject RedActivity

    IntProperty(Value=0)
    -> Visualizer FipVisualizer
        SubscribeSubject IsoActivity
        -> MemberSelector(Selector=Value.FipFrame)
        -> MemberSelector(Selector=Image) => #2
        Timer(DueTime=PT0S, Period=PT0.1S)
        -> BooleanProperty(Value=true)
        -> PropertyMapping(Refresh) => #5
        SubscribeSubject IsoActivity
        -> MemberSelector(Selector=Value.Circles)
        -> PropertyMapping(Circles) => #8
        #2, #5, #8 -> SelectCircles
          label=IsoChannel
          Circles
            Circle(Center(X=10, Y=10), Radius=10)
            Circle(Center(X=50, Y=50), Radius=20)
            Circle(Center(X=50, Y=150), Radius=20)
            Circle(Center(X=149, Y=55), Radius=20)
            Circle(Center(X=150, Y=150), Radius=20)
          Refresh=false
        -> VisualizerMapping(VisualizerType=TypeMapping<SelectCirclesVisualizer>)
        -> Bonsai.Gui.TableLayoutPanelBuilder
          Enabled=false
          Visible=true
          ColumnCount=1
          RowCount=2
          ColumnStyles=""
          RowStyles(RowStyle(SizeType=Percent, Height=0.1), RowStyle(SizeType=Percent, Height=0.9))
          CellSpans=""
        -> VisualizerMapping => #12
        SubscribeSubject GreenActivity
        -> MemberSelector(Selector=Value.FipFrame)
        -> MemberSelector(Selector=Image) => #15
        Timer(DueTime=PT0S, Period=PT0.1S)
        -> BooleanProperty(Value=true)
        -> PropertyMapping(Refresh) => #18
        SubscribeSubject GreenActivity
        -> MemberSelector(Selector=Value.Circles)
        -> PropertyMapping(Circles) => #21
        #15, #18, #21 -> SelectCircles
          label=GreenChannel
          Circles
            Circle(Center(X=10, Y=10), Radius=10)
            Circle(Center(X=50, Y=50), Radius=20)
            Circle(Center(X=50, Y=150), Radius=20)
            Circle(Center(X=149, Y=55), Radius=20)
            Circle(Center(X=150, Y=150), Radius=20)
          Refresh=false
        -> VisualizerMapping(VisualizerType=TypeMapping<SelectCirclesVisualizer>)
        -> Bonsai.Gui.TableLayoutPanelBuilder
          Enabled=false
          Visible=true
          ColumnCount=1
          RowCount=2
          ColumnStyles=""
          RowStyles(RowStyle(SizeType=Percent, Height=0.1), RowStyle(SizeType=Percent, Height=0.9))
          CellSpans=""
        -> VisualizerMapping => #25
        SubscribeSubject RedActivity
        -> MemberSelector(Selector=Value.FipFrame)
        -> MemberSelector(Selector=Image) => #28
        Timer(DueTime=PT0S, Period=PT0.1S)
        -> BooleanProperty(Value=true)
        -> PropertyMapping(Refresh) => #31
        SubscribeSubject RedActivity
        -> MemberSelector(Selector=Value.Circles)
        -> PropertyMapping(Circles) => #34
        #28, #31, #34 -> SelectCircles
          label=RedChannel
          Circles
            Circle(Center(X=10, Y=10), Radius=10)
            Circle(Center(X=50, Y=50), Radius=20)
            Circle(Center(X=50, Y=150), Radius=20)
            Circle(Center(X=150, Y=50), Radius=20)
            Circle(Center(X=150, Y=150), Radius=20)
          Refresh=false
        -> VisualizerMapping(VisualizerType=TypeMapping<SelectCirclesVisualizer>)
        -> Bonsai.Gui.TableLayoutPanelBuilder
          Enabled=false
          Visible=true
          ColumnCount=1
          RowCount=2
          ColumnStyles=""
          RowStyles(RowStyle(SizeType=Percent, Height=0.1), RowStyle(SizeType=Percent, Height=0.9))
          CellSpans=""
        -> VisualizerMapping => #38
        IntProperty(Value=0)
        -> TimeSpanProperty(Value=PT0S)
        -> Take(Count=1) => #41
        Timer(DueTime=PT0S, Period=PT0.2S) => #42
        SubscribeSubject StartExperiment => #43
        #42, #43 -> SubscribeWhen
        -> Timestamp
        -> MemberSelector(Selector=Timestamp) => #46
        -> Take(Count=1) => #47
        #46, #47 -> CombineLatest
        -> Subtract => #49
        #41, #49 -> Merge
        -> Format(Format={0:T}, Selector=it)
        -> PropertyMapping(Text)
        -> Bonsai.Gui.ButtonBuilder Time(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 24pt", Text=00:00:00)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #54
        #12, #25, #38, #54 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=false, Visible=true, ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #56
        IntProperty(Value=0)
        -> Visualizer LauncherControl
            SubscribeSubject ExperimentState
            -> BitwiseNot
            -> PropertyMapping(Enabled)
            -> Bonsai.Gui.ButtonBuilder Start(Enabled=true, Visible=true, Text="Start Experiment")
            -> PublishSubject StartExperimentToggleButton
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #5
            Bonsai.Gui.ButtonBuilder End(Enabled=true, Visible=true, Text="End Experiment")
            -> PublishSubject EndExperimentButton
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #8
            #5, #8 -> Bonsai.Gui.TableLayoutPanelBuilder LauncherControl(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #10
            GroupWorkflow Annotation
                BehaviorSubject<System.String> _ResetText
                -> StringProperty
                -> PropertyMapping(Text)
                -> Bonsai.Gui.TextBoxBuilder(Enabled=true, Visible=true, Text="", Multiline=true)
                -> BehaviorSubject _TextBoxText
                -> VisualizerMapping => #5
                Bonsai.Gui.ButtonBuilder Send(Enabled=true, Visible=true, Text=Send)
                -> PublishSubject _SendButtonEvent
                -> VisualizerMapping => #8
                #5, #8 -> Bonsai.Gui.TableLayoutPanelBuilder
                  Enabled=true
                  Visible=true
                  ColumnCount=1
                  RowCount=2
                  ColumnStyles=""
                  RowStyles(RowStyle(SizeType=Percent, Height=0.8), RowStyle(SizeType=Percent, Height=0.2))
                  CellSpans=""
                -> WorkflowOutput

                SubscribeSubject _SendButtonEvent => #11
                SubscribeSubject _TextBoxText => #12
                #11, #12 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Condition
                    WorkflowInput Source1
                    -> NotEqual(Operand=StringProperty(Value=""))
                    -> WorkflowOutput
                -> MulticastSubject _ResetText
                -> MulticastSubject Annotations
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #12
            #10, #12 -> Bonsai.Gui.TableLayoutPanelBuilder LauncherControl
              Enabled=true
              Visible=true
              ColumnCount=1
              RowCount=2
              ColumnStyles=""
              RowStyles(RowStyle(SizeType=Percent, Height=0.15), RowStyle(SizeType=Percent, Height=0.85))
              CellSpans=""
            -> WorkflowOutput

            SubscribeSubject StartExperimentToggleButton
            -> Take(Count=1)
            -> Unit
            -> MulticastSubject StartExperimentShortcut

            SubscribeSubject EndExperimentButton
            -> Take(Count=1)
            -> Unit
            -> MulticastSubject EndExperiment => #22
            SubscribeSubject StartExperiment => #23
            #22, #23 -> SubscribeWhen
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #59
        #56, #59 -> Bonsai.Gui.TableLayoutPanelBuilder FipVisualizer
          Enabled=true
          Visible=true
          ColumnCount=2
          RowCount=1
          ColumnStyles(ColumnStyle(SizeType=Percent, Width=0.66), ColumnStyle(SizeType=Percent, Width=0.33))
          RowStyles=""
          CellSpans=""
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #14
    IntProperty(Value=0)
    -> Visualizer RoiManager
        IntProperty(Value=0)
        -> Visualizer Save/LoadRois
            Bonsai.Gui.ButtonBuilder SaveRoi(Enabled=true, Visible=true, Text=SaveRoi)
            -> Sink SaveRoi
                WorkflowInput Source1
                -> SelectMany SaveRois
                    SubscribeSubject CurrentCombinedRoi
                    -> AindPhysiologyFip.SerializeToJson(Formatting=None) => #1
                    SubscribeSubject LocalRoiDefaultPath
                    -> PropertyMapping(Path) => #3
                    #1, #3 -> Bonsai.IO.WriteAllText(Path=../local/default.json, Overwrite=true, Append=false)
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> WorkflowOutput
            -> VisualizerMapping => #2
            Bonsai.Gui.ButtonBuilder LoadRoi(Enabled=true, Visible=true, Text=LoadRoi)
            -> Sink LoadRoi
                WorkflowInput Source1
                -> SelectMany LoadRois
                    SubscribeSubject LocalRoiDefaultPath
                    -> PropertyMapping(Path)
                    -> Bonsai.IO.ReadAllText(Path=../local/default.json)
                    -> AindPhysiologyFip.DeserializeFromJson(Type=TypeMapping<AindPhysiologyFip.RoiSettings>)
                    -> FipExtensions.RoiCircleConverter => #4
                    -> MemberSelector(Selector=GreenIso)
                    -> MulticastSubject CurrentGreenIsoRoi => #6
                    #4 -> MemberSelector(Selector=Red)
                    -> MulticastSubject CurrentRedRoi => #8
                    #6, #8 -> Zip
                    -> IntProperty(Value=0)
                    -> Take(Count=1) => #11
                    IntProperty(Value=0)
                    -> Take(Count=1)
                    -> AllenNeuralDynamics.Core.Design.MessageBox(Text="Could not load local ROI settings.", Title=Error, MessageBoxIcon=Exclamation) => #14
                    #11, #14 -> Catch
                    -> WorkflowOutput
                -> WorkflowOutput
            -> VisualizerMapping => #5
            Bonsai.Gui.ButtonBuilder DefaultRoi(Enabled=true, Visible=true, Text=DefaultRoi)
            -> Sink DefaultRoi
                WorkflowInput Source1
                -> SelectMany LoadRois
                    FipExtensions.LoadRoiDefault(Path=../local/default.json)
                    -> FipExtensions.RoiCircleConverter => #1
                    -> MemberSelector(Selector=GreenIso)
                    -> MulticastSubject CurrentGreenIsoRoi => #3
                    #1 -> MemberSelector(Selector=Red)
                    -> MulticastSubject CurrentRedRoi => #5
                    #3, #5 -> Zip
                    -> IntProperty(Value=0)
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> WorkflowOutput
            -> VisualizerMapping => #8
            #2, #5, #8 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #2
        IntProperty(Value=0)
        -> Visualizer RoiManager
            SubscribeSubject RigSchema
            -> Take(Count=1)
            -> MemberSelector(Selector=RoiSettings) => #2
            SubscribeSubject LocalRoiDefaultPath
            -> PropertyMapping(Path) => #4
            #2, #4 -> FipExtensions.LoadRoiDefault(Path=../local/default.json)
            -> FipExtensions.RoiCircleConverter => #6
            -> MemberSelector(Selector=GreenIso)
            -> MulticastSubject CurrentGreenIsoRoi => #8
            #6 -> MemberSelector(Selector=Red)
            -> MulticastSubject CurrentRedRoi => #10
            #8, #10 -> Zip

            SubscribeSubject GreenActivity
            -> MemberSelector(Selector=Value.FipFrame.Image) => #13
            SubscribeSubject CurrentGreenIsoRoi
            -> FipExtensions.CircleArrayDistinctUntilChanged => #15
            -> BooleanProperty(Value=true) => #16
            #15, #16 -> Zip
            -> PropertyMapping(Circles(Selector=Item1), Refresh(Selector=Item2)) => #18
            #13, #18 -> SelectCircles
              label=GreenCamera
              Circles
                Circle(Center(X=10, Y=10), Radius=10)
                Circle(Center(X=50, Y=50), Radius=20)
                Circle(Center(X=50, Y=150), Radius=20)
                Circle(Center(X=150, Y=50), Radius=20)
                Circle(Center(X=150, Y=150), Radius=20)
              Refresh=false
            -> Sink
                WorkflowInput Source1
                -> FipExtensions.CircleArrayDistinctUntilChanged
                -> MulticastSubject CurrentGreenIsoRoi
                -> WorkflowOutput
            -> VisualizerMapping
            -> Bonsai.Gui.TableLayoutPanelBuilder
              Enabled=true
              Visible=true
              ColumnCount=1
              RowCount=2
              ColumnStyles=""
              RowStyles(RowStyle(SizeType=Percent, Height=0.1), RowStyle(SizeType=Percent, Height=0.9))
              CellSpans=""
            -> VisualizerMapping => #23
            SubscribeSubject RedActivity
            -> MemberSelector(Selector=Value.FipFrame.Image) => #25
            SubscribeSubject CurrentRedRoi
            -> FipExtensions.CircleArrayDistinctUntilChanged => #27
            -> BooleanProperty(Value=true) => #28
            #27, #28 -> Zip
            -> PropertyMapping(Circles(Selector=Item1), Refresh(Selector=Item2)) => #30
            #25, #30 -> SelectCircles
              label=RedCamera
              Circles
                Circle(Center(X=10, Y=10), Radius=10)
                Circle(Center(X=50, Y=50), Radius=20)
                Circle(Center(X=50, Y=150), Radius=20)
                Circle(Center(X=150, Y=50), Radius=20)
                Circle(Center(X=150, Y=150), Radius=20)
              Refresh=false
            -> Sink
                WorkflowInput Source1
                -> FipExtensions.CircleArrayDistinctUntilChanged
                -> MulticastSubject CurrentRedRoi
                -> WorkflowOutput
            -> VisualizerMapping
            -> Bonsai.Gui.TableLayoutPanelBuilder
              Enabled=true
              Visible=true
              ColumnCount=1
              RowCount=2
              ColumnStyles=""
              RowStyles(RowStyle(SizeType=Percent, Height=0.1), RowStyle(SizeType=Percent, Height=0.9))
              CellSpans=""
            -> VisualizerMapping => #35
            #23, #35 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
            -> WorkflowOutput

            SubscribeSubject CurrentGreenIsoRoi => #38
            SubscribeSubject CurrentRedRoi => #39
            #38, #39 -> CombineLatest
            -> FipExtensions.RoiCircleConverter
            -> MulticastSubject CurrentCombinedRoi
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #5
        SubscribeSubject ExperimentState
        -> BitwiseNot
        -> PropertyMapping(Enabled) => #8
        #2, #5, #8 -> Bonsai.Gui.TableLayoutPanelBuilder RoiManager
          Enabled=true
          Visible=true
          ColumnCount=1
          RowCount=2
          ColumnStyles=""
          RowStyles(RowStyle(SizeType=Percent, Height=0.05), RowStyle(SizeType=Percent, Height=0.95))
          CellSpans=""
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #17
    IntProperty(Value=0)
    -> Visualizer LaserCalibration
        SubscribeSubject SelectedCamera => #0
        SubscribeSubject Power => #1
        #0, #1 -> CombineLatest
        -> BehaviorSubject CurrentSettings

        ExternalizedMapping(Value(DisplayName=Power, Category=LightSource))
        -> FloatProperty(Value=0.1904762)
        -> BehaviorSubject Power

        PropertySource<ModifyFipCameraSource,FipExtensions.FipCameraSource>(MemberName=Source, Value=Iso) => #7
        PropertySource<ModifyFipCameraSource,FipExtensions.FipCameraSource>(MemberName=Source, Value=Green) => #8
        PropertySource<ModifyFipCameraSource,FipExtensions.FipCameraSource>(MemberName=Source, Value=Red) => #9
        #7, #8, #9 -> Merge
        -> Take(Count=3)
        -> ToList
        -> Bonsai.Gui.ComboBoxDataSourceBuilder(Enabled=true, Visible=true, DisplayMember="")
        -> BehaviorSubject SelectedCamera
        -> VisualizerMapping
        -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text=Channel:)
        -> VisualizerMapping => #17
        Bonsai.Gui.PropertyGridBuilder(Enabled=true, Visible=true, HelpVisible=false, ToolbarVisible=false, AutoRefresh=false)
        -> VisualizerMapping => #19
        #17, #19 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #21
        Bonsai.Gui.ButtonBuilder SetPower(Enabled=true, Visible=true, Text=SetPower)
        -> Sink SetPower
            WorkflowInput Source1 => #0
            SubscribeSubject CurrentSettings => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject TriggerContinuousLaserTask
            -> Delay(DueTime=PT0.2S)
            -> PropertySource<AllenNeuralDynamics.CuttlefishFip.CreateSetTaskStatePayload,AllenNeuralDynamics.CuttlefishFip.TaskState>(MemberName=SetTaskState, Value=Start)
            -> MulticastSubject SetTaskState
            -> WorkflowOutput
        -> VisualizerMapping => #24
        Bonsai.Gui.ButtonBuilder StartFipMode(Enabled=true, Visible=true, Text=StartFipMode)
        -> Sink StartFipMode
            WorkflowInput Source1
            -> Unit
            -> MulticastSubject TriggerConfigureFipTasks
            -> Delay(DueTime=PT0.2S)
            -> PropertySource<AllenNeuralDynamics.CuttlefishFip.CreateSetTaskStatePayload,AllenNeuralDynamics.CuttlefishFip.TaskState>(MemberName=SetTaskState, Value=Start)
            -> MulticastSubject SetTaskState
            -> WorkflowOutput
        -> VisualizerMapping => #27
        Bonsai.Gui.ButtonBuilder Off(Enabled=true, Visible=true, Text=Off)
        -> Sink TurnOff
            WorkflowInput Source1
            -> Unit
            -> MulticastSubject ClearTasks
            -> WorkflowOutput
        -> VisualizerMapping => #30
        #24, #27, #30 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #32
        SubscribeSubject ExperimentState
        -> BitwiseNot
        -> PropertyMapping(Enabled) => #35
        #21, #32, #35 -> Bonsai.Gui.TableLayoutPanelBuilder LightSourceCalibration(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 21.75pt", ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #20
    #14, #17, #20 -> Bonsai.Gui.TabControlBuilder(Enabled=true, Visible=true)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TabControlVisualizer>) => #22
    IntProperty(Value=0)
    -> Visualizer ActivityTraces
        SubscribeSubject RedActivity
        -> MemberSelector(Selector=Value.Count) => #1
        SubscribeSubject GreenActivity
        -> MemberSelector(Selector=Value.Count) => #3
        #1, #3 -> CombineLatest
        -> Bonsai.Numerics.Min
        -> DistinctUntilChanged
        -> BehaviorSubject ChannelNumbers

        SubscribeSubject ChannelNumbers
        -> SelectMany CreateLabels
            IntProperty(Value=0) => #0
            StringProperty(Value=Background) => #1
            #0, #1 -> Zip
            -> Take(Count=1) => #3
            SubscribeSubject ChannelNumbers
            -> Subtract(Operand=IntProperty(Value=1))
            -> PropertyMapping(Count)
            -> Range(Start=0, Count=4) => #7
            -> Format(Format=Channel{0}, Selector=it) => #8
            #7, #8 -> Zip => #9
            #3, #9 -> Merge
            -> ToList
            -> WorkflowOutput
        -> Bonsai.Gui.ComboBoxDataSourceBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 12pt", DisplayMember=Item2) => #10
        -> MemberSelector(Selector=Item1)
        -> BehaviorSubject SelectedChannel
        #10 -> VisualizerMapping => #13
        SubscribeSubject IsoActivity => #14
        SubscribeSubject SelectedChannel
        -> PropertyMapping(SelectedChannel) => #16
        #14, #16 -> FipSignalVisualizerSource(Capacity=10, Color(Val0=255, Val1=0, Val2=0, Val3=255), Title=Isosbestic)
        -> VisualizerMapping(VisualizerType=TypeMapping<FipSignalVisualizer>) => #18
        SubscribeSubject GreenActivity => #19
        SubscribeSubject SelectedChannel
        -> PropertyMapping(SelectedChannel) => #21
        #19, #21 -> FipSignalVisualizerSource(Capacity=10, Color(Val0=0, Val1=255, Val2=0, Val3=255), Title=Green)
        -> VisualizerMapping(VisualizerType=TypeMapping<FipSignalVisualizer>) => #23
        SubscribeSubject RedActivity => #24
        SubscribeSubject SelectedChannel
        -> PropertyMapping(SelectedChannel) => #26
        #24, #26 -> FipSignalVisualizerSource(Capacity=10, Color(Val0=0, Val1=0, Val2=255, Val3=255), Title=Red)
        -> VisualizerMapping(VisualizerType=TypeMapping<FipSignalVisualizer>) => #28
        #13, #18, #23, #28 -> Bonsai.Gui.TableLayoutPanelBuilder Activity
          Enabled=true
          Visible=true
          ColumnCount=1
          RowCount=4
          ColumnStyles=""
          RowStyles
            RowStyle(SizeType=Percent, Height=0.1)
            RowStyle(SizeType=Percent, Height=0.3)
            RowStyle(SizeType=Percent, Height=0.3)
            RowStyle(SizeType=Percent, Height=0.3)
          CellSpans=""
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #25
    #22, #25 -> Bonsai.Gui.TableLayoutPanelBuilder FipGUI(Enabled=true, Visible=true, Font="Consolas, 12pt", ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput
-> WorkflowOutput
