WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(RigPath, SessionPath)
-> IncludeWorkflow(Path=Extensions\ReadSchemas.bonsai, RigPath=../local/AindPhysioFipRig.json, SessionPath=../local/AindBehaviorSessionModel.json)

GroupWorkflow DeserializeSchemas
    SubscribeSubject RawSessionSchema
    -> AindPhysiologyFip.DeserializeFromJson(Type=TypeMapping<AindPhysiologyFip.AindBehaviorSessionModel>)
    -> AsyncSubject SessionSchema

    SubscribeSubject RawRigSchema
    -> AindPhysiologyFip.DeserializeFromJson(Type=TypeMapping<AindPhysiologyFip.AindPhysioFipRig>)
    -> AsyncSubject RigSchema

GroupWorkflow Init
    BehaviorSubject<System.Reactive.Unit> StartExperimentShortcut
    BehaviorSubject<System.Reactive.Unit> EndExperiment
    BehaviorSubject<System.String> Annotations
    BehaviorSubject<System.Reactive.Unit> StartExperiment
    BehaviorSubject<Bonsai.Vision.Circle[]> CurrentRedRoi
    BehaviorSubject<Bonsai.Vision.Circle[]> CurrentGreenIsoRoi
    BehaviorSubject<AindPhysiologyFip.RoiSettings> CurrentCombinedRoi
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> SoftwareEvent
    BehaviorSubject<System.Reactive.Unit> StartLogging

    AllenNeuralDynamics.VersionControl.CreateRepository(Path=../.)
    -> AsyncSubject Repository

    SubscribeSubject SessionSchema
    -> PropertyMapping(RootFolder(Selector=RootPath), SessionName(Selector=SessionName))
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateRootLoggingPathFromSession.bonsai, RootFolder="", SessionName=nil, SubjectName=LoggingRootPath)

    BooleanProperty(Value=false)
    -> Take(Count=1) => #15
    SubscribeSubject StartExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=true) => #18
    SubscribeSubject EndExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=false) => #21
    #15, #18, #21 -> Merge
    -> BehaviorSubject ExperimentState

    StringProperty(Value=../local/default.json)
    -> Take(Count=1)
    -> AsyncSubject LocalRoiDefaultPath

    BehaviorSubject<System.Reactive.Unit> ClearTasks

    SubscribeSubject StartExperiment
    -> Unit
    -> PublishSubject TriggerHarpReadDump

GroupWorkflow Hardware
    GroupWorkflow Cameras
        BehaviorSubject<System.Boolean> _TriggeredCamerasInitialized
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=2)
        -> Last
        -> BehaviorSubject CamerasReady

        BooleanProperty(Value=true)
        -> MulticastSubject _TriggeredCamerasInitialized
        -> Take(Count=1) => #7
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=CameraGreenIso)
        -> PropertyMapping(Gain(Selector=Gain), Offset(Selector="Offset.X,Offset.Y"), SerialNumber(Selector=SerialNumber)) => #10
        #7, #10 -> FipExtensions.FipSpinnakerCapture(Index=nil, ColorProcessing=Default, Gain=0, Offset(X=0, Y=0))
        -> FipExtensions.ToFipFrame(CameraSource=GreenIso) => #12
        SubscribeSubject CuttlefishFipEvents
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
        -> AllenNeuralDynamics.CuttlefishFip.Parse(Register=AllenNeuralDynamics.CuttlefishFip.TimestampedTaskRisingEdgeEvent) => #15
        -> GroupWorkflow HasUv&BlueFlags
            WorkflowInput Source1
            -> MemberSelector(Selector=Value) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=LightSourceUv)
            -> MemberSelector(Selector=Task.CameraPort)
            -> PropertyMapping(Value) => #5
            #1, #5 -> HasFlag(Operand=WorkflowProperty<AllenNeuralDynamics.CuttlefishFip.Ports>(Value=None)) => #6
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=LightSourceBlue)
            -> MemberSelector(Selector=Task.CameraPort)
            -> PropertyMapping(Value) => #10
            #10, #1 -> HasFlag(Operand=WorkflowProperty<AllenNeuralDynamics.CuttlefishFip.Ports>(Value=None)) => #11
            #6, #11 -> Zip
            -> BitwiseOr
            -> WorkflowOutput
        -> Condition => #17
            WorkflowInput Source1
            -> WorkflowOutput
        #17, #15 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #19
        #12, #19 -> Zip
        -> PublishSubject GreenIsoCamera => #21
        BooleanProperty(Value=true)
        -> MulticastSubject _TriggeredCamerasInitialized
        -> Take(Count=1) => #24
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=CameraRed)
        -> PropertyMapping(Gain(Selector=Gain), Offset(Selector="Offset.X,Offset.Y"), SerialNumber(Selector=SerialNumber)) => #27
        #24, #27 -> FipExtensions.FipSpinnakerCapture(Index=nil, ColorProcessing=Default, Gain=0, Offset(X=0, Y=0))
        -> FipExtensions.ToFipFrame(CameraSource=Red)
        -> FlipInPlace(FlipMode=Horizontal) => #30
        SubscribeSubject CuttlefishFipEvents
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
        -> AllenNeuralDynamics.CuttlefishFip.Parse(Register=AllenNeuralDynamics.CuttlefishFip.TimestampedTaskRisingEdgeEvent) => #33
        -> GroupWorkflow HasLimeFlags
            WorkflowInput Source1
            -> MemberSelector(Selector=Value) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=LightSourceLime)
            -> MemberSelector(Selector=Task.CameraPort)
            -> PropertyMapping(Value) => #5
            #1, #5 -> HasFlag(Operand=WorkflowProperty<AllenNeuralDynamics.CuttlefishFip.Ports>(Value=None))
            -> WorkflowOutput
        -> Condition => #35
            WorkflowInput Source1
            -> WorkflowOutput
        #35, #33 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #37
        #30, #37 -> Zip
        -> PublishSubject RedCamera => #39
        #21, #39 -> Merge
        -> GroupBy(KeySelector=Item1.Source)
        -> ReplaySubject CameraStreams(BufferSize=nil)

    GroupWorkflow Harp
        GroupWorkflow CuttlefishFip
            BehaviorSubject<Bonsai.Harp.HarpMessage> CuttlefishFipCommands => #0
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=CuttlefishFip.PortName)
            -> PropertyMapping(PortName) => #3
            #0, #3 -> AllenNeuralDynamics.CuttlefishFip.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=Off, Heartbeat=Enabled, IgnoreErrors=false, PortName=COMx)
            -> PublishSubject CuttlefishFipEvents

            SubscribeSubject TriggerHarpReadDump
            -> Bonsai.Harp.CreateMessage
              MessageType=Write
              Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=Off, OperationLed=On, Heartbeat=Enabled)
            -> MulticastSubject CuttlefishFipCommands

            SubscribeSubject CuttlefishFipEvents
            -> Take(Count=1)
            -> Unit
            -> MulticastSubject ClearTasks

        SubscribeSubject CuttlefishFipEvents
        -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
        -> BehaviorSubject HarpTimestampSource

    GroupWorkflow ZeroMQ
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Networking.ZmqSubscriber)
        -> PropertyMapping(ConnectionString(Selector=ConnectionString), Topic(Selector=Topic))
        -> Bonsai.ZeroMQ.Subscriber(ConnectionString=tcp://localhost:5557)
        -> PublishSubject SocketResponse

        BehaviorSubject<NetMQ.NetMQMessage> SocketRequest => #5
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Networking.ZmqPublisher)
        -> PropertyMapping(ConnectionString(Selector=ConnectionString), Topic(Selector=Topic)) => #8
        #5, #8 -> Bonsai.ZeroMQ.Publisher(ConnectionString=tcp://localhost:5557)

    GroupWorkflow Calibration
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=LightSourceBlue)
        -> CreateTaskFromLightSource => #2
        -> PropertySource<FipExtensions.ToFipFrame,FipExtensions.FipCameraSource>(MemberName=CameraSource, Value=Green) => #3
        #2, #3 -> Zip => #4
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=LightSourceUv)
        -> CreateTaskFromLightSource => #7
        -> PropertySource<FipExtensions.ToFipFrame,FipExtensions.FipCameraSource>(MemberName=CameraSource, Value=Iso) => #8
        #7, #8 -> Zip => #9
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=LightSourceLime)
        -> CreateTaskFromLightSource => #12
        -> PropertySource<FipExtensions.ToFipFrame,FipExtensions.FipCameraSource>(MemberName=CameraSource, Value=Red) => #13
        #12, #13 -> Zip => #14
        #4, #9, #14 -> Merge
        -> ToDictionary(KeySelector=Item2, ElementSelector=Item1)
        -> Take(Count=1)
        -> AsyncSubject CalibratedLasers
        -> WorkflowOutput

IntProperty(Value=0)
-> IncludeWorkflow(Path=Extensions\Visualization.bonsai)
-> Bonsai.Design.VisualizerWindow(Text=FipVisualizer, Visible=true, Location=nil, Size(Width=1600, Height=800), WindowState=Normal)

GroupWorkflow OperationLogic
    SubscribeSubject CamerasReady => #0
    SubscribeSubject StartExperimentShortcut => #1
    #0, #1 -> Zip
    -> Take(Count=1)
    -> Unit
    -> MulticastSubject TriggerConfigureFipTasks
    -> Delay(DueTime=PT0.05S)
    -> MulticastSubject StartLogging
    -> Delay(DueTime=PT1S)
    -> MulticastSubject StartExperiment

    SubscribeSubject StartExperiment
    -> PropertySource<AllenNeuralDynamics.CuttlefishFip.CreateSetTaskStatePayload,AllenNeuralDynamics.CuttlefishFip.TaskState>(MemberName=SetTaskState, Value=Start)
    -> MulticastSubject SetTaskState

    GroupWorkflow TriggeringLogic
        BehaviorSubject<System.Reactive.Unit> TriggerConfigureFipTasks
        -> CreateObservable CreateFipModeTasks => #1
            WorkflowInput Source1
            -> Sink ClearTasks
                WorkflowInput Source1
                -> Unit
                -> MulticastSubject ClearTasks
                -> WorkflowOutput
            -> Delay(DueTime=PT0.05S)
            -> SelectMany MakeTaskConfiguration
                SubscribeSubject CalibratedLasers
                -> Merge
                -> CreateObservable
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject thisCalibration

                    SubscribeSubject thisCalibration
                    -> MemberSelector(Selector=Value)
                    -> InputMapping
                      PwmPort(Selector=LightSource.Task.LightSourcePort)
                      DutyCycle(Selector=CalibratedDutyCycle)
                      Frequency(Selector=LightSource.Task.PwmFrequency)
                      TriggerPorts(Selector=LightSource.Task.CameraPort)
                      EventsEnabled(Selector=LightSource.Task.EventsEnabled)
                      IsMuted(Selector=LightSource.Task.MuteOutput)
                      Delta1(Selector=LightSource.Task.Delta1)
                      Delta2(Selector=LightSource.Task.Delta2)
                      Delta3(Selector=LightSource.Task.Delta3)
                      Delta4(Selector=LightSource.Task.Delta4)
                    -> AllenNeuralDynamics.CuttlefishFip.ConfigureTask
                      MessageType=Write
                      PwmPort=IO0
                      DutyCycle=0.1
                      Frequency=10000
                      TriggerPorts=IO1
                      EventsEnabled=true
                      IsMuted=false
                      Delta1=0
                      Delta2=0
                      Delta3=0
                      Delta4=0
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> Merge => #3
                Timer(DueTime=PT0S, Period=PT0.03S) => #4
                #3, #4 -> Zip
                -> MemberSelector(Selector=Item1)
                -> WorkflowOutput
            -> WorkflowOutput
        BehaviorSubject<System.Tuple(FipExtensions.FipCameraSource,System.Single)> TriggerContinuousLaserTask
        -> CreateObservable CreateCalibrationModeTask => #3
            WorkflowInput Source1
            -> Sink ClearTasks
                WorkflowInput Source1
                -> Unit
                -> MulticastSubject ClearTasks
                -> WorkflowOutput
            -> Delay(DueTime=PT0.05S)
            -> SelectMany MakeContinuousLaserTask
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject laser

                SubscribeSubject CalibratedLasers => #3
                SubscribeSubject laser
                -> MemberSelector(Selector=Item1)
                -> PropertyMapping(Value) => #6
                #3, #6 -> Index(Operand=WorkflowProperty<FipExtensions.FipCameraSource>(Value=None))
                -> CreateObservable CreateContinuousTask
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject thisCalibration

                    SubscribeSubject thisCalibration => #3
                    SubscribeSubject thisCalibration
                    -> MemberSelector(Selector=LightSource.Task.LightSourcePort)
                    -> PropertyMapping(PwmPort) => #6
                    SubscribeSubject laser
                    -> MemberSelector(Selector=Item2)
                    -> PropertyMapping(DutyCycle) => #9
                    #3, #6, #9 -> AllenNeuralDynamics.CuttlefishFip.ConfigureTask
                      MessageType=Write
                      PwmPort=None
                      DutyCycle=0.1
                      Frequency=10000
                      TriggerPorts=None
                      EventsEnabled=false
                      IsMuted=false
                      Delta1=10000
                      Delta2=0
                      Delta3=0
                      Delta4=0
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> Merge
                -> WorkflowOutput
            -> WorkflowOutput
        #1, #3 -> Merge
        -> Switch
        -> MulticastSubject CuttlefishFipCommands

        SubscribeSubject ClearTasks
        -> CreateObservable ClearTasks
            AllenNeuralDynamics.CuttlefishFip.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.CuttlefishFip.CreateSetTaskStatePayload(SetTaskState=Stop))
            -> MulticastSubject CuttlefishFipCommands
            -> Delay(DueTime=PT0.03S)
            -> AllenNeuralDynamics.CuttlefishFip.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.CuttlefishFip.CreateClearAllTasksPayload(ClearAllTasks=Enabled))
            -> MulticastSubject CuttlefishFipCommands
            -> Take(Count=1)
            -> WorkflowOutput
        -> Switch

        BehaviorSubject<AllenNeuralDynamics.CuttlefishFip.TaskState> SetTaskState
        -> AllenNeuralDynamics.CuttlefishFip.Format(MessageType=Write, Register=AllenNeuralDynamics.CuttlefishFip.SetTaskState)
        -> MulticastSubject CuttlefishFipCommands

    GroupWorkflow ZeroMQ
        SubscribeSubject HarpTimestampSource => #0
        SubscribeSubject ExperimentState => #1
        #0, #1 -> WithLatestFrom
        -> Format(Format="{{state: {1}, timestamp: {0}}}", Selector="Item1,Item2")
        -> Bonsai.ZeroMQ.ToMessage
        -> MulticastSubject SocketRequest

        SubscribeSubject SocketResponse
        -> MemberSelector(Selector=Last)
        -> Bonsai.ZeroMQ.ConvertToString
        -> Equal(Operand=StringProperty(Value=Start))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Unit
        -> MulticastSubject StartExperimentShortcut => #12
        SubscribeSubject HarpTimestampSource => #13
        #12, #13 -> WithLatestFrom
        -> Format(Format="{{start: 1, timestamp: {0}}}", Selector="Item1,Item2")
        -> Bonsai.ZeroMQ.ToMessage
        -> MulticastSubject SocketRequest

        SubscribeSubject SocketResponse
        -> MemberSelector(Selector=Last)
        -> Bonsai.ZeroMQ.ConvertToString
        -> Equal(Operand=StringProperty(Value=End))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Unit
        -> MulticastSubject EndExperiment => #24
        SubscribeSubject HarpTimestampSource => #25
        #24, #25 -> WithLatestFrom
        -> Format(Format="{{end: 1, timestamp: {0}}}", Selector="Item1,Item2")
        -> Bonsai.ZeroMQ.ToMessage
        -> MulticastSubject SocketRequest

Defer Processing
    SubscribeSubject GreenIsoCamera
    -> Condition IsoChannel
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2.Value) => #1
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=LightSourceUv)
        -> MemberSelector(Selector=Task.CameraPort)
        -> PropertyMapping(Value) => #5
        #1, #5 -> HasFlag(Operand=WorkflowProperty<AllenNeuralDynamics.CuttlefishFip.Ports>(Value=None)) => #6
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=LightSourceUv)
        -> MemberSelector(Selector=Task.LightSourcePort)
        -> PropertyMapping(Value) => #10
        #10, #1 -> HasFlag(Operand=WorkflowProperty<AllenNeuralDynamics.CuttlefishFip.Ports>(Value=None)) => #11
        #6, #11 -> Zip
        -> BitwiseAnd
        -> WorkflowOutput
    -> MemberSelector(Selector="Item1,Item2.Seconds")
    -> Bonsai.Harp.CreateTimestamped
    -> ModifyFipCameraSource(Source=Iso) => #4
    SubscribeSubject CurrentGreenIsoRoi
    -> PropertyMapping(Circles) => #6
    #4, #6 -> FipExtensions.CircleActivityCalculator(Operation=Avg) => #7
    SubscribeSubject GreenIsoCamera
    -> Condition GreenChannel
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2.Value) => #1
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=LightSourceBlue)
        -> MemberSelector(Selector=Task.CameraPort)
        -> PropertyMapping(Value) => #5
        #1, #5 -> HasFlag(Operand=WorkflowProperty<AllenNeuralDynamics.CuttlefishFip.Ports>(Value=None)) => #6
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=LightSourceBlue)
        -> MemberSelector(Selector=Task.LightSourcePort)
        -> PropertyMapping(Value) => #10
        #10, #1 -> HasFlag(Operand=WorkflowProperty<AllenNeuralDynamics.CuttlefishFip.Ports>(Value=None)) => #11
        #6, #11 -> Zip
        -> BitwiseAnd
        -> WorkflowOutput
    -> MemberSelector(Selector="Item1,Item2.Seconds")
    -> Bonsai.Harp.CreateTimestamped
    -> ModifyFipCameraSource(Source=Green) => #12
    SubscribeSubject CurrentGreenIsoRoi
    -> PropertyMapping(Circles) => #14
    #12, #14 -> FipExtensions.CircleActivityCalculator(Operation=Avg) => #15
    SubscribeSubject RedCamera
    -> Condition RedChannel
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2.Value) => #1
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=LightSourceLime)
        -> MemberSelector(Selector=Task.CameraPort)
        -> PropertyMapping(Value) => #5
        #1, #5 -> HasFlag(Operand=WorkflowProperty<AllenNeuralDynamics.CuttlefishFip.Ports>(Value=None)) => #6
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=LightSourceLime)
        -> MemberSelector(Selector=Task.LightSourcePort)
        -> PropertyMapping(Value) => #10
        #10, #1 -> HasFlag(Operand=WorkflowProperty<AllenNeuralDynamics.CuttlefishFip.Ports>(Value=None)) => #11
        #6, #11 -> Zip
        -> BitwiseAnd
        -> WorkflowOutput
    -> MemberSelector(Selector="Item1,Item2.Seconds")
    -> Bonsai.Harp.CreateTimestamped
    -> ModifyFipCameraSource(Source=Red) => #20
    SubscribeSubject CurrentRedRoi
    -> PropertyMapping(Circles) => #22
    #20, #22 -> FipExtensions.CircleActivityCalculator(Operation=Avg) => #23
    #7, #15, #23 -> Merge
    -> GroupBy(KeySelector=Value.FipFrame.Source, ElementSelector="")
    -> WorkflowOutput
-> ReplaySubject ParsedFipStreams(BufferSize=nil)

Defer QA
    GroupWorkflow ProtocolValidation => #0
        SubscribeSubject Repository
        -> AllenNeuralDynamics.VersionControl.IsRepositoryClean(IgnoreUntracked=false)
        -> BitwiseNot => #2
        SubscribeSubject SessionSchema
        -> MemberSelector(Selector=AllowDirtyRepo) => #4
        #2, #4 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform AllowDirty?
          Expression: Item2 ? False : Item1
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.ThrowException(Message="Repository is not clean! Please discard all local changes.")

        GroupWorkflow CameraChecks
            SubscribeSubject CameraStreams
            -> CreateObservable CheckDroppedFrames
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject InputSequence

                SubscribeSubject InputSequence
                -> Merge
                -> MemberSelector(Selector=Item1.FrameNumber)
                -> Bonsai.Dsp.Difference(Order=1)
                -> Subtract(Operand=DoubleProperty(Value=1))
                -> GreaterThan(Operand=DoubleProperty(Value=0))
                -> Condition => #9
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject InputSequence
                -> MemberSelector(Selector=Key) => #11
                #9, #11 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> Merge
            -> Format(Format="Camera {0} dropped frame detected during pre-session!", Selector=it)
            -> InputMapping(Selector=it, Message(Selector=it))
            -> AllenNeuralDynamics.Core.ThrowException(Message="Dropped frame detected during pre-session!") => #5
            SubscribeSubject StartExperiment => #6
            #5, #6 -> TakeUntil

            SubscribeSubject CameraStreams
            -> CreateObservable OnlineQC
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject InputSequence

                SubscribeSubject InputSequence
                -> Merge => #4
                -> MemberSelector(Selector=Item1.FrameTime)
                -> Bonsai.Dsp.Difference(Order=1)
                -> Multiply(Operand=DoubleProperty(Value=1E-09)) => #7
                #4 -> MemberSelector(Selector=Item2.Seconds)
                -> Bonsai.Dsp.Difference(Order=1) => #9
                #7, #9 -> Zip
                -> Subtract
                -> Bonsai.Dsp.Abs => #12
                ExternalizedMapping(Value(DisplayName=JitterThreshold)) => #13
                #12, #13 -> GreaterThan(Operand=DoubleProperty(Value=0.0005))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> ObserveOn(Scheduler=TaskPoolScheduler) => #16
                ExternalizedMapping(Period(DisplayName=SnoozeTime))
                -> Timer(DueTime=PT0S, Period=PT10S) => #18
                #16, #18 -> Gate
                -> SelectMany MakeUI
                    SubscribeSubject InputSequence
                    -> MemberSelector(Selector=Key)
                    -> Format(Format="Camera {0} out-of-alignment qc was triggered.", Selector=it)
                    -> InputMapping(Text(Selector=it))
                    -> AllenNeuralDynamics.Core.Design.MessageBox(Text="", Title=Warning, MessageBoxIcon=Exclamation) => #4
                    SubscribeSubject InputSequence
                    -> MemberSelector(Selector=Key)
                    -> Format(Format="Camera {0} out-of-alignment qc was triggered.", Selector=it) => #7
                    SubscribeSubject HarpTimestampSource => #8
                    #7, #8 -> WithLatestFrom
                    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=HardwareQA)
                    -> MulticastSubject SoftwareEvent => #11
                    #4, #11 -> Zip
                    -> Take(Count=1)
                    -> WorkflowOutput
            -> Merge
    SubscribeSubject SessionSchema
    -> MemberSelector(Selector=SkipHardwareValidation)
    -> BitwiseNot
    -> Condition => #4
        WorkflowInput Source1
        -> WorkflowOutput
    #0, #4 -> SubscribeWhen
    -> DelaySubscription(DueTime=PT2S) => #6
    SubscribeSubject EndExperiment => #7
    #6, #7 -> TakeUntil
    -> WorkflowOutput

IncludeWorkflow(Path=Extensions\Logging.bonsai) => #12
SubscribeSubject EndExperiment
-> Delay(DueTime=PT1S) => #14
#12, #14 -> TakeUntil => #15
SubscribeSubject StartLogging => #16
#15, #16 -> SubscribeWhen

SubscribeSubject EndExperiment
-> SelectMany Cleanup
    PropertySource<AllenNeuralDynamics.CuttlefishFip.CreateSetTaskStatePayload,AllenNeuralDynamics.CuttlefishFip.TaskState>(MemberName=SetTaskState, Value=Stop)
    -> Take(Count=1)
    -> MulticastSubject SetTaskState
    -> WorkflowOutput
-> Delay(DueTime=PT3S)
-> Take(Count=1)
-> WorkflowOutput
