WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(RigPath)
-> GroupWorkflow ReadSchemas
    ExternalizedMapping(Path(DisplayName=TaskLogicPath))
    -> Bonsai.IO.ReadAllText(Path="")
    -> AsyncSubject RawTaskLogicSchema => #2
    ExternalizedMapping(Path(DisplayName=RigPath))
    -> Bonsai.IO.ReadAllText(Path="")
    -> AsyncSubject RawRigSchema => #5
    ExternalizedMapping(Path(DisplayName=SessionPath))
    -> Bonsai.IO.ReadAllText(Path="")
    -> AsyncSubject RawSessionSchema => #8
    #2, #5, #8 -> Zip
    -> WorkflowOutput

GroupWorkflow LoadSchemas
    SubscribeSubject RawRigSchema
    -> AindVrForagingDataSchema.DeserializeFromJson(Type=TypeMapping<AindVrForagingDataSchema.AindVrForagingRig>)
    -> Take(Count=1)
    -> AsyncSubject RigSchema

Annotation(Text="")
-> GroupWorkflow Hardware
    GroupWorkflow ScreenConfiguration
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen)
        -> PropertyMapping(DisplayDevice(Selector=DisplayIndex), TargetRenderFrequency(Selector=TargetRenderFrequency), TargetUpdateFrequency(Selector=TargetUpdateFrequency))
        -> Bonsai.Shaders.CreateWindow
          Width=1000
          Height=1000
          Title=VrForaging
          VSync=Off
          SwapSync=false
          ClearColor=Black
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=false
          Location=nil
          WindowBorder=Resizable
          WindowState=Fullscreen
          DisplayDevice=Second
          TargetRenderFrequency=60
          TargetUpdateFrequency=120
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> WorkflowOutput
    -> DelaySubscription(DueTime=PT2S)

    GroupWorkflow HarpDevices
        SubscribeSubject HarpWhiteRabbitEvents
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
        -> AllenNeuralDynamics.WhiteRabbit.Parse(Register=AllenNeuralDynamics.WhiteRabbit.TimestampedCounter)
        -> MemberSelector(Selector=Seconds)
        -> BehaviorSubject HarpTimestampSource

        SubscribeSubject HarpWhiteRabbitEvents
        -> Bonsai.Harp.Parse(Register=Bonsai.Harp.TimestampedTimestampSeconds)
        -> PublishSubject HarpWhiteRabbitHeartbeat

        IncludeWorkflow(Path=Extensions\HarpBehaviorDevice.bonsai, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpClockGenerator.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpWhiteRabbit.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpOlfactometer.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow
          Path=AllenNeuralDynamics.HarpUtils:HarpOlfactometerDevice.bonsai
          PortName=COM6
          TriggerHarpReadDumpSubjectName=TriggerHarpReadDump
          Channel3AsCarrier=true

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpLickometer.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=Extensions\HarpLicketySplitDevice.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpTreadmill)
        -> MemberSelector(Selector=PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpTreadmill.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=Calibration)
        -> AindVrForagingDataSchema.SerializeToJson(Formatting=None)
        -> AllenNeuralDynamics.AindManipulator.DeserializeFromJson(Type=TypeMapping<AllenNeuralDynamics.AindManipulator.AindManipulatorCalibrationInput>) => #30
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=PortName)
        -> PropertyMapping(PortName) => #34
        #30, #34 -> IncludeWorkflow(Path=Extensions\AindManipulator.bonsai, PortName=COMx)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpSniffDetector.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpSniffDetector.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump) => #39
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpSniffDetector)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #42
        #39, #42 -> SubscribeWhen

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpAnalogInput.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpAnalogInputDevice.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump) => #47
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpAnalogInput)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #50
        #47, #50 -> SubscribeWhen

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpEnvironmentSensor.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpEnvironmentSensor.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump) => #55
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpEnvironmentSensor)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #58
        #55, #58 -> SubscribeWhen

    GroupWorkflow Cameras
        GroupWorkflow TriggeredCameras
            SubscribeSubject RigSchema
            -> Take(Count=1)
            -> MemberSelector(Selector=TriggeredCameraController)
            -> AsyncSubject TriggeredCameraController
            -> MemberSelector(Selector=FrameRate.Value)
            -> AsyncSubject CameraFrameRate

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)

            SubscribeSubject CameraFrameRate
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.Camera0Frequency)
            -> MulticastSubject HarpBehaviorCommands

            SubscribeSubject HarpBehaviorEvents
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame) => #13
            -> MemberSelector(Selector=Value)
            -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.FrameAcquired>(Value=FrameAcquired))
            -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
            -> Condition => #17
                WorkflowInput Source1
                -> WorkflowOutput
            #17, #13 -> WithLatestFrom
            -> MemberSelector(Selector=Item2.Seconds)
            -> PublishSubject FrameEvent

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable InstantiateCamera => #24
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                BooleanProperty(Value=true)
                -> MulticastSubject TriggeredCamerasInitialized
                -> Take(Count=1) => #5
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value)
                -> PropertyMapping => #8
                  SerialNumber(Selector=SerialNumber)
                  ExposureTime(Selector=Exposure)
                  Gain(Selector=Gain)
                  Binning(Selector=Binning)
                  ColorProcessing(Selector=ColorProcessing)
                  Gamma(Selector=Gamma)
                  PixelFormat(Selector=PixelFormat)
                  AdcBitDepth(Selector=AdcBitDepth)
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value)
                -> MemberSelector(Selector=RegionOfInterest)
                -> InputMapping(Value(Selector="X,Y,Width,Height"))
                -> PropertySource<Bonsai.Vision.Crop,OpenCV.Net.Rect>(MemberName=RegionOfInterest, Value(X=0, Y=0, Width=0, Height=0))
                -> PropertyMapping(RegionOfInterest) => #14
                #5, #8, #14 -> AllenNeuralDynamics.Core.AindSpinnakerCapture => #15
                  Index=nil
                  ColorProcessing=Default
                  ExposureTime=19000
                  Gain=0
                  Binning=1
                  Gamma=nil
                  PixelFormat=Mono8
                  RegionOfInterest(X=0, Y=0, Width=0, Height=0)
                  AdcBitDepth=nil
                SubscribeSubject FrameEvent => #16
                #15, #16 -> Zip
                -> Bonsai.Harp.CreateTimestamped => #18
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #20
                #18, #20 -> WithLatestFrom
                -> WorkflowOutput
            Annotation SpinnakerApiNote(Text="For some reason, if you try to access the spinnaker API back to back, a threading error is emitted")
            -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.1S) => #26
            #24, #26 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Merge
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> ReplaySubject TriggeredCamerasStream(BufferSize=nil)

            BehaviorSubject<System.Boolean> TriggeredCamerasInitialized
            -> IntProperty(Value=1) => #33
            IntProperty(Value=0)
            -> Take(Count=1) => #35
            #33, #35 -> Merge
            -> Accumulate => #37
            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> MemberSelector(Selector=Count)
            -> PropertyMapping(Value) => #41
            #37, #41 -> GreaterThanOrEqual(Operand=IntProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> Bonsai.Shaders.Delay(DueTime=PT0.1S)
            -> BehaviorSubject TriggeredCamerasReady

        GroupWorkflow MonitoringCameras
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=MonitoringCameraController)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable InstantiateCamera
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value)
                -> MemberSelector(Selector=Index)
                -> PropertyMapping(Index)
                -> Bonsai.Video.VideoCaptureDevice(Index=0, CaptureProperties="") => #7
                SubscribeSubject HarpTimestampSource => #8
                #7, #8 -> WithLatestFrom
                -> Bonsai.Harp.CreateTimestamped => #10
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #12
                #10, #12 -> WithLatestFrom
                -> WorkflowOutput
            -> Merge
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> ReplaySubject MonitoringCamerasStream(BufferSize=nil)
            -> WorkflowOutput

GroupWorkflow SessionSettings

GroupWorkflow Initialization
    BehaviorSubject<System.Reactive.Unit> StartExperiment
    BehaviorSubject<AindVrForagingDataSchema.Patch> GlobalActivePatch
    BehaviorSubject<AindVrForagingDataSchema.VirtualSite> GlobalActiveSite
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> UpdaterEvents
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> SoftwareEvent
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> RuntimeLogging
    BehaviorSubject<System.Reactive.Unit> EndExperiment
    BehaviorSubject<System.Reactive.Unit> StartLogging
    BehaviorSubject<System.String> Annotations

    BehaviorSubject<PatchState> GlobalPatchState
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=GlobalPatchState)
    -> MulticastSubject SoftwareEvent

    GroupWorkflow Position
        BehaviorSubject<Bonsai.Harp.Timestamped(OpenTK.Vector3)> CurrentPosition
        BehaviorSubject<Bonsai.Harp.Timestamped(System.Boolean)> IsStopped
        BehaviorSubject<OpenTK.Vector3> MaxPosition
        BehaviorSubject<System.Double> StopVelocityThreshold
        BehaviorSubject<System.Tuple(System.Double,System.Double)> FilteredCurrentVelocity

    BooleanProperty(Value=false)
    -> Take(Count=1) => #14
    SubscribeSubject StartExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=true) => #17
    SubscribeSubject EndExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=false) => #20
    #14, #17, #20 -> Merge
    -> BehaviorSubject ExperimentCommand

    SubscribeSubject StartExperiment
    -> Unit
    -> PublishSubject TriggerHarpReadDump

Annotation(Text="")
-> GroupWorkflow OperationControl
    GroupWorkflow RewardControl
        GroupWorkflow WaterValve
            BehaviorSubject<System.Double> ValveOpenTimeMs
            -> SelectMany SetValue
                WorkflowInput Source1
                -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseSupplyPort0)
                -> MulticastSubject HarpBehaviorCommands => #2
                SubscribeSubject HarpBehaviorEvents
                -> Harp.Behavior.Parse(Register=Harp.Behavior.PulseSupplyPort0) => #4
                #2, #4 -> Zip
                -> IntProperty(Value=0) => #6
                Bonsai.Shaders.Timer(DueTime=PT0.01S)
                -> IntProperty(Value=0) => #8
                #6, #8 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            -> Unit
            -> MulticastSubject TriggerValve

            BehaviorSubject<System.Reactive.Unit> TriggerValve
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort0))
            -> MulticastSubject HarpBehaviorCommands
            -> WorkflowOutput

        BonVision.OptionalFloatProperty(Value=0, HasValue=true)
        -> Take(Count=1)
        -> BehaviorSubject GiveReward
        -> BehaviorSubject ForceGiveReward

        SubscribeSubject GiveReward
        -> PublishSubject HotGiveReward

        SubscribeSubject GiveReward => #7
        Annotation ManualReward(Text="This is just to allow differential logging of manual rewards")
        -> SubscribeSubject ForceGiveReward => #9
        #7, #9 -> Merge
        -> Condition HasValue
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Condition GreaterThan0 => #13
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Calibration.WaterValve) => #15
        #13, #15 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToTime => #17
          Expression: ((Item1 * 0.001) - Item2.Offset) / Item2.Slope
        Annotation ToMilliseconds(Text="") => #18
        #17, #18 -> Multiply(Operand=DoubleProperty(Value=1000))
        -> InputMapping(Value(Selector=it))
        -> IntProperty(Value=0)
        -> Condition GreaterThan0
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> MulticastSubject ValveOpenTimeMs

        SubscribeSubject GiveReward
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=GiveReward)
        -> MulticastSubject SoftwareEvent

        SubscribeSubject ForceGiveReward
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ForceGiveReward)
        -> MulticastSubject SoftwareEvent

    GroupWorkflow FeedbackControl
        BehaviorSubject<System.Reactive.Unit> ChoiceFeedback

        SubscribeSubject ChoiceFeedback
        -> PublishSubject HotChoiceFeedback

        SubscribeSubject ChoiceFeedback
        -> Unit
        -> MulticastSubject AudioTrigger
        -> WorkflowOutput

        SubscribeSubject ChoiceFeedback
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ChoiceFeedback)
        -> MulticastSubject SoftwareEvent

    GroupWorkflow Lickometer
        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.TimestampedLickState) => #1
        -> MemberSelector(Selector=Value)
        -> BitwiseAnd(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplit.LickChannels>(Value=Channel0))
        -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> DistinctUntilChanged => #5
        #5, #1 -> WithLatestFrom
        -> Condition IsLickOnset
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2.Seconds)
        -> PublishSubject LickEvent

        SubscribeSubject HarpLickometerEvents
        -> Bonsai.Harp.CreateMessage
          MessageType=Write
          Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=Off, OperationLed=Off, Heartbeat=Enabled)
        -> Take(Count=1)
        -> MulticastSubject HarpLickometerCommands

    GroupWorkflow CameraControl
        SubscribeSubject HarpBehaviorEvents
        -> Take(Count=1) => #1
        SubscribeSubject TriggeredCamerasReady => #2
        #1, #2 -> Zip
        -> Take(Count=1)
        -> Bonsai.Shaders.Delay(DueTime=PT2S)
        -> BooleanProperty(Value=true)
        -> MulticastSubject CameraState

        BehaviorSubject<System.Boolean> CameraState => #8
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0)) => #10
        #8 -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStopCamerasPayload(StopCameras=CameraOutput0)) => #13
        #10, #13 -> Merge
        -> MulticastSubject HarpBehaviorCommands

        SubscribeSubject StartLogging
        -> Take(Count=1)
        -> BooleanProperty(Value=false)
        -> MulticastSubject CameraState

        SubscribeSubject StartExperiment
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> MulticastSubject CameraState

        SubscribeSubject EndExperiment
        -> Take(Count=1)
        -> BooleanProperty(Value=false)
        -> MulticastSubject CameraState

    GroupWorkflow Thermistor/Pressure
        SubscribeSubject HarpSniffDetectorEvents
        -> AllenNeuralDynamics.SniffDetector.Parse(Register=AllenNeuralDynamics.SniffDetector.TimestampedRawVoltage) => #1
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpSniffDetector)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #4
        #1, #4 -> SubscribeWhen
        -> PublishSubject ThermistorData

    GroupWorkflow AudioControl
        BehaviorSubject<System.Double> AudioDuration
        -> Multiply(Operand=IntProperty(Value=1000))
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseDO2)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Int32> AudioFrequency
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PwmFrequencyDO2)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Reactive.Unit> AudioTrigger
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStartPayload(PwmStart=PwmDO2))
        -> MulticastSubject HarpBehaviorCommands

        GroupWorkflow InitialSettings => #10
            SubscribeSubject HarpBehaviorEvents
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmDutyCycleDO2Payload(PwmDutyCycleDO2=50))
            -> Take(Count=1)
            -> MulticastSubject HarpBehaviorCommands

            FloatProperty(Value=200)
            -> MulticastSubject AudioDuration

            FloatProperty(Value=9999)
            -> MulticastSubject AudioFrequency
        SubscribeSubject HarpBehaviorEvents
        -> Take(Count=1) => #12
        #10, #12 -> SubscribeWhen

Defer Visualizers
    ExternalizedMapping(Value(DisplayName=EnableExperimentUI))
    -> BooleanProperty(Value=true)
    -> Take(Count=1)
    -> BehaviorSubject EnableExperimentUI

    SubscribeSubject StartExperiment
    -> BooleanProperty(Value=false)
    -> MulticastSubject EnableExperimentUI

    Defer CameraVisualizer
        SubscribeSubject TriggeredCamerasStream
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core.Design:SpinnakerCameraControllerVisualizer.bonsai)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #2
        SubscribeSubject TriggeredCamerasStream
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core.Design:SpinnakerCameraControllerVisualizer.bonsai)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #5
        SubscribeSubject MonitoringCamerasStream
        -> IncludeWorkflow(Path=Extensions\WebCameraControllerVisualizer.bonsai)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #8
        #2, #5, #8 -> Bonsai.Gui.TableLayoutPanelBuilder CameraVisualizer(Enabled=true, Visible=true, ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #8
    IntProperty(Value=0)
    -> Visualizer TaskVisualizer
        Defer OnlineLabels
            SubscribeSubject QCDiagnosis
            -> MemberSelector(Selector=Heartbeat)
            -> Format(Format="Harp: {0}", Selector=it)
            -> PropertyMapping(Text(Selector=it))
            -> Bonsai.Gui.TextBoxBuilder(Enabled=false, Visible=true, Text="", Multiline=true)
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TextBoxVisualizer>) => #5
            SubscribeSubject QCDiagnosis
            -> MemberSelector(Selector=TotalReward)
            -> Format(Format="WaterConsumed: {0}", Selector=it)
            -> PropertyMapping(Text(Selector=it))
            -> Bonsai.Gui.TextBoxBuilder(Enabled=false, Visible=true, Text="", Multiline=true)
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TextBoxVisualizer>) => #11
            SubscribeSubject QCDiagnosis
            -> MemberSelector(Selector=SecondsSinceChoice)
            -> Format(Format="TSinceChoice: {0:mm\:ss}", Selector=it)
            -> PropertyMapping(Text(Selector=it))
            -> Bonsai.Gui.TextBoxBuilder(Enabled=false, Visible=true, Text="", Multiline=true)
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TextBoxVisualizer>) => #17
            #5, #11, #17 -> Bonsai.Gui.TableLayoutPanelBuilder Labels(Enabled=true, Visible=true, ColumnCount=1, RowCount=3, ColumnStyles="", RowStyles="", CellSpans="")
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #19
            Bonsai.Shaders.RenderFrame
            -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
            -> Accumulate
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
              Expression: TimeSpan.FromSeconds(it)
            SubscribeSubject StartExperiment => #24
            #23, #24 -> SubscribeWhen
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.ToString("hh\:mm\:ss")
            -> PropertyMapping(Text)
            -> Bonsai.Gui.ButtonBuilder ElapsedTime(Enabled=false, Visible=true, Text="")
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #29
            #19, #29 -> Bonsai.Gui.TableLayoutPanelBuilder TextLabels(Enabled=true, Visible=true, Font="Consolas, 16pt", ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
            -> WorkflowOutput

            GroupWorkflow QC
                SubscribeSubject HarpWhiteRabbitHeartbeat => #0
                SubscribeSubject SessionAccumulatedReward => #1
                Unit => #2
                SubscribeSubject HotChoiceFeedback => #3
                #2, #3 -> Merge
                -> CreateObservable AccumulateTime
                    Bonsai.Shaders.RenderFrame
                    -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
                    -> Accumulate
                    -> WorkflowOutput
                -> Switch
                -> AllenNeuralDynamics.Core.TimeSpanFromSeconds => #7
                #1, #7 -> CombineLatest => #8
                #0, #8 -> WithLatestFrom
                -> MemberSelector(Selector="Item1.Seconds,Item2")
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                    Item1 as Heartbeat,
                    Item2.Item1 as TotalReward,
                    Item2.Item2 as SecondsSinceChoice)
                -> WorkflowOutput

                FloatProperty(Value=0) => #13
                SubscribeSubject GiveReward => #14
                SubscribeSubject ForceGiveReward => #15
                #14, #15 -> Merge
                -> Condition HasValue
                    WorkflowInput Source1
                    -> MemberSelector(Selector=HasValue)
                    -> WorkflowOutput
                -> MemberSelector(Selector=Value) => #18
                #13, #18 -> Merge
                -> Accumulate
                -> BehaviorSubject SessionAccumulatedReward
            -> BehaviorSubject QCDiagnosis
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #1
        Defer Velocity
            SubscribeSubject FilteredCurrentVelocity
            -> Bonsai.Shaders.SampleOnRenderFrame => #1
            SubscribeSubject StopVelocityThreshold => #2
            #1, #2 -> CombineLatest
            -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(ValueSelector="Item1.Item1,Item2", SymbolType=None, LineWidth=2, CurveSettings="", Capacity=2000, Min=nil, Max=nil)
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #3
        Defer Thermistor
            SubscribeSubject ThermistorData
            -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(IndexSelector=Seconds, ValueSelector=Value, SymbolType=None, LineWidth=2, CurveSettings="", Capacity=2000, Min=nil, Max=nil)
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #5
        #3, #5 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #7
        GroupWorkflow Ethogram
            SubscribeSubject GlobalActiveSite => #0
            SubscribeSubject GlobalActivePatch
            -> MemberSelector(Selector=StateIndex) => #2
            #0, #2 -> WithLatestFrom
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=##PatchVirtualSite) => #4
            SubscribeSubject SoftwareEvent
            -> Condition GiveReward
                WorkflowInput Source1
                -> MemberSelector(Selector=Name) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=StringProperty(Value=GiveReward))
                -> WorkflowOutput
            -> Condition Gt0 => #7
                WorkflowInput Source1
                -> MemberSelector(Selector=Data)
                -> CastToNullableFloat
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it.HasValue and it.Value>0
                -> WorkflowOutput
            SubscribeSubject SoftwareEvent
            -> Condition ChoiceFeedback => #9
                WorkflowInput Source1
                -> MemberSelector(Selector=Name) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=StringProperty(Value=ChoiceFeedback))
                -> WorkflowOutput
            SubscribeSubject LickEvent
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=##Lick) => #11
            Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.1S)
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=##UpdateTick) => #13
            #4, #7, #9, #11, #13 -> Merge => #14
            SubscribeSubject HarpTimestampSource => #15
            #14, #15 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.TimestampSoftwareEvent
            -> AllenNeuralDynamics.VrForaging.SoftwareEventVisualizerBuilder(WindowSize=60)
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.VrForaging.SoftwareEventVisualizer>) => #9
        SubscribeSubject GlobalPatchState
        -> AllenNeuralDynamics.VrForaging.PatchStateVisualizerBuilder
        -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.VrForaging.PatchStateVisualizer>) => #12
        SubscribeSubject SoftwareEvent
        -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.SoftwareEventVisualizer>) => #14
        #12, #14 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #16
        #1, #7, #9, #16 -> Bonsai.Gui.TableLayoutPanelBuilder DataVisualization(Enabled=true, Visible=true, ColumnCount=1, RowCount=4, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #18
        GroupWorkflow SubjectLabel
            StringProperty(Value=CALIBRATION)
            -> PropertyMapping(Text)
            -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 20.25pt", Text="")
            -> WorkflowOutput
        -> VisualizerMapping => #20
        #18, #20 -> Bonsai.Gui.TableLayoutPanelBuilder DataVisualization
          Enabled=true
          Visible=true
          ColumnCount=1
          RowCount=2
          ColumnStyles=""
          RowStyles(RowStyle(SizeType=Percent, Height=0.94), RowStyle(SizeType=Percent, Height=0.06))
          CellSpans=""
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #11
    IncludeWorkflow(Path=Extensions\AindManipulatorGui.bonsai)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #13
    GroupWorkflow ValveGui
        Bonsai.Gui.PropertyGridBuilder(Enabled=true, Visible=true, HelpVisible=true, ToolbarVisible=true, AutoRefresh=false)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.PropertyGridVisualizer>) => #1
        Bonsai.Gui.ButtonBuilder RunCalibration(Enabled=true, Visible=true, Text=RunCalibration)
        -> PublishSubject RunCalibration
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #4
        BooleanProperty(Value=false)
        -> Take(Count=1) => #6
        SubscribeSubject ValveFlushState => #7
        #6, #7 -> Concat => #8
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> StringProperty(Value="Close Valves") => #10
        #8 -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> StringProperty(Value="Open Valves") => #13
        #10, #13 -> Merge
        -> PropertyMapping(Text)
        -> Bonsai.Gui.ToggleButtonBuilder FlushValves(Enabled=true, Visible=true, Text="Open Valves", Checked=false)
        -> MulticastSubject ValveFlushState
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ToggleButtonVisualizer>) => #18
        SubscribeSubject EnableExperimentUI
        -> PropertyMapping(Enabled) => #20
        #1, #4, #18, #20 -> Bonsai.Gui.TableLayoutPanelBuilder ValveCalibration
          Enabled=true
          Visible=true
          ColumnCount=2
          RowCount=2
          ColumnStyles=""
          RowStyles=""
          CellSpans(CellSpan(ColumnSpan=1, RowSpan=2), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1))
        -> WorkflowOutput

        SubscribeSubject RunCalibration
        -> Take(Count=1) => #24
        ExternalizedMapping(Interval(Category=ValveCalibration), OpeningTimeMs(Category=ValveCalibration), Repeats(Category=ValveCalibration)) => #25
        #24, #25 -> SelectMany LoopValve
            ExternalizedMapping(DueTime(DisplayName=Interval))
            -> Bonsai.Shaders.Timer(DueTime=PT0.5S) => #1
            ExternalizedMapping(Value(DisplayName=OpeningTimeMs)) => #2
            #1, #2 -> IntProperty(Value=100)
            -> MulticastSubject ValveOpenTimeMs
            -> Unit
            -> MulticastSubject TriggerValve => #6
            ExternalizedMapping(Count(DisplayName=Repeats)) => #7
            #6, #7 -> RepeatCount(Count=200) => #8
            Bonsai.Shaders.Input.KeyDown(Key=Q, Modifiers=Shift) => #9
            #8, #9 -> TakeUntil
            -> ElementIndex
            -> MemberSelector(Selector=Index)
            -> WorkflowOutput
        -> Repeat

        BehaviorSubject<System.Boolean> ValveFlushState
        -> CreateObservable Flush
            WorkflowInput Source1
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=200)
            -> MulticastSubject ValveOpenTimeMs
            -> Unit
            -> MulticastSubject TriggerValve
            -> Bonsai.Shaders.Delay(DueTime=PT0.2S)
            -> RepeatCount(Count=300)
            -> LastOrDefault
            -> WorkflowOutput
        -> Switch
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #15
    GroupWorkflow HwShortcuts
        SubscribeSubject EnableExperimentUI
        -> PropertyMapping(Enabled)
        -> Bonsai.Gui.ButtonBuilder TriggerAudio(Enabled=true, Visible=true, Text=TriggerAudio)
        -> Sink
            WorkflowInput Source1
            -> Unit
            -> MulticastSubject AudioTrigger
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #4
        Bonsai.Gui.ButtonBuilder ForceReward(Enabled=true, Visible=true, Text=ForceReward)
        -> Sink
            WorkflowInput Source1 => #0
            FloatProperty(Value=3)
            -> Take(Count=1) => #2
            #0, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject ForceGiveReward
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #7
        #4, #7 -> Bonsai.Gui.TableLayoutPanelBuilder HwShortcuts(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 20pt", ColumnCount=5, RowCount=5, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #17
    #11, #13, #15, #17 -> Bonsai.Gui.TabControlBuilder VrForaging(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 12pt")
    -> VisualizerMapping => #19
    #8, #19 -> Bonsai.Gui.TableLayoutPanelBuilder VrForaging
      Enabled=true
      Visible=true
      ColumnCount=1
      RowCount=2
      ColumnStyles=""
      RowStyles(RowStyle(SizeType=Percent, Height=0.4), RowStyle(SizeType=Percent, Height=0.6))
      CellSpans=""
    -> Bonsai.Design.VisualizerWindow(Text=VrForaging, Visible=true, Location=nil, Size(Width=640, Height=480), WindowState=Maximized)
    -> WorkflowOutput
