WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(TaskLogicPath, RigPath, SessionPath)
-> IncludeWorkflow(Path=AllenNeuralDynamics.Core:ReadSchemas.bonsai, TaskLogicPath="", RigPath="", SessionPath="")

GroupWorkflow LoadSchemas
    SubscribeSubject RawSessionSchema
    -> AindVrForagingDataSchema.Session.DeserializeFromJson(Type=TypeMapping<AindVrForagingDataSchema.Session.AindBehaviorSessionModel>)
    -> Take(Count=1)
    -> AsyncSubject SubjectSchema

    SubscribeSubject RawRigSchema
    -> AindVrForagingDataSchema.Rig.DeserializeFromJson(Type=TypeMapping<AindVrForagingDataSchema.Rig.AindVrForagingRig>)
    -> Take(Count=1)
    -> AsyncSubject RigSchema

    SubscribeSubject RawTaskLogicSchema
    -> AindVrForagingDataSchema.TaskLogic.DeserializeFromJson(Type=TypeMapping<AindVrForagingDataSchema.TaskLogic.AindVrForagingTaskLogic>)
    -> Take(Count=1)
    -> AsyncSubject TaskLogicSchema
    -> MemberSelector(Selector=TaskParameters)
    -> AsyncSubject TaskLogicParameters

Annotation(Text="")
-> GroupWorkflow Hardware
    GroupWorkflow ScreenConfiguration
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen)
        -> PropertyMapping(DisplayDevice(Selector=DisplayIndex), TargetRenderFrequency(Selector=TargetRenderFrequency), TargetUpdateFrequency(Selector=TargetUpdateFrequency))
        -> Bonsai.Shaders.CreateWindow
          Width=1000
          Height=1000
          Title=VrForaging
          VSync=Off
          SwapSync=false
          ClearColor=Black
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=false
          Location=nil
          WindowBorder=Resizable
          WindowState=Fullscreen
          DisplayDevice=Second
          TargetRenderFrequency=60
          TargetUpdateFrequency=120
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:RenderResources.bonsai)
        -> Bonsai.Resources.LoadResources
        -> WorkflowOutput

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen.Calibration)
        -> Defer LoadDisplayCalibration
            WorkflowInput Source1
            -> AsyncSubject calibration

            SubscribeSubject calibration
            -> MemberSelector(Selector=Left)
            -> IncludeWorkflow(Path=Extensions\DisplayCalibration.bonsai) => #4
            SubscribeSubject calibration
            -> MemberSelector(Selector=Center)
            -> IncludeWorkflow(Path=Extensions\DisplayCalibration.bonsai) => #7
            SubscribeSubject calibration
            -> MemberSelector(Selector=Right)
            -> IncludeWorkflow(Path=Extensions\DisplayCalibration.bonsai) => #10
            #4, #7, #10 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as Left,
                Item2 as Center,
                Item3 as Right)
            -> WorkflowOutput
        -> Take(Count=1)
        -> AsyncSubject DisplayCalibration

        GroupWorkflow RenderLoop
            SubscribeSubject FarClipHorizon
            -> PropertyMapping(FarClip)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:RenderLoop.bonsai, Eye(X=0, Y=0, Z=0), NearClip=1E-05, FarClip=1000, Light(X=0, Y=0, Z=0))

            IncludeWorkflow(Path=AllenNeuralDynamics.Core:DisplaySynchQuad.bonsai, Minimum=2, Maximum=6)

            FloatProperty(Value=1)
            -> Take(Count=1)
            -> BehaviorSubject WorldContrast

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Screen)
            -> MemberSelector(Selector=Contrast) => #9
            SubscribeSubject WorldContrast => #10
            #9, #10 -> CombineLatest
            -> Multiply
            -> MulticastSubject DisplayContrast

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Screen)
            -> MemberSelector(Selector=Brightness)
            -> MulticastSubject DisplayBrightness

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen.TextureAssetsDirectory)
        -> PropertyMapping(Path)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LoadTextureBank.bonsai, Path=Textures, SearchPattern=*.jpg)
    -> DelaySubscription(DueTime=PT2S)

    GroupWorkflow HarpDevices
        SubscribeSubject HarpWhiteRabbitEvents
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
        -> AllenNeuralDynamics.WhiteRabbit.Parse(Register=AllenNeuralDynamics.WhiteRabbit.TimestampedCounter)
        -> MemberSelector(Selector=Seconds)
        -> BehaviorSubject HarpTimestampSource

        SubscribeSubject HarpWhiteRabbitEvents
        -> Bonsai.Harp.Parse(Register=Bonsai.Harp.TimestampedTimestampSeconds)
        -> PublishSubject HarpWhiteRabbitHeartbeat

        IncludeWorkflow(Path=Extensions\HarpBehaviorDevice.bonsai, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpClockGenerator.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpWhiteRabbit.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpOlfactometer.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow
          Path=AllenNeuralDynamics.HarpUtils:HarpOlfactometerDevice.bonsai
          PortName=COM6
          TriggerHarpReadDumpSubjectName=TriggerHarpReadDump
          Channel3AsCarrier=true

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpLickometer.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=Extensions\HarpLicketySplitDevice.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpTreadmill)
        -> MemberSelector(Selector=PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpTreadmill.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=Calibration)
        -> MemberSelector(Selector=Input)
        -> AindVrForagingDataSchema.Rig.SerializeToJson
        -> AllenNeuralDynamics.AindManipulator.DeserializeFromJson(Type=TypeMapping<AllenNeuralDynamics.AindManipulator.AindManipulatorCalibrationInput>) => #31
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=PortName)
        -> PropertyMapping(PortName) => #35
        #31, #35 -> IncludeWorkflow(Path=Extensions\AindManipulator.bonsai, PortName=COMx)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpSniffDetector.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpSniffDetector.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump) => #40
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpSniffDetector)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #43
        #40, #43 -> SubscribeWhen

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpAnalogInput.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpAnalogInputDevice.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump) => #48
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpAnalogInput)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #51
        #48, #51 -> SubscribeWhen

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpEnvironmentSensor.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpEnvironmentSensor.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump) => #56
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpEnvironmentSensor)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #59
        #56, #59 -> SubscribeWhen

    GroupWorkflow Cameras
        GroupWorkflow TriggeredCameras
            SubscribeSubject RigSchema
            -> Take(Count=1)
            -> MemberSelector(Selector=TriggeredCameraController)
            -> AsyncSubject TriggeredCameraController
            -> MemberSelector(Selector=FrameRate.Value)
            -> AsyncSubject CameraFrameRate

            SubscribeSubject CameraFrameRate
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.Camera0Frequency)
            -> MulticastSubject HarpBehaviorCommands

            SubscribeSubject HarpBehaviorEvents
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame) => #11
            -> MemberSelector(Selector=Value)
            -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.FrameAcquired>(Value=FrameAcquired))
            -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
            -> Condition => #15
                WorkflowInput Source1
                -> WorkflowOutput
            #15, #11 -> WithLatestFrom
            -> MemberSelector(Selector=Item2.Seconds)
            -> PublishSubject FrameEvent

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable InstantiateCamera => #22
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                BooleanProperty(Value=true)
                -> MulticastSubject TriggeredCamerasInitialized
                -> Take(Count=1) => #5
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value)
                -> PropertyMapping => #8
                  SerialNumber(Selector=SerialNumber)
                  ExposureTime(Selector=Exposure)
                  Gain(Selector=Gain)
                  Binning(Selector=Binning)
                  ColorProcessing(Selector=ColorProcessing)
                  Gamma(Selector=Gamma)
                  PixelFormat(Selector=PixelFormat)
                  AdcBitDepth(Selector=AdcBitDepth)
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value)
                -> MemberSelector(Selector=RegionOfInterest)
                -> InputMapping(Value(Selector="X,Y,Width,Height"))
                -> PropertySource<Bonsai.Vision.Crop,OpenCV.Net.Rect>(MemberName=RegionOfInterest, Value(X=0, Y=0, Width=0, Height=0))
                -> PropertyMapping(RegionOfInterest) => #14
                #5, #8, #14 -> AllenNeuralDynamics.Core.AindSpinnakerCapture => #15
                  Index=nil
                  ColorProcessing=Default
                  ExposureTime=19000
                  Gain=0
                  Binning=1
                  Gamma=nil
                  PixelFormat=Mono8
                  RegionOfInterest(X=0, Y=0, Width=0, Height=0)
                  AdcBitDepth=nil
                SubscribeSubject FrameEvent => #16
                #15, #16 -> Zip
                -> Bonsai.Harp.CreateTimestamped => #18
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #20
                #18, #20 -> WithLatestFrom
                -> WorkflowOutput
            Annotation SpinnakerApiNote(Text="For some reason, if you try to access the spinnaker API back to back, a threading error is emitted")
            -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.1S) => #24
            #22, #24 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Merge
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> ReplaySubject TriggeredCamerasStream(BufferSize=nil)

            BehaviorSubject<System.Boolean> TriggeredCamerasInitialized
            -> IntProperty(Value=1)
            -> Accumulate => #32
            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> MemberSelector(Selector=Count)
            -> PropertyMapping(Value) => #36
            #32, #36 -> GreaterThanOrEqual(Operand=IntProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> Bonsai.Shaders.Delay(DueTime=PT0.1S)
            -> BehaviorSubject TriggeredCamerasReady

        GroupWorkflow MonitoringCameras
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=MonitoringCameraController)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable InstantiateCamera
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value)
                -> MemberSelector(Selector=Index)
                -> PropertyMapping(Index)
                -> Bonsai.Video.VideoCaptureDevice(Index=0, CaptureProperties="") => #7
                SubscribeSubject HarpTimestampSource => #8
                #7, #8 -> WithLatestFrom
                -> Bonsai.Harp.CreateTimestamped => #10
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #12
                #10, #12 -> WithLatestFrom
                -> WorkflowOutput
            -> Merge
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> ReplaySubject MonitoringCamerasStream(BufferSize=nil)
            -> WorkflowOutput

GroupWorkflow SessionSettings
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=RngSeed) => #1
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=10)
    -> Bonsai.Numerics.Distributions.Sample => #4
    #1, #4 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform CheckNull
      Expression: Item1.HasValue ? Item1.Value : Item2
    -> Take(Count=1)
    -> AsyncSubject RngSeedValue
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

    AllenNeuralDynamics.VersionControl.CreateRepository(Path=../.)
    -> AsyncSubject Repository

    Annotation(Text="A small value that is used to sum to the visual horizon to instantiate resources.")
    -> FloatProperty(Value=0)
    -> Take(Count=1)
    -> AsyncSubject SigmaZ

    ExternalizedMapping(Value(DisplayName=FarClipHorizon))
    -> FloatProperty(Value=1000)
    -> Take(Count=1)
    -> AsyncSubject FarClipHorizon

    Annotation(Text="The distance used to determine whether a segment should be disposed.") => #23
    ExternalizedMapping(Value(DisplayName=DisposingTreshold)) => #24
    #23, #24 -> FloatProperty(Value=20)
    -> Take(Count=1)
    -> AsyncSubject DisposingTreshold

    SubscribeSubject SubjectSchema
    -> PropertyMapping(RootFolder(Selector=RootPath), SessionName(Selector=SessionName))
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateRootLoggingPathFromSession.bonsai, RootFolder="", SessionName=nil, SubjectName=LoggingRootPath)

GroupWorkflow Initialization
    BehaviorSubject<System.Reactive.Unit> StartExperiment
    BehaviorSubject<AindVrForagingDataSchema.TaskLogic.PatchStatistics> GlobalActivePatch
    BehaviorSubject<AindVrForagingDataSchema.TaskLogic.VirtualSite> GlobalActiveSite
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> UpdaterEvents
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> SoftwareEvent
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> RuntimeLogging
    BehaviorSubject<System.Reactive.Unit> EndExperiment
    BehaviorSubject<System.Reactive.Unit> StartLogging
    BehaviorSubject<System.String> Annotations

    GroupWorkflow Position
        BehaviorSubject<Bonsai.Harp.Timestamped(OpenTK.Vector3)> CurrentPosition
        BehaviorSubject<Bonsai.Harp.Timestamped(System.Boolean)> IsStopped
        BehaviorSubject<OpenTK.Vector3> MaxPosition
        BehaviorSubject<System.Double> StopVelocityThreshold
        BehaviorSubject<System.Double> FilteredCurrentVelocity

    BooleanProperty(Value=false)
    -> Take(Count=1) => #11
    SubscribeSubject StartExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=true) => #14
    SubscribeSubject EndExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=false) => #17
    #11, #14, #17 -> Merge
    -> BehaviorSubject ExperimentState

    SubscribeSubject StartExperiment
    -> Unit
    -> PublishSubject TriggerHarpReadDump

Defer HardwareChecks
    GroupWorkflow ProtocolValidation => #0
        SubscribeSubject Repository
        -> AllenNeuralDynamics.VersionControl.IsRepositoryClean(IgnoreUntracked=false)
        -> BitwiseNot => #2
        SubscribeSubject SubjectSchema
        -> MemberSelector(Selector=AllowDirtyRepo) => #4
        #2, #4 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform AllowDirty?
          Expression: Item2 ? False : Item1
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.ThrowException(Message="Repository is not clean! Please discard all local changes.")

        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.OdorControl.UseChannel3AsCarrier)
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany SampleFlow
            SubscribeSubject StartExperiment
            -> Take(Count=1) => #1
            SubscribeSubject HarpOlfactometerEvents
            -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.TimestampedChannel3ActualFlow)
            -> MemberSelector(Selector=Value) => #4
            ExternalizedMapping(Value(DisplayName=LowFlowThreshold)) => #5
            #4, #5 -> LessThan(Operand=FloatProperty(Value=950)) => #6
            #6, #4 -> Zip => #7
            #1, #7 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Take(Count=1)
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2)
        -> Format(Format="Flow on Channel3 is lower than expected. Reading {0}.", Selector=it)
        -> InputMapping(Selector=it, Message(Selector=it))
        -> AllenNeuralDynamics.Core.ThrowException(Message="Flow on Channel3 is lower than expected.")

        GroupWorkflow CameraChecks
            SubscribeSubject TriggeredCamerasStream
            -> CreateObservable CheckDroppedFrames
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject InputSequence

                SubscribeSubject InputSequence
                -> Merge
                -> MemberSelector(Selector=Value.ChunkData)
                -> MemberSelector(Selector=FrameID)
                -> Bonsai.Dsp.Difference(Order=1)
                -> Subtract(Operand=DoubleProperty(Value=1))
                -> GreaterThan(Operand=DoubleProperty(Value=0))
                -> Condition => #10
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject InputSequence
                -> MemberSelector(Selector=Key) => #12
                #10, #12 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> Merge
            -> Format(Format="Camera {0} dropped frame detected during pre-session!", Selector=it)
            -> InputMapping(Selector=it, Message(Selector=it))
            -> AllenNeuralDynamics.Core.ThrowException(Message="Dropped frame detected during pre-session!") => #5
            SubscribeSubject StartExperiment => #6
            #5, #6 -> TakeUntil

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable CheckCameraSettings
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value.Exposure) => #4
                SubscribeSubject TriggeredCameraController
                -> MemberSelector(Selector=FrameRate)
                -> MemberSelector(Selector=Value) => #7
                #4, #7 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: ((1.0 / Item2) * 1000000) < double(Item1) + 1000
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1) => #11
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #13
                #11, #13 -> WithLatestFrom
                -> WorkflowOutput
            -> Merge
            -> Format(Format="Camera {0} exposure setting not compatible with requested frame rate!", Selector=it)
            -> InputMapping(Selector=it, Message(Selector=it))
            -> AllenNeuralDynamics.Core.ThrowException(Message="")

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=FrameRate.HasValue)
            -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> AllenNeuralDynamics.Core.ThrowException(Message="TriggeredCameraControl must specify a valid FrameRate property!")

            SubscribeSubject TriggeredCamerasStream
            -> CreateObservable OnlineQC
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject InputSequence

                SubscribeSubject InputSequence
                -> Merge => #4
                -> MemberSelector(Selector=Value.ChunkData)
                -> MemberSelector(Selector=Timestamp)
                -> Bonsai.Dsp.Difference(Order=1)
                -> Multiply(Operand=DoubleProperty(Value=1E-09)) => #8
                #4 -> MemberSelector(Selector=Seconds)
                -> Bonsai.Dsp.Difference(Order=1) => #10
                #8, #10 -> Zip
                -> Subtract
                -> Bonsai.Dsp.Abs => #13
                ExternalizedMapping(Value(DisplayName=JitterThreshold)) => #14
                #13, #14 -> GreaterThan(Operand=DoubleProperty(Value=0.0005))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> ObserveOn(Scheduler=TaskPoolScheduler) => #17
                ExternalizedMapping(Period(DisplayName=SnoozeTime))
                -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT10S) => #19
                #17, #19 -> Gate
                -> SelectMany MakeUI
                    SubscribeSubject InputSequence
                    -> MemberSelector(Selector=Key)
                    -> Format(Format="Camera {0} out-of-alignment qc was triggered.", Selector=it)
                    -> InputMapping(Text(Selector=it))
                    -> AllenNeuralDynamics.Core.Design.MessageBox(Text="", Title=Warning, MessageBoxIcon=Exclamation)
            -> Merge

        GroupWorkflow Treadmill => #20
            SubscribeSubject HarpTreadmillEvents
            -> AllenNeuralDynamics.Treadmill.Parse(Register=AllenNeuralDynamics.Treadmill.TorqueLimitState)
            -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> AllenNeuralDynamics.Core.Design.MessageBox
              Text="The treadmill current limit has been triggered. If this is a problem, please restart the session."
              Title="Treadmill limit trigger"
              MessageBoxIcon=Exclamation
        SubscribeSubject StartExperiment => #21
        #20, #21 -> SubscribeWhen

        IncludeWorkflow(Path=Extensions\ValidateClkOutput.bonsai)
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=SkipHardwareValidation)
    -> BitwiseNot
    -> Condition => #4
        WorkflowInput Source1
        -> WorkflowOutput
    #0, #4 -> SubscribeWhen
    -> Bonsai.Shaders.DelaySubscription(DueTime=PT2S)
    -> WorkflowOutput

IncludeWorkflow(Path=Extensions\Logging.bonsai) => #8
SubscribeSubject EndExperiment
-> Bonsai.Shaders.Delay(DueTime=PT1S) => #10
#8, #10 -> TakeUntil => #11
SubscribeSubject StartLogging => #12
#11, #12 -> SubscribeWhen

Annotation(Text="")
-> GroupWorkflow OperationControl
    GroupWorkflow OdorControl
        GroupWorkflow OlfactometerInitialConfiguration
            SubscribeSubject HarpOlfactometerEvents
            -> Take(Count=1) => #1
            GroupWorkflow Channel3Setting
                SubscribeSubject TaskLogicParameters
                -> MemberSelector(Selector=OperationControl.OdorControl.UseChannel3AsCarrier) => #1
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> PropertySource<Harp.Olfactometer.CreateChannel3RangePayload,Harp.Olfactometer.Channel3RangeConfig>(MemberName=Channel3Range, Value=FlowRate1000) => #3
                #1 -> BitwiseNot
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> PropertySource<Harp.Olfactometer.CreateChannel3RangePayload,Harp.Olfactometer.Channel3RangeConfig>(MemberName=Channel3Range, Value=FlowRate100) => #6
                #3, #6 -> Merge
                -> WorkflowOutput
            -> PropertyMapping(Channel3Range) => #3
            #1, #3 -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateChannel3RangePayload(Channel3Range=FlowRate1000))
            -> MulticastSubject HarpOlfactometerCommands
            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableEventsPayload(EnableEvents="Flowmeter DI0Trigger ChannelActualFlow"))
            -> MulticastSubject HarpOlfactometerCommands
            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Enabled))
            -> MulticastSubject HarpOlfactometerCommands
            -> WorkflowOutput

            GroupWorkflow Channel3Setting
                SubscribeSubject TaskLogicParameters
                -> MemberSelector(Selector=OperationControl.OdorControl.UseChannel3AsCarrier) => #1
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> PropertySource<Harp.Olfactometer.CreateChannel3RangePayload,Harp.Olfactometer.Channel3RangeConfig>(MemberName=Channel3Range, Value=FlowRate1000) => #3
                #1 -> BitwiseNot
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> PropertySource<Harp.Olfactometer.CreateChannel3RangePayload,Harp.Olfactometer.Channel3RangeConfig>(MemberName=Channel3Range, Value=FlowRate100) => #6
                #3, #6 -> Merge
                -> WorkflowOutput
            -> Equal(Operand=WorkflowProperty<Harp.Olfactometer.Channel3RangeConfig>(Value=FlowRate1000))
            -> Condition => #13
                WorkflowInput Source1
                -> WorkflowOutput
            SubscribeSubject HarpOlfactometerEvents
            -> Take(Count=1) => #15
            #13, #15 -> Zip
            -> AllenNeuralDynamics.HarpUtils.CreateOdorMix => #17
              channel3AsCarrier=true
              PercentageChannel0=0
              PercentageChannel1=0
              PercentageChannel2=0
              PercentageChannel3=NaN
              Channel3AsCarrier=true
              TargetOdorFlow=100
              TotalFlow=1000
            -> MemberSelector(Selector=ChannelsTargetFlow) => #18
            #17 -> MemberSelector(Selector=OdorValveState) => #19
            #18, #19 -> Merge
            -> MulticastSubject HarpOlfactometerCommands

        GroupWorkflow ArmOdor
            BehaviorSubject<AindVrForagingDataSchema.TaskLogic.OdorSpecification> ArmOdor

            SubscribeSubject ArmOdor
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ArmOdor)
            -> MulticastSubject SoftwareEvent

            SubscribeSubject ArmOdor
            -> MemberSelector(Selector="Index,Concentration") => #5
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.OdorControl.UseChannel3AsCarrier)
            -> PropertyMapping(Channel3AsCarrier) => #8
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.OdorControl.TargetOdorFlow)
            -> PropertyMapping(TargetOdorFlow) => #11
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.OdorControl.TargetTotalFlow)
            -> PropertyMapping(TotalFlow) => #14
            #5, #8, #11, #14 -> AllenNeuralDynamics.HarpUtils.CreateOdorMix => #15
              channel3AsCarrier=false
              PercentageChannel0=0
              PercentageChannel1=0
              PercentageChannel2=0
              PercentageChannel3=0
              Channel3AsCarrier=false
              TargetOdorFlow=100
              TotalFlow=1000
            -> MemberSelector(Selector=ChannelsTargetFlow) => #16
            #15 -> MemberSelector(Selector=OdorValveState) => #17
            #16, #17 -> Merge
            -> MulticastSubject HarpOlfactometerCommands

            PropertySource<Harp.Olfactometer.CreateDO1SyncPayload,Harp.Olfactometer.DO1SyncConfig>(MemberName=DO1Sync, Value=None)
            -> CreateOdorMix
              channel3AsCarrier=false
              PercentageChannel0=0
              PercentageChannel1=0
              PercentageChannel2=0
              PercentageChannel3=0
              Channel3AsCarrier=false
              TargetOdorFlow=100
              TotalFlow=1000

        GroupWorkflow EndValveControl
            SubscribeSubject HarpOlfactometerEvents
            -> Take(Count=1)
            -> BooleanProperty(Value=false)
            -> BehaviorSubject OdorEndValveState

            SubscribeSubject OdorEndValveState => #4
            -> Condition OdorPath
                WorkflowInput Source1
                -> WorkflowOutput
            -> PropertySource<Harp.Olfactometer.CreateEndValvesStatePayload,Harp.Olfactometer.EndValves>(MemberName=EndValvesState, Value=EndValve0) => #6
            #4 -> BitwiseNot
            -> Condition CarrierPath
                WorkflowInput Source1
                -> WorkflowOutput
            -> PropertySource<Harp.Olfactometer.CreateEndValvesStatePayload,Harp.Olfactometer.EndValves>(MemberName=EndValvesState, Value=None) => #9
            #6, #9 -> Merge
            -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.EndValveState)
            -> MulticastSubject HarpOlfactometerCommands

        GroupWorkflow WaitForMaxOpenTime
            SubscribeSubject OdorEndValveState => #0
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.OdorControl.ValveMaxOpenTime)
            -> Bonsai.Scripting.Expressions.ExpressionTransform ToSeconds
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(MaxOpenTime) => #4
            #0, #4 -> IncludeWorkflow(Path=Extensions\WaitForMaxOpenTime.bonsai, MaxOpenTime=PT5S)
            -> MulticastSubject OdorEndValveState
            -> WorkflowOutput

    GroupWorkflow RewardControl
        GroupWorkflow WaterValve
            BehaviorSubject<System.Double> ValveOpenTimeMs
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseSupplyPort0)
            -> MulticastSubject HarpBehaviorCommands

            BehaviorSubject<System.Reactive.Unit> TriggerValve
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort0))
            -> MulticastSubject HarpBehaviorCommands
            -> WorkflowOutput

        BonVision.OptionalFloatProperty(Value=0, HasValue=true)
        -> Take(Count=1)
        -> BehaviorSubject GiveReward
        -> BehaviorSubject ForceGiveReward

        SubscribeSubject GiveReward
        -> PublishSubject HotGiveReward

        SubscribeSubject GiveReward => #7
        Annotation ManualReward(Text="This is just to allow differential logging of manual rewards")
        -> SubscribeSubject ForceGiveReward => #9
        #7, #9 -> Merge
        -> Condition HasValue
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Condition GreaterThan0 => #13
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Calibration.WaterValve)
        -> MemberSelector(Selector=Output) => #16
        #13, #16 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToTime => #18
          Expression: ((Item1 * 0.001) - Item2.Offset) / Item2.Slope
        Annotation ToMilliseconds(Text="") => #19
        #18, #19 -> Multiply(Operand=DoubleProperty(Value=1000))
        -> InputMapping(Value(Selector=it))
        -> IntProperty(Value=0)
        -> Condition GreaterThan0
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> MulticastSubject ValveOpenTimeMs
        -> Unit
        -> MulticastSubject TriggerValve

        SubscribeSubject GiveReward
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=GiveReward)
        -> MulticastSubject SoftwareEvent

        SubscribeSubject ForceGiveReward
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ForceGiveReward)
        -> MulticastSubject SoftwareEvent

    GroupWorkflow MovableSpoutControl
        Annotation "Start with the spout at max distance"(Text="Start with the spout at max distance")
        -> BooleanProperty(Value=true)
        -> Take(Count=1)
        -> BehaviorSubject SpoutAvailable

        SubscribeSubject SpoutAvailable => #4
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.MovableSpoutControl)
        -> MemberSelector(Selector=Enabled) => #7
        #4, #7 -> WithLatestFrom
        -> Condition IsEnabled
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1) => #10
        SubscribeSubject SpoutParkingPositions => #11
        #10, #11 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform GetPosition
          Expression: it.Item1 ? it.Item2.ResetPosition : it.Item2.RetractedPosition
        -> MulticastSubject MoveTo

        GroupWorkflow InitialState => #15
            SubscribeSubject ManipulatorPosition
            -> Take(Count=1) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Manipulator)
            -> MemberSelector(Selector=AdditionalSettings.SpoutAxis)
            -> PropertyMapping(Axis) => #5
            #1, #5 -> SelectMany CalculateRetractedPosition => #6
                ExternalizedMapping(Value(DisplayName=Axis))
                -> PropertySource<AllenNeuralDynamics.AindManipulator.AxisConfiguration,AllenNeuralDynamics.AindManipulator.Axis>(MemberName=Axis, Value=Y1)
                -> Take(Count=1)
                -> AsyncSubject SpoutAxis

                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject SpoutResetPosition

                SubscribeSubject SpoutResetPosition => #7
                Unit
                -> Take(Count=1)
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=0, Z=0) => #10
                SubscribeSubject TaskLogicParameters
                -> MemberSelector(Selector=OperationControl.MovableSpoutControl)
                -> MemberSelector(Selector=RetractingDistance) => #13
                #10, #13 -> Zip => #14
                SubscribeSubject SpoutAxis
                -> PropertyMapping(Axis) => #16
                #14, #16 -> ModifyManipulatorPosition(Axis=None) => #17
                #7, #17 -> Zip
                -> Subtract
                -> Take(Count=1)
                -> WorkflowOutput
            #1, #6 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
              Expression: new(Item1 as ResetPosition, Item2 as RetractedPosition)
            -> AsyncSubject SpoutParkingPositions

            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.MovableSpoutControl)
            -> MemberSelector(Selector=Enabled)
            -> BitwiseNot
            -> MulticastSubject SpoutAvailable

            SubscribeSubject GiveReward
            -> BooleanProperty(Value=false) => #16
            SubscribeSubject SpoutAvailable
            -> Condition Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> BooleanProperty(Value=true) => #19
            #16, #19 -> Merge
            -> CreateObservable DelayWithdraw
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject State

                SubscribeSubject TaskLogicParameters
                -> MemberSelector(Selector=OperationControl.MovableSpoutControl)
                -> MemberSelector(Selector=TimeToCollectAfterReward)
                -> Bonsai.Scripting.Expressions.ExpressionTransform FromSeconds
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime)
                -> Bonsai.Shaders.Timer(DueTime=PT0S) => #8
                SubscribeSubject State => #9
                #8, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> Switch
            -> Condition IsWithdraw?
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> MulticastSubject SpoutAvailable => #24
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.MovableSpoutControl)
            -> MemberSelector(Selector=Enabled)
            -> Condition => #28
                WorkflowInput Source1
                -> WorkflowOutput
            #24, #28 -> SubscribeWhen
        SubscribeSubject StartExperiment
        -> Bonsai.Shaders.SampleOnRenderFrame => #17
        #15, #17 -> SubscribeWhen

    GroupWorkflow FeedbackControl
        BehaviorSubject<System.Reactive.Unit> ChoiceFeedback

        SubscribeSubject ChoiceFeedback
        -> PublishSubject HotChoiceFeedback

        SubscribeSubject ChoiceFeedback
        -> Unit
        -> MulticastSubject AudioTrigger
        -> WorkflowOutput

        SubscribeSubject ChoiceFeedback
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ChoiceFeedback)
        -> MulticastSubject SoftwareEvent

        SubscribeSubject HarpBehaviorEvents
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> MulticastSubject SpoutAvailable

    GroupWorkflow Lickometer
        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.TimestampedLickState) => #1
        -> MemberSelector(Selector=Value)
        -> BitwiseAnd(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplit.LickChannels>(Value=Channel0))
        -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> DistinctUntilChanged => #5
        #5, #1 -> WithLatestFrom
        -> PublishSubject LickometerState
        -> Condition IsLickOnset
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2.Seconds)
        -> PublishSubject LickEvent

        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.Channel0UntriggerThreshold)
        -> BehaviorSubject LickometerUntriggerThreshold

        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.Channel0TriggerThreshold)
        -> BehaviorSubject LickometerTriggerThreshold

        SubscribeSubject HarpLickometerEvents
        -> Bonsai.Harp.CreateMessage
          MessageType=Write
          Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=Off, OperationLed=Off, Heartbeat=Enabled)
        -> Take(Count=1)
        -> MulticastSubject HarpLickometerCommands

        BehaviorSubject<System.Boolean> IncrementLickometerTrigger
        -> Bonsai.Scripting.Expressions.ExpressionTransform "it ? 1 : -1"
          Expression: it ? 1 : -1
        -> SelectMany Offset
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Offset

            SubscribeSubject LickometerTriggerThreshold
            -> Take(Count=1) => #4
            SubscribeSubject Offset => #5
            #4, #5 -> CombineLatest
            -> Add
            -> WorkflowOutput
        -> AllenNeuralDynamics.LicketySplit.Format(MessageType=Write, Register=AllenNeuralDynamics.LicketySplit.Channel0TriggerThreshold)
        -> MulticastSubject HarpLickometerCommands

        BehaviorSubject<System.Boolean> IncrementLickometerUntrigger
        -> Bonsai.Scripting.Expressions.ExpressionTransform "it ? 1 : -1"
          Expression: it ? 1 : -1
        -> SelectMany Offset
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Offset

            SubscribeSubject LickometerUntriggerThreshold
            -> Take(Count=1) => #4
            SubscribeSubject Offset => #5
            #4, #5 -> CombineLatest
            -> Add
            -> WorkflowOutput
        -> AllenNeuralDynamics.LicketySplit.Format(MessageType=Write, Register=AllenNeuralDynamics.LicketySplit.Channel0UntriggerThreshold)
        -> MulticastSubject HarpLickometerCommands

    GroupWorkflow CameraControl
        SubscribeSubject HarpBehaviorEvents
        -> Take(Count=1) => #1
        SubscribeSubject TextureBank => #2
        SubscribeSubject TriggeredCamerasReady => #3
        #1, #2, #3 -> Zip
        -> Take(Count=1)
        -> Bonsai.Shaders.Delay(DueTime=PT2S)
        -> BooleanProperty(Value=true)
        -> MulticastSubject CameraState

        BehaviorSubject<System.Boolean> CameraState => #9
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0)) => #11
        #9 -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStopCamerasPayload(StopCameras=CameraOutput0)) => #14
        #11, #14 -> Merge
        -> MulticastSubject HarpBehaviorCommands

        SubscribeSubject StartLogging
        -> Take(Count=1)
        -> BooleanProperty(Value=false)
        -> MulticastSubject CameraState

        SubscribeSubject StartExperiment
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> MulticastSubject CameraState

        SubscribeSubject EndExperiment
        -> Take(Count=1)
        -> BooleanProperty(Value=false)
        -> MulticastSubject CameraState

    GroupWorkflow Thermistor/Pressure
        SubscribeSubject HarpSniffDetectorEvents
        -> AllenNeuralDynamics.SniffDetector.Parse(Register=AllenNeuralDynamics.SniffDetector.TimestampedRawVoltage) => #1
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpSniffDetector)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #4
        #1, #4 -> SubscribeWhen
        -> PublishSubject ThermistorData

    GroupWorkflow Treadmill
        SubscribeSubject StartLogging
        -> SelectMany ClearCurrentLimit
            Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.05S) => #0
            ExternalizedMapping(Count(DisplayName=RetryCount)) => #1
            #0, #1 -> Take(Count=5)
            -> ElementIndex
            -> Sink ThrowOnRetryCount
                WorkflowInput Source1
                -> Last
                -> AllenNeuralDynamics.Core.ThrowException(Message="Number of attempts ot clear the current limit state register has been exceeded.")
                -> WorkflowOutput
            -> AllenNeuralDynamics.Treadmill.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Treadmill.CreateTorqueLimitStatePayload(TorqueLimitState=0))
            -> MulticastSubject HarpTreadmillCommands => #6
            SubscribeSubject HarpTreadmillEvents
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Write)
            -> AllenNeuralDynamics.Treadmill.Parse(Register=AllenNeuralDynamics.Treadmill.TorqueLimitState)
            -> Equal(Operand=WorkflowProperty<System.Byte>(Value=0))
            -> Condition => #11
                WorkflowInput Source1
                -> WorkflowOutput
            #6, #11 -> Zip
            -> Take(Count=1)
            -> WorkflowOutput
        -> Take(Count=1)
        -> FloatProperty(Value=0)
        -> Take(Count=1)
        -> BehaviorSubject TreadmillFriction

        SubscribeSubject HarpTreadmillEvents
        -> AllenNeuralDynamics.Treadmill.Parse(Register=AllenNeuralDynamics.Treadmill.SensorDataDispatchRate)
        -> BehaviorSubject TreadmillSamplingRate

        GroupWorkflow DetermineTreadmillScaling
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpTreadmill.Calibration)
            -> MemberSelector(Selector=Output) => #2
            -> MemberSelector(Selector=WheelDiameter)
            -> Bonsai.Scripting.Expressions.ExpressionTransform Perimeter => #4
              Expression: it * Math.Pi
            #2 -> MemberSelector(Selector=PulsesPerRevolution) => #5
            #4, #5 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform CentimetersPerTick => #7
              Expression: Item1 / Item2
            #2 -> MemberSelector(Selector=InvertDirection) => #8
            #7, #8 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item2 ? -1.0 * Item1 : Item1
            -> WorkflowOutput
        -> AsyncSubject TreadmillScaling

        SubscribeSubject HarpTreadmillEvents
        -> AllenNeuralDynamics.Treadmill.Parse(Register=AllenNeuralDynamics.Treadmill.TimestampedSensorData) => #12
        -> Skip(Count=1) => #13
        #13, #12 -> Zip => #14
        -> Bonsai.Scripting.Expressions.ExpressionTransform CalculateDisplacement => #15
          Expression: single(Item1.Value.Encoder - Item2.Value.Encoder)
        SubscribeSubject TreadmillScaling
        -> PropertyMapping(RangeMax) => #17
        #15, #17 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=-0.005752427954571154, RescaleType=Linear) => #18
        #18, #14 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform CalculateInstantSpeed => #20
          Expression:
            new(
            Item1 as Displacement,
            (Item1 / single(Item2.Item1.Seconds - Item2.Item2.Seconds)) as InstantVelocity
            )
        #14 -> MemberSelector(Selector=Item1.Seconds) => #21
        #20, #21 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject EncoderSample

        SubscribeSubject TreadmillFriction
        -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=1, RescaleType=Clamp)
        -> DistinctUntilChanged => #27
        GroupWorkflow GetInterpolator
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpTreadmill.Calibration)
            -> MemberSelector(Selector=Output)
            -> MemberSelector(Selector=BrakeLookupCalibration)
            -> Merge => #4
            -> Index(Operand=IntProperty(Value=0)) => #5
            #4 -> Index(Operand=IntProperty(Value=1)) => #6
            #5, #6 -> Zip
            -> ToList
            -> Bonsai.Numerics.Interpolation.CreateLinear
            -> WorkflowOutput
        -> PropertyMapping(Interpolation) => #29
        #27, #29 -> Bonsai.Numerics.Interpolation.Interpolate
        -> AllenNeuralDynamics.Treadmill.Format(MessageType=Write, Register=AllenNeuralDynamics.Treadmill.BrakeCurrentSetPoint)
        -> CreateObservable SendMessage
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject HarpMessage

            SubscribeSubject HarpTreadmillEvents
            -> AllenNeuralDynamics.Treadmill.Parse(Register=AllenNeuralDynamics.Treadmill.TimestampedTorque) => #4
            SubscribeSubject HarpMessage => #5
            ExternalizedMapping(DueTime(DisplayName=RetryTimeout))
            -> Bonsai.Shaders.Timer(DueTime=PT0.1S, Period=PT0.1S) => #7
            SubscribeSubject HarpMessage => #8
            #7, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #10
            #5, #10 -> Merge
            -> MulticastSubject HarpTreadmillCommands => #12
            #4, #12 -> Zip
            -> Take(Count=1)
            -> WorkflowOutput
        -> Switch

    GroupWorkflow AudioControl
        BehaviorSubject<System.Double> AudioDuration
        -> Multiply(Operand=IntProperty(Value=1000))
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseDO2)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Int32> AudioFrequency
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PwmFrequencyDO2)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Reactive.Unit> AudioTrigger
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStartPayload(PwmStart=PwmDO2))
        -> MulticastSubject HarpBehaviorCommands

        GroupWorkflow InitialSettings => #10
            SubscribeSubject HarpBehaviorEvents
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmDutyCycleDO2Payload(PwmDutyCycleDO2=50))
            -> Take(Count=1)
            -> MulticastSubject HarpBehaviorCommands

            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.AudioControl)
            -> MemberSelector(Selector=Duration)
            -> MulticastSubject AudioDuration

            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.AudioControl)
            -> MemberSelector(Selector=Frequency)
            -> MulticastSubject AudioFrequency
        SubscribeSubject HarpBehaviorEvents
        -> Take(Count=1) => #12
        #10, #12 -> SubscribeWhen

Defer TaskLogic => #16
    IncludeWorkflow(Path=Extensions\CorridorFactory.bonsai, CorridorLength=120, CorridorWidth=40, CorridorHeight=30)
    IncludeWorkflow(Path=Extensions\PositionControl.bonsai)

    Annotation(Text="")
    -> GroupWorkflow VariableUpdaters
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=Updaters)
        -> Take(Count=1)
        -> AsyncSubject VariableUpdaters

        SubscribeSubject GiveReward
        -> BooleanProperty(Value=true)
        -> IncludeWorkflow(Path=Extensions\UpdateVariable.bonsai, UpdaterKey=StopDurationOffset, DefaultValue=0)
        -> BehaviorSubject StopDurationOffset
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=UpdaterStopDurationOffset)
        -> MulticastSubject UpdaterEvents

        SubscribeSubject GiveReward
        -> BooleanProperty(Value=false) => #11
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.PositionControl.VelocityThreshold)
        -> PropertyMapping(DefaultValue) => #14
        #11, #14 -> IncludeWorkflow(Path=Extensions\UpdateVariable.bonsai, UpdaterKey=StopVelocityThreshold, DefaultValue=0)
        -> MulticastSubject StopVelocityThreshold
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=UpdaterStopVelocityThreshold)
        -> MulticastSubject UpdaterEvents

        SubscribeSubject GiveReward
        -> BooleanProperty(Value=true)
        -> IncludeWorkflow(Path=Extensions\UpdateVariable.bonsai, UpdaterKey=RewardDelayOffset, DefaultValue=0)
        -> BehaviorSubject RewardDelayOffset
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=UpdaterRewardDelayOffset)
        -> MulticastSubject UpdaterEvents

    Disable Defer ForagingSeasons => #4
        SubscribeSubject ActivePatch
        BehaviorSubject<AindVrForagingDataSchema.TaskLogic.VirtualSite> ActiveSite
        BehaviorSubject<AindVrForagingDataSchema.TaskLogic.Block> CurrentBlock
        BehaviorSubject<OpenCV.Net.Mat> TransitionMatrix
        BehaviorSubject<System.Collections.Generic.IDictionary(System.Int32,AindVrForagingDataSchema.TaskLogic.PatchStatistics)> PatchStatistics

        Annotation MakeSite(Text="")
        -> BehaviorSubject<AindVrForagingDataSchema.TaskLogic.VirtualSite> SiteSpecs

        BehaviorSubject<System.Int32> ActiveStateIndex
        BehaviorSubject<AindVrForagingDataSchema.TaskLogic.PatchStatistics> ActivePatch
        IncludeWorkflow(Path=Extensions\PatchGeneration.bonsai)

        Bonsai.Shaders.Timer(DueTime=PT0S)
        -> Take(Count=1) => #11
        SubscribeSubject ActivePatch
        -> MemberSelector(Selector=VirtualSiteGeneration.InterPatch)
        -> PropertyMapping => #14
          Label(Selector=Label)
          Contrast(Selector=RenderSpecification.Contrast)
          LengthDistribution(Selector=LengthDistribution)
          TreadmillSpecification(Selector=TreadmillSpecification)
        #11, #14 -> IncludeWorkflow(Path=Extensions\AddInterPatchSite.bonsai)
        -> SelectMany Patch => #16
            WorkflowInput Source1
            -> Take(Count=1)
            -> BehaviorSubject EntrySite

            BooleanProperty(Value=false)
            -> Take(Count=1)
            -> BehaviorSubject HasRefusedLastReward

            SubscribeSubject ChoiceFeedback
            -> BooleanProperty(Value=false)
            -> MulticastSubject HasRefusedLastReward

            SubscribeSubject EntrySite
            -> Take(Count=1) => #10
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.InterSite)
            -> PropertyMapping => #13
              LengthDistribution(Selector=LengthDistribution)
              Contrast(Selector=RenderSpecification.Contrast)
              Label(Selector=Label)
              TreadmillSpecification(Selector=TreadmillSpecification)
            #10, #13 -> IncludeWorkflow(Path=Extensions\AddGapSite.bonsai)
            -> BehaviorSubject FirstPatchSite

            SubscribeSubject FirstPatchSite
            -> Take(Count=1)
            -> Condition NotHasRefusedLast
                WorkflowInput Source1 => #0
                SubscribeSubject HasRefusedLastReward => #1
                #0, #1 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> BitwiseNot
                -> WorkflowOutput
            -> SelectMany ResetHasRefusedLast => #19
                BooleanProperty(Value=true)
                -> MulticastSubject HasRefusedLastReward
                -> Take(Count=1) => #2
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Take(Count=1)
                -> WorkflowOutput
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.RewardSite)
            -> PropertyMapping => #22
              LengthDistribution(Selector=LengthDistribution)
              Contrast(Selector=RenderSpecification.Contrast)
              Label(Selector=Label)
              TreadmillSpecification(Selector=TreadmillSpecification)
            #19, #22 -> IncludeWorkflow(Path=Extensions\AddRewardSite.bonsai) => #23
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.InterSite)
            -> PropertyMapping => #26
              LengthDistribution(Selector=LengthDistribution)
              Contrast(Selector=RenderSpecification.Contrast)
              Label(Selector=Label)
              TreadmillSpecification(Selector=TreadmillSpecification)
            #23, #26 -> IncludeWorkflow(Path=Extensions\AddGapSite.bonsai)
            -> SelectMany WaitForSiteOutcome
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject PreviousSite

                SubscribeSubject CurrentPosition
                -> MemberSelector(Selector=Value)
                -> MemberSelector(Selector=Z) => #5
                SubscribeSubject PreviousSite
                -> MemberSelector(Selector="Length,StartPosition")
                -> Add => #8
                #5, #8 -> CombineLatest
                -> GreaterThan
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1) => #12
                SubscribeSubject PreviousSite => #13
                #12, #13 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> MulticastSubject FirstPatchSite
            -> Take(Count=1)
            -> Repeat
            -> Condition HasExited
                SubscribeSubject HasRefusedLastReward
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        -> Condition HasPostPatch
            WorkflowInput Source1 => #0
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.PostPatch)
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsNull
              Expression: it == null
            -> BitwiseNot => #4
            #0, #4 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> SelectMany PostPatchLogic => #18
            WorkflowInput Source1 => #0
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.PostPatch)
            -> PropertyMapping => #3
              Label(Selector=Label)
              Contrast(Selector=RenderSpecification.Contrast)
              LengthDistribution(Selector=LengthDistribution)
              TreadmillSpecification(Selector=TreadmillSpecification)
            #0, #3 -> IncludeWorkflow(Path=Extensions\AddPostPatchSite.bonsai)
            -> SelectMany WaitForSiteOutcome
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject PreviousSite

                SubscribeSubject CurrentPosition
                -> MemberSelector(Selector=Value)
                -> MemberSelector(Selector=Z) => #5
                SubscribeSubject PreviousSite
                -> MemberSelector(Selector="Length,StartPosition")
                -> Add => #8
                #5, #8 -> CombineLatest
                -> GreaterThan
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1) => #12
                SubscribeSubject PreviousSite => #13
                #12, #13 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> WorkflowOutput
        #16 -> Condition HasNotPostPatch => #19
            WorkflowInput Source1 => #0
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.PostPatch)
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsNull => #3
              Expression: it == null
            #0, #3 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        #18, #19 -> Merge
        -> IncludeWorkflow(Path=Extensions\UpdateState.bonsai)
        -> Repeat
    Disable SubscribeSubject TaskLogicParameters
    -> Disable Take(Count=1)
    -> Disable MemberSelector(Selector=TaskModeSettings)
    -> Disable AindVrForagingDataSchema.TaskLogic.MatchTaskModeSettings(Type=TypeMapping<AindVrForagingDataSchema.TaskLogic.ForagingSettings>)
    -> Disable Take(Count=1) => #9
    #4, #9 -> Disable SubscribeWhen

    Defer ForagingSeasons => #11
        GroupWorkflow PatchGeneration
            BehaviorSubject<AindVrForagingDataSchema.TaskLogic.Block> CurrentBlock
            BehaviorSubject<AindVrForagingDataSchema.TaskLogic.PatchStatistics> ActivePatch

            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=Environment)
            -> AsyncSubject Blocks

            SubscribeSubject Blocks
            -> IncludeWorkflow(Path=Extensions\SolveBlockTransitions.bonsai) => #6
            Annotation "Updates asynch"(Text="") => #7
            #6, #7 -> MulticastSubject CurrentBlock
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=Block)
            -> MulticastSubject SoftwareEvent

            SubscribeSubject CurrentBlock
            -> SelectMany GetPatches
                WorkflowInput Source1
                -> MemberSelector(Selector=EnvironmentStatistics)
                -> MemberSelector(Selector=Patches)
                -> Merge
                -> ToDictionary(KeySelector=StateIndex, ElementSelector=it)
                -> Take(Count=1)
                -> WorkflowOutput
            -> BehaviorSubject PatchStatistics

            SubscribeSubject CurrentBlock
            -> MemberSelector(Selector=EnvironmentStatistics.TransitionMatrix)
            -> FormatTransitionMatrix(NormalizeRows=true)
            -> BehaviorSubject TransitionMatrix

            SubscribeSubject CurrentBlock
            -> CreateObservable WithinBlockLogic
                SubscribeSubject CurrentBlock
                -> MemberSelector(Selector=EnvironmentStatistics.FirstStateOccupancy) => #1
                SubscribeSubject TransitionMatrix => #2
                #1, #2 -> Zip
                -> DrawFirstState => #4
                Annotation InitializationNote => #5
                  Text: We only really need to initialize the very first patch of the session. The rest is going to be taken care of by the task logic at the end of each patch.
                #4, #5 -> Take(Count=1)
                -> BehaviorSubject ActiveStateIndex

                SubscribeSubject PatchStatistics
                -> CreatePatchManager
                -> BehaviorSubject PatchManager

                SubscribeSubject ActivePatch
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ActivePatch)
                -> MulticastSubject SoftwareEvent

                BehaviorSubject<System.Tuple(System.Double,System.Tuple(System.Int32,AindVrForagingDataSchema.TaskLogic.ClampedRate,AindVrForagingDataSchema.TaskLogic.ClampedRate,AindVrForagingDataSchema.TaskLogic.ClampedRate))> UpdatePatchStates
                -> CreateObservable Update
                    WorkflowInput Source1 => #0
                    SubscribeSubject PatchManager
                    -> Take(Count=1) => #2
                    #0, #2 -> WithLatestFrom
                    -> InputMapping(Selector=Item1, PatchManager(Selector=Item2))
                    -> UpdatePatchManager
                    -> Take(Count=1)
                    -> MulticastSubject PatchManager
                    -> WorkflowOutput
                -> Concat

                SubscribeSubject PatchStatistics
                -> Merge
                -> CreateObservable OutsidePatch
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject ThisPatch
                    -> MemberSelector(Selector=Key)
                    -> AsyncSubject ThisPatchIndex

                    Defer SkipIfNull => #5
                        SubscribeSubject Tick => #0
                        SubscribeSubject ThisPatch
                        -> MemberSelector => #2
                          Selector: Value.StateIndex,Value.RewardSpecification.OutsideRewardFunction.Amount,Value.RewardSpecification.OutsideRewardFunction.Probability,Value.RewardSpecification.OutsideRewardFunction.Available
                        #0, #2 -> WithLatestFrom
                        -> WorkflowOutput

                        SubscribeSubject ActivePatch => #5
                        SubscribeSubject ThisPatch
                        -> MemberSelector(Selector=Value) => #7
                        SubscribeSubject ActiveSite => #8
                        #5, #7, #8 -> CombineLatest
                        -> IsOutsideRewardFunction
                        -> BehaviorSubject IsActive

                        SubscribeSubject IsActive
                        -> DistinctUntilChanged
                        -> Condition
                            WorkflowInput Source1
                            -> WorkflowOutput
                        -> CreateObservable GenerateTick
                            Bonsai.Shaders.UpdateFrame => #0
                            SubscribeSubject ThisPatch
                            -> MemberSelector(Selector=Value)
                            -> MemberSelector(Selector=RewardSpecification)
                            -> MemberSelector(Selector=OutsideRewardFunction.Delay)
                            -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
                            -> PropertyMapping(DueTime) => #6
                            #0, #6 -> Bonsai.Shaders.Delay(DueTime=PT0S)
                            -> MemberSelector(Selector=TimeStep)
                            -> MemberSelector(Selector=ElapsedRealTime) => #9
                            SubscribeSubject IsActive
                            -> BitwiseNot
                            -> Condition => #12
                                WorkflowInput Source1
                                -> WorkflowOutput
                            #9, #12 -> TakeUntil
                            -> WorkflowOutput
                        -> Switch
                        -> PublishSubject Tick
                    SubscribeSubject ThisPatch
                    -> MemberSelector(Selector=Value)
                    -> MemberSelector(Selector=RewardSpecification)
                    -> MemberSelector(Selector=OutsideRewardFunction)
                    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #10
                    #5, #10 -> SubscribeWhen
                    -> WorkflowOutput
                -> Merge
                -> MulticastSubject UpdatePatchStates

                Disable GroupWorkflow PatchTransitionLogic
                    SubscribeSubject ActiveStateIndex
                    -> CreateObservable UpdateState
                        WorkflowInput Source1
                        -> Take(Count=1)
                        -> AsyncSubject PatchIndex

                        FloatProperty(Value=0)
                        -> Take(Count=1)
                        -> MulticastSubject DepletionVariable

                        SubscribeSubject PatchStatistics => #6
                        SubscribeSubject PatchIndex
                        -> PropertyMapping(Value) => #8
                        #6, #8 -> Index(Operand=IntProperty(Value=0))
                        -> Take(Count=1)
                        -> AsyncSubject ThisPatch

                        SubscribeSubject ThisPatch
                        -> MemberSelector(Selector=RewardSpecification)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it != null
                        -> Take(Count=1)
                        -> AsyncSubject HasRewardSpec

                        GroupWorkflow DetermineDepletionRule => #17
                            SubscribeSubject ThisPatch
                            -> Take(Count=1)
                            -> MemberSelector(Selector=RewardSpecification.RewardFunction.DepletionRule) => #2
                            -> Condition OnChoice
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Value) => #1
                                #0, #1 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.TaskLogic.DepletionRule>(Value=""))
                                -> WorkflowOutput
                            -> CreateObservable OnChoice => #4
                                SubscribeSubject HotChoiceFeedback
                                -> IntProperty(Value=1)
                                -> Accumulate
                                -> Subtract(Operand=IntProperty(Value=1))
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression: single(it)
                                -> WorkflowOutput
                            #2 -> Condition OnReward
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Value) => #1
                                #0, #1 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.TaskLogic.DepletionRule>(Value=""))
                                -> WorkflowOutput
                            -> CreateObservable OnReward => #6
                                SubscribeSubject HotGiveReward
                                -> Condition HasValue
                                    WorkflowInput Source1
                                    -> MemberSelector(Selector=HasValue)
                                    -> WorkflowOutput
                                -> IntProperty(Value=1)
                                -> Accumulate
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression: single(it)
                                -> WorkflowOutput
                            #2 -> Condition OnTime
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Value) => #1
                                #0, #1 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.TaskLogic.DepletionRule>(Value=""))
                                -> WorkflowOutput
                            -> CreateObservable OnTime => #8
                                Bonsai.Shaders.UpdateFrame
                                -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
                                -> Accumulate => #2
                                ExternalizedMapping(Period(DisplayName=UpdatePeriod))
                                -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT1S) => #4
                                #2, #4 -> Sample
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression: single(it)
                                -> WorkflowOutput
                            #2 -> Condition OnDistance
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Value) => #1
                                #0, #1 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.TaskLogic.DepletionRule>(Value=""))
                                -> WorkflowOutput
                            -> CreateObservable OnDistance => #10
                                SubscribeSubject CurrentPosition
                                -> MemberSelector(Selector=Value.Z) => #1
                                SubscribeSubject CurrentPosition
                                -> MemberSelector(Selector=Value.Z)
                                -> Take(Count=1) => #4
                                #1, #4 -> CombineLatest
                                -> Subtract => #6
                                ExternalizedMapping(Period(DisplayName=UpdatePeriod))
                                -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT1S) => #8
                                #6, #8 -> Sample
                                -> WorkflowOutput
                            #4, #6, #8, #10 -> Merge
                            -> Switch
                            -> MulticastSubject DepletionVariable
                        SubscribeSubject HasRewardSpec
                        -> Condition => #19
                            WorkflowInput Source1
                            -> WorkflowOutput
                        #17, #19 -> SubscribeWhen => #20
                        GroupWorkflow DefaultTo0 => #21
                            SubscribeSubject HasRewardSpec
                            -> BitwiseNot
                            -> Condition
                                WorkflowInput Source1
                                -> WorkflowOutput
                            -> FloatProperty(Value=0)
                            -> MulticastSubject DepletionVariable
                            -> Unit
                            -> WorkflowOutput
                        #20, #21 -> Concat

                        GroupWorkflow DetermineRewardSpecs => #23
                            SubscribeSubject DepletionVariable => #0
                            SubscribeSubject ThisPatch
                            -> MemberSelector(Selector=RewardSpecification.RewardFunction)
                            -> MemberSelector(Selector=Available) => #3
                            #0, #3 -> WithLatestFrom
                            -> AindVrForagingDataSchema.TaskLogic.ApplyRewardFunction(Clamp=true, Value=0)
                            -> MulticastSubject PatchRewardAvailable

                            SubscribeSubject DepletionVariable => #7
                            SubscribeSubject ThisPatch
                            -> MemberSelector(Selector=RewardSpecification.RewardFunction)
                            -> MemberSelector(Selector=Amount) => #10
                            #7, #10 -> WithLatestFrom
                            -> AindVrForagingDataSchema.TaskLogic.ApplyRewardFunction(Clamp=true, Value=0)
                            -> MulticastSubject PatchRewardAmount

                            SubscribeSubject DepletionVariable => #14
                            SubscribeSubject ThisPatch
                            -> MemberSelector(Selector=RewardSpecification.RewardFunction)
                            -> MemberSelector(Selector=Probability) => #17
                            #14, #17 -> WithLatestFrom
                            -> AindVrForagingDataSchema.TaskLogic.ApplyRewardFunction(Clamp=true, Value=0)
                            -> MulticastSubject PatchRewardProbability
                        SubscribeSubject HasRewardSpec
                        -> Condition => #25
                            WorkflowInput Source1
                            -> WorkflowOutput
                        #23, #25 -> SubscribeWhen => #26
                        GroupWorkflow DefaultTo0 => #27
                            SubscribeSubject HasRewardSpec
                            -> BitwiseNot
                            -> Condition
                                WorkflowInput Source1
                                -> WorkflowOutput
                            -> FloatProperty(Value=0)
                            -> MulticastSubject PatchRewardAvailable
                            -> MulticastSubject PatchRewardAmount
                            -> MulticastSubject PatchRewardProbability
                            -> Unit
                            -> WorkflowOutput
                        #26, #27 -> Concat

                        SubscribeSubject ThisPatch
                        -> MulticastSubject ActivePatch

                        SubscribeSubject DepletionVariable
                        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=DepletionVariable)
                        -> MulticastSubject SoftwareEvent
                    -> Switch

                GroupWorkflow SiteFactory
                    BehaviorSubject<AindVrForagingDataSchema.TaskLogic.VirtualSite> ActiveSite

                    BehaviorSubject<AindVrForagingDataSchema.TaskLogic.VirtualSite> SiteSpecs
                    -> IncludeWorkflow(Path=Extensions\InstantiateSite.bonsai)
                    -> Merge

                Bonsai.Shaders.Timer(DueTime=PT0S)
                -> Take(Count=1) => #25
                SubscribeSubject ActivePatch
                -> MemberSelector(Selector=VirtualSiteGeneration.InterPatch)
                -> PropertyMapping => #28
                  Label(Selector=Label)
                  Contrast(Selector=RenderSpecification.Contrast)
                  LengthDistribution(Selector=LengthDistribution)
                  TreadmillSpecification(Selector=TreadmillSpecification)
                #25, #28 -> IncludeWorkflow(Path=Extensions\AddInterPatchSite.bonsai)
                -> SelectMany Patch => #30
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> BehaviorSubject EntrySite

                    BooleanProperty(Value=false)
                    -> Take(Count=1)
                    -> BehaviorSubject HasRefusedLastReward

                    SubscribeSubject ChoiceFeedback
                    -> BooleanProperty(Value=false)
                    -> MulticastSubject HasRefusedLastReward

                    SubscribeSubject EntrySite
                    -> Take(Count=1) => #10
                    SubscribeSubject ActivePatch
                    -> MemberSelector(Selector=VirtualSiteGeneration.InterSite)
                    -> PropertyMapping => #13
                      LengthDistribution(Selector=LengthDistribution)
                      Contrast(Selector=RenderSpecification.Contrast)
                      Label(Selector=Label)
                      TreadmillSpecification(Selector=TreadmillSpecification)
                    #10, #13 -> IncludeWorkflow(Path=Extensions\AddGapSite.bonsai)
                    -> BehaviorSubject FirstPatchSite

                    SubscribeSubject FirstPatchSite
                    -> Take(Count=1)
                    -> Condition NotHasRefusedLast
                        WorkflowInput Source1 => #0
                        SubscribeSubject HasRefusedLastReward => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> BitwiseNot
                        -> WorkflowOutput
                    -> SelectMany ResetHasRefusedLast => #19
                        BooleanProperty(Value=true)
                        -> MulticastSubject HasRefusedLastReward
                        -> Take(Count=1) => #2
                        WorkflowInput Source1 => #3
                        #2, #3 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    SubscribeSubject ActivePatch
                    -> MemberSelector(Selector=VirtualSiteGeneration.RewardSite)
                    -> PropertyMapping => #22
                      LengthDistribution(Selector=LengthDistribution)
                      Contrast(Selector=RenderSpecification.Contrast)
                      Label(Selector=Label)
                      TreadmillSpecification(Selector=TreadmillSpecification)
                    #19, #22 -> IncludeWorkflow(Path=Extensions\AddRewardSite.bonsai) => #23
                    SubscribeSubject ActivePatch
                    -> MemberSelector(Selector=VirtualSiteGeneration.InterSite)
                    -> PropertyMapping => #26
                      LengthDistribution(Selector=LengthDistribution)
                      Contrast(Selector=RenderSpecification.Contrast)
                      Label(Selector=Label)
                      TreadmillSpecification(Selector=TreadmillSpecification)
                    #23, #26 -> IncludeWorkflow(Path=Extensions\AddGapSite.bonsai)
                    -> SelectMany WaitForSiteOutcome
                        WorkflowInput Source1
                        -> Take(Count=1)
                        -> AsyncSubject PreviousSite

                        SubscribeSubject CurrentPosition
                        -> MemberSelector(Selector=Value)
                        -> MemberSelector(Selector=Z) => #5
                        SubscribeSubject PreviousSite
                        -> MemberSelector(Selector="Length,StartPosition")
                        -> Add => #8
                        #5, #8 -> CombineLatest
                        -> GreaterThan
                        -> Condition
                            WorkflowInput Source1
                            -> WorkflowOutput
                        -> Take(Count=1) => #12
                        SubscribeSubject PreviousSite => #13
                        #12, #13 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> WorkflowOutput
                    -> MulticastSubject FirstPatchSite
                    -> Take(Count=1)
                    -> Repeat
                    -> Condition HasExited
                        SubscribeSubject HasRefusedLastReward
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> Condition HasPostPatch
                    WorkflowInput Source1 => #0
                    SubscribeSubject ActivePatch
                    -> MemberSelector(Selector=VirtualSiteGeneration.PostPatch)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform IsNull
                      Expression: it == null
                    -> BitwiseNot => #4
                    #0, #4 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                -> SelectMany PostPatchLogic => #32
                    WorkflowInput Source1 => #0
                    SubscribeSubject ActivePatch
                    -> MemberSelector(Selector=VirtualSiteGeneration.PostPatch)
                    -> PropertyMapping => #3
                      Label(Selector=Label)
                      Contrast(Selector=RenderSpecification.Contrast)
                      LengthDistribution(Selector=LengthDistribution)
                      TreadmillSpecification(Selector=TreadmillSpecification)
                    #0, #3 -> IncludeWorkflow(Path=Extensions\AddPostPatchSite.bonsai)
                    -> SelectMany WaitForSiteOutcome
                        WorkflowInput Source1
                        -> Take(Count=1)
                        -> AsyncSubject PreviousSite

                        SubscribeSubject CurrentPosition
                        -> MemberSelector(Selector=Value)
                        -> MemberSelector(Selector=Z) => #5
                        SubscribeSubject PreviousSite
                        -> MemberSelector(Selector="Length,StartPosition")
                        -> Add => #8
                        #5, #8 -> CombineLatest
                        -> GreaterThan
                        -> Condition
                            WorkflowInput Source1
                            -> WorkflowOutput
                        -> Take(Count=1) => #12
                        SubscribeSubject PreviousSite => #13
                        #12, #13 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> WorkflowOutput
                    -> WorkflowOutput
                #30 -> Condition HasNotPostPatch => #33
                    WorkflowInput Source1 => #0
                    SubscribeSubject ActivePatch
                    -> MemberSelector(Selector=VirtualSiteGeneration.PostPatch)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform IsNull => #3
                      Expression: it == null
                    #0, #3 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                #32, #33 -> Merge
                -> Unit
                -> MulticastSubject EvaluateBlockEndConditions
                -> SelectMany SampleFromTransitionMatrix
                    SubscribeSubject TransitionMatrix => #0
                    SubscribeSubject ActiveStateIndex => #1
                    #0, #1 -> Zip => #2
                    SubscribeSubject RngSeed
                    -> PropertyMapping(Random) => #4
                    #2, #4 -> DrawFromTransitionMatrix
                    -> Take(Count=1)
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> Repeat
            -> Switch
    SubscribeSubject TaskLogicParameters
    -> Take(Count=1)
    -> MemberSelector(Selector=TaskModeSettings)
    -> AindVrForagingDataSchema.TaskLogic.MatchTaskModeSettings(Type=TypeMapping<AindVrForagingDataSchema.TaskLogic.ForagingSettings>)
    -> Take(Count=1) => #16
    #11, #16 -> SubscribeWhen
SubscribeSubject EndExperiment => #17
#16, #17 -> TakeUntil => #18
SubscribeSubject StartExperiment => #19
#18, #19 -> SubscribeWhen

GroupWorkflow StartCondition
    BehaviorSubject<System.Reactive.Unit> StartExperimentShortcut => #0
    SubscribeSubject TextureBank => #1
    SubscribeSubject TriggeredCamerasReady => #2
    #0, #1, #2 -> Zip
    -> Take(Count=1)
    -> MemberSelector(Selector=Item1)
    -> MulticastSubject StartLogging => #6
    ExternalizedMapping(DueTime(DisplayName=LogDelay)) => #7
    #6, #7 -> Bonsai.Shaders.Delay(DueTime=PT3S)
    -> Bonsai.Shaders.SampleOnUpdateFrame
    -> MulticastSubject StartExperiment
    -> WorkflowOutput

Defer Visualizers
    IntProperty(Value=0)
    -> Visualizer ControlUserInterface
        ExternalizedMapping(Value(DisplayName=EnableExperimentUI))
        -> BooleanProperty(Value=true)
        -> Take(Count=1)
        -> BehaviorSubject EnableExperimentUI

        IncludeWorkflow(Path=AllenNeuralDynamics.AindManipulator:AindManipulatorGui.bonsai)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #5
        GroupWorkflow LauncherControl
            IncludeWorkflow(Path=Extensions\Annotation.bonsai)
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #1
            SubscribeSubject ExperimentState
            -> BitwiseNot
            -> PropertyMapping(Enabled)
            -> Bonsai.Gui.ButtonBuilder Start(Enabled=true, Visible=true, Text="Start Experiment")
            -> PublishSubject StartExperimentToggleButton
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #7
            Bonsai.Gui.ButtonBuilder End(Enabled=true, Visible=true, Text="End Experiment")
            -> PublishSubject EndExperimentButton
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #10
            #1, #7, #10 -> Bonsai.Gui.TableLayoutPanelBuilder LauncherControl
              Enabled=true
              Visible=true
              Font="Microsoft Sans Serif, 26pt"
              ColumnCount=2
              RowCount=2
              ColumnStyles=""
              RowStyles=""
              CellSpans(CellSpan(ColumnSpan=1, RowSpan=2), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1))
            -> WorkflowOutput

            SubscribeSubject StartExperimentToggleButton
            -> Take(Count=1)
            -> Unit
            -> MulticastSubject StartExperimentShortcut

            SubscribeSubject EndExperimentButton
            -> Take(Count=1)
            -> Unit
            -> MulticastSubject EndExperiment => #20
            SubscribeSubject StartExperiment => #21
            #20, #21 -> SubscribeWhen
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #7
        GroupWorkflow ValveGui
            Bonsai.Gui.PropertyGridBuilder(Enabled=true, Visible=true, HelpVisible=true, ToolbarVisible=true, AutoRefresh=false)
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.PropertyGridVisualizer>) => #1
            Bonsai.Gui.ButtonBuilder RunCalibration(Enabled=true, Visible=true, Text=RunCalibration)
            -> PublishSubject RunCalibration
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #4
            BooleanProperty(Value=false)
            -> Take(Count=1) => #6
            SubscribeSubject ValveFlushState => #7
            #6, #7 -> Concat => #8
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value="Close Valves") => #10
            #8 -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value="Open Valves") => #13
            #10, #13 -> Merge
            -> PropertyMapping(Text)
            -> Bonsai.Gui.ToggleButtonBuilder FlushValves(Enabled=true, Visible=true, Text="Open Valves", Checked=false)
            -> MulticastSubject ValveFlushState
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ToggleButtonVisualizer>) => #18
            SubscribeSubject EnableExperimentUI
            -> PropertyMapping(Enabled) => #20
            #1, #4, #18, #20 -> Bonsai.Gui.TableLayoutPanelBuilder ValveCalibration
              Enabled=true
              Visible=true
              ColumnCount=2
              RowCount=2
              ColumnStyles=""
              RowStyles=""
              CellSpans(CellSpan(ColumnSpan=1, RowSpan=2), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1))
            -> WorkflowOutput

            SubscribeSubject RunCalibration
            -> Take(Count=1) => #24
            ExternalizedMapping(Interval(Category=ValveCalibration), OpeningTimeMs(Category=ValveCalibration), Repeats(Category=ValveCalibration)) => #25
            #24, #25 -> SelectMany LoopValve
                ExternalizedMapping(DueTime(DisplayName=Interval))
                -> Bonsai.Shaders.Timer(DueTime=PT0.5S) => #1
                ExternalizedMapping(Value(DisplayName=OpeningTimeMs)) => #2
                #1, #2 -> IntProperty(Value=100)
                -> MulticastSubject ValveOpenTimeMs
                -> Unit
                -> MulticastSubject TriggerValve => #6
                ExternalizedMapping(Count(DisplayName=Repeats)) => #7
                #6, #7 -> RepeatCount(Count=200) => #8
                Bonsai.Shaders.Input.KeyDown(Key=Q, Modifiers=Shift) => #9
                #8, #9 -> TakeUntil
                -> ElementIndex
                -> MemberSelector(Selector=Index)
                -> WorkflowOutput
            -> Repeat

            BehaviorSubject<System.Boolean> ValveFlushState
            -> CreateObservable Flush
                WorkflowInput Source1
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> IntProperty(Value=200)
                -> MulticastSubject ValveOpenTimeMs
                -> Unit
                -> MulticastSubject TriggerValve
                -> Bonsai.Shaders.Delay(DueTime=PT0.2S)
                -> RepeatCount(Count=300)
                -> LastOrDefault
                -> WorkflowOutput
            -> Switch
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #9
        GroupWorkflow HwShortcuts
            SubscribeSubject EnableExperimentUI
            -> PropertyMapping(Enabled)
            -> Bonsai.Gui.ButtonBuilder TriggerAudio(Enabled=true, Visible=true, Text=TriggerAudio)
            -> Sink
                WorkflowInput Source1
                -> Unit
                -> MulticastSubject AudioTrigger
                -> WorkflowOutput
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #4
            Bonsai.Gui.ButtonBuilder ForceReward(Enabled=true, Visible=true, Text=ForceReward)
            -> Sink
                WorkflowInput Source1 => #0
                FloatProperty(Value=3)
                -> Take(Count=1) => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject ForceGiveReward
                -> WorkflowOutput
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #7
            #4, #7 -> Bonsai.Gui.TableLayoutPanelBuilder HwShortcuts(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 20pt", ColumnCount=5, RowCount=5, ColumnStyles="", RowStyles="", CellSpans="")
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #11
        #5, #7, #9, #11 -> Bonsai.Gui.TabControlBuilder ControlUserInterface(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 10pt")
        -> WorkflowOutput

        SubscribeSubject StartExperiment
        -> BooleanProperty(Value=false)
        -> MulticastSubject EnableExperimentUI

        Annotation Deprecating(Text="")
        -> GroupWorkflow Shortcuts
            Bonsai.Shaders.Input.KeyDown(Key=Keypad7, Modifiers=Control)
            -> BooleanProperty(Value=true) => #1
            Bonsai.Shaders.Input.KeyDown(Key=Keypad8, Modifiers=Control)
            -> BooleanProperty(Value=false) => #3
            #1, #3 -> Merge
            -> MulticastSubject SpoutAvailable

            Bonsai.Shaders.Input.KeyDown(Key=KeypadSubtract, Modifiers=Control)
            -> Unit
            -> MulticastSubject EndExperiment
    -> Bonsai.Design.VisualizerWindow(Text=UserInterface, Visible=true, Location=nil, Size=nil, WindowState=Normal)

    IntProperty(Value=0)
    -> Visualizer TaskVisualizer
        SubscribeSubject TriggeredCamerasStream
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core.Design:SpinnakerCameraControllerVisualizer.bonsai)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #2
        SubscribeSubject TriggeredCamerasStream
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core.Design:SpinnakerCameraControllerVisualizer.bonsai)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #5
        SubscribeSubject MonitoringCamerasStream
        -> IncludeWorkflow(Path=Extensions\WebCameraControllerVisualizer.bonsai)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #8
        #2, #5, #8 -> Bonsai.Gui.TableLayoutPanelBuilder CameraVisualizer(Enabled=true, Visible=true, ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #10
        SubscribeSubject QCDiagnosis
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #12
        Bonsai.Shaders.UpdateFrame
        -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
        -> Accumulate
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #16
          Expression: TimeSpan.FromSeconds(it)
        SubscribeSubject StartExperiment => #17
        #16, #17 -> SubscribeWhen
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #19
        SubscribeSubject LickometerState
        -> InputMapping(X(Selector=Item2.Seconds), Y(Selector=Item2.Value.value__))
        -> Bonsai.Vision.CreatePoint2f(X=173744.688, Y=0)
        -> Bonsai.Gui.ZedGraph.LineGraphBuilder(IndexSelector="", ValueSelector="", SymbolType=Circle, LineWidth=1, CurveSettings="", Capacity=30, XMin=nil, XMax=nil, YMin=-1, YMax=2)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.LineGraphVisualizer>) => #24
        SubscribeSubject FilteredCurrentVelocity
        -> Bonsai.Shaders.SampleOnRenderFrame => #26
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.PositionControl.VelocityThreshold) => #28
        #26, #28 -> CombineLatest
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(ValueSelector="Item1,Item2", SymbolType=None, LineWidth=2, CurveSettings="", Capacity=2000, Min=nil, Max=nil)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #31
        GroupWorkflow ForagingStage => #32
            IncludeWorkflow(Path=Extensions\CheckActiveSiteLabel.bonsai, Label=InterPatch, Value=1) => #0
            IncludeWorkflow(Path=Extensions\CheckActiveSiteLabel.bonsai, Label=InterSite, Value=2) => #1
            IncludeWorkflow(Path=Extensions\CheckActiveSiteLabel.bonsai, Label=RewardSite, Value=3) => #2
            IncludeWorkflow(Path=Extensions\CheckActiveSiteLabel.bonsai, Label=PostPatch, Value=1) => #3
            IncludeWorkflow(Path=Extensions\CheckActiveSiteLabel.bonsai, Label=Unspecified, Value=-1) => #4
            #0, #1, #2, #3, #4 -> Merge
            -> WorkflowOutput
        -> Skip(Count=1) => #33
        #33, #32 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #35
          Expression: new(Item1 as Present, Item2 as Past)
        -> MemberSelector(Selector="Past.Item1,Present.Item2") => #36
        #35 -> MemberSelector(Selector=Present) => #37
        #36, #37 -> Merge
        -> InputMapping(X(Selector=Item2.StartPosition), Y(Selector=Item1))
        -> Bonsai.Vision.CreatePoint2f(X=0, Y=0)
        -> Bonsai.Gui.ZedGraph.LineGraphBuilder(SymbolType=Diamond, LineWidth=3, CurveSettings="", Capacity=30, XMin=nil, XMax=nil, YMin=-1, YMax=4)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.LineGraphVisualizer>) => #42
        SubscribeSubject GlobalActivePatch
        -> MemberSelector(Selector=StateIndex) => #44
        SubscribeSubject CurrentPosition
        -> MemberSelector(Selector=Value)
        -> MemberSelector(Selector=Z) => #47
        #44, #47 -> WithLatestFrom
        -> InputMapping(X(Selector=Item2), Y(Selector=Item1))
        -> Bonsai.Vision.CreatePoint2f(X=0, Y=0)
        -> Bonsai.Gui.ZedGraph.LineGraphBuilder(SymbolType=Triangle, LineWidth=3, CurveSettings="", Capacity=6, XMin=nil, XMax=nil, YMin=-1, YMax=2)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.LineGraphVisualizer>) => #52
        SubscribeSubject ThermistorData
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(IndexSelector=Seconds, ValueSelector=Value, SymbolType=None, LineWidth=2, CurveSettings="", Capacity=2000, Min=nil, Max=nil)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #55
        SubscribeSubject SoftwareEvent
        -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.SoftwareEventVisualizer>) => #57
        #12, #19, #24, #31, #42, #52, #55, #57 -> Bonsai.Gui.TableLayoutPanelBuilder DataVisualization
          Enabled=true
          Visible=true
          ColumnCount=4
          RowCount=4
          ColumnStyles=""
          RowStyles=""
          CellSpans
            CellSpan(ColumnSpan=3, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=2, RowSpan=1)
            CellSpan(ColumnSpan=2, RowSpan=1)
            CellSpan(ColumnSpan=2, RowSpan=1)
            CellSpan(ColumnSpan=2, RowSpan=1)
            CellSpan(ColumnSpan=2, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #59
        SubscribeSubject SubjectSchema
        -> MemberSelector(Selector=Subject) => #61
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector="Name,StageName") => #63
        #61, #63 -> Zip
        -> Format(Format="Animal {0} // Task {1} @ Stage {2}", Selector="Item1,Item2.Item1,Item2.Item2")
        -> PropertyMapping(Text)
        -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 20.25pt", Text="")
        -> VisualizerMapping => #68
        #10, #59, #68 -> Bonsai.Gui.TableLayoutPanelBuilder DataVisualization
          Enabled=true
          Visible=true
          ColumnCount=1
          RowCount=3
          ColumnStyles=""
          RowStyles(RowStyle(SizeType=Percent, Height=0.48), RowStyle(SizeType=Percent, Height=0.48), RowStyle(SizeType=Percent, Height=0.04))
          CellSpans=""
        -> WorkflowOutput

        FloatProperty(Value=0) => #71
        SubscribeSubject GiveReward => #72
        SubscribeSubject ForceGiveReward => #73
        #72, #73 -> Merge
        -> Condition HasValue
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MemberSelector(Selector=Value) => #76
        #71, #76 -> Merge
        -> Accumulate
        -> BehaviorSubject SessionAccumulatedReward

        GroupWorkflow QC
            SubscribeSubject HarpWhiteRabbitHeartbeat => #0
            SubscribeSubject SessionAccumulatedReward => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector="Item1.Seconds,Item2")
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as Heartbeat,
                Item2 as TotalReward)
            -> WorkflowOutput
        -> BehaviorSubject QCDiagnosis
    -> Bonsai.Design.VisualizerWindow(Text=TaskVisualizer, Visible=true, Location=nil, Size=nil, WindowState=Normal)

SubscribeSubject EndExperiment
-> Bonsai.Shaders.Delay(DueTime=PT1S)
-> SelectMany EndRoutine
    AllenNeuralDynamics.HarpUtils.CreateOdorMix
      channel3AsCarrier=true
      PercentageChannel0=0
      PercentageChannel1=0
      PercentageChannel2=0
      PercentageChannel3=NaN
      Channel3AsCarrier=true
      TargetOdorFlow=100
      TotalFlow=1000
    -> Take(Count=1) => #1
    -> MemberSelector(Selector=ChannelsTargetFlow) => #2
    #1 -> MemberSelector(Selector=OdorValveState) => #3
    #2, #3 -> Merge
    -> MulticastSubject HarpOlfactometerCommands
    -> Last
    -> BooleanProperty(Value=false)
    -> MulticastSubject OdorEndValveState => #8
    AllenNeuralDynamics.Treadmill.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Treadmill.CreateBrakeCurrentSetPointPayload(BrakeCurrentSetPoint=0))
    -> Take(Count=1)
    -> MulticastSubject HarpTreadmillCommands => #11
    Defer ZeroYAxis => #12
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=Calibration)
        -> MemberSelector(Selector=Input)
        -> AindVrForagingDataSchema.Rig.SerializeToJson
        -> AllenNeuralDynamics.AindManipulator.DeserializeFromJson(Type=TypeMapping<AllenNeuralDynamics.AindManipulator.AindManipulatorCalibrationInput>)
        -> MemberSelector(Selector=AxisConfiguration)
        -> Merge
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Axis) => #1
            -> Equal(Operand=WorkflowProperty<AllenNeuralDynamics.AindManipulator.Axis>(Value=Y1)) => #2
            #1 -> Equal(Operand=WorkflowProperty<AllenNeuralDynamics.AindManipulator.Axis>(Value=Y2)) => #3
            #2, #3 -> Zip
            -> BitwiseOr
            -> WorkflowOutput
        -> SelectMany ZeroAxis
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject axisConfiguration

            SubscribeSubject axisConfiguration
            -> MemberSelector(Selector=Axis)
            -> Bonsai.Scripting.Expressions.ExpressionTransform OffsetRegister85
              Expression: it + 85
            -> Take(Count=1)
            -> AsyncSubject TargetRegister

            SubscribeSubject TargetRegister
            -> PropertyMapping(Address)
            -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=0, PayloadType=S32, Value=0))
            -> MulticastSubject StepperDriverCommands
            -> Take(Count=1)
            -> WorkflowOutput
        -> Last
        -> WorkflowOutput
    #8, #11, #12 -> Zip
    -> Take(Count=1) => #14
    AllenNeuralDynamics.Treadmill.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Treadmill.CreateBrakeCurrentSetPointPayload(BrakeCurrentSetPoint=0))
    -> Take(Count=1)
    -> MulticastSubject HarpTreadmillCommands => #17
    #14, #17 -> Zip
    -> WorkflowOutput
-> Bonsai.Shaders.Delay(DueTime=PT2S)
-> Take(Count=1)
-> WorkflowOutput
