WorkflowBuilder(Version=2.8.1)
GroupWorkflow Config
    FloatProperty(Value=0)
    -> Take(Count=1)
    -> AsyncSubject SigmaZ

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

    ExternalizedMapping(Value(DisplayName=Path))
    -> PropertySource<Bonsai.IO.GetFiles,System.String>(MemberName=Path, Value=Textures)
    -> Take(Count=1)
    -> AsyncSubject _CfgTextureBankPath

    ExternalizedMapping(Value(DisplayName=FarClipHorizon))
    -> FloatProperty(Value=1000)
    -> Take(Count=1)
    -> AsyncSubject FarClipHorizon

    Annotation(Text="The distance used to determine whether a segment should be disposed.") => #14
    ExternalizedMapping(Value(DisplayName=DisposingTreshold)) => #15
    #14, #15 -> FloatProperty(Value=20)
    -> Take(Count=1)
    -> AsyncSubject DisposingTreshold

    BehaviorSubject<System.String> ActiveSiteLabel

GroupWorkflow ScreenConfiguration
    Bonsai.Shaders.CreateWindow
      Width=1000
      Height=1000
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=false
      Location=nil
      WindowBorder=Hidden
      WindowState=Maximized
      DisplayDevice=Third
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.ShaderResources
      Shaders
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=ScaledTexturedModel
          RenderState=""
          ShaderUniforms=""
          BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=textureDiffuse, TextureSlot=Texture0, TextureTarget=Texture2D))
          FramebufferAttachments=""
          VertexShader=BonVision:Shaders.TexturedModel.vert
          FragmentShader=Shaders\ScaledTexturedModel.frag
    -> Bonsai.Resources.LoadResources
    -> WorkflowOutput

    Bonsai.Shaders.RenderFrame => #5
    SubscribeSubject FarClipHorizon
    -> PropertyMapping(FarClip) => #7
    #5, #7 -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=1E-05, FarClip=1000, Light(X=0, Y=0, Z=0)) => #8
    -> MemberSelector(Selector=ViewMatrix)
    -> Bonsai.Shaders.RotateY(Order=Append, Angle=-3.14159274) => #10
    #10, #8 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as ViewMatrix,
        Item2.ProjectionMatrix as ProjectionMatrix,
        Item2.Light as Light)
    -> PublishSubject Draw3DStim
    -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=DimGray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #14
    -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=15, Rotation(X=0, Y=179.99999999999977, Z=0), Translation(X=0, Y=0, Z=10))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=0.5)
    #14 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=15, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-10))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0.5, Width=1, Height=0.5)
    -> PublishSubject PostDrawing

    GroupWorkflow ScreenBrightnessControl
        FloatProperty(Value=1)
        -> Take(Count=1)
        -> BehaviorSubject ScreenBrightness

        SubscribeSubject PostDrawing
        -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1)
        -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1) => #5
        SubscribeSubject ScreenBrightness
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: 1.0 - it
        -> PropertyMapping(ColorA) => #8
        #5, #8 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=2
          ExtentY=2
          LocationX=0
          LocationY=0
          Layer=100
          Angle=0
          ColorR=0
          ColorG=0
          ColorB=0
          ColorA=0.5

GroupWorkflow LoadTextureBank
    SubscribeSubject _CfgTextureBankPath
    -> PropertyMapping(Path)
    -> Bonsai.IO.GetFiles(Path=Textures, SearchPattern=*.jpg, SearchOption=TopDirectoryOnly)
    -> Merge
    -> CreateObservable LoadTexture
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject TexturePath

        SubscribeSubject TexturePath
        -> Bonsai.IO.GetFileNameWithoutExtension => #4
        SubscribeSubject TexturePath
        -> PropertyMapping(FileName)
        -> Bonsai.Shaders.LoadImage => #7
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\vertGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        #4, #7 -> Zip
        -> WorkflowOutput
    -> Merge
    -> ToDictionary(KeySelector=Item1, ElementSelector=Item2)
    -> AsyncSubject TextureBank

GroupWorkflow PositionControl
    DoubleProperty(Value=0)
    -> Take(Count=1) => #1
    Bonsai.Shaders.Input.MouseWheel
    -> MemberSelector(Selector=EventArgs.DeltaPrecise) => #3
    Bonsai.Shaders.UpdateFrame
    -> FloatProperty(Value=0.5) => #5
    #3, #5 -> Merge
    -> Accumulate
    -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=1, RescaleType=Linear)
    -> Bonsai.Shaders.DelaySubscription(DueTime=PT0.1S) => #9
    #1, #9 -> Concat
    -> InputMapping(Z(Selector=it))
    -> Bonsai.Shaders.CreateVector3(X=0, Y=3, Z=1566)
    -> BehaviorSubject CurrentPosition

    SubscribeSubject CurrentPosition => #14
    Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=-1)
    -> Take(Count=1) => #16
    #14, #16 -> Scan => #17
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Accumulation.Z > Value.Z ? Accumulation : Value
        -> WorkflowOutput
    Annotation "Max(Z)"(Text="") => #18
    #17, #18 -> BehaviorSubject MaxPosition

    Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.05S)
    -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=0.05, RescaleType=Linear)
    -> Bonsai.Numerics.Sin
    -> Add(Operand=DoubleProperty(Value=1))
    -> LessThan(Operand=DoubleProperty(Value=0.2))
    -> DistinctUntilChanged => #25
    Annotation(Text="[Discussion](https://github.com/AllenNeuralDynamics/aind-vr-foraging/discussions/3)") => #26
    #25, #26 -> BehaviorSubject IsStopped

GroupWorkflow OdorControl
    BehaviorSubject<System.Tuple(System.Boolean,System.Int32,System.Single)> OdorControl
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as OrdorState,
        Item2 as OdorIdentity,
        Item3 as OdorConcentration
        )
    -> WorkflowOutput

GroupWorkflow RewardControl
    Annotation(Text="")
    -> BehaviorSubject<System.Tuple(System.Boolean,System.Single)> GiveReward
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as RewardEnabled,
        Item2 as RewardAmout
        )
    -> WorkflowOutput

GroupWorkflow FeedbackControl
    Unit
    -> Take(Count=1)
    -> BehaviorSubject ChoiceFeedback

GroupWorkflow CorridorDrawing => #7
    ExternalizedMapping(Value(DisplayName=CorridorLength))
    -> FloatProperty(Value=100)
    -> Take(Count=1)
    -> AsyncSubject VisCorridorLength

    GroupWorkflow Initialize => #4
        SubscribeSubject FarClipHorizon => #0
        SubscribeSubject CurrentPosition
        -> MemberSelector(Selector=Z) => #2
        #0, #2 -> Zip
        -> Subtract => #4
        SubscribeSubject VisCorridorLength
        -> PropertyMapping(Value) => #6
        #4, #6 -> Divide(Operand=FloatProperty(Value=100))
        -> Take(Count=1)
        -> InputMapping(Count(Selector=it)) => #9
        SubscribeSubject CurrentPosition
        -> MemberSelector(Selector=Z)
        -> Take(Count=1)
        -> PropertyMapping(Start) => #13
        #9, #13 -> Range(Start=0, Count=10)
        -> InputMapping(Value(Selector=it))
        -> DoubleProperty(Value=9)
        -> WorkflowOutput
    ExternalizedMapping(GraceHorizon(DisplayName=GraceHorizon))
    -> GroupWorkflow Update => #6
        SubscribeSubject CurrentPosition => #0
        SubscribeSubject MaxPosition => #1
        #0, #1 -> CombineLatest
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector="Item1.Z,Item2.Z")
            -> GreaterThanOrEqual
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1.Z) => #4
        SubscribeSubject FarClipHorizon
        -> PropertyMapping(Value) => #6
        #4, #6 -> Add(Operand=FloatProperty(Value=1000)) => #7
        ExternalizedMapping(Value(DisplayName=GraceHorizon)) => #8
        #7, #8 -> Add(Operand=FloatProperty(Value=10)) => #9
        SubscribeSubject VisCorridorLength
        -> PropertyMapping(Value) => #11
        #9, #11 -> Divide(Operand=FloatProperty(Value=100))
        -> InputMapping(TypeMapping=TypeMapping<System.Double>)
        -> Bonsai.Numerics.Floor
        -> WorkflowOutput
    #4, #6 -> Concat
    -> DistinctUntilChanged => #8
    SubscribeSubject VisCorridorLength
    -> PropertyMapping(Value) => #10
    #8, #10 -> Multiply(Operand=DoubleProperty(Value=100)) => #11
    #8, #11 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as Id,
        Item2 as Start
        )
    -> InputMapping(Start(Selector=Start), Id(Selector=Id)) => #14
    SubscribeSubject VisCorridorLength
    -> PropertyMapping(Length) => #16
    #14, #16 -> IncludeWorkflow
      Path=Extensions\CreateCorridorSpecs.bonsai
      Width=10
      Height=10
      Start=2500
      Length=100
      TextureName=random_walls_2
      TextureSizeX=10
      TextureSizeY=10
      Id=25
    -> ReplaySubject VisCorridorSpecs(BufferSize=nil)

    SubscribeSubject VisCorridorSpecs
    -> IncludeWorkflow(Path=Extensions\DrawSegment.bonsai)
    -> Merge
    -> WorkflowOutput
Annotation(Text="Wait for the textures to load in GPU")
-> SubscribeSubject TextureBank => #9
#7, #9 -> SubscribeWhen

GroupWorkflow PatchGeneration => #11
    IntProperty(Value=0)
    -> IncludeWorkflow
      Path=Extensions\CreateSite.bonsai
      Start=618
      Length=10
      Id=1
      Brightness=1
      HasRewardLogic=false
      RewardAmount=1
      RewardProbability=1
      RewardDelay=PT0S
      StopDuration=PT0S
      HasOdor=false
      OdorIdentity=0
      OdorConcentration=0
      Label=nil
    -> IgnoreElements
    -> BehaviorSubject SiteSpecs

    SubscribeSubject SiteSpecs
    -> GroupWorkflow InstantiateSite
        WorkflowInput Source1
        -> CreateObservable InstantiateSite
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject ThisSiteSpecs

            SubscribeSubject CurrentPosition
            -> MemberSelector(Selector=Z) => #4
            SubscribeSubject ThisSiteSpecs
            -> MemberSelector(Selector=Start) => #6
            SubscribeSubject ThisSiteSpecs
            -> MemberSelector(Selector="Start,Length")
            -> Add => #9
            #4, #6, #9 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: (Item1 >= Item2) && (Item1 <= Item3)
            -> BehaviorSubject IsInSite

            Defer SiteLogic => #13
                GroupWorkflow RewardControl => #0
                    SubscribeSubject ThisSiteSpecs
                    -> MemberSelector(Selector=RewardControl)
                    -> Take(Count=1)
                    -> AsyncSubject ThisRewardControl

                    SubscribeSubject IsStopped
                    -> CreateObservable CheckStop
                        Bonsai.Shaders.UpdateFrame
                        -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
                        -> Accumulate => #2
                        SubscribeSubject ThisRewardControl
                        -> MemberSelector(Selector=StopDuration.TotalSeconds) => #4
                        #2, #4 -> CombineLatest
                        -> GreaterThan
                        -> Condition
                            WorkflowInput Source1
                            -> WorkflowOutput
                        -> Take(Count=1) => #8
                        WorkflowInput Source1 => #9
                        #8, #9 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> Condition CheckIsStopped
                            WorkflowInput Source1
                            -> WorkflowOutput
                        -> WorkflowOutput
                    -> Switch => #6
                    Annotation LockedResponse(Text="") => #7
                    #6, #7 -> Take(Count=1)
                    -> Sink LockedChoiceFeedback => #9
                        WorkflowInput Source1
                        -> Unit
                        -> MulticastSubject ChoiceFeedback
                        -> WorkflowOutput
                    SubscribeSubject ThisRewardControl
                    -> MemberSelector(Selector=RewardDelay)
                    -> PropertyMapping(DueTime) => #12
                    #9, #12 -> Bonsai.Shaders.Delay(DueTime=PT0S) => #13
                    SubscribeSubject ThisRewardControl => #14
                    #13, #14 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #16
                    Annotation TODO(Text="") => #17
                    #16, #17 -> SelectMany DetermineReward
                        SubscribeSubject ThisRewardControl
                        -> MemberSelector(Selector=RewardProbability) => #1
                        SubscribeSubject RngSeed => #2
                        SubscribeSubject RngSeed
                        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1) => #4
                        #2, #4 -> Bonsai.Numerics.Distributions.Sample => #5
                        #1, #5 -> Zip
                        -> GreaterThan => #7
                        SubscribeSubject ThisRewardControl
                        -> MemberSelector(Selector=RewardAmount) => #9
                        #7, #9 -> Zip
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> MulticastSubject GiveReward
                    -> Take(Count=1)
                    -> WorkflowOutput
                SubscribeSubject ThisSiteSpecs
                -> MemberSelector(Selector=RewardControl.HasRewardLogic)
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1) => #4
                #0, #4 -> SubscribeWhen

                GroupWorkflow OdorControl => #6
                    Annotation OdorControl(Text="")
                    -> SubscribeSubject IsInSite
                    -> DistinctUntilChanged
                    -> InputMapping(ValveState(Selector=it)) => #3
                    SubscribeSubject ThisSiteSpecs
                    -> PropertyMapping(OdorIdentity(Selector=OdorControl.OdorIdentity), Concentration(Selector=OdorControl.OdorConcentration)) => #5
                    #3, #5 -> IncludeWorkflow(Path=Extensions\GenerateOdorControl.bonsai, ValveState=false, OdorIdentity=0, Concentration=1)
                    -> MulticastSubject OdorControl
                    -> WorkflowOutput
                SubscribeSubject ThisSiteSpecs
                -> MemberSelector(Selector=OdorControl.HasOdor)
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1) => #10
                #6, #10 -> SubscribeWhen

                SubscribeSubject ThisSiteSpecs
                -> MemberSelector(Selector=BrightnessControl.Brightness)
                -> MulticastSubject ScreenBrightness
            SubscribeSubject IsInSite
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\DebugActiveSite.bonsai)
            -> Take(Count=1) => #17
            #13, #17 -> SubscribeWhen => #18
            GroupWorkflow DisposeSite => #19
                SubscribeSubject CurrentPosition
                -> MemberSelector(Selector=Z) => #1
                SubscribeSubject DisposingTreshold => #2
                SubscribeSubject ThisSiteSpecs
                -> MemberSelector(Selector="Start,Length")
                -> Add => #5
                #2, #5 -> CombineLatest
                -> Add => #7
                #1, #7 -> CombineLatest
                -> GreaterThan
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1)
                -> WorkflowOutput
            #18, #19 -> TakeUntil
            -> LastOrDefault => #21
            SubscribeSubject ThisSiteSpecs => #22
            #21, #22 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> WorkflowOutput
    -> Merge

    GroupWorkflow TaskLogic
        GroupWorkflow PatchStatistics
            IntProperty(Value=0)
            -> Take(Count=1)
            -> BehaviorSubject ActivePatch

            FloatProperty(Value=3)
            -> Take(Count=1)
            -> BehaviorSubject RewardAvailable

            SubscribeSubject GiveReward
            -> Bonsai.Scripting.Expressions.ExpressionTransform ConsumedReward
              Expression: it.Item1 ? 1 : 0
            -> SelectMany --RewardsAvailable
                SubscribeSubject RewardAvailable => #0
                WorkflowInput Source1 => #1
                #0, #1 -> Zip
                -> Take(Count=1)
                -> Subtract
                -> MulticastSubject RewardAvailable
                -> WorkflowOutput

            SubscribeSubject RewardAvailable
            -> GreaterThan(Operand=FloatProperty(Value=0))
            -> BehaviorSubject RewardDepleted

            BooleanProperty(Value=false)
            -> Take(Count=1)
            -> BehaviorSubject HasRefusedLastReward

            SubscribeSubject HasRefusedLastReward

        Bonsai.Shaders.Timer(DueTime=PT0S)
        -> IncludeWorkflow
          Path=Extensions\AddInterPatchSite.bonsai
          Minimum=30
          Maximum=100
          Average=50
          Brightness=0.5
          HasRewardLogic=false
          RewardAmount=0
          RewardProbability=0
          RewardDelay=PT0S
          StopDuration=PT0S
          HasOdor=false
          OdorIdentity=0
          OdorConcentration=0
          Label=InterPatch
        -> SelectMany Patch
            WorkflowInput Source1
            -> Take(Count=1)
            -> BehaviorSubject EntrySite

            SubscribeSubject EntrySite
            -> Take(Count=1)
            -> IncludeWorkflow
              Path=Extensions\AddGapSite.bonsai
              Minimum=20
              Maximum=50
              Average=30
              Brightness=1
              HasRewardLogic=false
              RewardAmount=0
              RewardProbability=0
              RewardDelay=PT0S
              StopDuration=PT0S
              HasOdor=false
              OdorIdentity=0
              OdorConcentration=0
              Label=InitialGapSite
            -> BehaviorSubject FirstPatchSite

            BooleanProperty(Value=false)
            -> Take(Count=1) => #8
            SubscribeSubject ChoiceFeedback
            -> Skip(Count=1)
            -> BooleanProperty(Value=false) => #11
            #8, #11 -> Merge
            -> MulticastSubject HasRefusedLastReward

            SubscribeSubject FirstPatchSite
            -> Take(Count=1)
            -> Condition NotHasRefusedLast
                SubscribeSubject HasRefusedLastReward
                -> BitwiseNot
                -> WorkflowOutput
            -> SelectMany ResetHasRefusedLast
                BooleanProperty(Value=true)
                -> MulticastSubject HasRefusedLastReward
                -> Take(Count=1) => #2
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Take(Count=1)
                -> WorkflowOutput
            -> IncludeWorkflow
              Path=Extensions\AddRewardSite.bonsai
              Minimum=20
              Maximum=50
              Average=30
              Brightness=1
              HasRewardLogic=true
              RewardProbability=1
              RewardDelay=PT0S
              StopDuration=PT0.5S
              HasOdor=true
              OdorConcentration=1
              Label=RewardSite
            -> IncludeWorkflow
              Path=Extensions\AddGapSite.bonsai
              Minimum=20
              Maximum=50
              Average=30
              Brightness=1
              HasRewardLogic=false
              RewardAmount=0
              RewardProbability=0
              RewardDelay=PT0S
              StopDuration=PT0S
              HasOdor=false
              OdorIdentity=0
              OdorConcentration=0
              Label=GapSite
            -> SelectMany WaitForSiteOutcome
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject PreviousSite

                SubscribeSubject CurrentPosition
                -> MemberSelector(Selector=Z) => #4
                SubscribeSubject PreviousSite
                -> MemberSelector(Selector="Start,Length")
                -> Add => #7
                #4, #7 -> CombineLatest
                -> GreaterThan
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1) => #11
                SubscribeSubject PreviousSite => #12
                #11, #12 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> MulticastSubject FirstPatchSite
            -> Take(Count=1)
            -> Repeat
            -> Condition HasExited
                SubscribeSubject HasRefusedLastReward
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany UpdateOdorPatch
            SubscribeSubject ActivePatch
            -> Add(Operand=IntProperty(Value=1))
            -> Mod(Operand=IntProperty(Value=2))
            -> Take(Count=1)
            -> MulticastSubject ActivePatch
            -> WorkflowOutput
        -> Repeat

        SubscribeSubject SiteSpecs
Annotation(Text="Wait for the textures to load in GPU")
-> SubscribeSubject TextureBank => #13
#11, #13 -> SubscribeWhen

GroupWorkflow Debug
    SubscribeSubject PostDrawing
    -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1)
    -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1) => #2
    SubscribeSubject ActiveSiteLabel
    -> Equal(Operand=StringProperty(Value=InterPatch))
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
      Expression: it ? 255 : 0
    SubscribeSubject ActiveSiteLabel => #6
    -> Equal(Operand=StringProperty(Value=GapSite)) => #7
    #6 -> Equal(Operand=StringProperty(Value=InitialGapSite)) => #8
    #7, #8 -> Zip
    -> BitwiseOr
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #11
      Expression: it ? 255 : 0
    SubscribeSubject ActiveSiteLabel
    -> Equal(Operand=StringProperty(Value=RewardSite))
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #14
      Expression: it ? 255 : 0
    #5, #11, #14 -> Zip
    -> PropertyMapping(ColorR(Selector=Item1), ColorG(Selector=Item2), ColorB(Selector=Item3)) => #16
    #2, #16 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawQuad.bonsai
      ExtentX=0.2
      ExtentY=0.2
      LocationX=0.9
      LocationY=0.9
      Layer=100
      Angle=0
      ColorR=255
      ColorG=0
      ColorB=0
      ColorA=1

SubscribeSubject ActiveSiteLabel
