<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:cf="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:gli="clr-namespace:Bonsai.Shaders.Input;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Cameras</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>Prefix</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Add">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>Prefix</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Add">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="5" To="9" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Save</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>Prefix</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Add">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>AbsolutePosition</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>Cross</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>WheelPos</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>LickTime</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="io:CsvWriter">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="io:CsvWriter">
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              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="3" To="7" Label="Source2" />
            <Edge From="4" To="7" Label="Source3" />
            <Edge From="5" To="7" Label="Source4" />
            <Edge From="6" To="7" Label="Source5" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Keydown options</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>D1</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="cf:BehaviorCommand">
              <cf:Type>SetOutput</cf:Type>
              <cf:Mask>Poke0Valve</cf:Mask>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>L</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>LickKeyPress</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>Commands</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM3</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Behavior Events</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Cross</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>80</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="cf:BehaviorCommand">
              <cf:Type>PulsePeriod</cf:Type>
              <cf:Mask>Poke0Valve</cf:Mask>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TurnPos</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Behavior Events</Name>
      </Expression>
      <Expression xsi:type="cf:BehaviorEvent">
        <cf:Type>QuadratureCounter</cf:Type>
        <cf:Mask>Port2</cf:Mask>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Rescale">
          <dsp:Min>-32767</dsp:Min>
          <dsp:Max>32767</dsp:Max>
          <dsp:RangeMin>0</dsp:RangeMin>
          <dsp:RangeMax>13440</dsp:RangeMax>
          <dsp:RescaleType>Clamp</dsp:RescaleType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Abs" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>WheelPos</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Abs" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1000</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="IntProperty">
          <Value>1000</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>TravelEnough?</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Cross</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>663424_Test</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>10</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it.ToString()</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="rx:ReplaySubject">
        <Name>Prefix</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Behavior Events</Name>
      </Expression>
      <Expression xsi:type="beh:Parse">
        <harp:MessageType>Event</harp:MessageType>
        <harp:Register xsi:type="beh:TimestampedPortDigitalInput" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="BitwiseAnd">
        <Operand xsi:type="WorkflowProperty" TypeArguments="beh:DigitalInputs">
          <Value>DI0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="WorkflowProperty" TypeArguments="sys:UInt16">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2.Seconds</Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>LickTime</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Cross</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="cf:BehaviorCommand">
        <cf:Type>SetOutput</cf:Type>
        <cf:Mask>Poke0Valve</cf:Mask>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Behavior Events</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessage">
          <harp:MessageType>Event</harp:MessageType>
          <harp:Register xsi:type="harp:FilterMessageAddress">
            <harp:Address>44</harp:Address>
          </harp:Register>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Register xsi:type="harp:ParseMessagePayload">
          <harp:PayloadType>TimestampedS16</harp:PayloadType>
          <harp:IsArray>true</harp:IsArray>
        </harp:Register>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="viz:RollingGraphBuilder">
        <viz:ValueSelector>it</viz:ValueSelector>
        <viz:SymbolType>None</viz:SymbolType>
        <viz:LineWidth>1</viz:LineWidth>
        <viz:Capacity>1000</viz:Capacity>
        <viz:Min xsi:nil="true" />
        <viz:Max xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Subtract">
        <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int16">
          <Value>850</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>2</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="viz:RollingGraphBuilder">
        <viz:ValueSelector>it</viz:ValueSelector>
        <viz:SymbolType>None</viz:SymbolType>
        <viz:LineWidth>1</viz:LineWidth>
        <viz:Capacity xsi:nil="true" />
        <viz:Min xsi:nil="true" />
        <viz:Max xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Subtract">
        <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int16">
          <Value>1100</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Item1 as ADC0,
Item2 as ADC1,
Item3 as Seconds)</scr:Expression>
      </Expression>
      <Expression xsi:type="viz:RollingGraphBuilder">
        <viz:IndexSelector>Seconds</viz:IndexSelector>
        <viz:ValueSelector>ADC0,ADC1</viz:ValueSelector>
        <viz:SymbolType>None</viz:SymbolType>
        <viz:LineWidth>1</viz:LineWidth>
        <viz:Capacity xsi:nil="true" />
        <viz:Min xsi:nil="true" />
        <viz:Max xsi:nil="true" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Prefix</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>_breathing.csv</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>663424_Test10_breathing.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Visual Display</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Config</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Payload" DisplayName="Flow_CH0" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:Payload xsi:type="harp:CreateMessagePayload">
                  <harp:MessageType>Write</harp:MessageType>
                  <harp:Address>41</harp:Address>
                  <harp:PayloadType>Float</harp:PayloadType>
                  <harp:Value>100</harp:Value>
                </harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Payload" DisplayName="Flow_CH1" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:Payload xsi:type="harp:CreateMessagePayload">
                  <harp:MessageType>Write</harp:MessageType>
                  <harp:Address>42</harp:Address>
                  <harp:PayloadType>Float</harp:PayloadType>
                  <harp:Value>100</harp:Value>
                </harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Payload" DisplayName="Flow_CH2" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:Payload xsi:type="harp:CreateMessagePayload">
                  <harp:MessageType>Write</harp:MessageType>
                  <harp:Address>43</harp:Address>
                  <harp:PayloadType>Float</harp:PayloadType>
                  <harp:Value>100</harp:Value>
                </harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Payload" DisplayName="Flow_CH3" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:Payload xsi:type="harp:CreateMessagePayload">
                  <harp:MessageType>Write</harp:MessageType>
                  <harp:Address>44</harp:Address>
                  <harp:PayloadType>Float</harp:PayloadType>
                  <harp:Value>100</harp:Value>
                </harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Payload" DisplayName="Flow_Carrier" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:Payload xsi:type="harp:CreateMessagePayload">
                  <harp:MessageType>Write</harp:MessageType>
                  <harp:Address>45</harp:Address>
                  <harp:PayloadType>Float</harp:PayloadType>
                  <harp:Value>900</harp:Value>
                </harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Payload" DisplayName="Pulse_EndValve0" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:Payload xsi:type="harp:CreateMessagePayload">
                  <harp:MessageType>Write</harp:MessageType>
                  <harp:Address>74</harp:Address>
                  <harp:PayloadType>U16</harp:PayloadType>
                  <harp:Value>2000</harp:Value>
                </harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Payload" DisplayName="Pulse_EndValve1" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:Payload xsi:type="harp:CreateMessagePayload">
                  <harp:MessageType>Write</harp:MessageType>
                  <harp:Address>75</harp:Address>
                  <harp:PayloadType>U16</harp:PayloadType>
                  <harp:Value>2000</harp:Value>
                </harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Payload" DisplayName="Enable_Valves_Pulse" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:Payload xsi:type="harp:CreateMessagePayload">
                  <harp:MessageType>Write</harp:MessageType>
                  <harp:Address>65</harp:Address>
                  <harp:PayloadType>U8</harp:PayloadType>
                  <harp:Value>48</harp:Value>
                </harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="16" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="16" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="16" Label="Source3" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="16" Label="Source4" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="16" Label="Source5" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="16" Label="Source6" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="16" Label="Source7" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source8" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>B</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateMessage">
          <harp:Payload xsi:type="harp:CreateMessagePayload">
            <harp:MessageType>Write</harp:MessageType>
            <harp:Address>32</harp:Address>
            <harp:PayloadType>U8</harp:PayloadType>
            <harp:Value>1</harp:Value>
          </harp:Payload>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>E</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateMessage">
          <harp:Payload xsi:type="harp:CreateMessagePayload">
            <harp:MessageType>Write</harp:MessageType>
            <harp:Address>32</harp:Address>
            <harp:PayloadType>U8</harp:PayloadType>
            <harp:Value>0</harp:Value>
          </harp:Payload>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>OLF Commands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM5</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Flowmeters</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:MessageType>Event</harp:MessageType>
                <harp:Register xsi:type="harp:FilterMessageAddress">
                  <harp:Address>46</harp:Address>
                </harp:Register>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Register xsi:type="harp:ParseMessagePayload">
                <harp:PayloadType>Float</harp:PayloadType>
                <harp:IsArray>false</harp:IsArray>
              </harp:Register>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:MessageType>Event</harp:MessageType>
                <harp:Register xsi:type="harp:FilterMessageAddress">
                  <harp:Address>47</harp:Address>
                </harp:Register>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Register xsi:type="harp:ParseMessagePayload">
                <harp:PayloadType>Float</harp:PayloadType>
                <harp:IsArray>false</harp:IsArray>
              </harp:Register>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:MessageType>Event</harp:MessageType>
                <harp:Register xsi:type="harp:FilterMessageAddress">
                  <harp:Address>48</harp:Address>
                </harp:Register>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Register xsi:type="harp:ParseMessagePayload">
                <harp:PayloadType>Float</harp:PayloadType>
                <harp:IsArray>false</harp:IsArray>
              </harp:Register>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:MessageType>Event</harp:MessageType>
                <harp:Register xsi:type="harp:FilterMessageAddress">
                  <harp:Address>49</harp:Address>
                </harp:Register>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Register xsi:type="harp:ParseMessagePayload">
                <harp:PayloadType>Float</harp:PayloadType>
                <harp:IsArray>false</harp:IsArray>
              </harp:Register>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="viz:RollingGraphBuilder">
              <viz:SymbolType>None</viz:SymbolType>
              <viz:LineWidth>1</viz:LineWidth>
              <viz:Capacity xsi:nil="true" />
              <viz:Min xsi:nil="true" />
              <viz:Max xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:MessageType>Event</harp:MessageType>
                <harp:Register xsi:type="harp:FilterMessageAddress">
                  <harp:Address>50</harp:Address>
                </harp:Register>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Register xsi:type="harp:ParseMessagePayload">
                <harp:PayloadType>Float</harp:PayloadType>
                <harp:IsArray>false</harp:IsArray>
              </harp:Register>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="0" To="11" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="9" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="9" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="9" Label="Source3" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source4" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Analog Flows</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:MessageType>Event</harp:MessageType>
                <harp:Register xsi:type="harp:FilterMessageAddress">
                  <harp:Address>33</harp:Address>
                </harp:Register>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Register xsi:type="harp:ParseMessagePayload">
                <harp:PayloadType>S16</harp:PayloadType>
                <harp:IsArray>true</harp:IsArray>
              </harp:Register>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToSingle(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:BufferCount">
                <rx:Count>100</rx:Count>
                <rx:Skip>10</rx:Skip>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>AverageBuffer</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Average" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToSingle(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:BufferCount">
                <rx:Count>100</rx:Count>
                <rx:Skip>10</rx:Skip>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>AverageBuffer</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Average" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToSingle(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:BufferCount">
                <rx:Count>100</rx:Count>
                <rx:Skip>10</rx:Skip>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>AverageBuffer</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Average" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>3</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToSingle(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:BufferCount">
                <rx:Count>100</rx:Count>
                <rx:Skip>10</rx:Skip>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>AverageBuffer</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Average" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>4</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToSingle(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:BufferCount">
                <rx:Count>100</rx:Count>
                <rx:Skip>10</rx:Skip>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>AverageBuffer</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Average" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="2" To="11" Label="Source1" />
            <Edge From="2" To="15" Label="Source1" />
            <Edge From="2" To="19" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Cross</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Enable_Valve0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:Payload xsi:type="harp:CreateMessagePayload">
                  <harp:MessageType>Write</harp:MessageType>
                  <harp:Address>69</harp:Address>
                  <harp:PayloadType>U8</harp:PayloadType>
                  <harp:Value>1</harp:Value>
                </harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>OLF Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Enable_EndValves</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:Payload xsi:type="harp:CreateMessagePayload">
                  <harp:MessageType>Write</harp:MessageType>
                  <harp:Address>69</harp:Address>
                  <harp:PayloadType>U8</harp:PayloadType>
                  <harp:Value>49</harp:Value>
                </harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>OLF Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Disable_Valve0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:Payload xsi:type="harp:CreateMessagePayload">
                  <harp:MessageType>Write</harp:MessageType>
                  <harp:Address>69</harp:Address>
                  <harp:PayloadType>U8</harp:PayloadType>
                  <harp:Value>0</harp:Value>
                </harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>OLF Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="17" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source2" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="25" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source2" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="29" To="35" Label="Source2" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="44" To="52" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="45" To="49" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="48" To="53" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="53" Label="Source2" />
      <Edge From="52" To="53" Label="Source3" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="55" To="59" Label="Source1" />
      <Edge From="56" To="57" Label="Source1" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="59" Label="Source2" />
      <Edge From="61" To="67" Label="Source1" />
      <Edge From="62" To="63" Label="Source1" />
      <Edge From="63" To="67" Label="Source2" />
      <Edge From="64" To="65" Label="Source1" />
      <Edge From="65" To="67" Label="Source3" />
      <Edge From="66" To="67" Label="Source4" />
      <Edge From="67" To="68" Label="Source1" />
      <Edge From="68" To="69" Label="Source1" />
      <Edge From="68" To="70" Label="Source1" />
      <Edge From="71" To="72" Label="Source1" />
      <Edge From="72" To="73" Label="Source1" />
      <Edge From="73" To="74" Label="Source1" />
      <Edge From="74" To="75" Label="Source1" />
      <Edge From="75" To="76" Label="Source1" />
      <Edge From="76" To="77" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>