<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:AindVrForagingDataSchema;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:p3="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:ReadAllText">
          <io:Path>C:\git\AllenNeuralDynamics\Aind.Behavior.VrForaging\.local\debugging.json</io:Path>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:DeserializeFromJson">
        <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindVrForagingTaskLogic" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>TaskParameters</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Environment.Blocks</Selector>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Environment</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Patches</Selector>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>env</Name>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>ThisPatch</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>RewardSpecification</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>RewardFunction</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="p1:MatchRewardFunction">
        <p1:Type xsi:type="TypeMapping" TypeArguments="p1:OutsideRewardFunction" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>RewardFunction</Name>
      </Expression>
      <Expression xsi:type="p1:MatchRewardFunction">
        <p1:Type xsi:type="TypeMapping" TypeArguments="p1:PatchRewardFunction" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>DepRewardFunction</Name>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="RefreshEnvironmentRate" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TimeSpanProperty">
          <Value>PT0.1S</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>RefreshEnvironmentRate</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p2:PatchState">
        <rx:Name>PatchState</rx:Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Probability</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:WriteLine" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>Off</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency>120</gl:TargetUpdateFrequency>
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:Double,sys:Int32,p1:PatchUpdateFunction,p1:PatchUpdateFunction,p1:PatchUpdateFunction)">
        <rx:Name>UpdatePatchStates</rx:Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PatchManager</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2,Item1.Item1,Item1.Item2,Item1.Item3,Item1.Item4,Item1.Item5</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:UpdatePatchManager" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>PatchState</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>env</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>GetPatches</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:ToDictionary">
              <rx:KeySelector>StateIndex</rx:KeySelector>
              <rx:ElementSelector>it</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>PatchStatistics</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:CreatePatchManager" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>PatchManager</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DepRewardFunction</Name>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>OnReward</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RewardFunction</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>R</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RewardFunction</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ThisPatch</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>StateIndex</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>15</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1.Item1,Item2,Item1.Item2.Amount,Item1.Item2.Probability,Item1.Item2.Available</Selector>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>UpdatePatchStates</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:DelaySubscription">
          <gl:DueTime>PT2S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RewardFunction</Name>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>OnTime</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RewardFunction</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateFrame" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RewardFunction</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Delay</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:TimeSpanFromSeconds" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:DelaySubscription">
                <gl:DueTime>PT3S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TimeStep</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ElapsedRealTime</Selector>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="SubscribeSubject">
              <Name>RefreshEnvironmentRate</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Period" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT0S</gl:DueTime>
                <gl:Period>PT0.1S</gl:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Difference">
                <dsp:Order>1</dsp:Order>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RewardFunction</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="8" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="15" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ThisPatch</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>StateIndex</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1.Item1,Item2,Item1.Item2.Amount,Item1.Item2.Probability,Item1.Item2.Available</Selector>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>UpdatePatchStates</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT1M</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="12" To="16" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="21" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="29" To="32" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source2" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="46" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source2" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="61" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="53" To="56" Label="Source1" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="55" To="56" Label="Source2" />
      <Edge From="56" To="57" Label="Source1" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="60" Label="Source1" />
      <Edge From="59" To="60" Label="Source2" />
      <Edge From="60" To="61" Label="Source2" />
      <Edge From="61" To="62" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>