WorkflowBuilder(Version=2.8.1)
ExternalizedMapping(Path(DisplayName=SessionPath))
-> Bonsai.IO.ReadAllText(Path=DataSchemas\ExampleSession.yml)
-> AsyncSubject RawSubjectSchema
-> AindVrForagingDataSchema.Session.DeserializeFromJson(Type=TypeMapping<AindVrForagingDataSchema.Session.AindBehaviorSessionModel>)
-> Take(Count=1)
-> AsyncSubject SubjectSchema

ExternalizedMapping(Path(DisplayName=RigPath))
-> Bonsai.IO.ReadAllText(Path=DataSchemas\ExampleSession.yml)
-> AsyncSubject RawRigSchema
-> AindVrForagingDataSchema.Rig.DeserializeFromJson(Type=TypeMapping<AindVrForagingDataSchema.Rig.AindVrForagingRig>)
-> Take(Count=1)
-> AsyncSubject RigSchema

ExternalizedMapping(Path(DisplayName=TaskLogicPath))
-> Bonsai.IO.ReadAllText(Path=DataSchemas\ExampleSession.yml)
-> AsyncSubject RawTaskLogicSchema
-> AindVrForagingDataSchema.TaskLogic.DeserializeFromJson(Type=TypeMapping<AindVrForagingDataSchema.TaskLogic.AindVrForagingTaskLogic>)
-> Take(Count=1)
-> AsyncSubject TaskLogicSchema
-> MemberSelector(Selector=TaskParameters)
-> AsyncSubject TaskLogicParameters

Annotation PinOut
  Text:
    | Function | HarpBehavior Pin | Notes |
    | --- | ----------- | ----------- |
    | Camera Trigger | DO0 |  |
    | Water Valve | Port0 Supply |  Use a poke breakout |
    | Lickometer | Port0 DI |  Use a poke breakout |
    | Encoder B | Port2 DIO | Use a poke breakout |
    | Encoder A | Port2 DI | Use a poke breakout |
    | Thermistor | ADC0 |  |
    | Pressure Sensor | ADC1 |  |
    | Photodiode | DI3 |  |
    | Servo Motor | DO2 |  |
    | Audio Buzzer | DO1 |  |
-> IncludeWorkflow(Path=Extensions\HarpBehaviorDevice.bonsai, StartExperimentSubjectName=StartExperiment)

Annotation(Text="")
-> GroupWorkflow Hardware
    GroupWorkflow ScreenConfiguration
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen)
        -> PropertyMapping(DisplayDevice(Selector=DisplayIndex), TargetRenderFrequency(Selector=TargetRenderFrequency), TargetUpdateFrequency(Selector=TargetUpdateFrequency))
        -> Bonsai.Shaders.CreateWindow
          Width=1000
          Height=1000
          Title=VrForaging
          VSync=Off
          SwapSync=false
          ClearColor=Black
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=false
          Location=nil
          WindowBorder=Resizable
          WindowState=Fullscreen
          DisplayDevice=Second
          TargetRenderFrequency=60
          TargetUpdateFrequency=120
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
        -> Bonsai.Shaders.ShaderResources
          Shaders
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=ScaledTexturedModel
              RenderState=""
              ShaderUniforms=""
              BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=textureDiffuse, TextureSlot=Texture0, TextureTarget=Texture2D))
              FramebufferAttachments=""
              VertexShader=BonVision:Shaders.TexturedModel.vert
              FragmentShader=Shaders\ScaledTexturedModel.frag
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=AdjustQuadTexture
              RenderState=""
              ShaderUniforms=""
              BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D))
              FramebufferAttachments=""
              VertexShader=BonVision:Shaders.Quad.vert
              FragmentShader=Shaders\AdjustQuadTexture.frag
        -> Bonsai.Resources.LoadResources
        -> WorkflowOutput

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen.CalibrationDirectory)
        -> PropertyMapping(Directory)
        -> IncludeWorkflow(Path=Extensions\LoadAllScreensCalibration.bonsai, Directory=Calibration\Monitors)
        -> Take(Count=1)
        -> AsyncSubject ScreenCalibration

        GroupWorkflow RenderLoop
            Bonsai.Shaders.RenderFrame
            -> PublishSubject RenderFrame => #1
            SubscribeSubject FarClipHorizon
            -> PropertyMapping(FarClip) => #3
            #1, #3 -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=1E-05, FarClip=1000, Light(X=0, Y=0, Z=0)) => #4
            -> MemberSelector(Selector=ViewMatrix)
            -> Bonsai.Shaders.RotateY(Order=Append, Angle=-3.14159274) => #6
            #6, #4 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as ViewMatrix,
                Item2.ProjectionMatrix as ProjectionMatrix,
                Item2.Light as Light)
            -> PublishSubject Draw3DStim
            -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Black, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #10
            SubscribeSubject ScreenCalibration
            -> MemberSelector(Selector=Right)
            -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #13
            #10, #13 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=22, Height=22, Rotation(X=0, Y=-60.0001403060998, Z=0), Translation(X=20, Y=0, Z=-8))
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #15
            SubscribeSubject ScreenContrast
            -> PropertyMapping(Contrast) => #17
            #15, #17 -> IncludeWorkflow
              Path=Extensions\AdjustQuadTexture.bonsai
              ExtentX=1
              ExtentY=1
              LocationX=0
              LocationY=0
              Layer=1
              Angle=0
              ScaleX=1
              ScaleY=1
              ShiftX=0
              ShiftY=0
              Contrast=1
              Brightness=0
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.6666667, Y=0, Width=0.333333, Height=1) => #19
            SubscribeSubject ScreenCalibration
            -> MemberSelector(Selector=Center)
            -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #22
            #10, #22 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=22, Height=22, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-12.7))
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #24
            SubscribeSubject ScreenContrast
            -> PropertyMapping(Contrast) => #26
            #24, #26 -> IncludeWorkflow
              Path=Extensions\AdjustQuadTexture.bonsai
              ExtentX=1
              ExtentY=1
              LocationX=0
              LocationY=0
              Layer=1
              Angle=0
              ScaleX=1
              ScaleY=1
              ShiftX=0
              ShiftY=0
              Contrast=1
              Brightness=0
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333333343, Y=0, Width=0.333333343, Height=1) => #28
            SubscribeSubject ScreenCalibration
            -> MemberSelector(Selector=Left)
            -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #31
            #10, #31 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=22, Height=22, Rotation(X=0, Y=60.0001403060998, Z=0), Translation(X=-20, Y=0, Z=-8))
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #33
            SubscribeSubject ScreenContrast
            -> PropertyMapping(Contrast) => #35
            #33, #35 -> IncludeWorkflow
              Path=Extensions\AdjustQuadTexture.bonsai
              ExtentX=1
              ExtentY=1
              LocationX=0
              LocationY=0
              Layer=1
              Angle=0
              ScaleX=1
              ScaleY=1
              ShiftX=0
              ShiftY=0
              Contrast=1
              Brightness=0
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333333343, Height=1) => #37
            #19, #28, #37 -> Zip
            -> PublishSubject PostDrawing

            FloatProperty(Value=1)
            -> Take(Count=1)
            -> BehaviorSubject ScreenContrast

            Annotation(Text="")
            -> GroupWorkflow SynchQuad
                BooleanProperty(Value=false)
                -> Take(Count=1) => #1
                Defer RandomInterval
                    SubscribeSubject RngSeed => #0
                    ExternalizedMapping(Lower, Upper) => #1
                    #0, #1 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=6)
                    -> Bonsai.Numerics.Distributions.Sample
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime)
                    -> Bonsai.Shaders.Timer(DueTime=PT0S)
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> Repeat
                -> ElementIndex
                -> MemberSelector(Selector=Index)
                -> Mod(Operand=IntProperty(Value=2))
                -> Equal(Operand=IntProperty(Value=1)) => #7
                #1, #7 -> Concat
                -> BehaviorSubject SynchQuadColor

                SubscribeSubject PostDrawing
                -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1)
                -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=0, Right=3, Bottom=0, Top=1) => #12
                SubscribeSubject RenderFrame
                -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
                -> Accumulate
                -> ElementIndex => #16
                #12, #16 -> Zip => #17
                SubscribeSubject SynchQuadColor
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #19
                  Expression: it ? 1.0 : 0.0
                #17, #19 -> WithLatestFrom => #20
                -> InputMapping(SynchQuadValue(Selector=Item2), FrameIndex(Selector=Item1.Item2.Index), FrameTimestamp(Selector=Item1.Item2.Value))
                -> SelectMany CreateRenderSynchState
                    ExternalizedMapping(SynchQuadValue, FrameIndex, FrameTimestamp)
                    -> AllenNeuralDynamics.Core.Logging.RenderSynchState
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> BehaviorSubject RendererSynchState => #23
                #20 -> MemberSelector(Selector=Item1.Item1) => #24
                #23, #24 -> Zip => #25
                -> InputMapping(Selector=Item2, ColorG(Selector=Item1.SynchQuadValue), ColorR(Selector=Item1.SynchQuadValue), ColorB(Selector=Item1.SynchQuadValue))
                -> IncludeWorkflow => #27
                  Path=BonVision:Primitives.DrawQuad.bonsai
                  ExtentX=0.045
                  ExtentY=0.08
                  LocationX=2.925
                  LocationY=0.03
                  Layer=10
                  Angle=0
                  ColorR=1
                  ColorG=1
                  ColorB=1
                  ColorA=1
                #25 -> MemberSelector(Selector=Item1.FrameIndex)
                -> Bonsai.Scripting.Expressions.ExpressionTransform Mod2 => #29
                  Expression: (it % 2).Value
                #25 -> MemberSelector(Selector=Item2) => #30
                #29, #30 -> Zip
                -> InputMapping(Selector=Item2, ColorG(Selector=Item1), ColorR(Selector=Item1), ColorB(Selector=Item1))
                -> IncludeWorkflow => #33
                  Path=BonVision:Primitives.DrawQuad.bonsai
                  ExtentX=0.045
                  ExtentY=0.045
                  LocationX=2.925
                  LocationY=0.15
                  Layer=10
                  Angle=0
                  ColorR=1
                  ColorG=1
                  ColorB=1
                  ColorA=1
                #27, #33 -> Zip

        GroupWorkflow LoadTextureBank
            SubscribeSubject TextureBankPath
            -> PropertyMapping(Path)
            -> Bonsai.IO.GetFiles(Path=Textures, SearchPattern=*.jpg, SearchOption=TopDirectoryOnly)
            -> Merge
            -> CreateObservable LoadTexture
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject TexturePath

                SubscribeSubject TexturePath
                -> Bonsai.IO.GetFileNameWithoutExtension => #4
                SubscribeSubject TexturePath
                -> PropertyMapping(FileName)
                -> Bonsai.Shaders.LoadImage => #7
                  Width=nil
                  Height=nil
                  InternalFormat=Rgba
                  WrapS=Repeat
                  WrapT=Repeat
                  MinFilter=Linear
                  MagFilter=Linear
                  FileName=Textures\wall_4.jpg
                  ColorType=Unchanged
                  FlipMode=Vertical
                #4, #7 -> Zip
                -> WorkflowOutput
            -> Merge
            -> ToDictionary(KeySelector=Item1, ElementSelector=Item2)
            -> AsyncSubject TextureBank
    -> DelaySubscription(DueTime=PT2S)

    GroupWorkflow HarpDevices
        IncludeWorkflow(Path=Extensions\HarpOlfactometerDevice.bonsai, StartExperimentSubjectName=StartExperiment)

        IncludeWorkflow(Path=Extensions\HarpSniffDetector.bonsai, StartExperimentSubjectName=StartExperiment) => #1
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpSniffDetector)
        -> IncludeWorkflow(Path=Extensions\IsNotNull.bonsai) => #4
        #1, #4 -> SubscribeWhen

        IncludeWorkflow(Path=Extensions\HarpTreadmill.bonsai, StartExperimentSubjectName=StartExperiment) => #6
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Treadmill)
        -> MemberSelector(Selector=HarpBoard)
        -> AindVrForagingDataSchema.Rig.MatchTreadmillBoard(Type=TypeMapping<AindVrForagingDataSchema.Rig.HarpTreadmill>)
        -> IncludeWorkflow(Path=Extensions\IsNotNull.bonsai) => #11
        #6, #11 -> SubscribeWhen

        IncludeWorkflow(Path=Extensions\HarpLickometerDevice.bonsai, StartExperimentSubjectName=StartExperiment)
        IncludeWorkflow(Path=Extensions\HarpClockSynchronizerDevice.bonsai, StartExperimentSubjectName=StartExperiment)

        IncludeWorkflow(Path=Extensions\HarpAnalogInputDevice.bonsai, StartExperimentSubjectName=StartExperiment) => #15
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpAnalogInput)
        -> IncludeWorkflow(Path=Extensions\IsNotNull.bonsai) => #18
        #15, #18 -> SubscribeWhen

    GroupWorkflow Cameras
        GroupWorkflow TriggeredCameras
            SubscribeSubject RigSchema
            -> Take(Count=1)
            -> MemberSelector(Selector=TriggeredCameraController)
            -> AsyncSubject TriggeredCameraController
            -> MemberSelector(Selector=FrameRate.Value)
            -> AsyncSubject CameraFrameRate

            SubscribeSubject CameraFrameRate
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.Camera0Frequency)
            -> MulticastSubject HarpBehaviorCommands

            SubscribeSubject HarpBehaviorEvents
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame) => #11
            -> MemberSelector(Selector=Value)
            -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.FrameAcquired>(Value=FrameAcquired))
            -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
            -> Condition => #15
                WorkflowInput Source1
                -> WorkflowOutput
            #15, #11 -> WithLatestFrom
            -> MemberSelector(Selector=Item2.Seconds)
            -> PublishSubject FrameEvent

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable InstantiateCamera => #22
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                BooleanProperty(Value=true)
                -> MulticastSubject TriggeredCamerasInitialized
                -> Take(Count=1) => #5
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value)
                -> PropertyMapping => #8
                  SerialNumber(Selector=SerialNumber)
                  ExposureTime(Selector=Exposure)
                  Gain(Selector=Gain)
                  Binning(Selector=Binning)
                  ColorProcessing(Selector=ColorProcessing)
                #5, #8 -> AllenNeuralDynamics.Core.AindSpinnakerCapture(Index=nil, ColorProcessing=Default, ExposureTime=19000, Gain=0, Binning=1) => #9
                SubscribeSubject FrameEvent => #10
                #9, #10 -> Zip
                -> Bonsai.Harp.CreateTimestamped => #12
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #14
                #12, #14 -> WithLatestFrom
                -> WorkflowOutput
            Annotation SpinnakerApiNote(Text="For some reason, if you try to access the spinnaker API back to back, a threading error is emitted")
            -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.1S) => #24
            #22, #24 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Merge
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> ReplaySubject TriggeredCamerasStream(BufferSize=nil)

            BehaviorSubject<System.Boolean> TriggeredCamerasInitialized
            -> IntProperty(Value=1)
            -> Accumulate => #32
            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> MemberSelector(Selector=Count)
            -> PropertyMapping(Value) => #36
            #32, #36 -> GreaterThanOrEqual(Operand=IntProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> Bonsai.Shaders.Delay(DueTime=PT0.1S)
            -> BehaviorSubject TriggeredCamerasReady

        GroupWorkflow MonitoringCameras
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=MonitoringCameraController)
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable InstantiateCamera
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value)
                -> MemberSelector(Selector=Index)
                -> PropertyMapping(Index)
                -> Bonsai.Video.VideoCaptureDevice(Index=0, CaptureProperties="") => #7
                SubscribeSubject HarpTimestampSource => #8
                #7, #8 -> WithLatestFrom
                -> Bonsai.Harp.CreateTimestamped => #10
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #12
                #10, #12 -> WithLatestFrom
                -> WorkflowOutput
            -> Merge
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> ReplaySubject MonitoringCamerasStream(BufferSize=nil)
            -> WorkflowOutput

SubscribeSubject HarpBehaviorEvents
-> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
-> Harp.Behavior.FilterRegister(FilterType=Include, Register=Harp.Behavior.AnalogData)
-> BehaviorSubject HarpTimestampSource

GroupWorkflow SessionSettings
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=RngSeed) => #1
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=10)
    -> Bonsai.Numerics.Distributions.Sample => #4
    #1, #4 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform CheckNull
      Expression: Item1.HasValue ? Item1.Value : Item2
    -> Take(Count=1)
    -> AsyncSubject RngSeedValue
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

    AllenNeuralDynamics.VersionControl.CreateRepository(Path=../.)
    -> AsyncSubject Repository

    SubscribeSubject RigSchema
    -> MemberSelector(Selector=Screen.TextureAssetsDirectory)
    -> PropertyMapping(Value)
    -> PropertySource<Bonsai.IO.GetFiles,System.String>(MemberName=Path, Value=Textures)
    -> Take(Count=1)
    -> AsyncSubject TextureBankPath

    Annotation(Text="A small value that is used to sum to the visual horizon to instantiate resources.")
    -> FloatProperty(Value=0)
    -> Take(Count=1)
    -> AsyncSubject SigmaZ

    ExternalizedMapping(Value(DisplayName=FarClipHorizon))
    -> FloatProperty(Value=1000)
    -> Take(Count=1)
    -> AsyncSubject FarClipHorizon

    Annotation(Text="The distance used to determine whether a segment should be disposed.") => #29
    ExternalizedMapping(Value(DisplayName=DisposingTreshold)) => #30
    #29, #30 -> FloatProperty(Value=20)
    -> Take(Count=1)
    -> AsyncSubject DisposingTreshold

    SubscribeSubject SubjectSchema
    -> PropertyMapping(Subject(Selector=Subject), RootFolder(Selector=RootPath))
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateRootLoggingPath.bonsai, RootFolder=C:\data\, Subject=672102, SubjectName=LoggingRootPath)
    -> Take(Count=1)
    -> AsyncSubject CompoundRootPath

GroupWorkflow Initialization
    BehaviorSubject<System.Reactive.Unit> StartExperiment
    BehaviorSubject<AindVrForagingDataSchema.TaskLogic.VirtualSite> ActiveSite
    BehaviorSubject<AllenNeuralDynamics.Core.Logging.SoftwareEvent> SoftwareEvent
    BehaviorSubject<AllenNeuralDynamics.Core.Logging.SoftwareEvent> RuntimeLogging
    BehaviorSubject<System.Reactive.Unit> EndExperiment
    BehaviorSubject<System.Reactive.Unit> StartLogging
    BehaviorSubject<System.String> Annotations

    BooleanProperty(Value=false)
    -> Take(Count=1) => #8
    SubscribeSubject StartExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=true) => #11
    SubscribeSubject EndExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=false) => #14
    #8, #11, #14 -> Merge
    -> BehaviorSubject ExperimentState

GroupWorkflow HardwareChecks
    GroupWorkflow ProtocolValidation => #0
        SubscribeSubject Repository
        -> AllenNeuralDynamics.VersionControl.IsRepositoryClean(IgnoreUntracked=false)
        -> BitwiseNot => #2
        SubscribeSubject SubjectSchema
        -> MemberSelector(Selector=AllowDirtyRepo) => #4
        #2, #4 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform AllowDirty?
          Expression: Item2 ? False : Item1
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.ThrowException(Message="Repository is not clean! Please discard all local changes.")

        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=EnvironmentStatistics.Patches)
        -> MemberSelector(Selector=Count) => #11
        SubscribeSubject TransitionMatrix
        -> MemberSelector(Selector=Rows) => #13
        #11, #13 -> Zip
        -> NotEqual
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> AllenNeuralDynamics.Core.ThrowException(Message="Number of patches does not match transition matrix size.")

        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.OdorControl.UseChannel3AsCarrier)
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany SampleFlow
            SubscribeSubject StartExperiment
            -> Take(Count=1) => #1
            SubscribeSubject HarpOlfactometerEvents
            -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.TimestampedChannel3ActualFlow)
            -> MemberSelector(Selector=Value) => #4
            ExternalizedMapping(Value(DisplayName=LowFlowThreshold)) => #5
            #4, #5 -> LessThan(Operand=FloatProperty(Value=950)) => #6
            #6, #4 -> Zip => #7
            #1, #7 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Take(Count=1)
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2)
        -> Format(Format="Flow on Channel3 is lower than expected. Reading {0}.", Selector=it)
        -> InputMapping(Selector=it, Message(Selector=it))
        -> AllenNeuralDynamics.Core.ThrowException(Message="Flow on Channel3 is lower than expected.")

        GroupWorkflow CameraChecks
            SubscribeSubject TriggeredCamerasStream
            -> CreateObservable CheckDroppedFrames
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject InputSequence

                SubscribeSubject InputSequence
                -> Merge
                -> MemberSelector(Selector=Value.ChunkData)
                -> MemberSelector(Selector=FrameID)
                -> Bonsai.Dsp.Difference(Order=1)
                -> Subtract(Operand=DoubleProperty(Value=1))
                -> GreaterThan(Operand=DoubleProperty(Value=0))
                -> Condition => #10
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject InputSequence
                -> MemberSelector(Selector=Key) => #12
                #10, #12 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> Merge
            -> Format(Format="Camera {0} dropped frame detected during pre-session!", Selector=it)
            -> InputMapping(Selector=it, Message(Selector=it))
            -> AllenNeuralDynamics.Core.ThrowException(Message="Dropped frame detected during pre-session!") => #5
            SubscribeSubject StartExperiment => #6
            #5, #6 -> TakeUntil

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable CheckCameraSettings
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value.Exposure) => #4
                SubscribeSubject TriggeredCameraController
                -> MemberSelector(Selector=FrameRate)
                -> MemberSelector(Selector=Value) => #7
                #4, #7 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: ((1.0 / Item2) * 1000000) < double(Item1) + 1000
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1) => #11
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #13
                #11, #13 -> WithLatestFrom
                -> WorkflowOutput
            -> Merge
            -> Format(Format="Camera {0} exposure setting not compatible with requested frame rate!", Selector=it)
            -> InputMapping(Selector=it, Message(Selector=it))
            -> AllenNeuralDynamics.Core.ThrowException(Message="Dropped frame detected during pre-session!")

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=FrameRate.HasValue)
            -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> AllenNeuralDynamics.Core.ThrowException(Message="TriggeredCameraControl must specify a valid FrameRate property!")
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=SkipHardwareValidation)
    -> BitwiseNot
    -> Condition => #4
        WorkflowInput Source1
        -> WorkflowOutput
    #0, #4 -> SubscribeWhen
    -> Bonsai.Shaders.DelaySubscription(DueTime=PT2S)
    -> WorkflowOutput

Annotation Defer(Text="Defer just to keep the variable polution a bit more contained")
-> Defer Logging => #32
    Defer Behavior
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.Logging.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Logging.Modality)>(MemberName=Modality, Value=Behavior)
        -> Take(Count=1)
        -> AsyncSubject Modality

        GroupWorkflow HarpLogging
            SubscribeSubject HarpBehaviorEvents
            -> Bonsai.Harp.GroupByRegister => #1
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=Behavior.harp
              Extension=bin
              HarpDevice=Behavior
            -> PropertyMapping(FileName) => #5
            #1, #5 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpOlfactometerEvents
            -> Bonsai.Harp.GroupByRegister => #8
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=Olfactometer.harp
              Extension=bin
              HarpDevice=Olfactometer
            -> PropertyMapping(FileName) => #12
            #8, #12 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpLickometerEvents
            -> Bonsai.Harp.GroupByRegister => #15
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=Lickometer.harp
              Extension=bin
              HarpDevice=LicketySplit
            -> PropertyMapping(FileName) => #19
            #15, #19 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpTreadmillEvents
            -> Bonsai.Harp.GroupByRegister => #22
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=Treadmill.harp
              Extension=bin
              HarpDevice=Treadmill
            -> PropertyMapping(FileName) => #26
            #22, #26 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpSniffDetectorEvents
            -> Bonsai.Harp.GroupByRegister => #29
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=SniffDetector.harp
              Extension=bin
              HarpDevice=SniffDetector
            -> PropertyMapping(FileName) => #33
            #29, #33 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpClockGenEvents
            -> Bonsai.Harp.GroupByRegister => #36
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=ClockGenerator.harp
              Extension=bin
              HarpDevice=TimestampGeneratorGen3
            -> PropertyMapping(FileName) => #40
            #36, #40 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpAnalogInputEvents
            -> Bonsai.Harp.GroupByRegister => #43
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=AnalogInput.harp
              Extension=bin
              HarpDevice=AnalogInput
            -> PropertyMapping(FileName) => #47
            #43, #47 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

        GroupWorkflow HarpCommandsLogging
            SubscribeSubject HarpTimestampSource
            -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
            -> BehaviorSubject HarpSeconds

            SubscribeSubject HarpBehaviorCommands => #3
            SubscribeSubject HarpSeconds => #4
            #3, #4 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil)
            -> Bonsai.Harp.GroupByRegister => #7
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=HarpCommands/Behavior.harp
              Extension=bin
              HarpDevice=Behavior
            -> PropertyMapping(FileName) => #11
            #7, #11 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpOlfactometerCommands => #13
            SubscribeSubject HarpSeconds => #14
            #13, #14 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil)
            -> Bonsai.Harp.GroupByRegister => #17
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=HarpCommands/Olfactometer.harp
              Extension=bin
              HarpDevice=Olfactometer
            -> PropertyMapping(FileName) => #21
            #17, #21 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpLickometerCommands => #23
            SubscribeSubject HarpSeconds => #24
            #23, #24 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil)
            -> Bonsai.Harp.GroupByRegister => #27
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=HarpCommands/Lickometer.harp
              Extension=bin
              HarpDevice=LicketySplit
            -> PropertyMapping(FileName) => #31
            #27, #31 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpTreadmillCommands => #33
            SubscribeSubject HarpSeconds => #34
            #33, #34 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil)
            -> Bonsai.Harp.GroupByRegister => #37
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=HarpCommands/Treadmill.harp
              Extension=bin
              HarpDevice=Treadmill
            -> PropertyMapping(FileName) => #41
            #37, #41 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpSniffDetectorCommands => #43
            SubscribeSubject HarpSeconds => #44
            #43, #44 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil)
            -> AllenNeuralDynamics.SniffDetector.GroupByRegister => #47
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=HarpCommands/SniffDetector.harp
              Extension=bin
              HarpDevice=HarpDevice
            -> PropertyMapping(FileName) => #51
            #47, #51 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpClockGenCommands => #53
            SubscribeSubject HarpSeconds => #54
            #53, #54 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil)
            -> Bonsai.Harp.GroupByRegister => #57
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=HarpCommands/ClockGenerator.harp
              Extension=bin
              HarpDevice=TimestampGeneratorGen3
            -> PropertyMapping(FileName) => #61
            #57, #61 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpAnalogInputCommands => #63
            SubscribeSubject HarpSeconds => #64
            #63, #64 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil)
            -> Bonsai.Harp.GroupByRegister => #67
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=HarpCommands/AnalogInput.harp
              Extension=bin
              HarpDevice=AnalogInput
            -> PropertyMapping(FileName) => #71
            #67, #71 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

        GroupWorkflow Render
            SubscribeSubject RendererSynchState
            -> Bonsai.Scripting.Expressions.ExpressionTransform Label => #1
              Expression:
                new(
                it.FrameIndex.Value as FrameIndex,
                it.FrameTimestamp.Value as FrameTimestamp,
                it.SynchQuadValue.Value as SynchQuadValue)
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #3
            #1, #3 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogCsv.bonsai
              LogName=RendererSynchState
              DeviceName=Renderer
              Extension=csv
              OmitHeader=false
              Delimiter=nil
              SubjectName=LoggingRootPath
              Modality=nil

        GroupWorkflow SoftwareEvents
            SubscribeSubject SoftwareEvent
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #1
            SubscribeSubject RendererSynchState
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #3
            #1, #3 -> WithLatestFrom
            -> AllenNeuralDynamics.Core.Logging.FramestampSoftwareEvent => #5
            SubscribeSubject HarpTimestampSource
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #7
            #5, #7 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent => #10
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #12
            #10, #12 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=SoftwareEvents, SubjectName=LoggingRootPath, Modality=nil)
            -> WorkflowOutput

            SubscribeSubject UpdaterEvents
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #16
            SubscribeSubject RendererSynchState
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #18
            #16, #18 -> WithLatestFrom
            -> AllenNeuralDynamics.Core.Logging.FramestampSoftwareEvent => #20
            SubscribeSubject HarpTimestampSource
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #22
            #20, #22 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent => #25
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #27
            #25, #27 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=UpdaterEvents, SubjectName=LoggingRootPath, Modality=nil)

            SubscribeSubject Annotations
            -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=Annotations)
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #31
            SubscribeSubject RendererSynchState
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #33
            #31, #33 -> WithLatestFrom
            -> AllenNeuralDynamics.Core.Logging.FramestampSoftwareEvent => #35
            SubscribeSubject HarpTimestampSource
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #37
            #35, #37 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent => #40
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #42
            #40, #42 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=Annotations, SubjectName=LoggingRootPath, Modality=nil)

            GroupWorkflow Metadata
                SubscribeSubject Repository
                -> MemberSelector(Selector=Head)
                -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=RepositoryStatus)
                -> MulticastSubject SoftwareEvent

                SubscribeSubject RngSeedValue
                -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=RngSeed)
                -> MulticastSubject SoftwareEvent

        GroupWorkflow OperationControl
            SubscribeSubject CurrentPosition
            -> MemberSelector(Selector="Seconds,Value.Z")
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as Seconds,
                Item2 as Position)
            -> Defer LogCsv
                WorkflowInput Source1 => #0
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #2
                #0, #2 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:LogCsv.bonsai
                  LogName=CurrentPosition
                  DeviceName=OperationControl
                  Extension=csv
                  OmitHeader=false
                  Delimiter=nil
                  SubjectName=LoggingRootPath
                  Modality=nil
                -> WorkflowOutput

            SubscribeSubject IsStopped
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Seconds as Seconds,
                Value as IsStopped)
            -> Defer LogCsv
                WorkflowInput Source1 => #0
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #2
                #0, #2 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:LogCsv.bonsai
                  LogName=IsStopped
                  DeviceName=OperationControl
                  Extension=csv
                  OmitHeader=false
                  Delimiter=nil
                  SubjectName=LoggingRootPath
                  Modality=nil
                -> WorkflowOutput

    Defer BehaviorVideos
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.Logging.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Logging.Modality)>(MemberName=Modality, Value=BehaviorVideos)
        -> Take(Count=1)
        -> AsyncSubject Modality

        GroupWorkflow TriggeredCameras
            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge => #2
            -> MemberSelector(Selector=Value.VideoWriter)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> AindVrForagingDataSchema.Rig.MatchVideoWriter(Type=TypeMapping<AindVrForagingDataSchema.Rig.VideoWriterFfmpeg>) => #5
            #2 -> MemberSelector(Selector=Key) => #6
            #5, #6 -> WithLatestFrom
            -> CreateObservable FfmpegWriter
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject This

                SubscribeSubject This
                -> MemberSelector(Selector=Item2)
                -> AsyncSubject ThisCameraName

                SubscribeSubject This
                -> MemberSelector(Selector=Item1)
                -> AsyncSubject ThisWriter

                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=FrameRate)
                -> PropertyMapping(EncodingFrameRate) => #11
                SubscribeSubject ThisCameraName
                -> PropertyMapping(LogName) => #13
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=ContainerExtension)
                -> PropertyMapping(VideoExtension) => #16
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=OutputArguments)
                -> PropertyMapping(Codec) => #19
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #21
                #11, #13, #16, #19, #21 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:GenerateSpinnakerLoggingPath.bonsai
                  SubjectName=LoggingRootPath
                  Modality=nil
                  LogName=FaceCamera
                  EncodingFrameRate=60
                  VideoExtension=mp4
                  MetadataExtension=csv
                  Codec="-c:v h264_nvenc -vsync 0 -2pass 1 -bf:v 0 -qp 13-preset medium -b:v 20M -rc:v cbr"
                -> AsyncSubject CameraLoggerPath

                SubscribeSubject TriggeredCamerasStream
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    SubscribeSubject ThisCameraName
                    -> PropertyMapping(Value) => #3
                    #1, #3 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                -> Take(Count=1)
                -> Merge => #27
                SubscribeSubject CameraLoggerPath
                -> MemberSelector(Selector=Metadata)
                -> PropertyMapping(FileName) => #30
                #27, #30 -> Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=true, Selector="Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp")
                -> MemberSelector(Selector=Value.Image) => #32
                SubscribeSubject CameraLoggerPath
                -> PropertyMapping(FileName(Selector=Video), FrameRate(Selector=Logger.EncodingFrameRate), OutputArguments(Selector=Logger.Codec)) => #34
                #32, #34 -> AllenNeuralDynamics.Core.FfmpegVideoWriter(Overwrite=false, FrameRate=0)

                AindVrForagingDataSchema.Rig.VideoWriter
            -> Merge

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge => #12
            -> MemberSelector(Selector=Value.VideoWriter)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> AindVrForagingDataSchema.Rig.MatchVideoWriter(Type=TypeMapping<AindVrForagingDataSchema.Rig.VideoWriterOpenCv>) => #15
            #12 -> MemberSelector(Selector=Key) => #16
            #15, #16 -> WithLatestFrom
            -> CreateObservable OpenCvWriter
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject This

                SubscribeSubject This
                -> MemberSelector(Selector=Item2)
                -> AsyncSubject ThisCameraName

                SubscribeSubject This
                -> MemberSelector(Selector=Item1)
                -> AsyncSubject ThisWriter

                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=FrameRate)
                -> PropertyMapping(EncodingFrameRate) => #11
                SubscribeSubject ThisCameraName
                -> PropertyMapping(LogName) => #13
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=ContainerExtension)
                -> PropertyMapping(VideoExtension) => #16
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=FourCc)
                -> PropertyMapping(Codec) => #19
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #21
                #11, #13, #16, #19, #21 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:GenerateSpinnakerLoggingPath.bonsai
                  SubjectName=LoggingRootPath
                  Modality=nil
                  LogName=FaceCamera
                  EncodingFrameRate=60
                  VideoExtension=mp4
                  MetadataExtension=csv
                  Codec="-c:v h264_nvenc -vsync 0 -2pass 1 -bf:v 0 -qp 13-preset medium -b:v 20M -rc:v cbr"
                -> AsyncSubject CameraLoggerPath

                SubscribeSubject TriggeredCamerasStream
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    SubscribeSubject ThisCameraName
                    -> PropertyMapping(Value) => #3
                    #1, #3 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                -> Take(Count=1)
                -> Merge => #27
                SubscribeSubject CameraLoggerPath
                -> MemberSelector(Selector=Metadata)
                -> PropertyMapping(FileName) => #30
                #27, #30 -> Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=true, Selector="Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp")
                -> MemberSelector(Selector=Value.Image) => #32
                SubscribeSubject CameraLoggerPath
                -> PropertyMapping(FileName(Selector=Video), FrameRate(Selector=Logger.EncodingFrameRate), FourCC(Selector=Logger.Codec)) => #34
                #32, #34 -> Bonsai.Vision.VideoWriter(Suffix=None, Buffered=true, Overwrite=false, FourCC=FMP4, FrameRate=30, FrameSize(Width=0, Height=0), ResizeInterpolation=NearestNeighbor)
            -> Merge

        GroupWorkflow MonitoringCameras
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=MonitoringCameraController)
            -> MemberSelector(Selector=Cameras)
            -> Merge => #3
            -> MemberSelector(Selector=Value.VideoWriter)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> AindVrForagingDataSchema.Rig.MatchVideoWriter(Type=TypeMapping<AindVrForagingDataSchema.Rig.VideoWriterFfmpeg>) => #6
            #3 -> MemberSelector(Selector=Key) => #7
            #6, #7 -> WithLatestFrom
            -> CreateObservable FfmpegWriter
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject This

                SubscribeSubject This
                -> MemberSelector(Selector=Item2)
                -> AsyncSubject ThisCameraName

                SubscribeSubject This
                -> MemberSelector(Selector=Item1)
                -> AsyncSubject ThisWriter

                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=FrameRate)
                -> PropertyMapping(EncodingFrameRate) => #11
                SubscribeSubject ThisCameraName
                -> PropertyMapping(LogName) => #13
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=ContainerExtension)
                -> PropertyMapping(VideoExtension) => #16
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=OutputArguments)
                -> PropertyMapping(Codec) => #19
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #21
                #11, #13, #16, #19, #21 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:GenerateSpinnakerLoggingPath.bonsai
                  SubjectName=LoggingRootPath
                  Modality=nil
                  LogName=FaceCamera
                  EncodingFrameRate=60
                  VideoExtension=mp4
                  MetadataExtension=csv
                  Codec="-c:v h264_nvenc -vsync 0 -2pass 1 -bf:v 0 -qp 13-preset medium -b:v 20M -rc:v cbr"
                -> AsyncSubject CameraLoggerPath

                SubscribeSubject MonitoringCamerasStream
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    SubscribeSubject ThisCameraName
                    -> PropertyMapping(Value) => #3
                    #1, #3 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                -> Take(Count=1)
                -> Merge => #27
                SubscribeSubject CameraLoggerPath
                -> MemberSelector(Selector=Metadata)
                -> PropertyMapping(FileName) => #30
                #27, #30 -> Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=true, Selector=Seconds)
                -> MemberSelector(Selector=Value) => #32
                SubscribeSubject CameraLoggerPath
                -> PropertyMapping(FileName(Selector=Video), FrameRate(Selector=Logger.EncodingFrameRate), OutputArguments(Selector=Logger.Codec)) => #34
                #32, #34 -> AllenNeuralDynamics.Core.FfmpegVideoWriter(Overwrite=false, FrameRate=0)
            -> Merge

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=MonitoringCameraController)
            -> MemberSelector(Selector=Cameras)
            -> Merge => #14
            -> MemberSelector(Selector=Value.VideoWriter)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> AindVrForagingDataSchema.Rig.MatchVideoWriter(Type=TypeMapping<AindVrForagingDataSchema.Rig.VideoWriterOpenCv>) => #17
            #14 -> MemberSelector(Selector=Key) => #18
            #17, #18 -> WithLatestFrom
            -> CreateObservable OpenCvWriter
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject This

                SubscribeSubject This
                -> MemberSelector(Selector=Item2)
                -> AsyncSubject ThisCameraName

                SubscribeSubject This
                -> MemberSelector(Selector=Item1)
                -> AsyncSubject ThisWriter

                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=FrameRate)
                -> PropertyMapping(EncodingFrameRate) => #11
                SubscribeSubject ThisCameraName
                -> PropertyMapping(LogName) => #13
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=ContainerExtension)
                -> PropertyMapping(VideoExtension) => #16
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=FourCc)
                -> PropertyMapping(Codec) => #19
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #21
                #11, #13, #16, #19, #21 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:GenerateSpinnakerLoggingPath.bonsai
                  SubjectName=LoggingRootPath
                  Modality=nil
                  LogName=FaceCamera
                  EncodingFrameRate=60
                  VideoExtension=mp4
                  MetadataExtension=csv
                  Codec="-c:v h264_nvenc -vsync 0 -2pass 1 -bf:v 0 -qp 13-preset medium -b:v 20M -rc:v cbr"
                -> AsyncSubject CameraLoggerPath

                SubscribeSubject MonitoringCamerasStream
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    SubscribeSubject ThisCameraName
                    -> PropertyMapping(Value) => #3
                    #1, #3 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                -> Take(Count=1)
                -> Merge => #27
                SubscribeSubject CameraLoggerPath
                -> MemberSelector(Selector=Metadata)
                -> PropertyMapping(FileName) => #30
                #27, #30 -> Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=true, Selector=Seconds)
                -> MemberSelector(Selector=Value) => #32
                SubscribeSubject CameraLoggerPath
                -> PropertyMapping(FileName(Selector=Video), FrameRate(Selector=Logger.EncodingFrameRate), FourCC(Selector=Logger.Codec)) => #34
                #32, #34 -> Bonsai.Vision.VideoWriter(Suffix=None, Buffered=true, Overwrite=false, FourCC=FMP4, FrameRate=30, FrameSize(Width=0, Height=0), ResizeInterpolation=NearestNeighbor)
            -> Merge

    Defer Other
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.Logging.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Logging.Modality)>(MemberName=Modality, Value=Other)
        -> Take(Count=1)
        -> AsyncSubject Modality

        GroupWorkflow ConfigSchemaLogging
            SubscribeSubject SubjectSchema
            -> AindVrForagingDataSchema.Session.SerializeToJson => #1
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #3
            #1, #3 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=session_output
              DeviceName=Config
              Extension=json

            SubscribeSubject TaskLogicSchema
            -> AindVrForagingDataSchema.TaskLogic.SerializeToJson => #6
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #8
            #6, #8 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=tasklogic_output
              DeviceName=Config
              Extension=json

            SubscribeSubject RigSchema
            -> AindVrForagingDataSchema.Rig.SerializeToJson => #11
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #13
            #11, #13 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=rig_output, DeviceName=Config, Extension=json)

            SubscribeSubject RawRigSchema => #15
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #17
            #15, #17 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=rig_input, DeviceName=Config, Extension=json)

            SubscribeSubject RawSubjectSchema => #19
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #21
            #19, #21 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=session_input, DeviceName=Config, Extension=json)

            SubscribeSubject RawTaskLogicSchema => #23
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #25
            #23, #25 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=tasklogic_input, DeviceName=Config, Extension=json)

        GroupWorkflow Logs
            SubscribeSubject EndExperiment
            -> StringProperty(Value=ExperimentCompleted)
            -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=SoftwareEvent) => #2
            SubscribeSubject HarpTimestampSource => #3
            #2, #3 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent
            -> AllenNeuralDynamics.Core.Logging.SerializeToJson => #7
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #9
            #7, #9 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=endsession, DeviceName="", Extension=json)

            SubscribeSubject RuntimeLogging
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #12
            SubscribeSubject RendererSynchState
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #14
            #12, #14 -> WithLatestFrom
            -> AllenNeuralDynamics.Core.Logging.FramestampSoftwareEvent => #16
            SubscribeSubject HarpTimestampSource
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #18
            #16, #18 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent => #21
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #23
            #21, #23 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=RuntimeLogging, SubjectName=LoggingRootPath, Modality=nil)
SubscribeSubject EndExperiment
-> Bonsai.Shaders.Delay(DueTime=PT1S) => #34
#32, #34 -> TakeUntil => #35
SubscribeSubject StartLogging => #36
#35, #36 -> SubscribeWhen

Annotation(Text="")
-> GroupWorkflow OperationControl
    GroupWorkflow PositionControl => #0
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl)
        -> MemberSelector(Selector=PositionControl.VelocityThreshold)
        -> BehaviorSubject StopVelocityThreshold

        SubscribeSubject StopVelocityThreshold
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=StopVelocityTreshold)
        -> MulticastSubject SoftwareEvent

        GroupWorkflow InitialPosition => #7
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl)
            -> MemberSelector(Selector=PositionControl.InitialPosition)
            -> MemberSelector(Selector=Z) => #3
            -> DoubleProperty(Value=0) => #4
            #3, #4 -> Zip
            -> Bonsai.Harp.CreateTimestamped
            -> Take(Count=1)
            -> WorkflowOutput
        SubscribeSubject EncoderData => #8
        #7, #8 -> Concat => #9
        -> MemberSelector(Selector=Value)
        -> Accumulate
        -> InputMapping(Z(Selector=it)) => #12
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.PositionControl.InitialPosition)
        -> PropertyMapping(X(Selector=X), Y(Selector=Y)) => #15
        #12, #15 -> Bonsai.Shaders.CreateVector3(X=0, Y=4, Z=-1) => #16
        #9 -> MemberSelector(Selector=Seconds) => #17
        #16, #17 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> Bonsai.Shaders.SampleOnUpdateFrame
        -> BehaviorSubject CurrentPosition

        SubscribeSubject EncoderData => #22
        -> MemberSelector(Selector=Value) => #23
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl)
        -> MemberSelector(Selector=PositionControl.FrequencyFilterCutoff)
        -> PropertyMapping(Cutoff1) => #27
        #23, #27 -> Bonsai.Dsp.FrequencyFilter(SampleRate=1000, Cutoff1=5, Cutoff2=0, KernelLength=60, FilterType=LowPass)
        -> Bonsai.Scripting.Expressions.ExpressionTransform cm/second
          Expression: it * 1000
        -> PublishSubject CurrentVelocity => #30
        SubscribeSubject StopVelocityThreshold
        -> PropertyMapping(Value) => #32
        #30, #32 -> LessThan(Operand=DoubleProperty(Value=10))
        -> DistinctUntilChanged => #34
        #22 -> MemberSelector(Selector=Seconds) => #35
        #34, #35 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> Bonsai.Shaders.SampleOnUpdateFrame
        -> BehaviorSubject IsStopped

        SubscribeSubject CurrentPosition
        -> MemberSelector(Selector=Value) => #41
        Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=-100000)
        -> Take(Count=1) => #43
        #41, #43 -> Scan => #44
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Accumulation.Z > Value.Z ? Accumulation : Value
            -> WorkflowOutput
        Annotation "Max(Z)"(Text="") => #45
        #44, #45 -> BehaviorSubject MaxPosition
    SubscribeSubject StartExperiment => #1
    #0, #1 -> SubscribeWhen

    GroupWorkflow PatchStatistics => #3
        BehaviorSubject<AindVrForagingDataSchema.TaskLogic.PatchStatistics> ActivePatch
        BehaviorSubject<System.Single> PatchRewardAvailable
        BehaviorSubject<System.Single> PatchRewardAmount
        BehaviorSubject<System.Single> PatchRewardProbability
        BehaviorSubject<System.Double> DepletionVariable

        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=EnvironmentStatistics.TransitionMatrix)
        -> MemberSelector(Selector=Data)
        -> FormatTransitionMatrix(NormalizeRows=true)
        -> BehaviorSubject TransitionMatrix

        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=EnvironmentStatistics.Patches)
        -> Merge
        -> ToDictionary(KeySelector=StateIndex, ElementSelector=it)
        -> Take(Count=1)
        -> AsyncSubject PatchStatistics

        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=EnvironmentStatistics.FirstState) => #17
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MemberSelector(Selector=Value) => #19
        #17 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany RandomStart => #21
            SubscribeSubject RngSeed => #0
            SubscribeSubject TransitionMatrix
            -> MemberSelector(Selector=Rows)
            -> Subtract(Operand=IntProperty(Value=1))
            -> PropertyMapping(Upper) => #4
            #0, #4 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
            -> Bonsai.Numerics.Distributions.Sample
            -> Take(Count=1)
            -> WorkflowOutput
        #19, #21 -> Merge
        -> Take(Count=1)
        -> BehaviorSubject ActiveStateIndex

        SubscribeSubject ActiveStateIndex
        -> CreateObservable UpdateState
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject PatchIndex

            FloatProperty(Value=0)
            -> Take(Count=1)
            -> MulticastSubject DepletionVariable

            SubscribeSubject PatchStatistics => #6
            SubscribeSubject PatchIndex
            -> PropertyMapping(Value) => #8
            #6, #8 -> Index(Operand=IntProperty(Value=0))
            -> Take(Count=1)
            -> AsyncSubject ThisPatch

            SubscribeSubject ThisPatch
            -> MulticastSubject ActivePatch

            GroupWorkflow DetermineDepletionRule
                SubscribeSubject ThisPatch
                -> Take(Count=1)
                -> MemberSelector(Selector=RewardSpecification.RewardFunction.DepletionRule) => #2
                -> Condition OnChoice
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.TaskLogic.DepletionRule>(Value=OnChoice))
                    -> WorkflowOutput
                -> CreateObservable OnChoice => #4
                    SubscribeSubject HotChoiceFeedback
                    -> IntProperty(Value=1)
                    -> Subtract(Operand=IntProperty(Value=1))
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: single(it)
                    -> WorkflowOutput
                #2 -> Condition OnReward
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.TaskLogic.DepletionRule>(Value=OnReward))
                    -> WorkflowOutput
                -> CreateObservable OnReward => #6
                    SubscribeSubject HotGiveReward
                    -> Condition HasValue
                        WorkflowInput Source1
                        -> MemberSelector(Selector=HasValue)
                        -> WorkflowOutput
                    -> IntProperty(Value=1)
                    -> Accumulate
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: single(it)
                    -> WorkflowOutput
                #2 -> Condition OnTime
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.TaskLogic.DepletionRule>(Value=OnTime))
                    -> WorkflowOutput
                -> CreateObservable OnTime => #8
                    Bonsai.Shaders.UpdateFrame
                    -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
                    -> Accumulate => #2
                    ExternalizedMapping(Period(DisplayName=UpdatePeriod))
                    -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT1S) => #4
                    #2, #4 -> Sample
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: single(it)
                    -> WorkflowOutput
                #2 -> Condition OnDistance
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.TaskLogic.DepletionRule>(Value=OnDistance))
                    -> WorkflowOutput
                -> CreateObservable OnDistance => #10
                    SubscribeSubject CurrentPosition
                    -> MemberSelector(Selector=Value.Z) => #1
                    SubscribeSubject CurrentPosition
                    -> MemberSelector(Selector=Value.Z)
                    -> Take(Count=1) => #4
                    #1, #4 -> CombineLatest
                    -> Subtract => #6
                    ExternalizedMapping(Period(DisplayName=UpdatePeriod))
                    -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT1S) => #8
                    #6, #8 -> Sample
                    -> WorkflowOutput
                #4, #6, #8, #10 -> Merge
                -> Switch
                -> MulticastSubject DepletionVariable

            GroupWorkflow DetermineRewardSpecs
                SubscribeSubject DepletionVariable => #0
                SubscribeSubject ThisPatch
                -> MemberSelector(Selector=RewardSpecification.RewardFunction)
                -> MemberSelector(Selector=Available) => #3
                #0, #3 -> WithLatestFrom
                -> AindVrForagingDataSchema.TaskLogic.ApplyRewardFunction(Clamp=true, Value=0)
                -> MulticastSubject PatchRewardAvailable

                SubscribeSubject DepletionVariable => #7
                SubscribeSubject ThisPatch
                -> MemberSelector(Selector=RewardSpecification.RewardFunction)
                -> MemberSelector(Selector=Amount) => #10
                #7, #10 -> WithLatestFrom
                -> AindVrForagingDataSchema.TaskLogic.ApplyRewardFunction(Clamp=true, Value=0)
                -> MulticastSubject PatchRewardAmount

                SubscribeSubject DepletionVariable => #14
                SubscribeSubject ThisPatch
                -> MemberSelector(Selector=RewardSpecification.RewardFunction)
                -> MemberSelector(Selector=Probability) => #17
                #14, #17 -> WithLatestFrom
                -> AindVrForagingDataSchema.TaskLogic.ApplyRewardFunction(Clamp=true, Value=0)
                -> MulticastSubject PatchRewardProbability

            SubscribeSubject DepletionVariable
            -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=DepletionVariable)
            -> MulticastSubject SoftwareEvent
        -> Switch

        SubscribeSubject ActivePatch
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=ActivePatch)
        -> MulticastSubject SoftwareEvent

        SubscribeSubject PatchRewardAvailable
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=PatchRewardAvailable)
        -> MulticastSubject SoftwareEvent

        SubscribeSubject PatchRewardAmount
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=PatchRewardAmount)
        -> MulticastSubject SoftwareEvent

        SubscribeSubject PatchRewardProbability
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=PatchRewardProbability)
        -> MulticastSubject SoftwareEvent

        SubscribeSubject DepletionVariable
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=DepletionVariable)
        -> MulticastSubject SoftwareEvent
    SubscribeSubject StartExperiment => #4
    #3, #4 -> SubscribeWhen

    GroupWorkflow OdorControl
        GroupWorkflow OlfactometerInitialConfiguration
            SubscribeSubject HarpOlfactometerEvents
            -> Take(Count=1) => #1
            GroupWorkflow Channel3Setting
                SubscribeSubject TaskLogicParameters
                -> MemberSelector(Selector=OperationControl.OdorControl.UseChannel3AsCarrier) => #1
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> PropertySource<Harp.Olfactometer.CreateChannel3RangePayload,Harp.Olfactometer.Channel3RangeConfig>(MemberName=Channel3Range, Value=FlowRate1000) => #3
                #1 -> BitwiseNot
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> PropertySource<Harp.Olfactometer.CreateChannel3RangePayload,Harp.Olfactometer.Channel3RangeConfig>(MemberName=Channel3Range, Value=FlowRate100) => #6
                #3, #6 -> Merge
                -> WorkflowOutput
            -> PropertyMapping(Channel3Range) => #3
            #1, #3 -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateChannel3RangePayload(Channel3Range=FlowRate1000))
            -> MulticastSubject HarpOlfactometerCommands
            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableEventsPayload(EnableEvents="Flowmeter DI0Trigger ChannelActualFlow"))
            -> MulticastSubject HarpOlfactometerCommands
            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Enabled))
            -> MulticastSubject HarpOlfactometerCommands
            -> WorkflowOutput

            GroupWorkflow Channel3Setting
                SubscribeSubject TaskLogicParameters
                -> MemberSelector(Selector=OperationControl.OdorControl.UseChannel3AsCarrier) => #1
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> PropertySource<Harp.Olfactometer.CreateChannel3RangePayload,Harp.Olfactometer.Channel3RangeConfig>(MemberName=Channel3Range, Value=FlowRate1000) => #3
                #1 -> BitwiseNot
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> PropertySource<Harp.Olfactometer.CreateChannel3RangePayload,Harp.Olfactometer.Channel3RangeConfig>(MemberName=Channel3Range, Value=FlowRate100) => #6
                #3, #6 -> Merge
                -> WorkflowOutput
            -> Equal(Operand=WorkflowProperty<Harp.Olfactometer.Channel3RangeConfig>(Value=FlowRate1000))
            -> Condition => #13
                WorkflowInput Source1
                -> WorkflowOutput
            SubscribeSubject HarpOlfactometerEvents
            -> Take(Count=1) => #15
            #13, #15 -> Zip
            -> CreateOdorMix => #17
              channel3AsCarrier=true
              PercentageChannel0=0
              PercentageChannel1=0
              PercentageChannel2=0
              PercentageChannel3=NaN
              Channel3AsCarrier=true
              TargetOdorFlow=100
              TotalFlow=1000
            -> MemberSelector(Selector=ChannelsTargetFlow) => #18
            #17 -> MemberSelector(Selector=OdorValveState) => #19
            #18, #19 -> Merge
            -> MulticastSubject HarpOlfactometerCommands

        GroupWorkflow ArmOdor
            BehaviorSubject<AindVrForagingDataSchema.TaskLogic.OdorSpecification> ArmOdor

            SubscribeSubject ArmOdor
            -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=ArmOdor)
            -> MulticastSubject SoftwareEvent

            SubscribeSubject ArmOdor => #4
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.OdorControl.UseChannel3AsCarrier)
            -> PropertyMapping(Channel3AsCarrier) => #7
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.OdorControl.TargetOdorFlow)
            -> PropertyMapping(TargetOdorFlow) => #10
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.OdorControl.TargetTotalFlow)
            -> PropertyMapping(TotalFlow) => #13
            #4, #7, #10, #13 -> CreateOdorMix => #14
              channel3AsCarrier=false
              PercentageChannel0=0
              PercentageChannel1=0
              PercentageChannel2=0
              PercentageChannel3=0
              Channel3AsCarrier=false
              TargetOdorFlow=100
              TotalFlow=1000
            -> MemberSelector(Selector=ChannelsTargetFlow) => #15
            #14 -> MemberSelector(Selector=OdorValveState) => #16
            #15, #16 -> Merge
            -> MulticastSubject HarpOlfactometerCommands

        GroupWorkflow EndValveControl
            SubscribeSubject HarpOlfactometerEvents
            -> Take(Count=1)
            -> BooleanProperty(Value=false)
            -> BehaviorSubject OdorEndValveState

            SubscribeSubject OdorEndValveState => #4
            -> Condition OdorPath
                WorkflowInput Source1
                -> WorkflowOutput
            -> PropertySource<Harp.Olfactometer.CreateEndValvesStatePayload,Harp.Olfactometer.EndValves>(MemberName=EndValvesState, Value=EndValve0) => #6
            #4 -> BitwiseNot
            -> Condition CarrierPath
                WorkflowInput Source1
                -> WorkflowOutput
            -> PropertySource<Harp.Olfactometer.CreateEndValvesStatePayload,Harp.Olfactometer.EndValves>(MemberName=EndValvesState, Value=None) => #9
            #6, #9 -> Merge
            -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.EndValveState)
            -> MulticastSubject HarpOlfactometerCommands

        GroupWorkflow WaitForMaxOpenTime
            SubscribeSubject OdorEndValveState => #0
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.OdorControl.ValveMaxOpenTime)
            -> Bonsai.Scripting.Expressions.ExpressionTransform ToSeconds
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(MaxOpenTime) => #4
            #0, #4 -> IncludeWorkflow(Path=Extensions\WaitForMaxOpenTime.bonsai, MaxOpenTime=PT5S)
            -> MulticastSubject OdorEndValveState
            -> WorkflowOutput

    GroupWorkflow RewardControl
        GroupWorkflow WaterValve
            BehaviorSubject<System.Double> ValveOpenTimeMs
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseSupplyPort0)
            -> MulticastSubject HarpBehaviorCommands

            BehaviorSubject<System.Reactive.Unit> TriggerValve
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort0))
            -> MulticastSubject HarpBehaviorCommands
            -> WorkflowOutput

        BonVision.OptionalFloatProperty(Value=0, HasValue=true)
        -> Take(Count=1)
        -> BehaviorSubject GiveReward

        SubscribeSubject GiveReward
        -> PublishSubject HotGiveReward

        SubscribeSubject GiveReward
        -> Condition HasValue
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Condition GreaterThan0 => #9
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Calibration.WaterValve)
        -> MemberSelector(Selector=Output) => #12
        #9, #12 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToTime => #14
          Expression: ((Item1 * 0.001) - Item2.Offset) / Item2.Slope
        Annotation ToMilliseconds(Text="") => #15
        #14, #15 -> Multiply(Operand=DoubleProperty(Value=1000))
        -> InputMapping(Value(Selector=it))
        -> IntProperty(Value=0)
        -> Condition GreaterThan0
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> MulticastSubject ValveOpenTimeMs
        -> Unit
        -> MulticastSubject TriggerValve

        SubscribeSubject GiveReward
        -> Condition HasValue
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MemberSelector(Selector=Value) => #25
        FloatProperty(Value=0) => #26
        #25, #26 -> Merge
        -> Accumulate
        -> BehaviorSubject SessionAccumulatedReward

        SubscribeSubject GiveReward
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=GiveReward)
        -> MulticastSubject SoftwareEvent

    GroupWorkflow MovableSpoutControl
        GroupWorkflow ServoMotor
            SubscribeSubject HarpBehaviorHeartBeat
            -> Take(Count=1)
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateDisableServosPayload(DisableServos=ServoOutput2))
            -> MulticastSubject HarpBehaviorCommands => #3
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.MovableSpoutControl)
            -> PropertyMapping(Value(Selector=ServoMotor.Period)) => #6
            #3, #6 -> IntProperty(Value=20000)
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.ServoMotor2Period)
            -> MulticastSubject HarpBehaviorCommands
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEnableServosPayload(EnableServos=ServoOutput2))
            -> MulticastSubject HarpBehaviorCommands => #11
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.MovableSpoutControl)
            -> MemberSelector(Selector=ServoMotor.DefaultPulseDuration)
            -> PropertyMapping(Value) => #15
            #11, #15 -> IntProperty(Value=2000)
            -> MulticastSubject ServoPosition

            BehaviorSubject<System.Int32> ServoPosition => #18
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.MovableSpoutControl.ServoMotor) => #20
            #18, #20 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform Clamp => #22
              Expression: Item1 < Item2.MinPulseDuration ? Item2.MinPulseDuration : (Item1 > Item2.MaxPulseDuration ? Item2.MaxPulseDuration : Item1)
            Annotation 1000:2000(Text="") => #23
            #22, #23 -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.ServoMotor2Pulse)
            -> MulticastSubject HarpBehaviorCommands => #25
            SubscribeSubject HarpBehaviorHeartBeat => #26
            #25, #26 -> SubscribeWhen

        Annotation(Text="Start with the spout at max distance")
        -> BooleanProperty(Value=true)
        -> Take(Count=1)
        -> BehaviorSubject SpoutAvailable

        SubscribeSubject SpoutAvailable => #5
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.MovableSpoutControl.ServoMotor) => #7
        #5, #7 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #9
          Expression: Item1 ? Item2.MaxPulseDuration : Item2.MinPulseDuration
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.MovableSpoutControl)
        -> MemberSelector(Selector=Enabled) => #12
        #9, #12 -> WithLatestFrom
        -> Condition IsEnabled
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1)
        -> MulticastSubject ServoPosition
        -> WorkflowOutput

        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.MovableSpoutControl)
        -> MemberSelector(Selector=Enabled)
        -> BitwiseNot
        -> MulticastSubject SpoutAvailable => #22
        SubscribeSubject StartExperiment => #23
        #22, #23 -> SubscribeWhen

        SubscribeSubject GiveReward
        -> BooleanProperty(Value=false) => #26
        SubscribeSubject SpoutAvailable
        -> Condition Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #29
        #26, #29 -> Merge
        -> CreateObservable DelayWithdraw
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject State

            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.MovableSpoutControl)
            -> MemberSelector(Selector=TimeToCollectAfterReward)
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromSeconds
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT0S) => #8
            SubscribeSubject State => #9
            #8, #9 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Switch
        -> Condition IsWithdraw?
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> MulticastSubject SpoutAvailable => #34
        SubscribeSubject StartExperiment => #35
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.MovableSpoutControl)
        -> MemberSelector(Selector=Enabled)
        -> Condition => #39
            WorkflowInput Source1
            -> WorkflowOutput
        Annotation "Enabled and Start"(Text="") => #40
        #35, #39, #40 -> Zip => #41
        #34, #41 -> SubscribeWhen

    GroupWorkflow FeedbackControl
        BehaviorSubject<System.Reactive.Unit> ChoiceFeedback

        SubscribeSubject ChoiceFeedback
        -> PublishSubject HotChoiceFeedback

        SubscribeSubject ChoiceFeedback
        -> Unit
        -> MulticastSubject AudioTrigger
        -> WorkflowOutput

        SubscribeSubject ChoiceFeedback
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=ChoiceFeedback)
        -> MulticastSubject SoftwareEvent

        SubscribeSubject HarpBehaviorEvents
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> MulticastSubject SpoutAvailable

    GroupWorkflow Lickometer
        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.TimestampedLickState) => #1
        -> MemberSelector(Selector=Value)
        -> BitwiseAnd(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplit.LickChannels>(Value=Channel0))
        -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> DistinctUntilChanged => #5
        #5, #1 -> WithLatestFrom
        -> PublishSubject LickometerState
        -> Condition IsLickOnset
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2.Seconds)
        -> PublishSubject LickEvent

        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.Channel0UntriggerThreshold)
        -> BehaviorSubject LickometerUntriggerThreshold

        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.Channel0TriggerThreshold)
        -> BehaviorSubject LickometerTriggerThreshold

        SubscribeSubject HarpLickometerEvents
        -> Bonsai.Harp.CreateMessage
          MessageType=Write
          Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=Off, OperationLed=Off, Heartbeat=Enabled)
        -> Take(Count=1)
        -> MulticastSubject HarpLickometerCommands

        BehaviorSubject<System.Boolean> IncrementLickometerTrigger
        -> Bonsai.Scripting.Expressions.ExpressionTransform "it ? 1 : -1"
          Expression: it ? 1 : -1
        -> SelectMany Offset
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Offset

            SubscribeSubject LickometerTriggerThreshold
            -> Take(Count=1) => #4
            SubscribeSubject Offset => #5
            #4, #5 -> CombineLatest
            -> Add
            -> WorkflowOutput
        -> AllenNeuralDynamics.LicketySplit.Format(MessageType=Write, Register=AllenNeuralDynamics.LicketySplit.Channel0TriggerThreshold)
        -> MulticastSubject HarpLickometerCommands

        BehaviorSubject<System.Boolean> IncrementLickometerUntrigger
        -> Bonsai.Scripting.Expressions.ExpressionTransform "it ? 1 : -1"
          Expression: it ? 1 : -1
        -> SelectMany Offset
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Offset

            SubscribeSubject LickometerUntriggerThreshold
            -> Take(Count=1) => #4
            SubscribeSubject Offset => #5
            #4, #5 -> CombineLatest
            -> Add
            -> WorkflowOutput
        -> AllenNeuralDynamics.LicketySplit.Format(MessageType=Write, Register=AllenNeuralDynamics.LicketySplit.Channel0UntriggerThreshold)
        -> MulticastSubject HarpLickometerCommands

    GroupWorkflow CameraControl
        SubscribeSubject HarpBehaviorHeartBeat
        -> Take(Count=1) => #1
        SubscribeSubject TextureBank => #2
        SubscribeSubject TriggeredCamerasReady => #3
        #1, #2, #3 -> Zip
        -> Take(Count=1)
        -> Bonsai.Shaders.Delay(DueTime=PT2S)
        -> BooleanProperty(Value=true)
        -> MulticastSubject CameraState

        BehaviorSubject<System.Boolean> CameraState => #9
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0)) => #11
        #9 -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStopCamerasPayload(StopCameras=CameraOutput0)) => #14
        #11, #14 -> Merge
        -> MulticastSubject HarpBehaviorCommands

        SubscribeSubject StartLogging
        -> Take(Count=1)
        -> BooleanProperty(Value=false)
        -> MulticastSubject CameraState

        SubscribeSubject StartExperiment
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> MulticastSubject CameraState

        SubscribeSubject EndExperiment
        -> Take(Count=1)
        -> BooleanProperty(Value=false)
        -> MulticastSubject CameraState

    GroupWorkflow Thermistor/Pressure
        SubscribeSubject HarpSniffDetectorEvents
        -> AllenNeuralDynamics.SniffDetector.Parse(Register=AllenNeuralDynamics.SniffDetector.TimestampedRawVoltage) => #1
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpSniffDetector)
        -> IncludeWorkflow(Path=Extensions\IsNotNull.bonsai) => #4
        #1, #4 -> SubscribeWhen => #5
        SubscribeSubject HarpBehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData) => #7
        -> MemberSelector(Selector=Value.AnalogInput0)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #9
          Expression: Convert.ToUInt16(it)
        #7 -> MemberSelector(Selector=Seconds) => #10
        #9, #10 -> Zip
        -> Bonsai.Harp.CreateTimestamped => #12
        #5, #12 -> Concat
        -> PublishSubject ThermistorData

    GroupWorkflow WheelEncoder
        GroupWorkflow DetermineTreadmillScaling
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Treadmill.Settings)
            -> MemberSelector(Selector=WheelDiameter)
            -> Bonsai.Scripting.Expressions.ExpressionTransform Perimeter => #3
              Expression: it * Math.Pi
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Treadmill.Settings)
            -> MemberSelector(Selector=PulsesPerRevolution) => #6
            #3, #6 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform CentimetersPerTick => #8
              Expression: Item1 / Item2
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Treadmill.Settings)
            -> MemberSelector(Selector=InvertDirection) => #11
            #8, #11 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item2 ? -1.0 * Item1 : Item1
            -> WorkflowOutput
        -> AsyncSubject TreadmillScaling

        Defer HarpTreadmill => #2
            SubscribeSubject HarpTreadmillEvents
            -> AllenNeuralDynamics.Treadmill.Parse(Register=AllenNeuralDynamics.Treadmill.TimestampedSensorData) => #1
            -> Skip(Count=1) => #2
            #2, #1 -> Zip => #3
            -> Bonsai.Scripting.Expressions.ExpressionTransform CalculateDisplacement => #4
              Expression: (Item1.Value.Encoder - Item2.Value.Encoder)
            SubscribeSubject TreadmillScaling
            -> PropertyMapping(RangeMax) => #6
            #4, #6 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=-0.005752427954571154, RescaleType=Linear) => #7
            #3 -> MemberSelector(Selector=Item1.Seconds) => #8
            #7, #8 -> Zip
            -> Bonsai.Harp.CreateTimestamped
            -> WorkflowOutput
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Treadmill)
        -> MemberSelector(Selector=HarpBoard)
        -> AindVrForagingDataSchema.Rig.MatchTreadmillBoard(Type=TypeMapping<AindVrForagingDataSchema.Rig.HarpTreadmill>)
        -> IncludeWorkflow(Path=Extensions\IsNotNull.bonsai) => #7
        #2, #7 -> SubscribeWhen => #8
        Defer HarpBehavior => #9
            SubscribeSubject HarpBehaviorHeartBeat => #0
            Annotation "Set displacement mode"(Text=https://github.com/harp-tech/device.behavior/pull/12) => #1
            #0, #1 -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=83, PayloadType=U8, Value=1))
            -> MulticastSubject HarpBehaviorCommands
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEnableEncodersPayload(EnableEncoders=EncoderPort2))
            -> Take(Count=1)
            -> MulticastSubject HarpBehaviorCommands

            SubscribeSubject HarpBehaviorEvents
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
            -> MemberSelector(Selector="Value.Encoder,Seconds") => #9
            -> MemberSelector(Selector=Item1) => #10
            SubscribeSubject TreadmillScaling
            -> PropertyMapping(RangeMax) => #12
            #10, #12 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=-0.005752427954571154, RescaleType=Linear) => #13
            #9 -> MemberSelector(Selector=Item2) => #14
            #13, #14 -> Zip
            -> Bonsai.Harp.CreateTimestamped
            -> WorkflowOutput
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Treadmill)
        -> MemberSelector(Selector=HarpBoard)
        -> AindVrForagingDataSchema.Rig.MatchTreadmillBoard(Type=TypeMapping<AindVrForagingDataSchema.Rig.HarpBehavior>)
        -> IncludeWorkflow(Path=Extensions\IsNotNull.bonsai) => #14
        #9, #14 -> SubscribeWhen => #15
        #8, #15 -> Merge
        -> PublishSubject EncoderData

    GroupWorkflow AudioControl
        BehaviorSubject<System.Double> AudioDuration
        -> Multiply(Operand=IntProperty(Value=1000))
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseDO1)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Int32> AudioFrequency
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PwmFrequencyDO1)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Reactive.Unit> AudioTrigger
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStartPayload(PwmStart=PwmDO1))
        -> MulticastSubject HarpBehaviorCommands

        GroupWorkflow InitialSettings => #10
            SubscribeSubject HarpBehaviorHeartBeat
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmDutyCycleDO1Payload(PwmDutyCycleDO1=50))
            -> Take(Count=1)
            -> MulticastSubject HarpBehaviorCommands

            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.AudioControl)
            -> MemberSelector(Selector=Duration)
            -> MulticastSubject AudioDuration

            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.AudioControl)
            -> MemberSelector(Selector=Frequency)
            -> MulticastSubject AudioFrequency
        SubscribeSubject HarpBehaviorHeartBeat
        -> Take(Count=1) => #12
        #10, #12 -> SubscribeWhen

Annotation(Text="")
-> GroupWorkflow VariableUpdaters
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=Updaters)
    -> Take(Count=1)
    -> AsyncSubject VariableUpdaters

    BehaviorSubject<AllenNeuralDynamics.Core.Logging.SoftwareEvent> UpdaterEvents

    SubscribeSubject GiveReward
    -> BooleanProperty(Value=true)
    -> IncludeWorkflow(Path=Extensions\UpdateVariable.bonsai, UpdaterKey=StopDurationOffset, DefaultValue=0)
    -> BehaviorSubject StopDurationOffset
    -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=UpdaterStopDurationOffset)
    -> MulticastSubject UpdaterEvents

    SubscribeSubject GiveReward
    -> BooleanProperty(Value=false) => #12
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=OperationControl.PositionControl.VelocityThreshold)
    -> PropertyMapping(DefaultValue) => #15
    #12, #15 -> IncludeWorkflow(Path=Extensions\UpdateVariable.bonsai, UpdaterKey=StopVelocityThreshold, DefaultValue=0)
    -> MulticastSubject StopVelocityThreshold
    -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=UpdaterStopVelocityThreshold)
    -> MulticastSubject UpdaterEvents

    SubscribeSubject GiveReward
    -> BooleanProperty(Value=true)
    -> IncludeWorkflow(Path=Extensions\UpdateVariable.bonsai, UpdaterKey=RewardDelayOffset, DefaultValue=0)
    -> BehaviorSubject RewardDelayOffset
    -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=UpdaterRewardDelayOffset)
    -> MulticastSubject UpdaterEvents

GroupWorkflow TaskLogic => #42
    Annotation(Text="")
    -> GroupWorkflow ProceduralGeneration
        GroupWorkflow CorridorDrawing
            ExternalizedMapping(Value(DisplayName=CorridorLength))
            -> FloatProperty(Value=120)
            -> Take(Count=1)
            -> AsyncSubject VisualCorridorLength

            ExternalizedMapping(Value(DisplayName=CorridorWidth))
            -> FloatProperty(Value=40)
            -> Take(Count=1)
            -> AsyncSubject CorridorWidth

            ExternalizedMapping(Value(DisplayName=CorridorHeight))
            -> FloatProperty(Value=30)
            -> Take(Count=1)
            -> AsyncSubject CorridorHeight

            GroupWorkflow DefineTextures
                AindVrForagingDataSchema.TaskLogic.Size(Width=40, Height=40)
                -> PropertyMapping(Size)
                -> AindVrForagingDataSchema.TaskLogic.Texture(Name=Floor)
                -> PropertyMapping(Floor) => #3
                AindVrForagingDataSchema.TaskLogic.Size(Width=40, Height=40)
                -> PropertyMapping(Size)
                -> AindVrForagingDataSchema.TaskLogic.Texture(Name=Ceiling)
                -> PropertyMapping(Ceiling) => #7
                AindVrForagingDataSchema.TaskLogic.Size(Width=40, Height=40)
                -> PropertyMapping(Size)
                -> AindVrForagingDataSchema.TaskLogic.Texture(Name=LeftWall)
                -> PropertyMapping(Left) => #11
                AindVrForagingDataSchema.TaskLogic.Size(Width=40, Height=40)
                -> PropertyMapping(Size)
                -> AindVrForagingDataSchema.TaskLogic.Texture(Name=RightWall)
                -> PropertyMapping(Right) => #15
                #3, #7, #11, #15 -> AindVrForagingDataSchema.TaskLogic.WallTextures
                -> WorkflowOutput
            -> Take(Count=1)
            -> AsyncSubject TextureDefinition

            Defer Initialize => #15
                SubscribeSubject TaskLogicParameters
                -> MemberSelector(Selector=OperationControl.PositionControl.InitialPosition)
                -> MemberSelector(Selector=Z)
                -> Take(Count=1)
                -> AsyncSubject InitPosition

                SubscribeSubject FarClipHorizon => #5
                SubscribeSubject InitPosition => #6
                #5, #6 -> Zip
                -> Subtract => #8
                SubscribeSubject VisualCorridorLength
                -> PropertyMapping(Value) => #10
                #8, #10 -> Divide(Operand=FloatProperty(Value=120))
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Math.Ceiling(it)
                -> Take(Count=1)
                -> SelectMany Range
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject Count

                    SubscribeSubject InitPosition
                    -> Take(Count=1)
                    -> PropertyMapping(Start) => #5
                    SubscribeSubject Count
                    -> PropertyMapping(Count) => #7
                    #5, #7 -> Range(Start=-1, Count=9)
                    -> WorkflowOutput
                -> InputMapping(Value(Selector=it))
                -> DoubleProperty(Value=7)
                -> WorkflowOutput
            GroupWorkflow Update => #16
                SubscribeSubject CurrentPosition
                -> MemberSelector(Selector=Value) => #1
                SubscribeSubject MaxPosition => #2
                #1, #2 -> CombineLatest
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector="Item1.Z,Item2.Z")
                    -> GreaterThanOrEqual
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1.Z) => #5
                SubscribeSubject FarClipHorizon
                -> PropertyMapping(Value) => #7
                #5, #7 -> Add(Operand=FloatProperty(Value=1000)) => #8
                SubscribeSubject SigmaZ
                -> PropertyMapping(Value) => #10
                #8, #10 -> Add(Operand=FloatProperty(Value=0)) => #11
                SubscribeSubject VisualCorridorLength
                -> PropertyMapping(Value) => #13
                #11, #13 -> Divide(Operand=FloatProperty(Value=120))
                -> InputMapping(TypeMapping=TypeMapping<System.Double>)
                -> Bonsai.Numerics.Floor
                -> WorkflowOutput
            #15, #16 -> Concat
            -> DistinctUntilChanged => #18
            SubscribeSubject VisualCorridorLength
            -> PropertyMapping(Value) => #20
            #18, #20 -> Multiply(Operand=DoubleProperty(Value=120)) => #21
            #18, #21 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as Id,
                Item2 as Start
                )
            -> InputMapping(StartPosition(Selector=Start), Id(Selector=Id)) => #24
            SubscribeSubject VisualCorridorLength
            -> PropertyMapping(Length) => #26
            SubscribeSubject CorridorWidth
            -> PropertyMapping(Width(Selector=it)) => #28
            SubscribeSubject CorridorHeight
            -> PropertyMapping(Height) => #30
            SubscribeSubject TextureDefinition
            -> PropertyMapping(Textures) => #32
            #24, #26, #28, #30, #32 -> IncludeWorkflow(Path=Extensions\CreateCorridorSpecs.bonsai, Height=0, Id=0, Length=120, StartPosition=0, Width=0)
            -> ReplaySubject VisualCorridorSpecs(BufferSize=nil)

            SubscribeSubject VisualCorridorSpecs
            -> IncludeWorkflow(Path=Extensions\DrawSegment.bonsai)
            -> Merge
            -> WorkflowOutput

        GroupWorkflow PatchGeneration
            BehaviorSubject<AindVrForagingDataSchema.TaskLogic.VirtualSite> SiteSpecs

            SubscribeSubject SiteSpecs
            -> IncludeWorkflow(Path=Extensions\InstantiateSite.bonsai)
            -> Merge

        SubscribeSubject ActiveSite
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=ActiveSite)
        -> MulticastSubject SoftwareEvent

        SubscribeSubject VisualCorridorSpecs
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=VisualCorridorSpecs)
        -> MulticastSubject SoftwareEvent

    Annotation(Text="")
    -> Defer Foraging => #3
        Bonsai.Shaders.Timer(DueTime=PT0S)
        -> Take(Count=1) => #1
        SubscribeSubject ActivePatch
        -> MemberSelector(Selector=VirtualSiteGeneration.InterPatch)
        -> MemberSelector(Selector=LengthDistribution)
        -> PropertyMapping(LengthDistribution) => #5
        SubscribeSubject ActivePatch
        -> MemberSelector(Selector=VirtualSiteGeneration.InterPatch)
        -> MemberSelector(Selector=Label)
        -> PropertyMapping(Label(Selector=it)) => #9
        SubscribeSubject ActivePatch
        -> MemberSelector(Selector=VirtualSiteGeneration.InterPatch)
        -> MemberSelector(Selector=RenderSpecification.Contrast)
        -> PropertyMapping(Contrast) => #13
        #1, #5, #9, #13 -> IncludeWorkflow(Path=Extensions\AddInterPatchSite.bonsai)
        -> SelectMany Patch
            WorkflowInput Source1
            -> Take(Count=1)
            -> BehaviorSubject EntrySite

            BooleanProperty(Value=false)
            -> Take(Count=1)
            -> BehaviorSubject HasRefusedLastReward

            SubscribeSubject ChoiceFeedback
            -> BooleanProperty(Value=false)
            -> MulticastSubject HasRefusedLastReward

            SubscribeSubject EntrySite
            -> Take(Count=1) => #10
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.InterSite)
            -> MemberSelector(Selector=LengthDistribution)
            -> PropertyMapping(LengthDistribution) => #14
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.InterSite)
            -> MemberSelector(Selector=Label)
            -> PropertyMapping(Label(Selector=it)) => #18
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.InterSite)
            -> MemberSelector(Selector=RenderSpecification.Contrast)
            -> PropertyMapping(Contrast) => #22
            #10, #14, #18, #22 -> IncludeWorkflow(Path=Extensions\AddGapSite.bonsai)
            -> BehaviorSubject FirstPatchSite

            SubscribeSubject FirstPatchSite
            -> Take(Count=1)
            -> Condition NotHasRefusedLast
                WorkflowInput Source1 => #0
                SubscribeSubject HasRefusedLastReward => #1
                #0, #1 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> BitwiseNot
                -> WorkflowOutput
            -> SelectMany ResetHasRefusedLast => #28
                BooleanProperty(Value=true)
                -> MulticastSubject HasRefusedLastReward
                -> Take(Count=1) => #2
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Take(Count=1)
                -> WorkflowOutput
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.RewardSite)
            -> MemberSelector(Selector=LengthDistribution)
            -> PropertyMapping(LengthDistribution) => #32
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.RewardSite)
            -> MemberSelector(Selector=Label)
            -> PropertyMapping(Label(Selector=it)) => #36
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.RewardSite)
            -> MemberSelector(Selector=RenderSpecification.Contrast)
            -> PropertyMapping(Contrast) => #40
            #28, #32, #36, #40 -> IncludeWorkflow(Path=Extensions\AddRewardSite.bonsai) => #41
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.InterSite)
            -> MemberSelector(Selector=LengthDistribution)
            -> PropertyMapping(LengthDistribution) => #45
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.InterSite)
            -> MemberSelector(Selector=Label)
            -> PropertyMapping(Label(Selector=it)) => #49
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.InterSite)
            -> MemberSelector(Selector=RenderSpecification.Contrast)
            -> PropertyMapping(Contrast) => #53
            #41, #45, #49, #53 -> IncludeWorkflow(Path=Extensions\AddGapSite.bonsai)
            -> SelectMany WaitForSiteOutcome
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject PreviousSite

                SubscribeSubject CurrentPosition
                -> MemberSelector(Selector=Value)
                -> MemberSelector(Selector=Z) => #5
                SubscribeSubject PreviousSite
                -> MemberSelector(Selector="Length,StartPosition")
                -> Add => #8
                #5, #8 -> CombineLatest
                -> GreaterThan
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1) => #12
                SubscribeSubject PreviousSite => #13
                #12, #13 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> MulticastSubject FirstPatchSite
            -> Take(Count=1)
            -> Repeat
            -> Condition HasExited
                SubscribeSubject HasRefusedLastReward
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\UpdateState.bonsai)
        -> Repeat
    SubscribeSubject TaskLogicParameters
    -> Take(Count=1)
    -> MemberSelector(Selector=TaskModeSettings)
    -> AindVrForagingDataSchema.TaskLogic.MatchTaskModeSettings(Type=TypeMapping<AindVrForagingDataSchema.TaskLogic.ForagingSettings>)
    -> Take(Count=1) => #8
    #3, #8 -> SubscribeWhen

    Defer Habituation => #10
        SubscribeSubject TaskLogicParameters
        -> Take(Count=1)
        -> MemberSelector(Selector=TaskModeSettings)
        -> AindVrForagingDataSchema.TaskLogic.MatchTaskModeSettings(Type=TypeMapping<AindVrForagingDataSchema.TaskLogic.HabituationSettings>)
        -> AsyncSubject HabituationSettings

        SubscribeSubject HabituationSettings
        -> MemberSelector(Selector=DistanceToReward)
        -> BehaviorSubject DistanceToRewardAvailable

        SubscribeSubject HabituationSettings
        -> MemberSelector(Selector=RenderSpecification.Contrast)
        -> Condition HasValue?
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MulticastSubject ScreenContrast

        SubscribeSubject ActivePatch
        -> MemberSelector(Selector=RewardSpecification.OperantLogic)
        -> IncludeWorkflow(Path=Extensions\IsNotNull.bonsai)
        -> MemberSelector(Selector=IsOperant)
        -> BehaviorSubject IsOperantMode

        Bonsai.Shaders.Timer(DueTime=PT0S) => #17
        SubscribeSubject DistanceToRewardAvailable
        -> Take(Count=1) => #19
        SubscribeSubject RngSeed
        -> PropertyMapping(RandomSource) => #21
        #19, #21 -> AindVrForagingDataSchema.TaskLogic.SampleDistribution
        -> PropertyMapping(DistanceToRewardAvailable) => #23
        #17, #23 -> SelectMany RunToReward
            SubscribeSubject CurrentPosition
            -> MemberSelector(Selector=Value.Z)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Accumulate => #3
            ExternalizedMapping(Value(DisplayName=DistanceToRewardAvailable)) => #4
            #3, #4 -> GreaterThan(Operand=DoubleProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=TaskLogic_RewardAvailable)
            -> MulticastSubject SoftwareEvent
            -> WorkflowOutput

            SubscribeSubject CurrentPosition
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Z)
            -> PropertyMapping(StartPosition)
            -> AindVrForagingDataSchema.TaskLogic.VirtualSite(Id=0, Length=20, StartPosition=0)
            -> MulticastSubject ActiveSite
        -> SelectMany Reward
            SubscribeSubject IsOperantMode
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> SelectMany WaitForLick
                SubscribeSubject LickEvent
                -> Take(Count=1)
                -> WorkflowOutput
            -> Unit => #4
            SubscribeSubject IsOperantMode
            -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Unit => #8
            #4, #8 -> Merge => #9
            SubscribeSubject PatchRewardAmount => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            SubscribeSubject PatchRewardProbability
            -> PropertyMapping(Value) => #14
            #12, #14 -> SelectMany DetermineReward
                SubscribeSubject RngSeed
                -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample => #2
                ExternalizedMapping(Value) => #3
                #2, #3 -> GreaterThan(Operand=DoubleProperty(Value=0)) => #4
                WorkflowInput Source1 => #5
                #4, #5 -> Zip => #6
                -> Condition DrawReward
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item1)
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item2) => #8
                SubscribeSubject PatchRewardAvailable => #9
                #8, #9 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform CapRewardAvailable
                  Expression: Item1 > Item2 ? Item2 : Item1
                -> InputMapping(Value(Selector=it))
                -> BonVision.OptionalFloatProperty(Value=0.5, HasValue=true) => #13
                #6 -> Condition NoReward
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item1)
                    -> BitwiseNot
                    -> WorkflowOutput
                -> BonVision.OptionalFloatProperty(Value=nil, HasValue=false) => #15
                #13, #15 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            -> MulticastSubject GiveReward
            -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=TaskLogic_RewardDelivery)
            -> MulticastSubject SoftwareEvent
            -> Take(Count=1)
            -> WorkflowOutput

            SubscribeSubject CurrentPosition
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Z)
            -> PropertyMapping(StartPosition)
            -> AindVrForagingDataSchema.TaskLogic.VirtualSite(Id=0, Length=20, StartPosition=0)
            -> MulticastSubject ActiveSite
        -> Repeat
    SubscribeSubject TaskLogicParameters
    -> Take(Count=1)
    -> MemberSelector(Selector=TaskModeSettings)
    -> AindVrForagingDataSchema.TaskLogic.MatchTaskModeSettings(Type=TypeMapping<AindVrForagingDataSchema.TaskLogic.HabituationSettings>)
    -> Take(Count=1) => #15
    #10, #15 -> SubscribeWhen
SubscribeSubject EndExperiment => #43
#42, #43 -> TakeUntil => #44
SubscribeSubject StartExperiment => #45
#44, #45 -> SubscribeWhen

Disable GroupWorkflow DebugTools
    GroupWorkflow RenderStateQuad
        SubscribeSubject PostDrawing
        -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1)
        -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1) => #2
        SubscribeSubject ActiveSiteLabel
        -> MemberSelector(Selector=Label)
        -> Equal(Operand=StringProperty(Value=InterPatchSite))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
          Expression: it ? 255 : 0
        SubscribeSubject ActiveSiteLabel
        -> MemberSelector(Selector=Label) => #8
        -> Equal(Operand=StringProperty(Value=GapSite)) => #9
        #8 -> Equal(Operand=StringProperty(Value=InitialGapSite)) => #10
        #9, #10 -> Zip
        -> BitwiseOr
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
          Expression: it ? 255 : 0
        SubscribeSubject ActiveSiteLabel
        -> MemberSelector(Selector=Label)
        -> Equal(Operand=StringProperty(Value=RewardSite))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #17
          Expression: it ? 255 : 0
        #6, #13, #17 -> Zip
        -> PropertyMapping(ColorR(Selector=Item1), ColorG(Selector=Item2), ColorB(Selector=Item3)) => #19
        #2, #19 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=0.2
          ExtentY=0.2
          LocationX=0.9
          LocationY=0.9
          Layer=100
          Angle=0
          ColorR=0
          ColorG=255
          ColorB=0
          ColorA=1
        -> WorkflowOutput

GroupWorkflow StartCondition
    BehaviorSubject<System.Reactive.Unit> StartExperimentShortcut => #0
    SubscribeSubject TextureBank => #1
    SubscribeSubject TriggeredCamerasReady => #2
    #0, #1, #2 -> Zip
    -> Take(Count=1)
    -> MemberSelector(Selector=Item1)
    -> MulticastSubject StartLogging => #6
    ExternalizedMapping(DueTime(DisplayName=LogDelay)) => #7
    #6, #7 -> Bonsai.Shaders.Delay(DueTime=PT3S)
    -> Bonsai.Shaders.SampleOnUpdateFrame
    -> MulticastSubject StartExperiment
    -> WorkflowOutput

GroupWorkflow Visualizer
    GroupWorkflow LauncherControl
        AllenNeuralDynamics.Core.Design.AnnotationSource
        -> MulticastSubject Annotations
        -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.AnnotationSourceVisualizer>) => #2
        SubscribeSubject ExperimentState
        -> BitwiseNot
        -> PropertyMapping(Enabled)
        -> AllenNeuralDynamics.Core.Design.PushButton(Label="Start Experiment", Enabled=true)
        -> PublishSubject StartExperimentToggleButton
        -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.PushButtonVisualizer>) => #8
        AllenNeuralDynamics.Core.Design.PushButton(Label="End experiment", Enabled=true)
        -> PublishSubject EndExperimentButton
        -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.PushButtonVisualizer>) => #11
        #2, #8, #11 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder LauncherControl
          ColumnCount=2
          RowCount=2
          ColumnStyles=""
          RowStyles=""
          CellSpans(CellSpan(ColumnSpan=1, RowSpan=2), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1))
        -> WorkflowOutput

        SubscribeSubject StartExperimentToggleButton
        -> Take(Count=1)
        -> Unit
        -> MulticastSubject StartExperimentShortcut

        SubscribeSubject EndExperimentButton
        -> Take(Count=1)
        -> MulticastSubject EndExperiment => #20
        SubscribeSubject StartExperiment => #21
        #20, #21 -> SubscribeWhen

    GroupWorkflow OperationControl
        SubscribeSubject LickometerTriggerThreshold => #0
        SubscribeSubject LickometerUntriggerThreshold => #1
        #0, #1 -> CombineLatest
        -> Format(Format="TriggeredThr: {0} ; UntriggeredThr: {1}", Selector="Item1,Item2")
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #4
        AllenNeuralDynamics.Core.Design.PushButton(Label=+Trigger, Enabled=true)
        -> BehaviorSubject +Trigger
        -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.PushButtonVisualizer>) => #7
        AllenNeuralDynamics.Core.Design.PushButton(Label=-Trigger, Enabled=true)
        -> BehaviorSubject -Trigger
        -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.PushButtonVisualizer>) => #10
        AllenNeuralDynamics.Core.Design.PushButton(Label=+Untrigger, Enabled=true)
        -> BehaviorSubject +Untrigger
        -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.PushButtonVisualizer>) => #13
        AllenNeuralDynamics.Core.Design.PushButton(Label=-Untrigger, Enabled=true)
        -> BehaviorSubject -Untrigger
        -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.PushButtonVisualizer>) => #16
        #7, #10, #13, #16 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TableLayoutPanelVisualizer>) => #18
        AllenNeuralDynamics.Core.Design.PushButton(Label="Force Reward", Enabled=true)
        -> PublishSubject ForceReward
        -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.PushButtonVisualizer>) => #21
        #4, #18, #21 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder LickometerControl
          ColumnCount=1
          RowCount=3
          ColumnStyles=""
          RowStyles=""
          CellSpans
            CellSpan(ColumnSpan=4, RowSpan=1)
            CellSpan(ColumnSpan=4, RowSpan=2)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
        -> WorkflowOutput

        SubscribeSubject ForceReward => #24
        Annotation DefaultRewardAmount(Text="")
        -> FloatProperty(Value=3)
        -> Take(Count=1) => #27
        SubscribeSubject PatchRewardAmount => #28
        #27, #28 -> Merge => #29
        #24, #29 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject GiveReward

        SubscribeSubject +Untrigger
        -> BooleanProperty(Value=true) => #34
        SubscribeSubject -Untrigger
        -> BooleanProperty(Value=false) => #36
        #34, #36 -> Merge
        -> MulticastSubject IncrementLickometerUntrigger

        SubscribeSubject +Trigger
        -> BooleanProperty(Value=true) => #40
        SubscribeSubject -Trigger
        -> BooleanProperty(Value=false) => #42
        #40, #42 -> Merge
        -> MulticastSubject IncrementLickometerTrigger

    GroupWorkflow Updaters
        SubscribeSubject StopDurationOffset
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TimeSeriesVisualizer>) => #1
        SubscribeSubject StopVelocityThreshold
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TimeSeriesVisualizer>) => #3
        SubscribeSubject RewardDelayOffset
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TimeSeriesVisualizer>) => #5
        #1, #3, #5 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder Updaters(ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput

    GroupWorkflow TaskVisualizer
        SubscribeSubject TriggeredCamerasStream
        -> Take(Count=1)
        -> Merge
        -> MemberSelector(Selector=Value.Image)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #4
        SubscribeSubject TriggeredCamerasStream
        -> Skip(Count=1)
        -> Take(Count=1)
        -> Merge
        -> MemberSelector(Selector=Value.Image)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #10
        SubscribeSubject MonitoringCamerasStream
        -> Take(Count=1)
        -> Merge
        -> MemberSelector(Selector=Value)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #15
        #4, #10, #15 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TableLayoutPanelVisualizer>) => #17
        SubscribeSubject QCDiagnosis
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #19
        Bonsai.Shaders.UpdateFrame
        -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
        -> Accumulate
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
          Expression: TimeSpan.FromSeconds(it)
        SubscribeSubject StartExperiment => #24
        #23, #24 -> SubscribeWhen
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #26
        SubscribeSubject LickometerState
        -> Bonsai.Design.Visualizers.LineGraphBuilder(ValueSelector="Item2.Seconds,Item2.Value.value__", SymbolType=Circle, LineWidth=1, Capacity=30, XMin=nil, XMax=nil, YMin=-1, YMax=2)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.LineGraphVisualizer>) => #29
        SubscribeSubject CurrentVelocity
        -> Bonsai.Shaders.SampleOnRenderFrame => #31
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.PositionControl.VelocityThreshold) => #33
        #31, #33 -> CombineLatest
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(ValueSelector="Item1,Item2", SymbolType=None, LineWidth=2, Capacity=2000, Min=nil, Max=nil)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.RollingGraphVisualizer>) => #36
        GroupWorkflow ForagingStage => #37
            IncludeWorkflow(Path=Extensions\CheckActiveSiteLabel.bonsai, Label=InterPatch, Value=1) => #0
            IncludeWorkflow(Path=Extensions\CheckActiveSiteLabel.bonsai, Label=InterSite, Value=2) => #1
            IncludeWorkflow(Path=Extensions\CheckActiveSiteLabel.bonsai, Label=RewardSite, Value=3) => #2
            IncludeWorkflow(Path=Extensions\CheckActiveSiteLabel.bonsai, Label=Unspecified, Value=-1) => #3
            #0, #1, #2, #3 -> Merge
            -> WorkflowOutput
        -> Skip(Count=1) => #38
        #38, #37 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #40
          Expression: new(Item1 as Present, Item2 as Past)
        -> MemberSelector(Selector="Past.Item1,Present.Item2") => #41
        #40 -> MemberSelector(Selector=Present) => #42
        #41, #42 -> Merge
        -> Bonsai.Design.Visualizers.LineGraphBuilder(ValueSelector="Item2.StartPosition,Item1", SymbolType=Diamond, LineWidth=3, Capacity=30, XMin=nil, XMax=nil, YMin=-1, YMax=4)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.LineGraphVisualizer>) => #45
        SubscribeSubject ActivePatch
        -> MemberSelector(Selector=StateIndex) => #47
        SubscribeSubject CurrentPosition
        -> MemberSelector(Selector=Value)
        -> MemberSelector(Selector=Z) => #50
        #47, #50 -> WithLatestFrom
        -> Bonsai.Design.Visualizers.LineGraphBuilder(ValueSelector="Item2,Item1", SymbolType=Triangle, LineWidth=3, Capacity=6, XMin=nil, XMax=nil, YMin=-1, YMax=2)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.LineGraphVisualizer>) => #53
        SubscribeSubject ThermistorData
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=Seconds, ValueSelector=Value, SymbolType=None, LineWidth=2, Capacity=2000, Min=nil, Max=nil)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.RollingGraphVisualizer>) => #56
        SubscribeSubject SoftwareEvent
        -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.SoftwareEventVisualizer>) => #58
        #19, #26, #29, #36, #45, #53, #56, #58 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder
          ColumnCount=4
          RowCount=4
          ColumnStyles=""
          RowStyles=""
          CellSpans
            CellSpan(ColumnSpan=3, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=2, RowSpan=1)
            CellSpan(ColumnSpan=2, RowSpan=1)
            CellSpan(ColumnSpan=2, RowSpan=1)
            CellSpan(ColumnSpan=2, RowSpan=1)
            CellSpan(ColumnSpan=2, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TableLayoutPanelVisualizer>) => #60
        #17, #60 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder Visualization(ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput

    GroupWorkflow HwTestGui => #4
        GroupWorkflow ValveGui
            AllenNeuralDynamics.Core.Design.PropertyGridSource(Enabled=true)
            -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.PropertyGridVisualizer>) => #1
            SubscribeSubject ExperimentState
            -> BitwiseNot
            -> PropertyMapping(Enabled)
            -> AllenNeuralDynamics.Core.Design.PushButton(Label=Calibrate, Enabled=true)
            -> PublishSubject RunCalibration
            -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.PushButtonVisualizer>) => #7
            SubscribeSubject ExperimentState
            -> BitwiseNot
            -> PropertyMapping(Enabled)
            -> AllenNeuralDynamics.Core.Design.ToggleButton(Enabled=true, IsInitiallyChecked=false, CheckedLabel=CloseValves, UncheckedLabel=OpenValves)
            -> MulticastSubject ValveFlushState
            -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.ToggleButtonVisualizer>) => #13
            #1, #7, #13 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder ValveCalibration
              ColumnCount=2
              RowCount=2
              ColumnStyles=""
              RowStyles=""
              CellSpans(CellSpan(ColumnSpan=1, RowSpan=2), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1))
            -> WorkflowOutput

            SubscribeSubject RunCalibration
            -> Take(Count=1) => #17
            ExternalizedMapping(Interval(Category=ValveCalibration), OpeningTimeMs(Category=ValveCalibration), Repeats(Category=ValveCalibration)) => #18
            #17, #18 -> SelectMany LoopValve
                ExternalizedMapping(DueTime(DisplayName=Interval))
                -> Bonsai.Shaders.Timer(DueTime=PT0.5S) => #1
                ExternalizedMapping(Value(DisplayName=OpeningTimeMs)) => #2
                #1, #2 -> IntProperty(Value=100)
                -> MulticastSubject ValveOpenTimeMs
                -> Unit
                -> MulticastSubject TriggerValve => #6
                ExternalizedMapping(Count(DisplayName=Repeats)) => #7
                #6, #7 -> RepeatCount(Count=200) => #8
                Bonsai.Shaders.Input.KeyDown(Key=Q, Modifiers=Shift) => #9
                #8, #9 -> TakeUntil
                -> ElementIndex
                -> MemberSelector(Selector=Index)
                -> WorkflowOutput
            -> Repeat

            BehaviorSubject<System.Boolean> ValveFlushState
            -> CreateObservable Flush
                WorkflowInput Source1
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> IntProperty(Value=200)
                -> MulticastSubject ValveOpenTimeMs
                -> Unit
                -> MulticastSubject TriggerValve
                -> Bonsai.Shaders.Delay(DueTime=PT0.2S)
                -> RepeatCount(Count=20)
                -> LastOrDefault
                -> WorkflowOutput
            -> Switch
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TableLayoutPanelVisualizer>) => #1
        GroupWorkflow HwShortcuts
            SubscribeSubject ExperimentState
            -> BitwiseNot
            -> PropertyMapping(Enabled)
            -> AllenNeuralDynamics.Core.Design.PushButton(Label=TriggerAudio, Enabled=true)
            -> MulticastSubject AudioTrigger
            -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.PushButtonVisualizer>)
            -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=5, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TableLayoutPanelVisualizer>) => #3
        #1, #3 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PreSessionGui
          ColumnCount=1
          RowCount=2
          ColumnStyles(ColumnStyle(SizeType=Percent, Width=0.25))
          RowStyles(RowStyle(SizeType=Percent, Height=0.8), RowStyle(SizeType=Percent, Height=0.2))
          CellSpans(CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=2), CellSpan(ColumnSpan=1, RowSpan=1))
        -> WorkflowOutput
    SubscribeSubject StartExperiment
    -> Bonsai.Shaders.Delay(DueTime=PT0.5S) => #6
    #4, #6 -> TakeUntil

    Annotation Deprecating(Text="")
    -> GroupWorkflow Shortcuts
        Bonsai.Shaders.Input.KeyDown(Key=Keypad7, Modifiers=Control)
        -> BooleanProperty(Value=true) => #1
        Bonsai.Shaders.Input.KeyDown(Key=Keypad8, Modifiers=Control)
        -> BooleanProperty(Value=false) => #3
        #1, #3 -> Merge
        -> MulticastSubject SpoutAvailable

        Bonsai.Shaders.Input.KeyDown(Key=KeypadSubtract, Modifiers=Control)
        -> Unit
        -> MulticastSubject EndExperiment

    GroupWorkflow QC
        SubscribeSubject HarpBehaviorHeartBeat => #0
        SubscribeSubject AverageScreenFps => #1
        SubscribeSubject SessionAccumulatedReward => #2
        #1, #2 -> CombineLatest => #3
        #0, #3 -> WithLatestFrom
        -> MemberSelector(Selector="Item1.Seconds,Item2.Item1,Item2.Item2")
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as Heartbeat,
            Item2 as AverageScreenFps,
            Item3 as TotalReward)
        -> WorkflowOutput

        Bonsai.Shaders.RenderFrame
        -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
        -> Bonsai.Dsp.Buffer(Count=60, Skip=30)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
          Expression: 1.0 / it
        -> IntProperty(Value=2) => #14
        #13, #14 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform Round
          Expression: Math.Round(Item1, Item2)
        -> BehaviorSubject AverageScreenFps
    -> BehaviorSubject QCDiagnosis

SubscribeSubject EndExperiment
-> Bonsai.Shaders.Delay(DueTime=PT1S)
-> SelectMany EndRoutine
    CreateOdorMix
      channel3AsCarrier=true
      PercentageChannel0=0
      PercentageChannel1=0
      PercentageChannel2=0
      PercentageChannel3=NaN
      Channel3AsCarrier=true
      TargetOdorFlow=100
      TotalFlow=1000
    -> Take(Count=1) => #1
    -> MemberSelector(Selector=ChannelsTargetFlow) => #2
    #1 -> MemberSelector(Selector=OdorValveState) => #3
    #2, #3 -> Merge
    -> MulticastSubject HarpOlfactometerCommands
    -> Last
    -> BooleanProperty(Value=false)
    -> MulticastSubject OdorEndValveState
    -> WorkflowOutput

    SubscribeSubject LoggingRootPath
    -> PropertyMapping(Source) => #11
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=RemotePath)
    -> Condition NotNull
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform NullOrEmpty
          Expression: String.IsNullOrEmpty(it)
        -> BitwiseNot
        -> WorkflowOutput
    -> AllenNeuralDynamics.Core.StripDirectoryPath => #15
    SubscribeSubject CompoundRootPath
    -> MemberSelector(Selector=SessionPath) => #17
    #15, #17 -> Zip
    -> Format(Format={0}/{1}, Selector="Item1, Item2")
    -> PropertyMapping(Destination) => #20
    #11, #20 -> AllenNeuralDynamics.Core.StartRobocopy(CreateLog=true, Arguments="/E /DCOPY:DAT /R:100 /W:3 /tee", ProcessWindowStyle=Normal) => #21
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=RemotePath)
    -> Condition NotNull => #24
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform NullOrEmpty
          Expression: String.IsNullOrEmpty(it)
        -> BitwiseNot
        -> WorkflowOutput
    SubscribeSubject StartExperiment => #25
    #24, #25 -> Zip => #26
    #21, #26 -> SubscribeWhen
-> Bonsai.Shaders.Delay(DueTime=PT2S)
-> Take(Count=1)
-> WorkflowOutput
