<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p2="clr-namespace:AindVrForagingDataSchema.Rig;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p3="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p4="clr-namespace:;assembly=Extensions"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns:p5="clr-namespace:AllenNeuralDynamics.Core.Logging;assembly=AllenNeuralDynamics.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>rig.yml</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="DataSchema" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:EnumerateDataSchemaInputs">
          <p1:FileFilter>YML</p1:FileFilter>
          <p1:Directory>../local/Rigs</p1:Directory>
          <p1:DataSchema>rig.yml</p1:DataSchema>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:ReadAllText">
          <io:Path>../local/Rigs\rig.yml</io:Path>
        </Combinator>
      </Expression>
      <Expression xsi:type="p2:DeserializeFromYaml">
        <p2:Type xsi:type="TypeMapping" TypeArguments="p2:AindVrForagingRig" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ScaleControl</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:CreateSerialPort">
                <port:Name>Scale</port:Name>
                <port:PortName>COM30</port:PortName>
                <port:BaudRate>9600</port:BaudRate>
                <port:NewLine>\r\n</port:NewLine>
                <port:Parity>None</port:Parity>
                <port:ParityReplace>63</port:ParityReplace>
                <port:DataBits>8</port:DataBits>
                <port:StopBits>One</port:StopBits>
                <port:Handshake>XOnXOff</port:Handshake>
                <port:DiscardNull>false</port:DiscardNull>
                <port:DtrEnable>false</port:DtrEnable>
                <port:RtsEnable>false</port:RtsEnable>
                <port:ReadBufferSize>4096</port:ReadBufferSize>
                <port:WriteBufferSize>2048</port:WriteBufferSize>
                <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialReadLine">
                <port:PortName>Scale</port:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>ScaleEvents</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
              <rx:Name>ScaleCommands</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialWriteLine">
                <port:PortName>Scale</port:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ScaleEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>CP</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ScaleCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}P</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ScaleCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>1U</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ScaleCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>0S</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ScaleCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>1RL</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ScaleCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>3FMT</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ScaleCommands</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
              <rx:Name>Tare</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ScaleCommands</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
              <rx:Name>Zero</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Z</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ScaleCommands</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
              <rx:Name>PowerScale</rx:Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it ? "ON" : "OFF"</scr:Expression>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ScaleCommands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ScaleEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p4:ParseScaleDataFrame" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HasDataFrame</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>WeightMeasurement</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>PinOut</Name>
        <Text><![CDATA[| Function | HarpBehavior Pin | Notes |
| --- | ----------- | ----------- |
| Camera Trigger | DO0 |  |
| Water Valve | Port0 Supply |  Use a poke breakout |
| Lickometer | Port0 DI |  Use a poke breakout |
| Encoder B | Port2 DIO | Use a poke breakout |
| Encoder A | Port2 DI | Use a poke breakout |
| Thermistor | ADC0 |  |
| Pressure Sensor | ADC1 |  |
| Photodiode | DI3 |  |
| Servo Motor | DO2 |  |
| Audio Buzzer | DO1 |  |

]]></Text>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>HarpBehavior</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>HarpBehaviorCommands</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HarpBehaviorBoard.PortName</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="beh:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>false</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Enabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM3</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>HarpBehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Register xsi:type="harp:TimestampedTimestampSeconds" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>HarpBehaviorHeartBeat</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpBehaviorHeartBeat</Name>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>ForceRegisterDump</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="harp:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="harp:CreateOperationControlPayload">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:MuteReplies>false</harp:MuteReplies>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:Heartbeat>Enabled</harp:Heartbeat>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpBehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpBehaviorHeartBeat</Name>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateEventEnablePayload">
                <beh:EventEnable>PortDI PortDIO AnalogData Camera0 Camera1</beh:EventEnable>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpBehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>WaterValve</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarpBehaviorHeartBeat</Name>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreateOutputPulseEnablePayload">
                      <beh:OutputPulseEnable>SupplyPort0 DO1</beh:OutputPulseEnable>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpBehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Double">
                    <rx:Name>ValveOpenTimeMs</rx:Name>
                  </Expression>
                  <Expression xsi:type="beh:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="beh:PulseSupplyPort0" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpBehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
                    <rx:Name>TriggerValve</rx:Name>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                      <beh:OutputSet>SupplyPort0</beh:OutputSet>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpBehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>S</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Range">
          <rx:Start>3</rx:Start>
          <rx:Count>8</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Rescale">
          <dsp:Min>0</dsp:Min>
          <dsp:Max>1</dsp:Max>
          <dsp:RangeMin>0</dsp:RangeMin>
          <dsp:RangeMax>10</dsp:RangeMax>
          <dsp:RescaleType>Linear</dsp:RescaleType>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>Calibrate</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ThisDelay</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ThisDelay</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ValveOpenTimeMs</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>GetStableMeasurement</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="BufferSize" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>10</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>BufferSize</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>WeightMeasurement</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BufferSize</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:BufferCount">
                      <rx:Count>10</rx:Count>
                      <rx:Skip>1</rx:Skip>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>AllStable?</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="rx:ReplaySubject">
                          <Name>Data</Name>
                          <rx:BufferSize xsi:nil="true" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Data</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>DataFrame.Weight</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Data</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>DataFrame.Weight</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="Equal" />
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Count" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>BufferSize</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Value" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>10</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Data</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>DataFrame.IsStable</Selector>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Count" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>BufferSize</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Value" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>10</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="BitwiseAnd" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="9" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source2" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="15" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source2" />
                        <Edge From="15" To="24" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="20" Label="Source1" />
                        <Edge From="20" To="23" Label="Source1" />
                        <Edge From="21" To="22" Label="Source1" />
                        <Edge From="22" To="23" Label="Source2" />
                        <Edge From="23" To="24" Label="Source2" />
                        <Edge From="24" To="25" Label="Source1" />
                        <Edge From="25" To="26" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="7" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="7" To="9" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>BaselineWeight</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>LoopValves</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT0.5S</rx:DueTime>
                      <rx:Period>PT0S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>TriggerValve</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisDelay</Name>
                  </Expression>
                  <Expression xsi:type="Divide">
                    <Operand xsi:type="DoubleProperty">
                      <Value>1000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Count" DisplayName="NumberOfRepeats" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:RepeatCount">
                      <rx:Count>200</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="7" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="9" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>GetStableMeasurement</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="BufferSize" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>10</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>BufferSize</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>WeightMeasurement</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BufferSize</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:BufferCount">
                      <rx:Count>10</rx:Count>
                      <rx:Skip>1</rx:Skip>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>AllStable?</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="rx:ReplaySubject">
                          <Name>Data</Name>
                          <rx:BufferSize xsi:nil="true" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Data</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>DataFrame.Weight</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Data</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>DataFrame.Weight</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="Equal" />
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Count" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>BufferSize</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Value" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>10</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Data</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>DataFrame.IsStable</Selector>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Count" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>BufferSize</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Value" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>10</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="BitwiseAnd" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="9" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source2" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="15" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source2" />
                        <Edge From="15" To="24" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="20" Label="Source1" />
                        <Edge From="20" To="23" Label="Source1" />
                        <Edge From="21" To="22" Label="Source1" />
                        <Edge From="22" To="23" Label="Source2" />
                        <Edge From="23" To="24" Label="Source2" />
                        <Edge From="24" To="25" Label="Source1" />
                        <Edge From="25" To="26" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="7" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="7" To="9" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>WaterWeight</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ThisDelay</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BaselineWeight</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>WaterWeight</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Item1 as Delay,
Item2 as Baseline,
Item3 as Water)</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="14" Label="Source1" />
            <Edge From="12" To="14" Label="Source2" />
            <Edge From="13" To="14" Label="Source3" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Calibrations</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Delay,Baseline,Water</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ToArray" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p4:WaterCalibrationModel" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Regression</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="SubscribeSubject">
        <Name>Calibrations</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Delay</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Water</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>DataFrame.Weight</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Baseline</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>DataFrame.Weight</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="X" Selector="Item1" />
          <Property Name="Y" Selector="Item2" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CreatePoint2f">
          <cv:X>100</cv:X>
          <cv:Y>0.82</cv:Y>
        </Combinator>
      </Expression>
      <Expression xsi:type="viz:LineGraphBuilder">
        <viz:ValueSelector>it</viz:ValueSelector>
        <viz:SymbolType>Square</viz:SymbolType>
        <viz:LineWidth>1</viz:LineWidth>
        <viz:Capacity xsi:nil="true" />
        <viz:XMin xsi:nil="true" />
        <viz:XMax xsi:nil="true" />
        <viz:YMin xsi:nil="true" />
        <viz:YMax xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>RButton MButton XButton2 B D F Control</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>LoopOpen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>500</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ValveOpenTimeMs</Name>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="MulticastSubject">
              <Name>TriggerValve</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Calibrations</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p5:CreateSoftwareEvent">
          <p5:EventName>CalibrationValues</p5:EventName>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Regression</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p5:CreateSoftwareEvent">
          <p5:EventName>CalibrationCurve</p5:EventName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai">
        <LoggerName>SoftwareEvents</LoggerName>
        <SubjectName>LoggingRootPath</SubjectName>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>C:\Users\svc_aind_behavior\Desktop</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>LoggingRootPath</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="25" To="27" Label="Source1" />
      <Edge From="25" To="29" Label="Source1" />
      <Edge From="26" To="33" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="31" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source2" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source2" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="37" To="39" Label="Source1" />
      <Edge From="38" To="40" Label="Source1" />
      <Edge From="39" To="40" Label="Source2" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="46" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source2" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>